<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateMessage">
          <harp:MessageType>Write</harp:MessageType>
          <harp:Address>35</harp:Address>
          <harp:PayloadType>U8</harp:PayloadType>
          <harp:Payload>1</harp:Payload>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:DeviceCommand">
        <harp:Command xsi:type="harp:SynchronizeTimestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM18</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:Address>32</harp:Address>
          <harp:MessageType>Event</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Type>TimestampedU64</harp:Type>
        <harp:IsArray>false</harp:IsArray>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TagId</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>