<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Drives the turns of an ONIX rotary commutator.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="Bno055" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>NeuropixelsV2Bno055</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="AntiClockwiseTurnKey" />
        <Property Name="ClockwiseTurnKey" />
        <Property Name="MotorFeedbackPeriod" />
        <Property Name="CommutatorTurns" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GetMotorFeedback</Name>
        <Description>BNO055  9-Axis IMU</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="AntiClockwiseTurnKey" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>RButton ShiftKey Menu Space Next PageDown D0 D2 B P R NumPad0 NumPad2 F1 F3 Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0.1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="ClockwiseTurnKey" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause Space Prior PageUp Next PageDown End D0 D1 D2 D3 A B C P Q R S NumPad0 NumPad1 NumPad2 NumPad3 F1 F2 F3 F4 Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>-0.1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Period" DisplayName="MotorFeedbackPeriod" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0.1S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Sample" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Quaternion</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:GetQuaternionTwist">
                <p1:Direction>
                  <p1:X>0</p1:X>
                  <p1:Y>0</p1:Y>
                  <p1:Z>1</p1:Z>
                </p1:Direction>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>Heading</scr:Name>
              <scr:Expression>Math.Atan2((2 * (W * Z + X * Y)), (1 - 2 * (Y * Y + Z * Z)))</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:MotorFeedback" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Clock</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="CommutatorTurns" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>CommutatorTurns</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="22" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="22" Label="Source2" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="9" To="16" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="18" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="20" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source3" />
            <Edge From="22" To="23" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Format">
        <Format>{{turn : {0}}}</Format>
        <Selector>it</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialWriteLine">
          <port:PortName>COM3</port:PortName>
          <port:NewLine>\r\n</port:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="CommutatorCommands" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>CommutatorCommands</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>