<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:commutator="clr-namespace:OpenEphys.Commutator;assembly=OpenEphys.Commutator"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Drives the turns of an ONIX rotary commutator.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>NeuropixelsV2Bno055</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT0.1S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Quaternion</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="commutator:QuaternionToTwist">
          <commutator:RotationAxis>
            <commutator:X>0</commutator:X>
            <commutator:Y>0</commutator:Y>
            <commutator:Z>1</commutator:Z>
          </commutator:RotationAxis>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Clock</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="CommutatorCommands" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>CommutatorTurns</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" />
        <Property Name="Enable" />
        <Property Name="EnableLed" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="commutator:SerialCommutator">
          <commutator:PortName>COM3</commutator:PortName>
          <commutator:Enable>true</commutator:Enable>
          <commutator:EnableLed>true</commutator:EnableLed>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedMapping">
          <Property Name="AntiClockwiseTurnKey" />
          <Property Name="ClockwiseTurnKey" />
          <Property Name="MotorFeedbackPeriod" />
          <Property Name="CommutatorTurns" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>GetMotorFeedback</Name>
          <Description>BNO055  9-Axis IMU</Description>
          <Workflow>
            <Nodes>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Filter" DisplayName="AntiClockwiseTurnKey" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="wie:KeyDown">
                  <wie:Filter>RButton ShiftKey Menu Space Next PageDown D0 D2 B P R NumPad0 NumPad2 F1 F3 Shift</wie:Filter>
                  <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="DoubleProperty">
                  <Value>0.1</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Filter" DisplayName="ClockwiseTurnKey" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="wie:KeyDown">
                  <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause Space Prior PageUp Next PageDown End D0 D1 D2 D3 A B C P Q R S NumPad0 NumPad1 NumPad2 NumPad3 F1 F2 F3 F4 Shift</wie:Filter>
                  <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="DoubleProperty">
                  <Value>-0.1</Value>
                </Combinator>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="WorkflowInput">
                  <Name>Source1</Name>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="ExternalizedMapping">
                  <Property Name="Period" DisplayName="MotorFeedbackPeriod" />
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Combinator">
                  <Combinator xsi:type="rx:Timer">
                    <rx:DueTime>PT0S</rx:DueTime>
                    <rx:Period>PT0.1S</rx:Period>
                  </Combinator>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Combinator">
                  <Combinator xsi:type="rx:Sample" />
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="MemberSelector">
                  <Selector>Quaternion</Selector>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Combinator">
                  <Combinator xsi:type="p1:GetQuaternionTwistAngle">
                    <p1:Direction>
                      <p1:X>0</p1:X>
                      <p1:Y>1</p1:Y>
                      <p1:Z>1</p1:Z>
                    </p1:Direction>
                  </Combinator>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Combinator">
                  <Combinator xsi:type="dsp:Difference">
                    <dsp:Order>1</dsp:Order>
                  </Combinator>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Combinator">
                  <Combinator xsi:type="p1:NormalizeAngle" />
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Negate" />
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="MemberSelector">
                  <Selector>Clock</Selector>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="Combinator">
                  <Combinator xsi:type="rx:Zip" />
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="ExternalizedMapping">
                  <Property Name="Name" DisplayName="CommutatorTurns" />
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="rx:PublishSubject">
                  <Name>CommutatorTurns</Name>
                </Builder>
              </Expression>
              <Expression xsi:type="Disable">
                <Builder xsi:type="MemberSelector">
                  <Selector>Item1</Selector>
                </Builder>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Merge" />
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="20" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="20" Label="Source2" />
              <Edge From="6" To="9" Label="Source1" />
              <Edge From="7" To="8" Label="Source1" />
              <Edge From="8" To="9" Label="Source2" />
              <Edge From="9" To="10" Label="Source1" />
              <Edge From="9" To="15" Label="Source1" />
              <Edge From="10" To="11" Label="Source1" />
              <Edge From="11" To="12" Label="Source1" />
              <Edge From="12" To="13" Label="Source1" />
              <Edge From="13" To="14" Label="Source1" />
              <Edge From="14" To="16" Label="Source1" />
              <Edge From="15" To="16" Label="Source2" />
              <Edge From="16" To="18" Label="Source1" />
              <Edge From="17" To="18" Label="Source2" />
              <Edge From="18" To="19" Label="Source1" />
              <Edge From="19" To="20" Label="Source3" />
              <Edge From="20" To="21" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Format">
          <Format>{{turn : {0}}}</Format>
          <Selector>it</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedMapping">
          <Property Name="PortName" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="port:SerialWriteLine">
            <port:NewLine>\r\n</port:NewLine>
          </Combinator>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="7" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="16" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>