<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.4-preview"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:VideoController.bonsai">
        <PortName>COM3</PortName>
        <GlobalTriggerFrequency>50</GlobalTriggerFrequency>
        <LocalTriggerFrequency>125</LocalTriggerFrequency>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>None</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:VideoSource.bonsai">
        <SerialNumber>21053810</SerialNumber>
        <Gain>4</Gain>
        <Binning>1</Binning>
        <TriggerSource>GlobalTrigger</TriggerSource>
        <FrameEvents>FrameTop</FrameEvents>
        <TriggerFrequency>GlobalTriggerFrequency</TriggerFrequency>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TopView</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>94</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>400000</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:DrawContours">
          <cv:MaxLevel>1</cv:MaxLevel>
          <cv:Thickness>-1</cv:Thickness>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Centroid" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>NestMask</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Regions" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:MaskPolygon">
                <cv:Regions>
                  <cv:ArrayOfPoint>
                    <cv:Point>
                      <cv:X>159</cv:X>
                      <cv:Y>471</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>213</cv:X>
                      <cv:Y>480</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>212</cv:X>
                      <cv:Y>515</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>240</cv:X>
                      <cv:Y>518</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>238</cv:X>
                      <cv:Y>540</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>212</cv:X>
                      <cv:Y>538</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>209</cv:X>
                      <cv:Y>574</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>153</cv:X>
                      <cv:Y>569</cv:Y>
                    </cv:Point>
                  </cv:ArrayOfPoint>
                </cv:Regions>
                <cv:MaskType>Binary</cv:MaskType>
                <cv:FillValue>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>0</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:FillValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="BitwiseOr" />
      <Expression xsi:type="PublishSubject">
        <Name>ActiveMask</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:SaveImage">
          <cv:FileName>mask.png</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:WriteLine" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>72</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ActiveMask</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SegmentationResult</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseAnd" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Patch1Wheel</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Regions" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:MaskPolygon">
                <cv:Regions>
                  <cv:ArrayOfPoint>
                    <cv:Point>
                      <cv:X>550</cv:X>
                      <cv:Y>819</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>567</cv:X>
                      <cv:Y>830</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>558</cv:X>
                      <cv:Y>847</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>541</cv:X>
                      <cv:Y>832</cv:Y>
                    </cv:Point>
                  </cv:ArrayOfPoint>
                </cv:Regions>
                <cv:MaskType>Binary</cv:MaskType>
                <cv:FillValue>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>0</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:FillValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Patch2Wheel</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Regions" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:MaskPolygon">
                <cv:Regions>
                  <cv:ArrayOfPoint>
                    <cv:Point>
                      <cv:X>579</cv:X>
                      <cv:Y>253</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>596</cv:X>
                      <cv:Y>243</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>601</cv:X>
                      <cv:Y>261</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>585</cv:X>
                      <cv:Y>270</cv:Y>
                    </cv:Point>
                  </cv:ArrayOfPoint>
                </cv:Regions>
                <cv:MaskType>Binary</cv:MaskType>
                <cv:FillValue>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>0</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:FillValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LogPolar">
          <cv:Center>
            <cv:X>738</cv:X>
            <cv:Y>563</cv:Y>
          </cv:Center>
          <cv:Magnitude>480</cv:Magnitude>
          <cv:Flags>Linear FillOutliers</cv:Flags>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT1S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StartCameras</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="15" Label="Source2" />
      <Edge From="1" To="17" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="11" Label="Source1" />
      <Edge From="3" To="19" Label="Source1" />
      <Edge From="3" To="23" Label="Source1" />
      <Edge From="3" To="24" Label="Source1" />
      <Edge From="3" To="25" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="12" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="17" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>