WorkflowBuilder(Version=2.6.4-preview)
GroupWorkflow Metadata
    GroupWorkflow Devices
        GroupWorkflow VideoController
            ExternalizedMapping(PortName, GlobalTriggerFrequency, LocalTriggerFrequency)
            -> IncludeWorkflow(Path=Aeon.Acquisition:VideoController.bonsai, PortName=COM3, GlobalTriggerFrequency=50, LocalTriggerFrequency=125)
            -> WorkflowOutput

        GroupWorkflow CameraTop
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              SerialNumber=21053810
              Gain=4
              Binning=1
              TriggerSource=GlobalTrigger
              FrameEvents=CameraTop
              TriggerFrequency=GlobalTriggerFrequency
            -> WorkflowOutput

        GroupWorkflow CameraWest
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              SerialNumber=21196927
              Gain=4
              Binning=1
              TriggerSource=GlobalTrigger
              FrameEvents=CameraWest
              TriggerFrequency=GlobalTriggerFrequency
            -> WorkflowOutput

        GroupWorkflow CameraEast
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              SerialNumber=21199215
              Gain=4
              Binning=1
              TriggerSource=GlobalTrigger
              FrameEvents=CameraEast
              TriggerFrequency=GlobalTriggerFrequency
            -> WorkflowOutput

        GroupWorkflow CameraNorth
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              SerialNumber=21177888
              Gain=4
              Binning=1
              TriggerSource=GlobalTrigger
              FrameEvents=CameraNorth
              TriggerFrequency=GlobalTriggerFrequency
            -> WorkflowOutput

        GroupWorkflow CameraSouth
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              SerialNumber=21199217
              Gain=4
              Binning=1
              TriggerSource=GlobalTrigger
              FrameEvents=CameraSouth
              TriggerFrequency=GlobalTriggerFrequency
            -> WorkflowOutput

        GroupWorkflow CameraPatch1
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              SerialNumber=21196933
              Gain=10
              Binning=2
              TriggerSource=LocalTrigger
              FrameEvents=CameraPatch1
              TriggerFrequency=LocalTriggerFrequency
            -> WorkflowOutput

        GroupWorkflow CameraPatch2
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              SerialNumber=21053811
              Gain=10
              Binning=2
              TriggerSource=LocalTrigger
              FrameEvents=CameraPatch2
              TriggerFrequency=LocalTriggerFrequency
            -> WorkflowOutput

        GroupWorkflow CameraNest
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              SerialNumber=21199221
              Gain=10
              Binning=2
              TriggerSource=LocalTrigger
              FrameEvents=CameraNest
              TriggerFrequency=LocalTriggerFrequency
            -> WorkflowOutput

        GroupWorkflow AudioAmbient
            ExternalizedMapping(DeviceName, SampleRate, Name)
            -> IncludeWorkflow AudioAmbient(Path=Aeon.Acquisition:AudioSource.bonsai, DeviceName=nil, SampleRate=192000)
            -> WorkflowOutput

        GroupWorkflow Patch1
            ExternalizedMapping(PortName, WheelDisplacement, PelletDelivered, DeliverPellet, PatchEvents, Radius, SampleRate)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:PatchController.bonsai
              PortName=COM4
              WheelDisplacement=WheelPatch1
              PelletDelivered=PelletDeliveredPatch1
              DeliverPellet=DeliverPelletPatch1
              PatchEvents=Patch1
              Radius=4
              SampleRate=SampleRate500Hz
            -> WorkflowOutput

        GroupWorkflow Patch2
            ExternalizedMapping(PortName, WheelDisplacement, PelletDelivered, DeliverPellet, PatchEvents, Radius, SampleRate)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:PatchController.bonsai
              PortName=COM7
              WheelDisplacement=WheelPatch2
              PelletDelivered=PelletDeliveredPatch2
              DeliverPellet=DeliverPelletPatch2
              PatchEvents=Patch2
              Radius=4
              SampleRate=SampleRate500Hz
            -> WorkflowOutput

        GroupWorkflow Nest
            ExternalizedMapping(PortName, WeightEvents, TareWeight, TareEvents)
            -> IncludeWorkflow(Path=Aeon.Acquisition:WeightScale.bonsai, PortName=COM8, WeightEvents=WeightNest, TareWeight=TareWeightNest, TareEvents=TareNest)
            -> WorkflowOutput

    GroupWorkflow TrackingTop
        ExternalizedMapping(Mask, ThresholdValue, TrackingEvents) => #0
        ExternalizedMapping(Name(DisplayName=FrameEvents))
        -> SubscribeSubject CameraTop => #2
        #2, #0 -> IncludeWorkflow(Path=Aeon.Acquisition:PositionTracking.bonsai, Mask=ArenaMask_2022-02-02.png, ThresholdValue=72, TrackingEvents=TrackingTop)
        -> WorkflowOutput

    GroupWorkflow ActivityCenter
        SubscribeSubject CameraTop
        -> IncludeWorkflow
          Path=Aeon.Acquisition:ActivityTracking.bonsai
          ThresholdValue=10
          TrackingEvents=ActivityCenter
          Regions(ArrayOfPoint(Point(X=936, Y=463), Point(X=1264, Y=463), Point(X=1264, Y=697), Point(X=936, Y=697)))
        -> WorkflowOutput

    GroupWorkflow ActivityArena
        SubscribeSubject CameraTop
        -> IncludeWorkflow(Path=Aeon.Acquisition:ActivityTracking.bonsai, ThresholdValue=10, TrackingEvents=ActivityArena, Regions=nil)
        -> WorkflowOutput

    GroupWorkflow ActiveRegion
        ExternalizedMapping(NestRegion, Patch1Region, Patch2Region, ArenaCenter, ArenaInnerRadius, ArenaOuterRadius)
        -> IncludeWorkflow
          Path=Extensions\ActiveRegion.bonsai
          NestRegion
            ArrayOfPoint
              Point(X=159, Y=471)
              Point(X=213, Y=480)
              Point(X=212, Y=515)
              Point(X=240, Y=518)
              Point(X=238, Y=540)
              Point(X=212, Y=538)
              Point(X=209, Y=574)
              Point(X=153, Y=569)
          Patch1Region(ArrayOfPoint(Point(X=550, Y=819), Point(X=567, Y=830), Point(X=558, Y=847), Point(X=541, Y=832)))
          Patch2Region(ArrayOfPoint(Point(X=579, Y=253), Point(X=596, Y=243), Point(X=601, Y=261), Point(X=585, Y=270)))
          ArenaCenter(X=738, Y=563)
          ArenaInnerRadius=480
          ArenaOuterRadius=502
        -> WorkflowOutput

GroupWorkflow Logging
    IncludeWorkflow(Path=Aeon.Acquisition:LogController.bonsai, Path=D:\ProjectAeon\experiment0.2, ChunkSize=1)
    IncludeWorkflow(Path=Aeon.Acquisition:ExportMetadata.bonsai, WorkflowName=Experiment0.2.bonsai)

    SubscribeSubject VideoEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=VideoController)

    SubscribeSubject CameraTop
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, LogName=CameraTop, FrameRate=50)

    SubscribeSubject TrackingTop
    -> Aeon.Acquisition.FormatBinaryRegions => #7
    GroupWorkflow RegionTracking
        SubscribeSubject InPatch1
        -> Bonsai.Scripting.ExpressionTransform => #1
          Expression: Value ? 4 : 0
        SubscribeSubject InPatch2
        -> Bonsai.Scripting.ExpressionTransform => #3
          Expression: Value ? 5 : 0
        SubscribeSubject InArena
        -> Bonsai.Scripting.ExpressionTransform => #5
          Expression: Value ? 3 : 0
        SubscribeSubject InCorridor
        -> Bonsai.Scripting.ExpressionTransform => #7
          Expression: Value ? 2 : 0
        SubscribeSubject InNest => #8
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression: Value ? 1 : 0
        #3, #1, #5, #7, #9 -> Zip
        -> Bonsai.Numerics.Max => #11
        #8 -> MemberSelector(Selector=Seconds) => #12
        #11, #12 -> Zip
        -> Aeon.Acquisition.CreateTimestamped
        -> WorkflowOutput
    -> Bonsai.Harp.Format(MessageType=Event, Address=201, PayloadType=TimestampedU8) => #9
    #7, #9 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=CameraTop)

    SubscribeSubject CameraWest
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, LogName=CameraWest, FrameRate=50)

    SubscribeSubject CameraEast
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, LogName=CameraEast, FrameRate=50)

    SubscribeSubject CameraNorth
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, LogName=CameraNorth, FrameRate=50)

    SubscribeSubject CameraSouth
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, LogName=CameraSouth, FrameRate=50)

    SubscribeSubject CameraPatch1
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, LogName=CameraPatch1, FrameRate=125)

    SubscribeSubject CameraPatch2
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, LogName=CameraPatch2, FrameRate=125)

    SubscribeSubject CameraNest
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, LogName=CameraNest, FrameRate=125)

    SubscribeSubject Patch1 => #26
    SubscribeSubject Patch1Dispenser
    -> Aeon.Acquisition.FormatDispenserState => #28
    SubscribeSubject ManualPellet1
    -> Bonsai.Harp.Format(MessageType=Write, Address=201, PayloadType=TimestampedU8) => #30
    PublishSubject<Bonsai.Harp.Timestamped(System.Byte)> MissedPellets1
    -> Bonsai.Harp.Format(MessageType=Event, Address=202, PayloadType=TimestampedU8) => #32
    #26, #28, #30, #32 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Patch1)

    SubscribeSubject Patch1
    -> Bonsai.Harp.Parse(Type=Timestamp, IsArray=false) => #36
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> PatchState1
    -> Bonsai.Scripting.ExpressionTransform => #38
      Expression:
        new(
        Item1 as Threshold,
        Item2 as D1,
        Item3 as Delta)
    #38, #36 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, LogName=Patch1_State, Selector=nil)

    SubscribeSubject Patch2 => #41
    SubscribeSubject Patch2Dispenser
    -> Aeon.Acquisition.FormatDispenserState => #43
    SubscribeSubject ManualPellet2
    -> Bonsai.Harp.Format(MessageType=Write, Address=201, PayloadType=TimestampedU8) => #45
    PublishSubject<Bonsai.Harp.Timestamped(System.Byte)> MissedPellets2
    -> Bonsai.Harp.Format(MessageType=Event, Address=202, PayloadType=TimestampedU8) => #47
    #41, #43, #45, #47 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Patch2)

    SubscribeSubject Patch2
    -> Bonsai.Harp.Parse(Type=Timestamp, IsArray=false) => #51
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> PatchState2
    -> Bonsai.Scripting.ExpressionTransform => #53
      Expression:
        new(
        Item1 as Threshold,
        Item2 as D1,
        Item3 as Delta)
    #53, #51 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, LogName=Patch2_State, Selector=nil)

    SubscribeSubject AudioAmbient
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogAudio.bonsai, LogName=AudioAmbient, SampleRate=192000)

    SubscribeSubject WeightNest
    -> InputMapping(Selector="Seconds,Value.Weight,Value.Confidence", TypeMapping=TypeMapping<Aeon.Acquisition.WeightMeasurement>)
    -> Aeon.Acquisition.FormatWeight(Address=200) => #60
    SubscribeSubject TareNest
    -> Bonsai.Harp.Format(MessageType=Write, Address=201, PayloadType=TimestampedU8) => #62
    BehaviorSubject<Aeon.Acquisition.WeightMeasurement> FilteredWeightNest
    -> Aeon.Acquisition.FormatWeight(Address=202) => #64
    PublishSubject<Bonsai.Harp.Timestamped(System.Double)> BaselineTrigger
    -> Bonsai.Harp.Format(MessageType=Write, Address=203, PayloadType=TimestampedU8) => #66
    BehaviorSubject<Aeon.Acquisition.WeightMeasurement> SubjectWeight
    -> Aeon.Acquisition.FormatWeight(Address=204) => #68
    #60, #62, #64, #66, #68 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Nest)

    SubscribeSubject SubjectState
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, LogName=ExperimentalMetadata_SubjectState, Selector="Seconds,Value.Id,Value.Weight,Value.Type")

    SubscribeSubject Annotations => #73
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.LogMessage)> AlertLogs => #74
    #74, #73 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, LogName=ExperimentalMetadata_MessageLog, Selector="Seconds,Value.Priority,Value.Type,Value.Message")

    SubscribeSubject EnvironmentState
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, LogName=ExperimentalMetadata_EnvironmentState, Selector="Seconds,Value.Type")

    SubscribeSubject SubjectState
    -> Bonsai.Scripting.ExpressionTransform => #80
      Expression:
        new(
        Seconds as Seconds,
        new(Value.Id as Id,
            Value.Type.ToString() as Event,
            "Environment" as Value) as Value)
    SubscribeSubject InPatch1
    -> IncludeWorkflow Patch1(Path=Extensions\FormatRegionVisits.bonsai) => #82
    SubscribeSubject InPatch2
    -> IncludeWorkflow Patch2(Path=Extensions\FormatRegionVisits.bonsai) => #84
    SubscribeSubject InArena
    -> IncludeWorkflow Arena(Path=Extensions\FormatRegionVisits.bonsai) => #86
    SubscribeSubject InCorridor
    -> IncludeWorkflow Corridor(Path=Extensions\FormatRegionVisits.bonsai) => #88
    SubscribeSubject InNest
    -> IncludeWorkflow Nest(Path=Extensions\FormatRegionVisits.bonsai) => #90
    #80, #82, #84, #86, #88, #90 -> Merge
    -> MemberSelector(Selector="Value,Seconds")
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, LogName=ExperimentalMetadata_SubjectVisits, Selector="Seconds,Value.Id,Value.Event,Value.Value")

GroupWorkflow Visualization
    SubscribeSubject TrackingTop
    -> MemberSelector(Selector=Item1.Centroid)
    -> PublishSubject Trajectory

    SubscribeSubject CameraNest
    -> MemberSelector(Selector=Value.Image)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject NestMonitor

    SubscribeSubject CameraTop
    -> MemberSelector(Selector=Value.Image)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject FrameTrajectory

    SubscribeSubject TrackingTop
    -> MemberSelector(Selector=Item1.Centroid)
    -> Bonsai.Dsp.Histogram2D(MinX=0, MaxX=1440, MinY=0, MaxY=1080, BinsX=288, BinsY=216, Normalize=false, Accumulate=true)
    -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=20, Shift=0)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject Heatmap

    SubscribeSubject CameraPatch1
    -> SampleInterval(Interval=PT0.02S)
    -> MemberSelector(Selector=Value.Image) => #20
    SubscribeSubject CameraPatch2
    -> SampleInterval(Interval=PT0.02S)
    -> MemberSelector(Selector=Value.Image) => #23
    #20, #23 -> WithLatestFrom
    -> Bonsai.Dsp.Concat(Axis=1)
    -> PublishSubject CameraSide

    SubscribeSubject DistanceState1 => #27
    SubscribeSubject DistanceState2 => #28
    SubscribeSubject PatchState1
    -> MemberSelector(Selector=Item1) => #30
    SubscribeSubject PatchState2
    -> MemberSelector(Selector=Item1) => #32
    #27, #28, #30, #32 -> CombineLatest => #33
    #33, #27 -> Sample
    -> Bonsai.Dsp.Buffer(Count=15, Skip=nil)
    -> PublishSubject PatchState

    SubscribeSubject PatchState1
    -> GroupWorkflow ToArray => #38
        WorkflowInput Source1
        -> SelectMany
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> ToArray
            -> WorkflowOutput
        -> DelaySubscription(DueTime=PT0.1S) => #2
        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> IgnoreElements
        -> ToArray => #6
        #6, #2 -> Concat
        -> WorkflowOutput
    SubscribeSubject DeliveryCount1 => #39
    #38, #39 -> WithLatestFrom
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        int32(Item2) as PelletCount,
        Item1 as Threshold)
    -> PublishSubject ThresholdPatch1

    SubscribeSubject PatchState2
    -> GroupWorkflow ToArray => #45
        WorkflowInput Source1
        -> SelectMany
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> ToArray
            -> WorkflowOutput
        -> DelaySubscription(DueTime=PT0.1S) => #2
        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> IgnoreElements
        -> ToArray => #6
        #6, #2 -> Concat
        -> WorkflowOutput
    SubscribeSubject DeliveryCount2 => #46
    #45, #46 -> WithLatestFrom
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        int32(Item2) as PelletCount,
        Item1 as Threshold)
    -> PublishSubject ThresholdPatch2

    IncludeWorkflow(Path=Extensions\PelletMonitor.bonsai, PelletDelivered=PelletDeliveredPatch1, PelletCommand=Patch1)
    -> PublishSubject PelletMonitor1
    -> MemberSelector(Selector=Value)
    -> PublishSubject PelletMonitorValue1

    IncludeWorkflow(Path=Extensions\PelletMonitor.bonsai, PelletDelivered=PelletDeliveredPatch2, PelletCommand=Patch2)
    -> BehaviorSubject PelletMonitor2
    -> MemberSelector(Selector=Value)
    -> PublishSubject PelletMonitorValue2

    SubscribeSubject TimeOnPatch1 => #59
    SubscribeSubject TimeOnPatch2 => #60
    #59, #60 -> CombineLatest
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        "Time Spent on Patch (s)" as Id,
        Item1 as Patch1,
        Item2 as Patch2)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TimeSpentOnPatches

    SubscribeSubject TimeSinceLastVisit1 => #65
    SubscribeSubject TimeSinceLastVisit2 => #66
    #65, #66 -> CombineLatest
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        "Time Since Last Visit (s)" as Id,
        Item1 as Patch1,
        Item2 as Patch2)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TimeSinceLastVisit

    SubscribeSubject WheelPatch1
    -> Accumulate => #72
    SubscribeSubject WheelPatch2
    -> Accumulate => #74
    #72, #74 -> CombineLatest
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        "Total Distance Travelled (cm)" as Id,
        Item1 as Patch1,
        Item2 as Patch2)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TotalDistanceTravelled

    IncludeWorkflow(Path=Aeon.Acquisition:TimeSpentOnWheel.bonsai, Patch=Patch1, WheelPatch=WheelPatch1, Threshold=0.0003, LowPass=1)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> BehaviorSubject TimeOnPatch1

    SubscribeSubject TimeOnPatch1
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> DistinctUntilChanged
    -> IncludeWorkflow(Path=Aeon.Acquisition:TimeSinceLastEvent.bonsai)
    -> BehaviorSubject TimeSinceLastVisit1

    IncludeWorkflow(Path=Aeon.Acquisition:TimeSpentOnWheel.bonsai, Patch=Patch2, WheelPatch=WheelPatch2, Threshold=0.0003, LowPass=1)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> BehaviorSubject TimeOnPatch2

    SubscribeSubject TimeOnPatch2
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> DistinctUntilChanged
    -> IncludeWorkflow(Path=Aeon.Acquisition:TimeSinceLastEvent.bonsai)
    -> BehaviorSubject TimeSinceLastVisit2

    SubscribeSubject WeightNest
    -> InputMapping(Selector="Seconds,Value.Weight,Value.Confidence", TypeMapping=TypeMapping<Aeon.Acquisition.WeightMeasurement>)
    -> Aeon.Acquisition.WeightFilter(Count=40)
    -> MulticastSubject FilteredWeightNest => #99
    SubscribeSubject BaselineTrigger => #100
    #99, #100 -> Aeon.Acquisition.WeightBaseline
    -> PublishSubject BaselinedWeight
    -> Condition StableWeight
        WorkflowInput Source1
        -> MemberSelector(Selector=Confidence) => #1
        ExternalizedMapping(Value(DisplayName=ConfidenceThreshold)) => #2
        #1, #2 -> Equal(Operand=FloatProperty(Value=1))
        -> WorkflowOutput
    -> Condition SubjectOnScale
        WorkflowInput Source1
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=WeightThreshold)) => #2
        #1, #2 -> GreaterThan(Operand=FloatProperty(Value=10))
        -> WorkflowOutput
    -> MulticastSubject SubjectWeight

    SubscribeSubject WeightNest
    -> Skip(Count=9)
    -> MemberSelector(Selector=Value.Weight) => #108
    SubscribeSubject FilteredWeightNest
    -> Bonsai.Scripting.ExpressionTransform => #110
      Expression: Confidence == 1 ? Value : single.NaN
    #110, #108 -> Zip => #111
    SubscribeSubject BaselineTrigger
    -> GroupWorkflow CurrentBaseline => #113
        FloatProperty(Value=0)
        -> Take(Count=1) => #1
        WorkflowInput Source1
        -> SelectMany UpdateBaseline => #3
            SubscribeSubject BaselinedWeight
            -> MemberSelector(Selector=Value) => #1
            SubscribeSubject FilteredWeightNest
            -> MemberSelector(Selector=Value) => #3
            #3, #1 -> CombineLatest
            -> Subtract
            -> Skip(Count=10)
            -> Take(Count=1)
            -> WorkflowOutput
        #1, #3 -> Concat
        -> WorkflowOutput
    #111, #113 -> WithLatestFrom
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1.Item1 as Stable,
        Item1.Item2 as Raw,
        Item2 as Baseline)
    -> PublishSubject WeightNestMonitor

    SubscribeSubject ActivityCenter
    -> Condition ActivityCondition => #118
        WorkflowInput Source1
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=BaselineActivityThreshold)) => #2
        #1, #2 -> GreaterThan(Operand=DoubleProperty(Value=1))
        -> WorkflowOutput
    ExternalizedMapping(Interval(DisplayName=BaselineRefractoryPeriod)) => #119
    #118, #119 -> GateInterval(Interval=PT5S)
    -> MulticastSubject BaselineTrigger

    SubscribeSubject SubjectWeight => #122
    SubscribeSubject SubjectStart
    -> MemberSelector(Selector=Value.ReferenceWeight) => #124
    #122, #124 -> WithLatestFrom
    -> Bonsai.Scripting.ExpressionTransform
      Expression:
        new(
        Item1.Timestamp as Timestamp,
        Item1.Value as CurrentWeight,
        100 * Item1.Value / Item2 as CurrentPercent)
    -> BehaviorSubject PercentWeightLoss

    IncludeWorkflow
      Path=Extensions\PelletMissed.bonsai
      TimeToMiss=PT2S
      DistanceToMiss=20
      TimeInChute=PT0S
      WheelDisplacement=WheelPatch1
      PelletDelivered=PelletDeliveredPatch1
    -> MulticastSubject MissedPellets1

    IncludeWorkflow
      Path=Extensions\PelletMissed.bonsai
      TimeToMiss=PT2S
      DistanceToMiss=20
      TimeInChute=PT0S
      WheelDisplacement=WheelPatch2
      PelletDelivered=PelletDeliveredPatch2
    -> MulticastSubject MissedPellets2

    SubscribeSubject PelletDeliveredPatch1
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalPelletsDelivered1(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject PelletDeliveredPatch2
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalPelletsDelivered2(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject MissedPellets1
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalMissedPellets1(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject MissedPellets2
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalMissedPellets2(Path=Extensions\PersistentCounter.bonsai)

    GroupWorkflow SubjectAlerts
        PublishSubject<System.String> SubjectAlertMessages
        -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\alerts.config)

        SubscribeSubject SubjectState => #3
        ExternalizedMapping(WeightLossThreshold) => #4
        SubscribeSubject PercentWeightLoss => #5
        #5, #4 -> Condition LowWeight
            WorkflowInput Source1
            -> MemberSelector(Selector=CurrentPercent) => #1
            ExternalizedMapping(Value(DisplayName=WeightLossThreshold, Description="Below this value the weight loss alert will be raised.")) => #2
            #1, #2 -> LessThanOrEqual(Operand=FloatProperty(Value=80))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #7
        #7, #3 -> WithLatestFrom => #8
        -> Format
          Format:
            ## **Low Weight**
            **Subject**: {0}
            **Current Weight**: {1}
            **Reference Weight**: {2}
            **Current percent**: {3}
          Selector="Item2.Value.Id,Item1.CurrentWeight,Item2.Value.ReferenceWeight,Item1.CurrentPercent"
        -> MulticastSubject SubjectAlertMessages
        #8 -> Aeon.Acquisition.FormatLogMessage
          Format="{0}	{1}	{2}	{3}"
          Selector="Item2.Value.Id,Item1.CurrentWeight,Item2.Value.ReferenceWeight,Item1.CurrentPercent"
          Priority=Alert
          Type=LowWeight
          Timestamp=Item1.Timestamp
        -> MulticastSubject AlertLogs

        SubscribeSubject Patch1Dispenser => #13
        SubscribeSubject Patch2Dispenser => #14
        ExternalizedMapping(PelletThreshold) => #15
        #13, #15 -> Condition LowFood
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.Value) => #1
            ExternalizedMapping(Value(DisplayName=PelletThreshold, Description="Below this value the low food alert will be raised.")) => #2
            #1, #2 -> LessThan(Operand=IntProperty(Value=105))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #17
        #14, #15 -> Condition LowFood
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.Value) => #1
            ExternalizedMapping(Value(DisplayName=PelletThreshold, Description="Below this value the low food alert will be raised.")) => #2
            #1, #2 -> LessThan(Operand=IntProperty(Value=105))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #19
        #17, #19 -> Merge => #20
        -> Format
          Format:
            ## **Low Food**
            **Patch**: {0}
            **Current Pellet Estimate**: {1}
          Selector="Value.Name,Value.Value"
        -> MulticastSubject SubjectAlertMessages
        #20 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	{1}", Selector="Value.Name,Value.Value", Priority=Alert, Type=LowFood)
        -> MulticastSubject AlertLogs

        SubscribeSubject TrackingTop
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1.Area == 0 as Missing,
            Item2 as Timestamp)
        -> DistinctUntilChangedBy(KeySelector=Missing) => #27
        SubscribeSubject SubjectState => #28
        ExternalizedMapping(DueTime(DisplayName=SubjectMissingTimeThreshold)) => #29
        #27, #29 -> GroupWorkflow TimeThreshold
            ExternalizedMapping(DueTime) => #0
            WorkflowInput Source1 => #1
            #1, #0 -> Throttle(DueTime=PT30M)
            -> WorkflowOutput
        -> Condition SubjectMissing => #31
            WorkflowInput Source1
            -> MemberSelector(Selector=Missing) => #1
            SubscribeSubject BaselinedWeight
            -> Condition StableWeight
                WorkflowInput Source1
                -> MemberSelector(Selector=Confidence) => #1
                ExternalizedMapping(Value(DisplayName=ConfidenceThreshold)) => #2
                #1, #2 -> Equal(Operand=FloatProperty(Value=1))
                -> WorkflowOutput
            -> GroupWorkflow SubjectNotOnScale => #4
                WorkflowInput Source1
                -> MemberSelector(Selector=Value) => #1
                ExternalizedMapping(Value(DisplayName=WeightThreshold)) => #2
                #1, #2 -> LessThanOrEqual(Operand=FloatProperty(Value=10))
                -> WorkflowOutput
            #1, #4 -> WithLatestFrom
            -> LogicalAnd
            -> WorkflowOutput
        #31, #28 -> WithLatestFrom => #32
        -> Format
          Format:
            ## **Subject Missing**
            **Subject**: {0}
          Selector=Item2.Value.Id
        -> MulticastSubject SubjectAlertMessages
        #32 -> Aeon.Acquisition.FormatLogMessage(Format={0}, Selector=Item2.Value.Id, Priority=Alert, Type=SubjectMissing, Timestamp=Item1.Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject SubjectState => #37
        SubscribeSubject BaselinedWeight
        -> GroupWorkflow StableWeightOnset => #39
            ExternalizedMapping(Value(DisplayName=ConfidenceThreshold)) => #0
            WorkflowInput Source1
            -> MemberSelector(Selector=Confidence) => #2
            #2, #0 -> Equal(Operand=FloatProperty(Value=1))
            -> DistinctUntilChanged
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        ExternalizedMapping(SubjectInactiveTimeThreshold) => #40
        #39, #40 -> CreateObservable MonitorInactivity
            SubscribeSubject ActivityArena => #0
            ExternalizedMapping(DueTime(DisplayName=SubjectInactiveTimeThreshold)) => #1
            ExternalizedMapping(ActivityThreshold) => #2
            #0, #2 -> GroupWorkflow Inactive
                ExternalizedMapping(Value(DisplayName=ActivityThreshold, Description="Below this number the subject is considered to be inactive. (0-255)")) => #0
                WorkflowInput Source1 => #1
                -> MemberSelector(Selector=Value) => #2
                #2, #0 -> LessThan(Operand=DoubleProperty(Value=0.2)) => #3
                #3, #1 -> Zip
                -> Bonsai.Scripting.ExpressionTransform
                  Expression:
                    new(
                    Item1 as Inactive,
                    Item2.Seconds as Timestamp)
                -> WorkflowOutput
            -> DistinctUntilChangedBy(KeySelector=Inactive) => #4
            #4, #1 -> GroupWorkflow TimeThreshold
                ExternalizedMapping(DueTime) => #0
                WorkflowInput Source1 => #1
                #1, #0 -> Throttle(DueTime=PT2H)
                -> WorkflowOutput
            -> WorkflowOutput
        -> Switch
        -> Condition SubjectInactive => #43
            WorkflowInput Source1
            -> MemberSelector(Selector=Inactive)
            -> WorkflowOutput
        #43, #37 -> WithLatestFrom => #44
        -> Format
          Format:
            ## **Subject Inactive**
            **Subject**: {0}
          Selector=Item2.Value.Id
        -> MulticastSubject SubjectAlertMessages
        #44 -> Aeon.Acquisition.FormatLogMessage(Format={0}, Selector=Item2.Value.Id, Priority=Alert, Type=SubjectInactive, Timestamp=Item1.Timestamp)
        -> MulticastSubject AlertLogs

        ExternalizedMapping(Count(DisplayName=DeliveryFailureThreshold)) => #49
        SubscribeSubject PelletMonitor1 => #50
        #50, #49 -> Condition DispenserBroken
            ExternalizedMapping(Count) => #0
            WorkflowInput Source1
            -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: Value ? 1 : 0
            #2, #0 -> Buffer(Count=5, Skip=1)
            -> Add => #4
            #4, #0 -> GroupWorkflow Equal
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Count)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=5)) => #2
                #0 -> Equal(Operand=IntProperty(Value=0)) => #3
                #2, #3 -> Zip
                -> LogicalOr
                -> WorkflowOutput
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #52
        -> Format
          Format:
            ## **Dispenser Broken**
            **Patch**: Patch1
          Selector=""
        -> MulticastSubject SubjectAlertMessages
        #52 -> Aeon.Acquisition.FormatLogMessage(Format=Patch1, Selector="", Priority=Alert, Type=DispenserBroken, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs
        SubscribeSubject PelletMonitor2 => #57
        #57, #49 -> Condition DispenserBroken
            ExternalizedMapping(Count) => #0
            WorkflowInput Source1
            -> Bonsai.Scripting.ExpressionTransform => #2
              Expression: Value ? 1 : 0
            #2, #0 -> Buffer(Count=5, Skip=1)
            -> Add => #4
            #4, #0 -> GroupWorkflow Equal
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Count)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=5)) => #2
                #0 -> Equal(Operand=IntProperty(Value=0)) => #3
                #2, #3 -> Zip
                -> LogicalOr
                -> WorkflowOutput
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #59
        -> Format
          Format:
            ## **Dispenser Broken**
            **Patch**: Patch2
          Selector=""
        -> MulticastSubject SubjectAlertMessages
        #59 -> Aeon.Acquisition.FormatLogMessage(Format=Patch2, Selector="", Priority=Alert, Type=DispenserBroken, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject MissedPellets1
        -> ElementIndex
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #66
        SubscribeSubject SubjectState => #67
        #66, #67 -> WithLatestFrom
        -> Bonsai.Scripting.ExpressionTransform => #69
          Expression:
            new(
            Item1.Value.Seconds as Timestamp,
            Item1.Index + 1 as Count,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Missed Pellet**
            **Subject**: {0}
            **Patch:**: Patch1
            **Total Missed**: {1}
          Selector="Id,Count"
        -> MulticastSubject SubjectAlertMessages
        #69 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	Patch1	{1}", Selector="Id,Count", Priority=Alert, Type=MissedPellet, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject MissedPellets2
        -> ElementIndex
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #76
        SubscribeSubject SubjectState => #77
        #76, #77 -> WithLatestFrom
        -> Bonsai.Scripting.ExpressionTransform => #79
          Expression:
            new(
            Item1.Value.Seconds as Timestamp,
            Item1.Index + 1 as Count,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Missed Pellet**
            **Subject**: {0}
            **Patch:**: Patch2
            **Total Missed**: {1}
          Selector="Id,Count"
        -> MulticastSubject SubjectAlertMessages
        #79 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	Patch2	{1}", Selector="Id,Count", Priority=Alert, Type=MissedPellet, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject TrackingTop
        -> GroupWorkflow SpeedThreshold
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1.Centroid)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Dsp.Norm(NormType=L2) => #3
            ExternalizedMapping(Value(DisplayName=MaxSpeed)) => #4
            #3, #4 -> GreaterThan(Operand=DoubleProperty(Value=500)) => #5
            #0 -> MemberSelector(Selector=Item2) => #6
            #5, #6 -> Zip
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> WorkflowOutput
        -> Condition TrackingUnstable
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #87
        SubscribeSubject SubjectState => #88
        #87, #88 -> WithLatestFrom
        -> Bonsai.Scripting.ExpressionTransform => #90
          Expression:
            new(
            Item1.Item2 as Timestamp,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Tracking Failure**
            **Subject**: {0}
          Selector=Id
        -> MulticastSubject SubjectAlertMessages
        #90 -> Aeon.Acquisition.FormatLogMessage(Format={0}, Selector=Id, Priority=Alert, Type=TrackingFailure, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)

    GroupWorkflow EnvironmentAlerts
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.GroupByTime(ChunkSize=1)
        -> Skip(Count=1)
        -> SelectMany ExperimentSummary => #3
            SubscribeSubject PatchState1
            -> Take(Count=1)
            -> Bonsai.Scripting.ExpressionTransform => #2
              Expression:
                new(
                Item1 as Threshold,
                Item2 as D0,
                Item3 as Delta)
            SubscribeSubject PatchState2
            -> Take(Count=1)
            -> Bonsai.Scripting.ExpressionTransform => #5
              Expression:
                new(
                Item1 as Threshold,
                Item2 as D0,
                Item3 as Delta)
            SubscribeSubject SubjectState
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Id) => #8
            SubscribeSubject Patch1Dispenser
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Value) => #11
            SubscribeSubject TimeSinceLastVisit1
            -> Take(Count=1) => #13
            SubscribeSubject TimeSinceLastVisit2
            -> Take(Count=1) => #15
            SubscribeSubject TimeOnPatch1
            -> Take(Count=1) => #17
            SubscribeSubject TimeOnPatch2
            -> Take(Count=1) => #19
            #19, #17, #15, #13 -> Zip
            -> Bonsai.Scripting.ExpressionTransform => #21
              Expression:
                new(
                Item1 as TimeOnPatch2,
                Item2 as TimeOnPatch1,
                Item3 as TimeSinceLastVisit2,
                Item4 as TimeSinceLastVisit1)
            SubscribeSubject PercentWeightLoss
            -> MemberSelector(Selector="CurrentWeight,CurrentPercent") => #23
            SubscribeSubject Patch2Dispenser
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Value) => #26
            #2, #5, #11, #26 -> Zip
            -> Bonsai.Scripting.ExpressionTransform => #28
              Expression:
                new(
                Item1 as PatchState1,
                Item2 as PatchState2,
                Item3 as PatchDispenser1,
                Item4 as PatchDispenser2)
            WorkflowInput Source1
            -> Take(Count=1)
            -> MemberSelector(Selector=Key) => #31
            FloatProperty(Value=0)
            -> MemberSelector(Selector="it,it") => #33
            #23, #33 -> Merge
            -> Take(Count=1)
            -> Take(Count=1) => #36
            SubscribeSubject TotalPelletsDelivered1 => #37
            SubscribeSubject TotalPelletsDelivered2 => #38
            SubscribeSubject TotalMissedPellets1 => #39
            SubscribeSubject TotalMissedPellets2 => #40
            #37, #38, #39, #40 -> Zip
            -> Bonsai.Scripting.ExpressionTransform => #42
              Expression:
                new(
                Item1 as TotalPelletsDelivered1,
                Item2 as TotalPelletsDelivered2,
                Item3 as TotalMissedPellets1,
                Item4 as TotalMissedPellets2)
            #28, #21, #8, #36, #31, #42 -> Zip
            -> Take(Count=1) => #44
            -> Format => #45
              Format:
                # Arena Status
                **Time**: {0}
                **Subject**: {1}
                **Weight**: {2}
                **Weight Loss**: {3}
              Selector="Item5,Item3,Item4.Item1,Item4.Item2"
            #44 -> Format => #46
              Format:
                # Patch1
                **Pellets**: {0}
                **Threshold**: {1}
                **D0**: {2}
                **Delta**: {3}
                **Time On Patch**: {4}
                **Time Since Last Visit**: {5}
                **Total Pellets Delivered**: {6}
                **Total Missed Pellets**: {7}
              Selector: Item1.PatchDispenser1,Item1.PatchState1.Threshold,Item1.PatchState1.D0,Item1.PatchState1.Delta,Item2.TimeOnPatch1,Item2.TimeSinceLastVisit1,Item6.TotalPelletsDelivered1,Item6.TotalMissedPellets1
            #44 -> Format => #47
              Format:
                # Patch2
                **Pellets**: {0}
                **Threshold**: {1}
                **D0**: {2}
                **Delta**: {3}
                **Time On Patch**: {4}
                **Time Since Last Visit**: {5}
                **Total Pellets Delivered**: {6}
                **Total Missed Pellets**: {7}
              Selector: Item1.PatchDispenser2,Item1.PatchState2.Threshold,Item1.PatchState2.D0,Item1.PatchState2.Delta,Item2.TimeOnPatch2,Item2.TimeSinceLastVisit2,Item6.TotalPelletsDelivered2,Item6.TotalMissedPellets2
            #45, #46, #47 -> Zip
            -> Add
            -> WorkflowOutput
        SubscribeSubject EnvironmentState
        -> Format => #5
          Format:
            ## Arena {0} Mode Change
            Mode: {1}
          Selector="Value.Name,Value.Type"
        SubscribeSubject VideoEvents => #6
        #5, #6 -> SubscribeWhen
        -> DelaySubscription(DueTime=PT2S) => #8
        #3, #8 -> Merge
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\status.config)

        PublishSubject<System.String> EnvironmentAlertMessages
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\alerts.config)

        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.GroupByTime(ChunkSize=1)
        -> Skip(Count=1)
        -> SelectMany LocalFileCount => #16
            SubscribeSubject PathPrefix
            -> Bonsai.IO.GetDirectoryName
            -> PropertyMapping(Path)
            -> Bonsai.IO.GetFiles(Path=D:\ProjectAeon\experiment0.2, SearchPattern=*, SearchOption=AllDirectories)
            -> MemberSelector(Selector=Length) => #4
            WorkflowInput Source1
            -> Merge
            -> Take(Count=1) => #7
            #4, #7 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression:
                new(
                Item1 as Count,
                Item2.GetTimestamp() as Timestamp)
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=LocalFileThreshold)) => #17
        #16, #17 -> Condition GreaterThan => #18
            WorkflowInput Source1
            -> MemberSelector(Selector=Count) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> GreaterThan(Operand=IntProperty(Value=500))
            -> WorkflowOutput
        -> Format
          Format:
            ## **File Storage**
            **Total Files in Local Storage**: {0}
          Selector=Count
        -> MulticastSubject EnvironmentAlertMessages
        #18 -> Aeon.Acquisition.FormatLogMessage(Format="", Selector=Count, Priority=Alert, Type=FileStorage, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraNest) => #23
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraPatch2) => #24
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraPatch1) => #25
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraSouth) => #26
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraNorth) => #27
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraEast) => #28
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraWest) => #29
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraTop) => #30
        #30, #29, #28, #27, #26, #25, #24, #23 -> Merge => #31
        -> Format
          Format:
            ## **Frame Dropped**
            **Camera**: {0}
            **Current Frame**: {1}
          Selector="Name,FrameID"
        -> MulticastSubject EnvironmentAlertMessages
        #31 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	{1}", Selector="Name,FrameID", Priority=Alert, Type=DroppedFrames, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject Annotations
        -> Condition Alert
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.Priority)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.PriorityLevel>(Value=Alert))
            -> WorkflowOutput
        -> Format
          Format:
            ## **Experimenter Annotation**
            **Message**: {0}
          Selector=Value.Message
        -> MulticastSubject EnvironmentAlertMessages

SubscribeSubject VideoEvents
-> Aeon.Acquisition.EnvironmentSubjectState(DatabasePath=Z:\aeon\colony\colony.csv)
-> BehaviorSubject SubjectState => #5
-> Condition Start
    WorkflowInput Source1
    -> MemberSelector(Selector=Value.Type)
    -> NotEqual(Operand=WorkflowProperty<Aeon.Acquisition.EnvironmentSubjectChangeType>(Value=Exit))
    -> WorkflowOutput
-> PublishSubject SubjectStart
#5 -> Condition End
    WorkflowInput Source1
    -> MemberSelector(Selector=Value.Type)
    -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.EnvironmentSubjectChangeType>(Value=Exit))
    -> WorkflowOutput
-> PublishSubject SubjectStop

SubscribeSubject VideoEvents
-> Aeon.Acquisition.AnnotationSource
-> PublishSubject Annotations

SubscribeSubject VideoEvents
-> Aeon.Acquisition.EnvironmentState
-> BehaviorSubject EnvironmentState

SubscribeSubject Patch1
-> Aeon.Acquisition.DispenserState(Name=Patch1)
-> BehaviorSubject Patch1Dispenser

SubscribeSubject Patch2
-> Aeon.Acquisition.DispenserState(Name=Patch2)
-> BehaviorSubject Patch2Dispenser

SubscribeSubject WheelPatch1 => #22
ExternalizedMapping(DistanceThreshold(DisplayName=ThresholdPatch1), Delta(DisplayName=DeltaPatch1)) => #23
#22, #23 -> IncludeWorkflow
  Path=Extensions\LinearDepletion.bonsai
  DistanceThreshold=50
  Delta=0
  DeliveryCount=DeliveryCount1
  PatchState=PatchState1
  DistanceState=DistanceState1
-> MulticastSubject DeliverPelletPatch1

SubscribeSubject WheelPatch2 => #26
ExternalizedMapping(DistanceThreshold(DisplayName=ThresholdPatch2), Delta(DisplayName=DeltaPatch2)) => #27
#26, #27 -> IncludeWorkflow
  Path=Extensions\LinearDepletion.bonsai
  DistanceThreshold=50
  Delta=0
  DeliveryCount=DeliveryCount2
  PatchState=PatchState2
  DistanceState=DistanceState2
-> MulticastSubject DeliverPelletPatch2

Bonsai.Windows.Input.KeyDown(Filter="ShiftKey Space D0 P NumPad0 F1 Shift", SuppressRepetitions=false)
-> MulticastSubject StartCameras

Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey Space Prior PageUp D0 D1 A P Q NumPad0 NumPad1 F1 F2 Shift", SuppressRepetitions=false)
-> MulticastSubject StopCameras

Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu Space Next PageDown D0 D2 B P R NumPad0 NumPad2 F1 F3 Shift", SuppressRepetitions=false)
-> GroupWorkflow ManualPellet1
    WorkflowInput Source1
    -> IncludeWorkflow(Path=Aeon.Acquisition:TriggerPellet.bonsai, PatchEvents=Patch1, DeliverPellet=DeliverPelletPatch1)
    -> PublishSubject ManualPellet1
    -> WorkflowOutput

Bonsai.Windows.Input.KeyDown
  Filter: LButton RButton Cancel ShiftKey ControlKey Menu Pause Space Prior PageUp Next PageDown End D0 D1 D2 D3 A B C P Q R S NumPad0 NumPad1 NumPad2 NumPad3 F1 F2 F3 F4 Shift
  SuppressRepetitions=false
-> GroupWorkflow ManualPellet2
    WorkflowInput Source1
    -> IncludeWorkflow(Path=Aeon.Acquisition:TriggerPellet.bonsai, PatchEvents=Patch2, DeliverPellet=DeliverPelletPatch2)
    -> PublishSubject ManualPellet2
    -> WorkflowOutput

Bonsai.Design.Visualizers.TableLayoutPanelBuilder ExperimentMetadata
  ColumnCount=2
  RowCount=4
  ColumnStyles=""
  RowStyles=""
  CellSpans
    CellSpan(ColumnSpan=1, RowSpan=2)
    CellSpan(ColumnSpan=1, RowSpan=2)
    CellSpan(ColumnSpan=1, RowSpan=2)
    CellSpan(ColumnSpan=1, RowSpan=1)
    CellSpan(ColumnSpan=1, RowSpan=1)

SubscribeSubject FrameTrajectory
SubscribeSubject Trajectory
SubscribeSubject Heatmap

Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchActivity
  ColumnCount=2
  RowCount=4
  ColumnStyles=""
  RowStyles=""
  CellSpans
    CellSpan(ColumnSpan=2, RowSpan=1)
    CellSpan(ColumnSpan=1, RowSpan=1)
    CellSpan(ColumnSpan=1, RowSpan=1)
    CellSpan(ColumnSpan=1, RowSpan=1)
    CellSpan(ColumnSpan=1, RowSpan=1)
    CellSpan(ColumnSpan=1, RowSpan=1)
    CellSpan(ColumnSpan=1, RowSpan=1)

SubscribeSubject CameraSide
SubscribeSubject PatchState

SubscribeSubject ThresholdPatch1
-> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=PelletCount, ValueSelector=Threshold, Capacity=nil)
-> GroupWorkflow ThresholdPatch1
    WorkflowInput Source1
    -> WorkflowOutput

SubscribeSubject ThresholdPatch2
-> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=PelletCount, ValueSelector=Threshold, Capacity=nil)
-> GroupWorkflow ThresholdPatch2
    WorkflowInput Source1
    -> WorkflowOutput

SubscribeSubject PelletMonitorValue1
SubscribeSubject PelletMonitorValue2

SubscribeSubject PatchState1
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    Item2 as D1,
    Item3 as Delta)
-> Aeon.Acquisition.LabelControl(FontSize=14)
-> GroupWorkflow Patch1
    WorkflowInput Source1
    -> WorkflowOutput

SubscribeSubject PatchState2
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    Item2 as D1,
    Item3 as Delta)
-> Aeon.Acquisition.LabelControl(FontSize=14)
-> GroupWorkflow Patch2
    WorkflowInput Source1
    -> WorkflowOutput

SubscribeSubject TimeSpentOnPatches
-> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="Patch1,Patch2", BaseAxis=X, BarType=Cluster, Capacity=nil)
-> GroupWorkflow TimeSpentOnPatches
    WorkflowInput Source1
    -> WorkflowOutput

SubscribeSubject TimeSinceLastVisit
-> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="Patch1,Patch2", BaseAxis=X, BarType=Cluster, Capacity=nil)
-> GroupWorkflow TimeSinceLastVisit
    WorkflowInput Source1
    -> WorkflowOutput

SubscribeSubject TotalDistanceTravelled
-> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="Patch1,Patch2", BaseAxis=X, BarType=Cluster, Capacity=nil)
-> GroupWorkflow TotalDistanceTravelled
    WorkflowInput Source1
    -> WorkflowOutput

SubscribeSubject AudioAmbient
-> MemberSelector(Selector=Value)

SubscribeSubject NestMonitor
-> MemberSelector

Disable SubscribeSubject SubjectStop
-> Disable Aeon.Acquisition.SubjectLogBitmap(Path=SessionSummary)

Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchStatistics(ColumnCount=1, RowCount=4, ColumnStyles="", RowStyles="", CellSpans="")
Bonsai.Design.Visualizers.TableLayoutPanelBuilder SubjectActivity(ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
Aeon.Acquisition.ExperimentProperties

Aeon.Acquisition.TareWeight
-> MulticastSubject TareWeightNest

SubscribeSubject WeightNestMonitor
-> Bonsai.Design.Visualizers.RollingGraphBuilder(ValueSelector="Stable,Raw,Baseline", Capacity=200)
-> GroupWorkflow WeightMonitor
    WorkflowInput Source1
    -> WorkflowOutput

SubscribeSubject SubjectWeight
-> GroupWorkflow SubjectWeight
    WorkflowInput Source1
    -> MemberSelector(Selector=Value)
    -> WorkflowOutput

SubscribeSubject PercentWeightLoss
-> MemberSelector(Selector=CurrentPercent)
