<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>The patch is depleted using a linear depletion function.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DistanceThreshold" />
        <Property Name="Delta" />
        <Property Name="DeliveryCount" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PatchState" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="MinUpdatePeriod" />
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Name>DistancePerSubject</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubjectState</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>Enter</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Type</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="aeon:EnvironmentSubjectChangeType">
                      <Value>Enter</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>MaintenanceGain</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>EnvironmentState</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Type</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="aeon:EnvironmentStateType">
                      <Value>Experiment</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it ? 1.0 : 0.0</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Gain" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="PatchState" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="MinUpdatePeriod" />
            </Expression>
            <Expression xsi:type="aeon:StateRecoverySubject">
              <Name>PatchState</Name>
              <aeon:MinUpdatePeriod>PT1S</aeon:MinUpdatePeriod>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PatchState</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:DistanceTravelled.bonsai">
              <Gain>1</Gain>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>PatchState</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="8" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="12" Label="Source2" />
            <Edge From="5" To="11" Label="Source2" />
            <Edge From="6" To="8" Label="Source2" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="6" To="13" Label="Source2" />
            <Edge From="7" To="8" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DepletionFunction</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubjectState</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>Enter</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Type</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="aeon:EnvironmentSubjectChangeType">
                      <Value>Enter</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="PatchState" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PatchState1</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Threshold</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="DeliveryCount" />
            </Expression>
            <Expression xsi:type="aeon:StateRecoverySubject">
              <Name>DeliveryCount</Name>
              <aeon:MinUpdatePeriod>PT0S</aeon:MinUpdatePeriod>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DeliveryCount</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item1.Item2 + Item1.Item3 * Item2 as Threshold,
Item1.Item2 as D0,
Item1.Item3 as Delta)</scr:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Threshold,D0,Delta</Selector>
              <TypeMapping xsi:type="TypeMapping" TypeArguments="sys:ValueTuple(sys:Double,sys:Double,sys:Double)" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>PatchState</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>50</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="MulticastSubject">
              <Name>DeliveryCount</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Delta" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="DoubleProperty,sys:Double">
              <MemberName>Delta</MemberName>
              <Value>0</Value>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PatchState1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item2.Item1 as Threshold,
Item2.Item2 as D0,
Item1 as Delta)</scr:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Threshold,D0,Delta</Selector>
              <TypeMapping xsi:type="TypeMapping" TypeArguments="sys:ValueTuple(sys:Double,sys:Double,sys:Double)" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>PatchState1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="DistanceThreshold" Description="The distance required to obtain the first pellet." />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>100</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PatchState1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item2.Item1 as Threshold,
Item1 as D0,
Item2.Item3 as Delta)</scr:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Threshold,D0,Delta</Selector>
              <TypeMapping xsi:type="TypeMapping" TypeArguments="sys:ValueTuple(sys:Double,sys:Double,sys:Double)" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>PatchState1</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="8" Label="Source1" />
            <Edge From="3" To="17" Label="Source1" />
            <Edge From="4" To="14" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="10" Label="Source1" />
            <Edge From="7" To="23" Label="Source2" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="28" Label="Source1" />
            <Edge From="27" To="28" Label="Source2" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="35" Label="Source1" />
            <Edge From="34" To="35" Label="Source2" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\RepeatEverySubject.bonsai" />
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="5" Label="Source2" />
      <Edge From="2" To="4" Label="Source2" />
      <Edge From="2" To="5" Label="Source3" />
      <Edge From="3" To="4" Label="Source3" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>