<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.4-preview"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Monitors pellet delivery state of commands and beam breaks.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="PelletDelivered" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PelletDelivered</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="PelletCommand" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PatchEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:Address>35</harp:Address>
          <harp:MessageType>Write</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>FilterPayload</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>PayloadType</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="harp:PayloadType">
                <Value>TimestampedU8</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\RepeatEverySubject.bonsai" />
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="8" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>