<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT1S</rx:DueTime>
          <rx:Period>PT3S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:DeviceCommand">
        <harp:Command xsi:type="harp:SynchronizeTimestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM6</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:Address>8</harp:Address>
          <harp:MessageType>Write</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT1H</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Robocopy</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Z:\aeon\data\raw\%COMPUTERNAME%\experiment0.2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>D:\ProjectAeon\experiment0.2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>..\..\calibration\robocopy.py {0} {1}</Format>
              <Selector>Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Arguments" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:StartProcess">
                <io:FileName>..\..\python\winpython\python-3.9.5.amd64\python.exe</io:FileName>
                <io:Arguments>..\..\calibration\robocopy.py D:\ProjectAeon\experiment0.2 Z:\aeon\data\raw\%COMPUTERNAME%\experiment0.2</io:Arguments>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>