WorkflowBuilder(Version=2.8.1)
GroupWorkflow Metadata
    GroupWorkflow Devices
        GroupWorkflow CameraController
            ExternalizedMapping(PortName, GlobalTriggerFrequency, LocalTriggerFrequency)
            -> IncludeWorkflow(Path=Aeon.Acquisition:CameraController.bonsai, PortName=COM6, GlobalTriggerFrequency=50, LocalTriggerFrequency=125)
            -> WorkflowOutput

        GroupWorkflow CameraTop
            ExternalizedMapping(SerialNumber, TriggerSource, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:PylonVideoSource.bonsai
              TriggerSource=GlobalTrigger
              SerialNumber=40188224
              ParameterFile=Config\acA1440-220um_CameraTop.pfs
              FrameEvents=CameraTop
            -> WorkflowOutput

        GroupWorkflow CameraWest
            ExternalizedMapping(SerialNumber, TriggerSource, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:PylonVideoSource.bonsai
              TriggerSource=GlobalTrigger
              SerialNumber=40182339
              ParameterFile=Config\acA1440-220um_CameraTop.pfs
              FrameEvents=CameraWest
            -> WorkflowOutput

        GroupWorkflow CameraEast
            ExternalizedMapping(SerialNumber, TriggerSource, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:PylonVideoSource.bonsai
              TriggerSource=GlobalTrigger
              SerialNumber=40182669
              ParameterFile=Config\acA1440-220um_CameraTop.pfs
              FrameEvents=CameraEast
            -> WorkflowOutput

        GroupWorkflow CameraNorth
            ExternalizedMapping(SerialNumber, TriggerSource, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:PylonVideoSource.bonsai
              TriggerSource=GlobalTrigger
              SerialNumber=40188242
              ParameterFile=Config\acA1440-220um_CameraTop.pfs
              FrameEvents=CameraNorth
            -> WorkflowOutput

        GroupWorkflow CameraSouth
            ExternalizedMapping(SerialNumber, TriggerSource, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:PylonVideoSource.bonsai
              TriggerSource=GlobalTrigger
              SerialNumber=40182341
              ParameterFile=Config\acA1440-220um_CameraTop.pfs
              FrameEvents=CameraSouth
            -> WorkflowOutput

        GroupWorkflow CameraPatch1
            ExternalizedMapping(SerialNumber, TriggerSource, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:PylonVideoSource.bonsai
              TriggerSource=LocalTrigger
              SerialNumber=40182619
              ParameterFile=Config\acA1440-220um_CameraSide.pfs
              FrameEvents=CameraPatch1
            -> WorkflowOutput

        GroupWorkflow CameraPatch2
            ExternalizedMapping(SerialNumber, TriggerSource, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:PylonVideoSource.bonsai
              TriggerSource=LocalTrigger
              SerialNumber=40188245
              ParameterFile=Config\acA1440-220um_CameraSide.pfs
              FrameEvents=CameraPatch2
            -> WorkflowOutput

        GroupWorkflow AudioAmbient
            ExternalizedMapping(DeviceName, SampleRate, Name)
            -> IncludeWorkflow AudioAmbient(Path=Aeon.Acquisition:AudioSource.bonsai, DeviceName="Microphone (UltraMic 192K 16 bi", SampleRate=192000)
            -> WorkflowOutput

        GroupWorkflow Patch1
            ExternalizedMapping(PortName, WheelDisplacement, PelletDelivered, DeliverPellet, PatchEvents, Radius, SampleRate, ResetFeeder, DueTime, Count)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:UndergroundFeeder.bonsai
              PatchEvents=Patch1
              SampleRate=SampleRate500Hz
              DeliverPellet=DeliverPelletPatch1
              PelletDelivered=PelletDeliveredPatch1
              DueTime=PT1S
              Count=5
              ResetFeeder=ResetFeederPatch1
              PortName=COM3
              Radius=-4
              WheelDisplacement=WheelPatch1
            -> WorkflowOutput

        GroupWorkflow Patch2
            ExternalizedMapping(PortName, WheelDisplacement, PelletDelivered, DeliverPellet, PatchEvents, Radius, SampleRate, ResetFeeder, DueTime, Count)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:UndergroundFeeder.bonsai
              PatchEvents=Patch2
              SampleRate=SampleRate500Hz
              DeliverPellet=DeliverPelletPatch2
              PelletDelivered=PelletDeliveredPatch2
              DueTime=PT1S
              Count=5
              ResetFeeder=ResetFeederPatch2
              PortName=COM4
              Radius=-4
              WheelDisplacement=WheelPatch2
            -> WorkflowOutput

        GroupWorkflow Nest
            ExternalizedMapping(PortName, WeightEvents, TareWeight, TareEvents)
            -> IncludeWorkflow(Path=Aeon.Acquisition:WeightScale.bonsai, PortName=COM7, WeightEvents=WeightNest, TareWeight=TareWeightNest, TareEvents=TareNest)
            -> WorkflowOutput

        GroupWorkflow LightController
            ExternalizedMapping(EventSocket, LightEvents, CommandSocket)
            -> IncludeWorkflow(Path=Aeon.Acquisition:LightController.bonsai, EventSocket=>tcp://localhost:4303, LightEvents=LightEvents, CommandSocket=>tcp://localhost:4304)
            -> WorkflowOutput

    GroupWorkflow TrackingTop
        ExternalizedMapping(Name(DisplayName=FrameEvents))
        -> SubscribeSubject CameraTop => #1
        ExternalizedMapping(Mask, ThresholdValue, TrackingEvents) => #2
        #1, #2 -> IncludeWorkflow(Path=Aeon.Acquisition:PositionTracking.bonsai, ThresholdValue=72, Mask=ArenaMask_2022-09-23.png, TrackingCount=1, TrackingEvents=TrackingTop)
        -> WorkflowOutput

    GroupWorkflow ActivityCenter
        SubscribeSubject CameraTop
        -> IncludeWorkflow
          Path=Aeon.Acquisition:ActivityTracking.bonsai
          Regions(ArrayOfPoint(Point(X=76, Y=431), Point(X=404, Y=431), Point(X=404, Y=665), Point(X=76, Y=665)))
          ThresholdValue=10
          TrackingEvents=ActivityCenter
        -> WorkflowOutput

    GroupWorkflow ActivityArena
        SubscribeSubject CameraTop
        -> IncludeWorkflow(Path=Aeon.Acquisition:ActivityTracking.bonsai, Regions=nil, ThresholdValue=10, TrackingEvents=ActivityArena)
        -> WorkflowOutput

    GroupWorkflow ActiveRegion
        ExternalizedMapping(NestRegion, Patch1Region, Patch2Region, ArenaCenter, ArenaInnerRadius, ArenaOuterRadius)
        -> IncludeWorkflow
          Path=Extensions\ActiveRegion.bonsai
          NestRegion(ArrayOfPoint(Point(X=1185, Y=497), Point(X=1307, Y=497), Point(X=1306, Y=601), Point(X=1187, Y=602)))
          Patch1Region(ArrayOfPoint(Point(X=869, Y=210), Point(X=886, Y=221), Point(X=877, Y=238), Point(X=860, Y=223)))
          Patch2Region(ArrayOfPoint(Point(X=858, Y=866), Point(X=875, Y=856), Point(X=880, Y=874), Point(X=864, Y=883)))
          ArenaCenter(X=683, Y=544)
          ArenaInnerRadius=474
          ArenaOuterRadius=494
        -> WorkflowOutput

GroupWorkflow Declarations
    BehaviorSubject<Aeon.Acquisition.WeightMeasurement> FilteredWeightNest
    BehaviorSubject<Aeon.Acquisition.WeightMeasurement> SubjectWeight
    PublishSubject<Bonsai.Harp.Timestamped(System.Byte)> MissedPellets1
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> PatchState1
    PublishSubject<Bonsai.Harp.Timestamped(System.Byte)> MissedPellets2
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> PatchState2
    PublishSubject<Bonsai.Harp.Timestamped(System.Double)> BaselineTrigger
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.LogMessage)> AlertLogs
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.LogMessage)> Annotations
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentStateMetadata)> EnvironmentState
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.DispenserStateMetadata)> Patch1Dispenser
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.DispenserStateMetadata)> Patch2Dispenser
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentSubjectStateMetadata)> SubjectState
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentSubjectStateMetadata)> SubjectStart
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentSubjectStateMetadata)> SubjectStop
    PublishSubject<Bonsai.Harp.Timestamped(Harp.OutputExpander.DigitalOutputs)> ManualPellet1
    PublishSubject<Bonsai.Harp.Timestamped(Harp.OutputExpander.DigitalOutputs)> ManualPellet2

GroupWorkflow Logging
    IncludeWorkflow(Path=Aeon.Acquisition:LogController.bonsai, Path=D:\ProjectAeon\experiment0.3, ChunkSize=1)
    IncludeWorkflow(Path=Aeon.Acquisition:ExportMetadata.bonsai, WorkflowName=Experiment0.3.bonsai)

    SubscribeSubject VideoEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=VideoController, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject CameraTop
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraTop, FrameRate=50)

    SubscribeSubject TrackingTop
    -> Aeon.Acquisition.FormatBinaryRegions => #7
    GroupWorkflow RegionTracking
        SubscribeSubject InPatch2
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
          Expression: Value ? 5 : 0
        SubscribeSubject InPatch1
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
          Expression: Value ? 4 : 0
        SubscribeSubject InArena
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
          Expression: Value ? 3 : 0
        SubscribeSubject InCorridor
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
          Expression: Value ? 2 : 0
        SubscribeSubject InNest => #8
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #9
          Expression: Value ? 1 : 0
        #1, #3, #5, #7, #9 -> Zip
        -> Bonsai.Numerics.Max => #11
        #8 -> MemberSelector(Selector=Seconds) => #12
        #11, #12 -> Zip
        -> Aeon.Acquisition.CreateTimestamped
        -> WorkflowOutput
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #9
    #7, #9 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=CameraTop, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject CameraWest
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraWest, FrameRate=50)

    SubscribeSubject CameraEast
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraEast, FrameRate=50)

    SubscribeSubject CameraNorth
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraNorth, FrameRate=50)

    SubscribeSubject CameraSouth
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraSouth, FrameRate=50)

    SubscribeSubject CameraPatch1
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraPatch1, FrameRate=125)

    SubscribeSubject CameraPatch2
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraPatch2, FrameRate=125)

    SubscribeSubject Patch1 => #24
    SubscribeSubject Patch1Dispenser
    -> Aeon.Acquisition.FormatDispenserState => #26
    SubscribeSubject ManualPellet1
    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #28
    SubscribeSubject MissedPellets1
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=202, PayloadType=TimestampedU8)) => #30
    #24, #26, #28, #30 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Patch1, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject PatchState1
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #34
      Expression:
        new(
        Item1 as Threshold,
        Item2 as D1,
        Item3 as Delta)
    SubscribeSubject Patch1
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #36
    #34, #36 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=Patch1_State, Selector=nil)

    SubscribeSubject Patch2 => #39
    SubscribeSubject Patch2Dispenser
    -> Aeon.Acquisition.FormatDispenserState => #41
    SubscribeSubject ManualPellet2
    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #43
    SubscribeSubject MissedPellets2
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=202, PayloadType=TimestampedU8)) => #45
    #39, #41, #43, #45 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Patch2, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject PatchState2
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #49
      Expression:
        new(
        Item1 as Threshold,
        Item2 as D1,
        Item3 as Delta)
    SubscribeSubject Patch2
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #51
    #49, #51 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=Patch2_State, Selector=nil)

    SubscribeSubject AudioAmbient
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogAudio.bonsai, Heartbeats="", ClosingDuration=nil, LogName=AudioAmbient, SampleRate=192000)

    SubscribeSubject WeightNest
    -> InputMapping(Selector="Seconds,Value.Weight,Value.Confidence", TypeMapping=TypeMapping<Aeon.Acquisition.WeightMeasurement>)
    -> Aeon.Acquisition.FormatWeight(Address=200) => #58
    SubscribeSubject TareNest
    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #60
    SubscribeSubject FilteredWeightNest
    -> Aeon.Acquisition.FormatWeight(Address=202) => #62
    SubscribeSubject BaselineTrigger
    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=203, PayloadType=TimestampedU8)) => #64
    SubscribeSubject SubjectWeight
    -> Aeon.Acquisition.FormatWeight(Address=204) => #66
    #58, #60, #62, #64, #66 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Nest, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject SubjectState
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=""
      ClosingDuration=nil
      LogName=ExperimentalMetadata_SubjectState
      Selector="Seconds,Value.Id,Value.Weight,Value.Type"

    SubscribeSubject AlertLogs => #71
    SubscribeSubject Annotations => #72
    #71, #72 -> Merge
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=""
      ClosingDuration=nil
      LogName=ExperimentalMetadata_MessageLog
      Selector="Seconds,Value.Priority,Value.Type,Value.Message"

    SubscribeSubject EnvironmentState
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=ExperimentalMetadata_EnvironmentState, Selector="Seconds,Value.Type")

    SubscribeSubject SubjectState
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #78
      Expression:
        new(
        Seconds as Seconds,
        new(Value.Id as Id,
            Value.Type.ToString() as Event,
            "Environment" as Value) as Value)
    SubscribeSubject InPatch1
    -> IncludeWorkflow Patch1(Path=Extensions\FormatRegionVisits.bonsai) => #80
    SubscribeSubject InPatch2
    -> IncludeWorkflow Patch2(Path=Extensions\FormatRegionVisits.bonsai) => #82
    SubscribeSubject InArena
    -> IncludeWorkflow Arena(Path=Extensions\FormatRegionVisits.bonsai) => #84
    SubscribeSubject InCorridor
    -> IncludeWorkflow Corridor(Path=Extensions\FormatRegionVisits.bonsai) => #86
    SubscribeSubject InNest
    -> IncludeWorkflow Nest(Path=Extensions\FormatRegionVisits.bonsai) => #88
    #78, #80, #82, #84, #86, #88 -> Merge
    -> MemberSelector(Selector="Value,Seconds")
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=""
      ClosingDuration=nil
      LogName=ExperimentalMetadata_SubjectVisits
      Selector="Seconds,Value.Id,Value.Event,Value.Value"

    SubscribeSubject LightEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=LightController, Selector=nil)

GroupWorkflow Visualization
    SubscribeSubject TrackingTop
    -> MemberSelector(Selector=Item1[0].Centroid)
    -> PublishSubject Trajectory

    SubscribeSubject CameraTop
    -> MemberSelector(Selector=Value.Image)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject FrameTrajectory

    SubscribeSubject TrackingTop
    -> MemberSelector(Selector=Item1[0].Centroid)
    -> Bonsai.Dsp.Histogram2D(MinX=0, MaxX=1440, MinY=0, MaxY=1080, BinsX=288, BinsY=216, Normalize=false, Accumulate=true)
    -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=20, Shift=0)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject Heatmap

    SubscribeSubject DistanceState1
    -> MemberSelector(Selector=Value) => #15
    SubscribeSubject DistanceState2
    -> MemberSelector(Selector=Value) => #17
    SubscribeSubject PatchState1
    -> MemberSelector(Selector=Item1) => #19
    SubscribeSubject PatchState2
    -> MemberSelector(Selector=Item1) => #21
    #15, #17, #19, #21 -> CombineLatest => #22
    #22, #15 -> Sample
    -> Bonsai.Dsp.Buffer(Count=15, Skip=nil)
    -> PublishSubject PatchState

    SubscribeSubject PatchState1
    -> GroupWorkflow ToArray => #27
        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> IgnoreElements
        -> ToArray => #3
        WorkflowInput Source1
        -> SelectMany
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> ToArray
            -> WorkflowOutput
        -> DelaySubscription(DueTime=PT0.1S) => #6
        #3, #6 -> Concat
        -> WorkflowOutput
    SubscribeSubject DeliveryCount1 => #28
    #27, #28 -> WithLatestFrom
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        int32(Item2) as PelletCount,
        Item1 as Threshold)
    -> PublishSubject CurrentThresholdPatch1

    SubscribeSubject PatchState2
    -> GroupWorkflow ToArray => #34
        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> IgnoreElements
        -> ToArray => #3
        WorkflowInput Source1
        -> SelectMany
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> ToArray
            -> WorkflowOutput
        -> DelaySubscription(DueTime=PT0.1S) => #6
        #3, #6 -> Concat
        -> WorkflowOutput
    SubscribeSubject DeliveryCount2 => #35
    #34, #35 -> WithLatestFrom
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        int32(Item2) as PelletCount,
        Item1 as Threshold)
    -> PublishSubject CurrentThresholdPatch2

    IncludeWorkflow(Path=Extensions\PelletMonitor.bonsai, PelletCommand=Patch1, PelletDelivered=PelletDeliveredPatch1)
    -> PublishSubject PelletMonitor1
    -> MemberSelector(Selector=Value)
    -> PublishSubject PelletMonitorValue1

    IncludeWorkflow(Path=Extensions\PelletMonitor.bonsai, PelletCommand=Patch2, PelletDelivered=PelletDeliveredPatch2)
    -> BehaviorSubject PelletMonitor2
    -> MemberSelector(Selector=Value)
    -> PublishSubject PelletMonitorValue2

    SubscribeSubject TimeOnPatch1 => #48
    SubscribeSubject TimeOnPatch2 => #49
    #48, #49 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Time Spent on Patch (s)" as Id,
        Item1 as Patch1,
        Item2 as Patch2)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TimeSpentOnPatches

    SubscribeSubject TimeSinceLastVisit1 => #54
    SubscribeSubject TimeSinceLastVisit2 => #55
    #54, #55 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Time Since Last Visit (s)" as Id,
        Item1 as Patch1,
        Item2 as Patch2)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TimeSinceLastVisit

    SubscribeSubject WheelPatch1
    -> MemberSelector(Selector=Value)
    -> Accumulate => #62
    SubscribeSubject WheelPatch2
    -> MemberSelector(Selector=Value)
    -> Accumulate => #65
    #62, #65 -> CombineLatest
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Total Distance Travelled (cm)" as Id,
        Item1 as Patch1,
        Item2 as Patch2)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TotalDistanceTravelled

    IncludeWorkflow(Path=Aeon.Acquisition:TimeSpentOnWheel.bonsai, Patch=Patch1, WheelPatch=WheelPatch1, Threshold=0.0003, LowPass=1)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> BehaviorSubject TimeOnPatch1

    SubscribeSubject TimeOnPatch1
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> DistinctUntilChanged
    -> IncludeWorkflow(Path=Aeon.Acquisition:TimeSinceLastEvent.bonsai)
    -> BehaviorSubject TimeSinceLastVisit1

    IncludeWorkflow(Path=Aeon.Acquisition:TimeSpentOnWheel.bonsai, Patch=Patch2, WheelPatch=WheelPatch2, Threshold=0.0003, LowPass=1)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> BehaviorSubject TimeOnPatch2

    SubscribeSubject TimeOnPatch2
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> DistinctUntilChanged
    -> IncludeWorkflow(Path=Aeon.Acquisition:TimeSinceLastEvent.bonsai)
    -> BehaviorSubject TimeSinceLastVisit2

    SubscribeSubject WeightNest
    -> InputMapping(Selector="Seconds,Value.Weight,Value.Confidence", TypeMapping=TypeMapping<Aeon.Acquisition.WeightMeasurement>)
    -> Aeon.Acquisition.WeightFilter(Count=40)
    -> MulticastSubject FilteredWeightNest => #90
    SubscribeSubject BaselineTrigger => #91
    #90, #91 -> Aeon.Acquisition.WeightBaseline
    -> PublishSubject BaselinedWeight
    -> Condition StableWeight
        WorkflowInput Source1
        -> MemberSelector(Selector=Confidence) => #1
        ExternalizedMapping(Value(DisplayName=ConfidenceThreshold)) => #2
        #1, #2 -> Equal(Operand=FloatProperty(Value=1))
        -> WorkflowOutput
    -> Condition SubjectOnScale
        WorkflowInput Source1
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=WeightThreshold)) => #2
        #1, #2 -> GreaterThan(Operand=FloatProperty(Value=10))
        -> WorkflowOutput
    -> MulticastSubject SubjectWeight

    SubscribeSubject FilteredWeightNest
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #98
      Expression: Confidence == 1 ? Value : single.NaN
    SubscribeSubject WeightNest
    -> Skip(Count=9)
    -> MemberSelector(Selector=Value.Weight) => #101
    #98, #101 -> Zip => #102
    SubscribeSubject BaselineTrigger
    -> GroupWorkflow CurrentBaseline => #104
        FloatProperty(Value=0)
        -> Take(Count=1) => #1
        WorkflowInput Source1
        -> SelectMany UpdateBaseline => #3
            SubscribeSubject FilteredWeightNest
            -> MemberSelector(Selector=Value) => #1
            SubscribeSubject BaselinedWeight
            -> MemberSelector(Selector=Value) => #3
            #1, #3 -> CombineLatest
            -> Subtract
            -> Skip(Count=10)
            -> Take(Count=1)
            -> WorkflowOutput
        #1, #3 -> Concat
        -> WorkflowOutput
    #102, #104 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1.Item1 as Stable,
        Item1.Item2 as Raw,
        Item2 as Baseline)
    -> PublishSubject WeightNestMonitor

    SubscribeSubject ActivityCenter
    -> Condition ActivityCondition => #109
        WorkflowInput Source1
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=BaselineActivityThreshold)) => #2
        #1, #2 -> GreaterThan(Operand=DoubleProperty(Value=1))
        -> WorkflowOutput
    ExternalizedMapping(Interval(DisplayName=BaselineRefractoryPeriod)) => #110
    #109, #110 -> GateInterval(Interval=PT5S)
    -> MulticastSubject BaselineTrigger

    SubscribeSubject SubjectWeight => #113
    SubscribeSubject SubjectStart
    -> MemberSelector(Selector=Value.ReferenceWeight) => #115
    #113, #115 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1.Timestamp as Timestamp,
        Item1.Value as CurrentWeight,
        100 * Item1.Value / Item2 as CurrentPercent)
    -> BehaviorSubject PercentWeightLoss

    IncludeWorkflow
      Path=Extensions\PelletMissed.bonsai
      PelletDelivered=PelletDeliveredPatch1
      TimeToMiss=PT2S
      DistanceToMiss=20
      TimeInChute=PT0S
      WheelDisplacement=WheelPatch1
    -> MulticastSubject MissedPellets1

    IncludeWorkflow
      Path=Extensions\PelletMissed.bonsai
      PelletDelivered=PelletDeliveredPatch2
      TimeToMiss=PT2S
      DistanceToMiss=20
      TimeInChute=PT0S
      WheelDisplacement=WheelPatch2
    -> MulticastSubject MissedPellets2

    SubscribeSubject PelletDeliveredPatch1
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalPelletsDelivered1(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject PelletDeliveredPatch2
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalPelletsDelivered2(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject MissedPellets1
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalMissedPellets1(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject MissedPellets2
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalMissedPellets2(Path=Extensions\PersistentCounter.bonsai)

    GroupWorkflow SubjectAlerts
        PublishSubject<System.String> SubjectAlertMessages
        -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\alerts.config)

        SubscribeSubject PercentWeightLoss => #3
        ExternalizedMapping(WeightLossThreshold) => #4
        #3, #4 -> Condition LowWeight
            WorkflowInput Source1
            -> MemberSelector(Selector=CurrentPercent) => #1
            ExternalizedMapping(Value(DisplayName=WeightLossThreshold, Description="Below this value the weight loss alert will be raised.")) => #2
            #1, #2 -> LessThanOrEqual(Operand=FloatProperty(Value=80))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #6
        SubscribeSubject SubjectState => #7
        #6, #7 -> WithLatestFrom => #8
        -> Format
          Format:
            ## **Low Weight**
            **Subject**: {0}
            **Current Weight**: {1}
            **Reference Weight**: {2}
            **Current percent**: {3}
          Selector="Item2.Value.Id,Item1.CurrentWeight,Item2.Value.ReferenceWeight,Item1.CurrentPercent"
        -> MulticastSubject SubjectAlertMessages
        #8 -> Aeon.Acquisition.FormatLogMessage
          Format="{0}	{1}	{2}	{3}"
          Selector="Item2.Value.Id,Item1.CurrentWeight,Item2.Value.ReferenceWeight,Item1.CurrentPercent"
          Priority=Alert
          Type=LowWeight
          Timestamp=Item1.Timestamp
        -> MulticastSubject AlertLogs

        SubscribeSubject Patch1Dispenser => #13
        ExternalizedMapping(PelletThreshold) => #14
        #13, #14 -> Condition LowFood
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.Value) => #1
            ExternalizedMapping(Value(DisplayName=PelletThreshold, Description="Below this value the low food alert will be raised.")) => #2
            #1, #2 -> LessThan(Operand=IntProperty(Value=105))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #16
        SubscribeSubject Patch2Dispenser => #17
        #17, #14 -> Condition LowFood
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.Value) => #1
            ExternalizedMapping(Value(DisplayName=PelletThreshold, Description="Below this value the low food alert will be raised.")) => #2
            #1, #2 -> LessThan(Operand=IntProperty(Value=105))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #19
        #16, #19 -> Merge => #20
        -> Format
          Format:
            ## **Low Food**
            **Patch**: {0}
            **Current Pellet Estimate**: {1}
          Selector="Value.Name,Value.Value"
        -> MulticastSubject SubjectAlertMessages
        #20 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	{1}", Selector="Value.Name,Value.Value", Priority=Alert, Type=LowFood)
        -> MulticastSubject AlertLogs

        SubscribeSubject TrackingTop
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1[0].Area == 0 as Missing,
            Item2 as Timestamp)
        -> DistinctUntilChangedBy(KeySelector=Missing) => #27
        ExternalizedMapping(DueTime(DisplayName=SubjectMissingTimeThreshold)) => #28
        #27, #28 -> GroupWorkflow TimeThreshold
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime) => #1
            #0, #1 -> Throttle(DueTime=PT30M)
            -> WorkflowOutput
        -> Condition SubjectMissing => #30
            WorkflowInput Source1
            -> MemberSelector(Selector=Missing) => #1
            SubscribeSubject BaselinedWeight
            -> Condition StableWeight
                WorkflowInput Source1
                -> MemberSelector(Selector=Confidence) => #1
                ExternalizedMapping(Value(DisplayName=ConfidenceThreshold)) => #2
                #1, #2 -> Equal(Operand=FloatProperty(Value=1))
                -> WorkflowOutput
            -> GroupWorkflow SubjectNotOnScale => #4
                WorkflowInput Source1
                -> MemberSelector(Selector=Value) => #1
                ExternalizedMapping(Value(DisplayName=WeightThreshold)) => #2
                #1, #2 -> LessThanOrEqual(Operand=FloatProperty(Value=10))
                -> WorkflowOutput
            #1, #4 -> WithLatestFrom
            -> LogicalAnd
            -> WorkflowOutput
        SubscribeSubject SubjectState => #31
        #30, #31 -> WithLatestFrom => #32
        -> Format
          Format:
            ## **Subject Missing**
            **Subject**: {0}
          Selector=Item2.Value.Id
        -> MulticastSubject SubjectAlertMessages
        #32 -> Aeon.Acquisition.FormatLogMessage(Format={0}, Selector=Item2.Value.Id, Priority=Alert, Type=SubjectMissing, Timestamp=Item1.Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject BaselinedWeight
        -> GroupWorkflow StableWeightOnset => #38
            WorkflowInput Source1
            -> MemberSelector(Selector=Confidence) => #1
            ExternalizedMapping(Value(DisplayName=ConfidenceThreshold)) => #2
            #1, #2 -> Equal(Operand=FloatProperty(Value=1))
            -> DistinctUntilChanged
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        ExternalizedMapping(SubjectInactiveTimeThreshold) => #39
        #38, #39 -> CreateObservable MonitorInactivity
            SubscribeSubject ActivityArena => #0
            ExternalizedMapping(ActivityThreshold) => #1
            #0, #1 -> GroupWorkflow Inactive
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Value) => #1
                ExternalizedMapping(Value(DisplayName=ActivityThreshold, Description="Below this number the subject is considered to be inactive. (0-255)")) => #2
                #1, #2 -> LessThan(Operand=DoubleProperty(Value=0.2)) => #3
                #3, #0 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                    Item1 as Inactive,
                    Item2.Seconds as Timestamp)
                -> WorkflowOutput
            -> DistinctUntilChangedBy(KeySelector=Inactive) => #3
            ExternalizedMapping(DueTime(DisplayName=SubjectInactiveTimeThreshold)) => #4
            #3, #4 -> GroupWorkflow TimeThreshold
                WorkflowInput Source1 => #0
                ExternalizedMapping(DueTime) => #1
                #0, #1 -> Throttle(DueTime=PT2H)
                -> WorkflowOutput
            -> WorkflowOutput
        -> Switch
        -> Condition SubjectInactive => #42
            WorkflowInput Source1
            -> MemberSelector(Selector=Inactive)
            -> WorkflowOutput
        SubscribeSubject SubjectState => #43
        #42, #43 -> WithLatestFrom => #44
        -> Format
          Format:
            ## **Subject Inactive**
            **Subject**: {0}
          Selector=Item2.Value.Id
        -> MulticastSubject SubjectAlertMessages
        #44 -> Aeon.Acquisition.FormatLogMessage(Format={0}, Selector=Item2.Value.Id, Priority=Alert, Type=SubjectInactive, Timestamp=Item1.Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject PelletMonitor1 => #49
        ExternalizedMapping(Count(DisplayName=DeliveryFailureThreshold)) => #50
        #49, #50 -> Condition DispenserBroken
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
              Expression: Value ? 1 : 0
            ExternalizedMapping(Count) => #2
            #1, #2 -> BufferCount(Count=5, Skip=1)
            -> Add => #4
            #4, #2 -> GroupWorkflow Equal
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Count)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=5)) => #2
                #0 -> Equal(Operand=IntProperty(Value=0)) => #3
                #2, #3 -> Zip
                -> LogicalOr
                -> WorkflowOutput
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #52
        -> Format
          Format:
            ## **Dispenser Broken**
            **Patch**: Patch1
          Selector=""
        -> MulticastSubject SubjectAlertMessages
        #52 -> Aeon.Acquisition.FormatLogMessage(Format=Patch1, Selector="", Priority=Alert, Type=DispenserBroken, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs
        SubscribeSubject PelletMonitor2 => #57
        #57, #50 -> Condition DispenserBroken
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
              Expression: Value ? 1 : 0
            ExternalizedMapping(Count) => #2
            #1, #2 -> BufferCount(Count=5, Skip=1)
            -> Add => #4
            #4, #2 -> GroupWorkflow Equal
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Count)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=5)) => #2
                #0 -> Equal(Operand=IntProperty(Value=0)) => #3
                #2, #3 -> Zip
                -> LogicalOr
                -> WorkflowOutput
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #59
        -> Format
          Format:
            ## **Dispenser Broken**
            **Patch**: Patch2
          Selector=""
        -> MulticastSubject SubjectAlertMessages
        #59 -> Aeon.Acquisition.FormatLogMessage(Format=Patch2, Selector="", Priority=Alert, Type=DispenserBroken, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject MissedPellets1
        -> ElementIndex
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #66
        SubscribeSubject SubjectState => #67
        #66, #67 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #69
          Expression:
            new(
            Item1.Value.Seconds as Timestamp,
            Item1.Index + 1 as Count,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Missed Pellet**
            **Subject**: {0}
            **Patch:**: Patch1
            **Total Missed**: {1}
          Selector="Id,Count"
        -> MulticastSubject SubjectAlertMessages
        #69 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	Patch1	{1}", Selector="Id,Count", Priority=Alert, Type=MissedPellet, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject MissedPellets2
        -> ElementIndex
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #76
        SubscribeSubject SubjectState => #77
        #76, #77 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #79
          Expression:
            new(
            Item1.Value.Seconds as Timestamp,
            Item1.Index + 1 as Count,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Missed Pellet**
            **Subject**: {0}
            **Patch:**: Patch2
            **Total Missed**: {1}
          Selector="Id,Count"
        -> MulticastSubject SubjectAlertMessages
        #79 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	Patch2	{1}", Selector="Id,Count", Priority=Alert, Type=MissedPellet, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject TrackingTop
        -> GroupWorkflow SpeedThreshold
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1[0].Centroid)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Dsp.Norm(NormType=L2) => #3
            ExternalizedMapping(Value(DisplayName=MaxSpeed)) => #4
            #3, #4 -> GreaterThan(Operand=DoubleProperty(Value=500)) => #5
            #0 -> MemberSelector(Selector=Item2) => #6
            #5, #6 -> Zip
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> WorkflowOutput
        -> Condition TrackingUnstable
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #87
        SubscribeSubject SubjectState => #88
        #87, #88 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #90
          Expression:
            new(
            Item1.Item2 as Timestamp,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Tracking Failure**
            **Subject**: {0}
          Selector=Id
        -> MulticastSubject SubjectAlertMessages
        #90 -> Aeon.Acquisition.FormatLogMessage(Format={0}, Selector=Id, Priority=Alert, Type=TrackingFailure, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)

    GroupWorkflow EnvironmentAlerts
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.GroupByTime(ChunkSize=1)
        -> Skip(Count=1)
        -> SelectMany ExperimentSummary => #3
            SubscribeSubject PatchState1
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression:
                new(
                Item1 as Threshold,
                Item2 as D0,
                Item3 as Delta)
            SubscribeSubject PatchState2
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression:
                new(
                Item1 as Threshold,
                Item2 as D0,
                Item3 as Delta)
            SubscribeSubject Patch1Dispenser
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Value) => #8
            SubscribeSubject Patch2Dispenser
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Value) => #11
            #2, #5, #8, #11 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
              Expression:
                new(
                Item1 as PatchState1,
                Item2 as PatchState2,
                Item3 as PatchDispenser1,
                Item4 as PatchDispenser2)
            SubscribeSubject TimeOnPatch2
            -> Take(Count=1) => #15
            SubscribeSubject TimeOnPatch1
            -> Take(Count=1) => #17
            SubscribeSubject TimeSinceLastVisit2
            -> Take(Count=1) => #19
            SubscribeSubject TimeSinceLastVisit1
            -> Take(Count=1) => #21
            #15, #17, #19, #21 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
              Expression:
                new(
                Item1 as TimeOnPatch2,
                Item2 as TimeOnPatch1,
                Item3 as TimeSinceLastVisit2,
                Item4 as TimeSinceLastVisit1)
            SubscribeSubject SubjectState
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Id) => #26
            SubscribeSubject PercentWeightLoss
            -> MemberSelector(Selector="CurrentWeight,CurrentPercent") => #28
            FloatProperty(Value=0)
            -> MemberSelector(Selector="it,it") => #30
            #28, #30 -> Merge
            -> Take(Count=1)
            -> Take(Count=1) => #33
            WorkflowInput Source1
            -> Take(Count=1)
            -> MemberSelector(Selector=Key) => #36
            SubscribeSubject TotalPelletsDelivered1 => #37
            SubscribeSubject TotalPelletsDelivered2 => #38
            SubscribeSubject TotalMissedPellets1 => #39
            SubscribeSubject TotalMissedPellets2 => #40
            #37, #38, #39, #40 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #42
              Expression:
                new(
                Item1 as TotalPelletsDelivered1,
                Item2 as TotalPelletsDelivered2,
                Item3 as TotalMissedPellets1,
                Item4 as TotalMissedPellets2)
            #13, #23, #26, #33, #36, #42 -> Zip
            -> Take(Count=1) => #44
            -> Format => #45
              Format:
                # Arena Status
                **Time**: {0}
                **Subject**: {1}
                **Weight**: {2}
                **Weight Loss**: {3}
              Selector="Item5,Item3,Item4.Item1,Item4.Item2"
            #44 -> Format => #46
              Format:
                # Patch1
                **Pellets**: {0}
                **Threshold**: {1}
                **D0**: {2}
                **Delta**: {3}
                **Time On Patch**: {4}
                **Time Since Last Visit**: {5}
                **Total Pellets Delivered**: {6}
                **Total Missed Pellets**: {7}
              Selector: Item1.PatchDispenser1,Item1.PatchState1.Threshold,Item1.PatchState1.D0,Item1.PatchState1.Delta,Item2.TimeOnPatch1,Item2.TimeSinceLastVisit1,Item6.TotalPelletsDelivered1,Item6.TotalMissedPellets1
            #44 -> Format => #47
              Format:
                # Patch2
                **Pellets**: {0}
                **Threshold**: {1}
                **D0**: {2}
                **Delta**: {3}
                **Time On Patch**: {4}
                **Time Since Last Visit**: {5}
                **Total Pellets Delivered**: {6}
                **Total Missed Pellets**: {7}
              Selector: Item1.PatchDispenser2,Item1.PatchState2.Threshold,Item1.PatchState2.D0,Item1.PatchState2.Delta,Item2.TimeOnPatch2,Item2.TimeSinceLastVisit2,Item6.TotalPelletsDelivered2,Item6.TotalMissedPellets2
            #45, #46, #47 -> Zip
            -> Add
            -> WorkflowOutput
        SubscribeSubject EnvironmentState
        -> Format => #5
          Format:
            ## Arena {0} Mode Change
            Mode: {1}
          Selector="Value.Name,Value.Type"
        SubscribeSubject VideoEvents => #6
        #5, #6 -> SubscribeWhen
        -> DelaySubscription(DueTime=PT2S) => #8
        #3, #8 -> Merge
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\status.config)

        PublishSubject<System.String> EnvironmentAlertMessages
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\alerts.config)

        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.GroupByTime(ChunkSize=1)
        -> Skip(Count=1)
        -> SelectMany LocalFileCount => #16
            SubscribeSubject PathPrefix
            -> Bonsai.IO.GetDirectoryName
            -> PropertyMapping(Path)
            -> Bonsai.IO.GetFiles(Path=D:\ProjectAeon\experiment0.3, SearchPattern=*, SearchOption=AllDirectories)
            -> MemberSelector(Selector=Length) => #4
            WorkflowInput Source1
            -> Merge
            -> Take(Count=1) => #7
            #4, #7 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Count,
                Item2.GetTimestamp() as Timestamp)
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=LocalFileThreshold)) => #17
        #16, #17 -> Condition GreaterThan => #18
            WorkflowInput Source1
            -> MemberSelector(Selector=Count) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> GreaterThan(Operand=IntProperty(Value=500))
            -> WorkflowOutput
        -> Format
          Format:
            ## **File Storage**
            **Total Files in Local Storage**: {0}
          Selector=Count
        -> MulticastSubject EnvironmentAlertMessages
        #18 -> Aeon.Acquisition.FormatLogMessage(Format="", Selector=Count, Priority=Alert, Type=FileStorage, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraTop) => #23
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraWest) => #24
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraEast) => #25
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraNorth) => #26
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraSouth) => #27
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraPatch1) => #28
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraPatch2) => #29
        #23, #24, #25, #26, #27, #28, #29 -> Merge => #30
        -> Format
          Format:
            ## **Frame Dropped**
            **Camera**: {0}
            **Current Frame**: {1}
          Selector="Name,FrameID"
        -> MulticastSubject EnvironmentAlertMessages
        #30 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	{1}", Selector="Name,FrameID", Priority=Alert, Type=DroppedFrames, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject Annotations
        -> Condition Alert
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.Priority)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.PriorityLevel>(Value=Alert))
            -> WorkflowOutput
        -> Format
          Format:
            ## **Experimenter Annotation**
            **Message**: {0}
          Selector=Value.Message
        -> MulticastSubject EnvironmentAlertMessages

ExternalizedMapping(ThresholdPatch1, DeltaPatch1, ThresholdPatch2, DeltaPatch2)
-> GroupWorkflow TaskLogic
    SubscribeSubject WheelPatch1 => #0
    ExternalizedMapping(DistanceThreshold(DisplayName=ThresholdPatch1), Delta(DisplayName=DeltaPatch1)) => #1
    #0, #1 -> IncludeWorkflow
      Path=Extensions\LinearDepletion.bonsai
      DistanceState=DistanceState1
      DistanceThreshold=50
      Delta=0
      DeliveryCount=DeliveryCount1
      PatchState=PatchState1
    -> MulticastSubject DeliverPelletPatch1

    SubscribeSubject WheelPatch2 => #4
    ExternalizedMapping(DistanceThreshold(DisplayName=ThresholdPatch2), Delta(DisplayName=DeltaPatch2)) => #5
    #4, #5 -> IncludeWorkflow
      Path=Extensions\LinearDepletion.bonsai
      DistanceState=DistanceState2
      DistanceThreshold=50
      Delta=0
      DeliveryCount=DeliveryCount2
      PatchState=PatchState2
    -> MulticastSubject DeliverPelletPatch2

GroupWorkflow ControlPanel
    SubscribeSubject SubjectState => #0
    -> Condition Start
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Type)
        -> NotEqual(Operand=WorkflowProperty<Aeon.Acquisition.EnvironmentSubjectChangeType>(Value=Exit))
        -> WorkflowOutput
    -> MulticastSubject SubjectStart
    #0 -> Condition End
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Type)
        -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.EnvironmentSubjectChangeType>(Value=Exit))
        -> WorkflowOutput
    -> MulticastSubject SubjectStop

    Bonsai.Windows.Input.KeyDown(Filter="ShiftKey Space D0 P NumPad0 F1 Shift", SuppressRepetitions=false)
    -> MulticastSubject StartCameras

    Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey Space Prior PageUp D0 D1 A P Q NumPad0 NumPad1 F1 F2 Shift", SuppressRepetitions=false)
    -> MulticastSubject StopCameras

    Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu Space Next PageDown D0 D2 B P R NumPad0 NumPad2 F1 F3 Shift", SuppressRepetitions=false)
    -> GroupWorkflow ManualPellet1
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Aeon.Acquisition:TriggerPellet.bonsai, PatchEvents=Patch1, DeliverPellet=DeliverPelletPatch1)
        -> MulticastSubject ManualPellet1
        -> WorkflowOutput

    Bonsai.Windows.Input.KeyDown
      Filter: LButton RButton Cancel ShiftKey ControlKey Menu Pause Space Prior PageUp Next PageDown End D0 D1 D2 D3 A B C P Q R S NumPad0 NumPad1 NumPad2 NumPad3 F1 F2 F3 F4 Shift
      SuppressRepetitions=false
    -> GroupWorkflow ManualPellet2
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Aeon.Acquisition:TriggerPellet.bonsai, PatchEvents=Patch2, DeliverPellet=DeliverPelletPatch2)
        -> MulticastSubject ManualPellet2
        -> WorkflowOutput

    SubscribeSubject PatchState1
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item2 as D1,
        Item3 as Delta)
    -> Aeon.Acquisition.LabelControl(FontSize=14)
    -> GroupWorkflow Patch1
        WorkflowInput Source1
        -> WorkflowOutput

    SubscribeSubject PatchState2
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item2 as D1,
        Item3 as Delta)
    -> Aeon.Acquisition.LabelControl(FontSize=14)
    -> GroupWorkflow Patch2
        WorkflowInput Source1
        -> WorkflowOutput

    SubscribeSubject AudioAmbient
    -> MemberSelector(Selector=Value)

    Disable SubscribeSubject SubjectStop
    -> Disable Aeon.Acquisition.SubjectLogBitmap(Path=SessionSummary)

    GroupWorkflow WeightActivity
        SubscribeSubject WeightNestMonitor
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(ValueSelector="Stable,Raw,Baseline", SymbolType=None, LineWidth=1, Capacity=200, Min=nil, Max=nil)
        -> GroupWorkflow WeightMonitor
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #3
        SubscribeSubject SubjectWeight
        -> GroupWorkflow SubjectWeight
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> VisualizerMapping => #6
        SubscribeSubject PercentWeightLoss
        -> MemberSelector(Selector=CurrentPercent)
        -> VisualizerMapping => #9
        #3, #6, #9 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder WeightActivity
          ColumnCount=2
          RowCount=2
          ColumnStyles=""
          RowStyles=""
          CellSpans(CellSpan(ColumnSpan=2, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
        -> WorkflowOutput

    GroupWorkflow PatchActivity
        SubscribeSubject CameraPatch1
        -> SampleInterval(Interval=PT0.02S)
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping => #3
        SubscribeSubject CameraPatch2
        -> SampleInterval(Interval=PT0.02S)
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping => #7
        SubscribeSubject PatchState => #8
        -> VisualizerMapping => #9
        #8 -> VisualizerMapping => #10
        SubscribeSubject CurrentThresholdPatch1
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=PelletCount, ValueSelector=Threshold, SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow ThresholdPatch1
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #14
        SubscribeSubject CurrentThresholdPatch2
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=PelletCount, ValueSelector=Threshold, SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow ThresholdPatch2
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #18
        SubscribeSubject PelletMonitorValue1
        -> VisualizerMapping => #20
        SubscribeSubject PelletMonitorValue2
        -> VisualizerMapping => #22
        #3, #7, #9, #10, #14, #18, #20, #22 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchActivity
          ColumnCount=2
          RowCount=4
          ColumnStyles=""
          RowStyles=""
          CellSpans
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
        -> VisualizerMapping => #24
        Aeon.Acquisition.ExperimentProperties
        -> VisualizerMapping => #26
        SubscribeSubject TimeSpentOnPatches
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="Patch1,Patch2", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TimeSpentOnPatches
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #30
        SubscribeSubject TimeSinceLastVisit
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="Patch1,Patch2", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TimeSinceLastVisit
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #34
        SubscribeSubject TotalDistanceTravelled
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="Patch1,Patch2", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TotalDistanceTravelled
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #38
        #26, #30, #34, #38 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchStatistics(ColumnCount=1, RowCount=4, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #40
        #24, #40 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchActivity(ColumnCount=2, RowCount=1, ColumnStyles(ColumnStyle(SizeType=Percent, Width=70), ColumnStyle(SizeType=Percent, Width=30)), RowStyles="", CellSpans="")
        -> WorkflowOutput

    GroupWorkflow SubjectActivity
        SubscribeSubject Heatmap
        -> VisualizerMapping => #1
        SubscribeSubject Trajectory
        -> VisualizerMapping
        -> SubscribeSubject FrameTrajectory
        -> VisualizerMapping => #5
        #1, #5 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder SubjectActivity(ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput

    GroupWorkflow ExperimentMetadata
        Aeon.Acquisition.TareWeight => #0
        -> MulticastSubject TareWeightNest
        SubscribeSubject PelletDeliveredPatch1
        -> Condition RisingEdge
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> IntProperty(Value=1) => #4
        SubscribeSubject Patch1 => #5
        #4, #5 -> Aeon.Acquisition.DispenserState(Name=Patch1)
        -> MulticastSubject Patch1Dispenser
        -> VisualizerMapping => #8
        SubscribeSubject PelletDeliveredPatch2
        -> Condition RisingEdge
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> IntProperty(Value=1) => #11
        SubscribeSubject Patch2 => #12
        #11, #12 -> Aeon.Acquisition.DispenserState(Name=Patch2)
        -> MulticastSubject Patch2Dispenser
        -> VisualizerMapping => #15
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.AnnotationSource
        -> MulticastSubject Annotations
        -> VisualizerMapping => #19
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.EnvironmentState
        -> MulticastSubject EnvironmentState
        -> VisualizerMapping => #23
        #0 -> VisualizerMapping => #24
        #8, #15, #19, #23, #24 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder ExperimentMetadata
          ColumnCount=2
          RowCount=4
          ColumnStyles=""
          RowStyles=""
          CellSpans
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
        -> WorkflowOutput

        SubscribeSubject Patch1Dispenser
        -> Skip(Count=1)
        -> Condition Reset
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.DispenserEventType>(Value=Reset))
            -> WorkflowOutput
        -> MulticastSubject ResetFeederPatch1

        SubscribeSubject Patch2Dispenser
        -> Skip(Count=1)
        -> Condition Reset
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.DispenserEventType>(Value=Reset))
            -> WorkflowOutput
        -> MulticastSubject ResetFeederPatch2

    GroupWorkflow EnvironmentSubjectState
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.EnvironmentSubjectState(DatabasePath=Z:\aeon\colony\colony.csv)
        -> MulticastSubject SubjectState
        -> WorkflowOutput
