<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0-rc3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TimeToMiss" />
        <Property Name="DistanceToMiss" />
        <Property Name="TimeInChute" />
        <Property Name="WheelDisplacement" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="PelletDelivered" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PelletDelivered</Name>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>PelletMissed</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="TimeToMiss" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT1S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="DistanceToMiss" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="TimeInChute" />
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="WheelDisplacement" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>WheelDisplacement</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:DistanceTravelled.bonsai">
              <Gain>1</Gain>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DelaySubscription">
                <rx:DueTime>PT0S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ByteProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="aeon:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="9" Label="Source2" />
            <Edge From="2" To="11" Label="Source2" />
            <Edge From="3" To="10" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="14" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Switch" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="3" Label="Source2" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>