<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:PatchController.bonsai">
              <PortName>COM4</PortName>
              <WheelPosition>WheelPosition</WheelPosition>
              <PelletDelivered>PelletDelivered</PelletDelivered>
              <DeliverPellet>DeliverPellet</DeliverPellet>
              <PatchEvents>PatchEvents</PatchEvents>
              <Radius>4</Radius>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:VideoController.bonsai">
              <PortName>COM3</PortName>
              <GlobalTriggerFrequency>50</GlobalTriggerFrequency>
              <LocalTriggerFrequency>125</LocalTriggerFrequency>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:VideoSource.bonsai">
              <SerialNumber>21053810</SerialNumber>
              <Gain>4</Gain>
              <TriggerSource>GlobalTrigger</TriggerSource>
              <FrameEvents>FrameTop</FrameEvents>
              <TriggerFrequency>GlobalTriggerFrequency</TriggerFrequency>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:VideoSource.bonsai">
              <SerialNumber>21053811</SerialNumber>
              <Gain>10</Gain>
              <TriggerSource>LocalTrigger</TriggerSource>
              <FrameEvents>FrameSide</FrameEvents>
              <TriggerFrequency>LocalTriggerFrequency</TriggerFrequency>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:AudioSource.bonsai">
              <DeviceName xsi:nil="true" />
              <SampleRate>192000</SampleRate>
              <Name>AudioAmbient</Name>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogController.bonsai">
              <Path>data</Path>
              <BinSize>3</BinSize>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PatchEvents</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogHarpState.bonsai">
              <LogName>PatchEvents</LogName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoEvents</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogHarpState.bonsai">
              <LogName>VideoEvents</LogName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FrameTop</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogVideo.bonsai">
              <LogName>FrameTop</LogName>
              <FrameRate>50</FrameRate>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FrameSide</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogVideo.bonsai">
              <LogName>VideoData</LogName>
              <FrameRate>125</FrameRate>
            </Expression>
            <Expression xsi:type="BehaviorSubject" TypeArguments="sys:Double">
              <Name>WheelThreshold</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PatchEvents</Name>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>Timestamp</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
              <LogName>WheelThreshold</LogName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>AudioAmbient</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogAudio.bonsai">
              <LogName>AudioAmbient</LogName>
              <SampleRate>192000</SampleRate>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="12" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PatchEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:SubjectLog" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
        <LogName>SessionData</LogName>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Start</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Event</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p1:EventType">
                <Value>Start</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>SubjectStart</Name>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>End</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Event</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p1:EventType">
                <Value>End</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>SubjectStop</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>ShiftKey Space D0 P NumPad0 F1 Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StartCameras</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton ShiftKey ControlKey Space Prior PageUp D0 D1 A P Q NumPad0 NumPad1 F1 F2 Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StopCameras</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>RButton ShiftKey Menu Space Next PageDown D0 D2 B P R NumPad0 NumPad2 F1 F3 Shift</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>DeliverPellet</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>WheelPosition</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>RelativeWheelPosition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LinearDepletion</Name>
        <Description>The patch is depleted using a linear depletion function.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Offset</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Delta" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Threshold</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="MulticastSubject">
              <Name>WheelThreshold</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="DoubleProperty">
                <Value>25</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>DeliverPellet</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Sink">
              <Name>UpdateOffset</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Delta" Description="The depletion factor for this patch." />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Offset</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="DoubleProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Offset</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source2" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="DistanceThreshold" Description="The distance required to obtain the first pellet." />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>25</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Threshold</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Offset</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="8" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="13" Label="Source2" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SubjectStart</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SubjectStop</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FrameSide</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FrameTop</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>WheelPosition</Name>
      </Expression>
      <Expression xsi:type="viz:TableLayoutPanelBuilder">
        <viz:ColumnCount>2</viz:ColumnCount>
        <viz:RowCount>2</viz:RowCount>
        <viz:ColumnStyles />
        <viz:RowStyles />
        <viz:CellSpans />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>AudioAmbient</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="7" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="20" Label="Source1" />
      <Edge From="18" To="21" Label="Source2" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>