<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateMessage">
          <harp:MessageType>Write</harp:MessageType>
          <harp:Address>35</harp:Address>
          <harp:PayloadType>U8</harp:PayloadType>
          <harp:Payload>0</harp:Payload>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="RfidEvents" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SynchronizerEvents</Name>
      </Expression>
      <Expression xsi:type="harp:DeviceEvent">
        <harp:Event xsi:type="harp:Heartbeat" />
      </Expression>
      <Expression xsi:type="harp:DeviceCommand">
        <harp:Command xsi:type="harp:SetTimestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM8</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>RfidEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:Address>32</harp:Address>
          <harp:MessageType>Event</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:Address>33</harp:Address>
          <harp:MessageType>Event</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Type>TimestampedU64</harp:Type>
        <harp:IsArray>false</harp:IsArray>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="7" Label="Source1" />
      <Edge From="2" To="8" Label="Source2" />
      <Edge From="3" To="9" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>