<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0-alpha018"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:CameraController.bonsai">
        <PortName>COM6</PortName>
        <GlobalTriggerFrequency>50</GlobalTriggerFrequency>
        <LocalTriggerFrequency>125</LocalTriggerFrequency>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:SpinnakerVideoSource.bonsai">
        <TriggerSource>GlobalTrigger</TriggerSource>
        <TriggerFrequency>GlobalTriggerFrequency</TriggerFrequency>
        <SerialNumber>23101736</SerialNumber>
        <Gain>0</Gain>
        <Binning>1</Binning>
        <FrameEvents>FrameEvents</FrameEvents>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TopView</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>169</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>300000</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:DrawContours">
          <cv:MaxLevel>1</cv:MaxLevel>
          <cv:Thickness>-1</cv:Thickness>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>NestMask</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Regions" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:MaskPolygon">
                <cv:Regions>
                  <cv:ArrayOfPoint>
                    <cv:Point>
                      <cv:X>78</cv:X>
                      <cv:Y>488</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>193</cv:X>
                      <cv:Y>486</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>195</cv:X>
                      <cv:Y>446</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>247</cv:X>
                      <cv:Y>481</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>248</cv:X>
                      <cv:Y>595</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>192</cv:X>
                      <cv:Y>632</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>193</cv:X>
                      <cv:Y>586</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>80</cv:X>
                      <cv:Y>593</cv:Y>
                    </cv:Point>
                  </cv:ArrayOfPoint>
                  <cv:ArrayOfPoint>
                    <cv:Point>
                      <cv:X>1353</cv:X>
                      <cv:Y>480</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>1244</cv:X>
                      <cv:Y>480</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>1242</cv:X>
                      <cv:Y>443</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>1188</cv:X>
                      <cv:Y>477</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>1187</cv:X>
                      <cv:Y>588</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>1243</cv:X>
                      <cv:Y>623</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>1246</cv:X>
                      <cv:Y>581</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>1353</cv:X>
                      <cv:Y>580</cv:Y>
                    </cv:Point>
                  </cv:ArrayOfPoint>
                </cv:Regions>
                <cv:MaskType>Binary</cv:MaskType>
                <cv:FillValue>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>0</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:FillValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="BitwiseOr" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>ActiveMask</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>None</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:SaveImage">
          <cv:FileName>mask.png</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Centroid" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:WriteLine" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>72</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ActiveMask</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SegmentationResult</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseAnd" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Patch1Wheel</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Regions" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:MaskPolygon">
                <cv:Regions>
                  <cv:ArrayOfPoint>
                    <cv:Point>
                      <cv:X>869</cv:X>
                      <cv:Y>210</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>886</cv:X>
                      <cv:Y>221</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>877</cv:X>
                      <cv:Y>238</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>860</cv:X>
                      <cv:Y>223</cv:Y>
                    </cv:Point>
                  </cv:ArrayOfPoint>
                </cv:Regions>
                <cv:MaskType>Binary</cv:MaskType>
                <cv:FillValue>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>0</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:FillValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Patch2Wheel</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Regions" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:MaskPolygon">
                <cv:Regions>
                  <cv:ArrayOfPoint>
                    <cv:Point>
                      <cv:X>858</cv:X>
                      <cv:Y>866</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>875</cv:X>
                      <cv:Y>856</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>880</cv:X>
                      <cv:Y>874</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>864</cv:X>
                      <cv:Y>883</cv:Y>
                    </cv:Point>
                  </cv:ArrayOfPoint>
                </cv:Regions>
                <cv:MaskType>Binary</cv:MaskType>
                <cv:FillValue>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>0</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:FillValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:RangeThreshold">
          <cv:Lower>
            <cv:Val0>213.48837209302326</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>255</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>255</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea xsi:nil="true" />
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:DrawContours">
          <cv:MaxLevel>1</cv:MaxLevel>
          <cv:Thickness>-1</cv:Thickness>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>MajorAxisLength</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:RangeThreshold">
          <cv:Lower>
            <cv:Val0>171.97674418604652</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>213.48837209302326</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>255</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>Tree</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>5000</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:DrawContours">
          <cv:MaxLevel>2</cv:MaxLevel>
          <cv:Thickness>-1</cv:Thickness>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:DrawContours">
          <cv:MaxLevel>1</cv:MaxLevel>
          <cv:Thickness>-1</cv:Thickness>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>MajorAxisLength</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="RegionOfInterest" DisplayName="CropNorth" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>697</cv:X>
            <cv:Y>0</cv:Y>
            <cv:Width>741</cv:Width>
            <cv:Height>1080</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="RegionOfInterest" DisplayName="CropSouth" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
            <cv:Width>687</cv:Width>
            <cv:Height>1080</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT1S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StartCameras</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="7" Label="Source1" />
      <Edge From="2" To="19" Label="Source1" />
      <Edge From="2" To="23" Label="Source1" />
      <Edge From="2" To="24" Label="Source1" />
      <Edge From="2" To="25" Label="Source1" />
      <Edge From="2" To="30" Label="Source1" />
      <Edge From="2" To="37" Label="Source1" />
      <Edge From="2" To="39" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="14" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="11" To="17" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="31" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="36" To="37" Label="Source2" />
      <Edge From="38" To="39" Label="Source2" />
      <Edge From="40" To="41" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>