WorkflowBuilder(Version=2.8.2)
GroupWorkflow Metadata
    GroupWorkflow Devices
        GroupWorkflow ClockSynchronizer
            ExternalizedMapping(PortName)
            -> IncludeWorkflow(Path=Aeon.Acquisition:ClockSynchronizer.bonsai, PortName=COM5)
            -> WorkflowOutput

        GroupWorkflow VideoController
            ExternalizedMapping(PortName, GlobalTriggerFrequency, LocalTriggerFrequency)
            -> GroupWorkflow CameraController(Description="Supplies synchronized camera triggering for both global and local views.")
                SubscribeSubject GlobalTriggerFrequency
                -> PropertyMapping(Frequency)
                -> GroupWorkflow ConfigurePwm => #2
                    Harp.CameraControllerGen2.CreateMessage(MessageType=Write, Payload=Harp.CameraControllerGen2.CreateConfigureCam0EventPayload(ConfigureCam0Event=EventOnTrigger)) => #0
                    ExternalizedMapping(Value(DisplayName=Frequency))
                    -> IntProperty(Value=50)
                    -> Take(Count=1)
                    -> Harp.CameraControllerGen2.Format(MessageType=Write, Register=Harp.CameraControllerGen2.TriggerFrequencyCam0) => #4
                    #0, #4 -> Merge
                    -> WorkflowOutput
                SubscribeSubject LocalTriggerFrequency
                -> PropertyMapping(Frequency)
                -> GroupWorkflow ConfigurePwm => #5
                    Harp.CameraControllerGen2.CreateMessage(MessageType=Write, Payload=Harp.CameraControllerGen2.CreateConfigureCam1EventPayload(ConfigureCam1Event=EventOnTrigger)) => #0
                    ExternalizedMapping(Value(DisplayName=Frequency))
                    -> IntProperty(Value=125)
                    -> Take(Count=1)
                    -> Harp.CameraControllerGen2.Format(MessageType=Write, Register=Harp.CameraControllerGen2.TriggerFrequencyCam1) => #4
                    #0, #4 -> Merge
                    -> WorkflowOutput
                BehaviorSubject<System.Object> StartCameras
                -> Harp.CameraControllerGen2.CreateMessage(MessageType=Write, Payload=Harp.CameraControllerGen2.CreateStartAndStopPayload(StartAndStop="StartCam0 StartCam1")) => #7
                BehaviorSubject<System.Object> StopCameras
                -> Harp.CameraControllerGen2.CreateMessage(MessageType=Write, Payload=Harp.CameraControllerGen2.CreateStartAndStopPayload(StartAndStop="StopCam0 StopCam1")) => #9
                PublishSubject<System.Object> SynchPulse
                -> Harp.CameraControllerGen2.CreateMessage(MessageType=Write, Payload=Harp.CameraControllerGen2.CreateOutputSetPayload(OutputSet=DO0)) => #11
                ExternalizedMapping(DueTime) => #12
                #11, #12 -> Delay(DueTime=PT0.1S)
                -> Harp.CameraControllerGen2.CreateMessage(MessageType=Write, Payload=Harp.CameraControllerGen2.CreateOutputClearPayload(OutputClear=DO0)) => #14
                #2, #5, #7, #9, #11, #14 -> Merge => #15
                ExternalizedMapping(PortName) => #16
                #15, #16 -> Harp.CameraControllerGen2.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM6)
                -> PublishSubject VideoEvents => #18
                -> WorkflowOutput
                #18 -> Harp.CameraControllerGen2.Parse(Register=Harp.CameraControllerGen2.TimestampedCam0Event)
                -> Condition TriggerEvent
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value)
                    -> HasFlag(Operand=WorkflowProperty<Harp.CameraControllerGen2.CameraEvents>(Value=Trigger))
                    -> WorkflowOutput
                -> PublishSubject GlobalTrigger
                #18 -> Harp.CameraControllerGen2.Parse(Register=Harp.CameraControllerGen2.TimestampedCam1Event)
                -> Condition TriggerEvent
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value)
                    -> HasFlag(Operand=WorkflowProperty<Harp.CameraControllerGen2.CameraEvents>(Value=Trigger))
                    -> WorkflowOutput
                -> PublishSubject LocalTrigger
                #18 -> Harp.CameraControllerGen2.Parse(Register=Harp.CameraControllerGen2.OutputSet)
                #18 -> Harp.CameraControllerGen2.Parse(Register=Harp.CameraControllerGen2.InputState)

                ExternalizedMapping(Value(DisplayName=GlobalTriggerFrequency, Description="The frequency at which to trigger global cameras."))
                -> DoubleProperty(Value=50)
                -> Take(Count=1)
                -> BehaviorSubject GlobalTriggerFrequency

                ExternalizedMapping(Value(DisplayName=LocalTriggerFrequency, Description="The frequency at which to trigger the fast local cameras."))
                -> DoubleProperty(Value=125)
                -> Take(Count=1)
                -> BehaviorSubject LocalTriggerFrequency

                ExternalizedMapping(Lower(DisplayName=LowerSincPulse), Upper(DisplayName=UpperSincPulse))
                -> GroupWorkflow SynchPulse
                    ExternalizedMapping(Lower, Upper)
                    -> Defer InterPulseInterval
                        ExternalizedMapping(Lower, Upper)
                        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=8, Upper=16)
                        -> Bonsai.Numerics.Distributions.Sample
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: TimeSpan.FromSeconds(it)
                        -> PropertyMapping(DueTime)
                        -> Timer(DueTime=PT11.534S, Period=PT0S)
                        -> WorkflowOutput
                    -> Repeat
                    -> MulticastSubject SynchPulse
                    -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow CameraTop
            ExternalizedMapping(SerialNumber, Gain, Binning, ExposureTime, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=5000
              SerialNumber=23106245
              Gain=0
              Binning=1
              FrameEvents=CameraTop
            -> WorkflowOutput

        GroupWorkflow CameraPatch1
            ExternalizedMapping(SerialNumber, Gain, Binning, ExposureTime, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              ExposureTime=3000
              SerialNumber=23101737
              Gain=0
              Binning=2
              FrameEvents=CameraPatch1
            -> WorkflowOutput

        GroupWorkflow CameraPatch2
            ExternalizedMapping(SerialNumber, Gain, Binning, ExposureTime, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              ExposureTime=3000
              SerialNumber=23032823
              Gain=0
              Binning=2
              FrameEvents=CameraPatch2
            -> WorkflowOutput

        GroupWorkflow AudioAmbient
            ExternalizedMapping(DeviceName, SampleRate, Name)
            -> IncludeWorkflow AudioAmbient(Path=Aeon.Acquisition:AudioSource.bonsai, DeviceName="Microphone (UltraMic 192K 16 bi", SampleRate=192000)
            -> WorkflowOutput

        GroupWorkflow Patch1
            ExternalizedMapping(PortName, WheelDisplacement, PelletDelivered, DeliverPellet, PatchEvents, Radius, SampleRate, ResetFeeder, DueTime, Count)
            -> IncludeWorkflow
              Path=Aeon.Foraging:UndergroundFeeder.bonsai
              PatchEvents=Patch1
              SampleRate=SampleRate500Hz
              DeliverPellet=DeliverPelletPatch1
              PelletDelivered=PelletDeliveredPatch1
              DueTime=PT1S
              Count=2
              ResetFeeder=ResetFeederPatch1
              PortName=COM3
              Radius=-4
              WheelDisplacement=WheelPatch1
            -> WorkflowOutput

        GroupWorkflow Patch2
            ExternalizedMapping(PortName, WheelDisplacement, PelletDelivered, DeliverPellet, PatchEvents, Radius, SampleRate, ResetFeeder, DueTime, Count)
            -> IncludeWorkflow
              Path=Aeon.Foraging:UndergroundFeeder.bonsai
              PatchEvents=Patch2
              SampleRate=SampleRate500Hz
              DeliverPellet=DeliverPelletPatch2
              PelletDelivered=PelletDeliveredPatch2
              DueTime=PT1S
              Count=2
              ResetFeeder=ResetFeederPatch2
              PortName=COM4
              Radius=-4
              WheelDisplacement=WheelPatch2
            -> WorkflowOutput

    GroupWorkflow TrackingTop
        ExternalizedMapping(Name(DisplayName=FrameEvents))
        -> SubscribeSubject CameraTop => #1
        ExternalizedMapping(Mask, ThresholdValue, TrackingEvents) => #2
        #1, #2 -> IncludeWorkflow
          Path=Aeon.Acquisition:PositionTracking.bonsai
          ThresholdValue=83
          Mask=Config\ArenaMask-AEON4_2025-01-08.png
          TrackingCount=1
          TrackingEvents=TrackingTop
        -> WorkflowOutput

    GroupWorkflow ActivityCenter
        SubscribeSubject CameraTop
        -> IncludeWorkflow
          Path=Aeon.Acquisition:ActivityTracking.bonsai
          Regions(ArrayOfPoint(Point(X=76, Y=431), Point(X=404, Y=431), Point(X=404, Y=665), Point(X=76, Y=665)))
          ThresholdValue=10
          TrackingEvents=ActivityCenter
        -> WorkflowOutput

    GroupWorkflow ActivityArena
        SubscribeSubject CameraTop
        -> IncludeWorkflow(Path=Aeon.Acquisition:ActivityTracking.bonsai, Regions=nil, ThresholdValue=10, TrackingEvents=ActivityArena)
        -> WorkflowOutput

    GroupWorkflow ActiveRegion
        ExternalizedMapping(NestRegion, Patch1Region, Patch2Region, ArenaCenter, ArenaInnerRadius, ArenaOuterRadius)
        -> IncludeWorkflow
          Path=Extensions\ActiveRegion.bonsai
          NestRegion(ArrayOfPoint(Point(X=1332, Y=482), Point(X=1242, Y=481), Point(X=1245, Y=586), Point(X=1334, Y=579)))
          Patch1Region(ArrayOfPoint(Point(X=904, Y=167), Point(X=925, Y=181), Point(X=910, Y=215), Point(X=888, Y=201)))
          Patch2Region(ArrayOfPoint(Point(X=802, Y=875), Point(X=924, Y=861), Point(X=939, Y=894), Point(X=920, Y=904)))
          ArenaCenter(X=661, Y=557)
          ArenaInnerRadius=474
          ArenaOuterRadius=494
        -> WorkflowOutput

GroupWorkflow Declarations
    BehaviorSubject<Aeon.Environment.WeightMeasurement> FilteredWeightNest
    BehaviorSubject<Aeon.Environment.WeightMeasurement> SubjectWeight
    PublishSubject<Bonsai.Harp.Timestamped(System.Byte)> MissedPellets1
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> PatchState1
    PublishSubject<Bonsai.Harp.Timestamped(System.Byte)> MissedPellets2
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> PatchState2
    PublishSubject<Bonsai.Harp.Timestamped(System.Double)> BaselineTrigger
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.LogMessage)> AlertLogs
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.LogMessage)> Annotations
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Environment.EnvironmentStateMetadata)> EnvironmentState
    Aeon.Acquisition.StateRecoverySubject<Aeon.Foraging.DispenserState> Patch2Dispenser
    Aeon.Acquisition.StateRecoverySubject<Aeon.Foraging.DispenserState> Patch1Dispenser
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Environment.EnvironmentSubjectStateMetadata)> SubjectState
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Environment.EnvironmentSubjectStateMetadata)> SubjectStart
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Environment.EnvironmentSubjectStateMetadata)> SubjectStop
    PublishSubject<Bonsai.Harp.Timestamped(Harp.OutputExpander.DigitalOutputs)> ManualPellet1
    PublishSubject<Bonsai.Harp.Timestamped(Harp.OutputExpander.DigitalOutputs)> ManualPellet2
    PublishSubject<System.String> SubjectAlertMessages

GroupWorkflow Logging
    IncludeWorkflow(Path=Aeon.Acquisition:RepositoryLogController.bonsai, RepositoryPath=..\..\, DataPath=D:\ProjectPhields, FallbackPath=D:\Tests, ChunkSize=1)
    IncludeWorkflow(Path=Aeon.Acquisition:ExportMetadata.bonsai, WorkflowName=Phields-Presocial-AEON4.bonsai)

    SubscribeSubject SynchronizerEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=ClockSynchronizer, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject VideoEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=VideoController, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject CameraTop
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraTop, FrameRate=50)

    SubscribeSubject TrackingTop
    -> Aeon.Acquisition.FormatBinaryRegions => #9
    GroupWorkflow RegionTracking
        SubscribeSubject InPatch2
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
          Expression: Value ? 5 : 0
        SubscribeSubject InPatch1
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
          Expression: Value ? 4 : 0
        SubscribeSubject InArena
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
          Expression: Value ? 3 : 0
        SubscribeSubject InCorridor
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
          Expression: Value ? 2 : 0
        SubscribeSubject InNest => #8
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #9
          Expression: Value ? 1 : 0
        #1, #3, #5, #7, #9 -> Zip
        -> Bonsai.Numerics.Max => #11
        #8 -> MemberSelector(Selector=Seconds) => #12
        #11, #12 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #11
    #9, #11 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=CameraTop, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject CameraPatch1
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraPatch1, FrameRate=125)

    SubscribeSubject CameraPatch2
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraPatch2, FrameRate=125)

    SubscribeSubject Patch1 => #18
    SubscribeSubject Patch1Dispenser
    -> IncludeWorkflow Patch1(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> Aeon.Foraging.FormatDispenserState(Address=200) => #21
    SubscribeSubject ManualPellet1
    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #23
    SubscribeSubject MissedPellets1
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=202, PayloadType=TimestampedU8)) => #25
    #18, #21, #23, #25 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Patch1, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject PatchState1
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #29
      Expression:
        new(
        Item1 as Threshold,
        Item2 as D1,
        Item3 as Delta)
    SubscribeSubject Patch1
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #31
    #29, #31 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=Patch1_State, Selector=nil)

    SubscribeSubject Patch2 => #34
    SubscribeSubject Patch2Dispenser
    -> IncludeWorkflow Patch2(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> Aeon.Foraging.FormatDispenserState(Address=200) => #37
    SubscribeSubject ManualPellet2
    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #39
    SubscribeSubject MissedPellets2
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=202, PayloadType=TimestampedU8)) => #41
    #34, #37, #39, #41 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Patch2, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject PatchState2
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #45
      Expression:
        new(
        Item1 as Threshold,
        Item2 as D1,
        Item3 as Delta)
    SubscribeSubject Patch2
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #47
    #45, #47 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=Patch2_State, Selector=nil)

    SubscribeSubject AudioAmbient
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogAudio.bonsai, Heartbeats="", ClosingDuration=nil, LogName=AudioAmbient, SampleRate=192000)

    SubscribeSubject SubjectState
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=""
      ClosingDuration=nil
      LogName=ExperimentalMetadata_SubjectState
      Selector="Seconds,Value.Id,Value.Weight,Value.Type"

    SubscribeSubject AlertLogs => #54
    SubscribeSubject Annotations => #55
    #54, #55 -> Merge
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=""
      ClosingDuration=nil
      LogName=ExperimentalMetadata_MessageLog
      Selector="Seconds,Value.Priority,Value.Type,Value.Message"

    SubscribeSubject EnvironmentState
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=ExperimentalMetadata_EnvironmentState, Selector="Seconds,Value.Type")

    SubscribeSubject SubjectState
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #61
      Expression:
        new(
        Seconds as Seconds,
        new(Value.Id as Id,
            Value.Type.ToString() as Event,
            "Environment" as Value) as Value)
    SubscribeSubject InPatch1
    -> IncludeWorkflow Patch1(Path=Extensions\FormatRegionVisits.bonsai) => #63
    SubscribeSubject InPatch2
    -> IncludeWorkflow Patch2(Path=Extensions\FormatRegionVisits.bonsai) => #65
    SubscribeSubject InArena
    -> IncludeWorkflow Arena(Path=Extensions\FormatRegionVisits.bonsai) => #67
    SubscribeSubject InCorridor
    -> IncludeWorkflow Corridor(Path=Extensions\FormatRegionVisits.bonsai) => #69
    SubscribeSubject InNest
    -> IncludeWorkflow Nest(Path=Extensions\FormatRegionVisits.bonsai) => #71
    #61, #63, #65, #67, #69, #71 -> Merge
    -> MemberSelector(Selector="Value,Seconds")
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=""
      ClosingDuration=nil
      LogName=ExperimentalMetadata_SubjectVisits
      Selector="Seconds,Value.Id,Value.Event,Value.Value"

    Timer(DueTime=PT0S, Period=PT0.1S)
    -> Aeon.Acquisition.AvailableMemory => #76
    SubscribeSubject GlobalTrigger
    -> MemberSelector(Selector=Seconds) => #78
    #76, #78 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=System_AvailableMemory, Selector=nil)

GroupWorkflow Visualization
    SubscribeSubject TrackingTop
    -> MemberSelector(Selector=Value[0].Centroid)
    -> PublishSubject Trajectory

    SubscribeSubject CameraTop
    -> MemberSelector(Selector=Value.Image)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject FrameTrajectory

    SubscribeSubject TrackingTop
    -> MemberSelector(Selector=Value[0].Centroid)
    -> Bonsai.Dsp.Histogram2D(MinX=0, MaxX=1440, MinY=0, MaxY=1080, BinsX=288, BinsY=216, Normalize=false, Accumulate=true)
    -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=20, Shift=0)
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject Heatmap

    SubscribeSubject DistanceState1 => #14
    SubscribeSubject DistanceState2 => #15
    SubscribeSubject PatchState1
    -> MemberSelector(Selector=Item1) => #17
    SubscribeSubject PatchState2
    -> MemberSelector(Selector=Item1) => #19
    #14, #15, #17, #19 -> CombineLatest => #20
    #20, #14 -> Sample
    -> Bonsai.Dsp.Buffer(Count=15, Skip=nil)
    -> PublishSubject PatchState

    SubscribeSubject PatchState1
    -> GroupWorkflow ToArray => #25
        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> IgnoreElements
        -> ToArray => #3
        WorkflowInput Source1
        -> SelectMany
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> ToArray
            -> WorkflowOutput
        -> DelaySubscription(DueTime=PT0.1S) => #6
        #3, #6 -> Concat
        -> WorkflowOutput
    SubscribeSubject DeliveryCount1 => #26
    #25, #26 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        int32(Item2) as PelletCount,
        Item1 as Threshold)
    -> PublishSubject CurrentThresholdPatch1

    SubscribeSubject PatchState2
    -> GroupWorkflow ToArray => #32
        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> IgnoreElements
        -> ToArray => #3
        WorkflowInput Source1
        -> SelectMany
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> ToArray
            -> WorkflowOutput
        -> DelaySubscription(DueTime=PT0.1S) => #6
        #3, #6 -> Concat
        -> WorkflowOutput
    SubscribeSubject DeliveryCount2 => #33
    #32, #33 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        int32(Item2) as PelletCount,
        Item1 as Threshold)
    -> PublishSubject CurrentThresholdPatch2

    IncludeWorkflow(Path=Aeon.Foraging:PelletMonitor.bonsai, PelletCommand=Patch1, PelletDelivered=PelletDeliveredPatch1)
    -> PublishSubject PelletMonitor1
    -> MemberSelector(Selector=Value)
    -> PublishSubject PelletMonitorValue1

    IncludeWorkflow(Path=Aeon.Foraging:PelletMonitor.bonsai, PelletCommand=Patch2, PelletDelivered=PelletDeliveredPatch2)
    -> BehaviorSubject PelletMonitor2
    -> MemberSelector(Selector=Value)
    -> PublishSubject PelletMonitorValue2

    SubscribeSubject TimeOnPatch1 => #46
    SubscribeSubject TimeOnPatch2 => #47
    #46, #47 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Time Spent on Patch (s)" as Id,
        Item1 as Patch1,
        Item2 as Patch2)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TimeSpentOnPatches

    SubscribeSubject TimeSinceLastVisit1 => #52
    SubscribeSubject TimeSinceLastVisit2 => #53
    #52, #53 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Time Since Last Visit (s)" as Id,
        Item1 as Patch1,
        Item2 as Patch2)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TimeSinceLastVisit

    SubscribeSubject WheelPatch1
    -> MemberSelector(Selector=Value)
    -> Accumulate => #60
    SubscribeSubject WheelPatch2
    -> MemberSelector(Selector=Value)
    -> Accumulate => #63
    #60, #63 -> CombineLatest
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Total Distance Travelled (cm)" as Id,
        Item1 as Patch1,
        Item2 as Patch2)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TotalDistanceTravelled

    IncludeWorkflow(Path=Aeon.Foraging:TimeSpentOnWheel.bonsai, Patch=Patch1, WheelPatch=WheelPatch1, Threshold=0.0003, LowPass=1)
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)
    -> BehaviorSubject TimeOnPatch1

    SubscribeSubject TimeOnPatch1
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)
    -> DistinctUntilChanged
    -> IncludeWorkflow(Path=Aeon.Acquisition:TimeSinceLastEvent.bonsai)
    -> BehaviorSubject TimeSinceLastVisit1

    IncludeWorkflow(Path=Aeon.Foraging:TimeSpentOnWheel.bonsai, Patch=Patch2, WheelPatch=WheelPatch2, Threshold=0.0003, LowPass=1)
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)
    -> BehaviorSubject TimeOnPatch2

    SubscribeSubject TimeOnPatch2
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)
    -> DistinctUntilChanged
    -> IncludeWorkflow(Path=Aeon.Acquisition:TimeSinceLastEvent.bonsai)
    -> BehaviorSubject TimeSinceLastVisit2

    SubscribeSubject ActivityCenter
    -> Condition ActivityCondition => #86
        WorkflowInput Source1
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=BaselineActivityThreshold)) => #2
        #1, #2 -> GreaterThan(Operand=DoubleProperty(Value=1))
        -> WorkflowOutput
    ExternalizedMapping(Interval(DisplayName=BaselineRefractoryPeriod)) => #87
    #86, #87 -> GateInterval(Interval=PT5S)
    -> MulticastSubject BaselineTrigger

    SubscribeSubject SubjectWeight => #90
    SubscribeSubject SubjectStart
    -> MemberSelector(Selector=Value.ReferenceWeight) => #92
    #90, #92 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1.Timestamp as Timestamp,
        Item1.Value as CurrentWeight,
        100 * Item1.Value / Item2 as CurrentPercent)
    -> BehaviorSubject PercentWeightLoss

    IncludeWorkflow
      Path=Aeon.Foraging:PelletMissed.bonsai
      PelletDelivered=PelletDeliveredPatch1
      TimeToMiss=PT2S
      DistanceToMiss=20
      TimeInChute=PT0S
      WheelDisplacement=WheelPatch1
    -> MulticastSubject MissedPellets1

    IncludeWorkflow
      Path=Aeon.Foraging:PelletMissed.bonsai
      PelletDelivered=PelletDeliveredPatch2
      TimeToMiss=PT2S
      DistanceToMiss=20
      TimeInChute=PT0S
      WheelDisplacement=WheelPatch2
    -> MulticastSubject MissedPellets2

    SubscribeSubject PelletDeliveredPatch1
    -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalPelletsDelivered1(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject PelletDeliveredPatch2
    -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalPelletsDelivered2(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject MissedPellets1
    -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalMissedPellets1(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject MissedPellets2
    -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalMissedPellets2(Path=Extensions\PersistentCounter.bonsai)

    GroupWorkflow SubjectAlerts
        SubscribeSubject SubjectAlertMessages
        -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\alerts.config)

        SubscribeSubject PelletMonitor1 => #3
        ExternalizedMapping(Count(DisplayName=DeliveryFailureThreshold)) => #4
        #3, #4 -> Condition DispenserBroken
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
              Expression: Value ? 1 : 0
            ExternalizedMapping(Count) => #2
            #1, #2 -> BufferCount(Count=5, Skip=1)
            -> Add => #4
            #4, #2 -> GroupWorkflow Equal
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Count)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=5)) => #2
                #0 -> Equal(Operand=IntProperty(Value=0)) => #3
                #2, #3 -> Zip
                -> LogicalOr
                -> WorkflowOutput
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #6
        -> Format
          Format:
            ## **Dispenser Broken**
            **Patch**: Patch1
          Selector=""
        -> MulticastSubject SubjectAlertMessages
        #6 -> Aeon.Acquisition.FormatLogMessage(Format=Patch1, Selector="", Priority=Alert, Type=DispenserBroken, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs
        SubscribeSubject PelletMonitor2 => #11
        #11, #4 -> Condition DispenserBroken
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
              Expression: Value ? 1 : 0
            ExternalizedMapping(Count) => #2
            #1, #2 -> BufferCount(Count=5, Skip=1)
            -> Add => #4
            #4, #2 -> GroupWorkflow Equal
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Count)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=5)) => #2
                #0 -> Equal(Operand=IntProperty(Value=0)) => #3
                #2, #3 -> Zip
                -> LogicalOr
                -> WorkflowOutput
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #13
        -> Format
          Format:
            ## **Dispenser Broken**
            **Patch**: Patch2
          Selector=""
        -> MulticastSubject SubjectAlertMessages
        #13 -> Aeon.Acquisition.FormatLogMessage(Format=Patch2, Selector="", Priority=Alert, Type=DispenserBroken, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject MissedPellets1
        -> ElementIndex
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #20
        SubscribeSubject SubjectState => #21
        #20, #21 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
          Expression:
            new(
            Item1.Value.Seconds as Timestamp,
            Item1.Index + 1 as Count,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Missed Pellet**
            **Subject**: {0}
            **Patch:**: Patch1
            **Total Missed**: {1}
          Selector="Id,Count"
        -> MulticastSubject SubjectAlertMessages
        #23 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	Patch1	{1}", Selector="Id,Count", Priority=Alert, Type=MissedPellet, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject MissedPellets2
        -> ElementIndex
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #30
        SubscribeSubject SubjectState => #31
        #30, #31 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #33
          Expression:
            new(
            Item1.Value.Seconds as Timestamp,
            Item1.Index + 1 as Count,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Missed Pellet**
            **Subject**: {0}
            **Patch:**: Patch2
            **Total Missed**: {1}
          Selector="Id,Count"
        -> MulticastSubject SubjectAlertMessages
        #33 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	Patch2	{1}", Selector="Id,Count", Priority=Alert, Type=MissedPellet, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject TrackingTop
        -> GroupWorkflow SpeedThreshold
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value[0].Centroid)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Dsp.Norm(NormType=L2) => #3
            ExternalizedMapping(Value(DisplayName=MaxSpeed)) => #4
            #3, #4 -> GreaterThan(Operand=DoubleProperty(Value=500)) => #5
            #0 -> MemberSelector(Selector=Seconds) => #6
            #5, #6 -> Zip
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> WorkflowOutput
        -> Condition TrackingUnstable
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #41
        SubscribeSubject SubjectState => #42
        #41, #42 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #44
          Expression:
            new(
            Item1.Item2 as Timestamp,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Tracking Failure**
            **Subject**: {0}
          Selector=Id
        -> MulticastSubject SubjectAlertMessages
        #44 -> Aeon.Acquisition.FormatLogMessage(Format={0}, Selector=Id, Priority=Alert, Type=TrackingFailure, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)

    GroupWorkflow EnvironmentAlerts
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.GroupByTime(ChunkSize=1)
        -> Skip(Count=1)
        -> SelectMany ExperimentSummary => #3
            SubscribeSubject PatchState1
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression:
                new(
                Item1 as Threshold,
                Item2 as D0,
                Item3 as Delta)
            SubscribeSubject PatchState2
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression:
                new(
                Item1 as Threshold,
                Item2 as D0,
                Item3 as Delta)
            SubscribeSubject Patch1Dispenser
            -> Take(Count=1) => #7
            SubscribeSubject Patch2Dispenser
            -> Take(Count=1) => #9
            #2, #5, #7, #9 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #11
              Expression:
                new(
                Item1 as PatchState1,
                Item2 as PatchState2,
                Item3 as PatchDispenser1,
                Item4 as PatchDispenser2)
            SubscribeSubject TimeOnPatch2
            -> Take(Count=1) => #13
            SubscribeSubject TimeOnPatch1
            -> Take(Count=1) => #15
            SubscribeSubject TimeSinceLastVisit2
            -> Take(Count=1) => #17
            SubscribeSubject TimeSinceLastVisit1
            -> Take(Count=1) => #19
            #13, #15, #17, #19 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #21
              Expression:
                new(
                Item1 as TimeOnPatch2,
                Item2 as TimeOnPatch1,
                Item3 as TimeSinceLastVisit2,
                Item4 as TimeSinceLastVisit1)
            SubscribeSubject SubjectState
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Id) => #24
            SubscribeSubject PercentWeightLoss
            -> MemberSelector(Selector="CurrentWeight,CurrentPercent") => #26
            FloatProperty(Value=0)
            -> MemberSelector(Selector="it,it") => #28
            #26, #28 -> Merge
            -> Take(Count=1)
            -> Take(Count=1) => #31
            WorkflowInput Source1
            -> Take(Count=1)
            -> MemberSelector(Selector=Key) => #34
            SubscribeSubject TotalPelletsDelivered1 => #35
            SubscribeSubject TotalPelletsDelivered2 => #36
            SubscribeSubject TotalMissedPellets1 => #37
            SubscribeSubject TotalMissedPellets2 => #38
            #35, #36, #37, #38 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #40
              Expression:
                new(
                Item1 as TotalPelletsDelivered1,
                Item2 as TotalPelletsDelivered2,
                Item3 as TotalMissedPellets1,
                Item4 as TotalMissedPellets2)
            #11, #21, #24, #31, #34, #40 -> Zip
            -> Take(Count=1) => #42
            -> Format => #43
              Format:
                # Arena Status
                **Time**: {0}
                **Subject**: {1}
                **Weight**: {2}
                **Weight Loss**: {3}
              Selector="Item5,Item3,Item4.Item1,Item4.Item2"
            #42 -> Format => #44
              Format:
                # Patch1
                **Pellets**: {0}
                **Threshold**: {1}
                **D0**: {2}
                **Delta**: {3}
                **Time On Patch**: {4}
                **Time Since Last Visit**: {5}
                **Total Pellets Delivered**: {6}
                **Total Missed Pellets**: {7}
              Selector: Item1.PatchDispenser1,Item1.PatchState1.Threshold,Item1.PatchState1.D0,Item1.PatchState1.Delta,Item2.TimeOnPatch1,Item2.TimeSinceLastVisit1,Item6.TotalPelletsDelivered1,Item6.TotalMissedPellets1
            #42 -> Format => #45
              Format:
                # Patch2
                **Pellets**: {0}
                **Threshold**: {1}
                **D0**: {2}
                **Delta**: {3}
                **Time On Patch**: {4}
                **Time Since Last Visit**: {5}
                **Total Pellets Delivered**: {6}
                **Total Missed Pellets**: {7}
              Selector: Item1.PatchDispenser2,Item1.PatchState2.Threshold,Item1.PatchState2.D0,Item1.PatchState2.Delta,Item2.TimeOnPatch2,Item2.TimeSinceLastVisit2,Item6.TotalPelletsDelivered2,Item6.TotalMissedPellets2
            #43, #44, #45 -> Zip
            -> Add
            -> WorkflowOutput
        SubscribeSubject EnvironmentState
        -> Format => #5
          Format:
            ## Arena {0} Mode Change
            Mode: {1}
          Selector="Value.Name,Value.Type"
        SubscribeSubject VideoEvents => #6
        #5, #6 -> SubscribeWhen
        -> DelaySubscription(DueTime=PT2S) => #8
        #3, #8 -> Merge
        -> Disable IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\status.config)

        PublishSubject<System.String> EnvironmentAlertMessages
        -> Disable IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\alerts.config)

        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.GroupByTime(ChunkSize=1)
        -> Skip(Count=1)
        -> SelectMany LocalFileCount => #16
            SubscribeSubject PathPrefix
            -> Bonsai.IO.GetDirectoryName
            -> PropertyMapping(Path)
            -> Bonsai.IO.GetFiles(Path=D:\ProjectAeon\presocial0.1, SearchPattern=*, SearchOption=AllDirectories)
            -> MemberSelector(Selector=Length) => #4
            WorkflowInput Source1
            -> Merge
            -> Take(Count=1) => #7
            #4, #7 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Count,
                Item2.GetTimestamp() as Timestamp)
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=LocalFileThreshold)) => #17
        #16, #17 -> Condition GreaterThan => #18
            WorkflowInput Source1
            -> MemberSelector(Selector=Count) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> GreaterThan(Operand=IntProperty(Value=500))
            -> WorkflowOutput
        -> Format
          Format:
            ## **File Storage**
            **Total Files in Local Storage**: {0}
          Selector=Count
        -> MulticastSubject EnvironmentAlertMessages
        #18 -> Aeon.Acquisition.FormatLogMessage(Format="", Selector=Count, Priority=Alert, Type=FileStorage, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraTop) => #23
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraPatch1) => #24
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraPatch2) => #25
        #23, #24, #25 -> Merge => #26
        -> Format
          Format:
            ## **Frame Dropped**
            **Camera**: {0}
            **Current Frame**: {1}
          Selector="Name,FrameID"
        -> MulticastSubject EnvironmentAlertMessages
        #26 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	{1}", Selector="Name,FrameID", Priority=Alert, Type=DroppedFrames, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject Annotations
        -> Condition Alert
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.Priority)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.PriorityLevel>(Value=Alert))
            -> WorkflowOutput
        -> Format
          Format:
            ## **Experimenter Annotation**
            **Message**: {0}
          Selector=Value.Message
        -> MulticastSubject EnvironmentAlertMessages

        GroupWorkflow HeartbeatSources
            IncludeWorkflow Patch1(Path=Aeon.Acquisition:HeartbeatMonitor.bonsai) => #0
            IncludeWorkflow Patch2(Path=Aeon.Acquisition:HeartbeatMonitor.bonsai) => #1
            IncludeWorkflow VideoEvents(Path=Aeon.Acquisition:HeartbeatMonitor.bonsai) => #2
            IncludeWorkflow SynchronizerEvents(Path=Aeon.Acquisition:HeartbeatMonitor.bonsai) => #3
            #0, #1, #2, #3 -> Merge
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Aeon.Acquisition:SynchronizerMonitor.bonsai) => #36
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #37
          Expression: DeviceCount != ExpectedDeviceCount || MaxDifference > 0 || Math.Abs((MeanUtcTimestamp - DateTime.UtcNow).TotalMinutes) > 30
        -> Format
          Format:
            ## **Harp Synch**
            **Synchronizer Stats**: {0}
          Selector=it
        -> MulticastSubject EnvironmentAlertMessages
        #37 -> Aeon.Acquisition.FormatLogMessage
          Format="{0}	{1}	{2}	{3}	{4}"
          Selector="MeanTimestamp,MeanUtcTimestamp,ExpectedDeviceCount,DeviceCount,MaxDifference"
          Priority=Alert
          Type=HarpSynch
          Timestamp=MeanTimestamp
        -> MulticastSubject AlertLogs
        #36 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName=D:\TimestampClockSyncHeartBeat\TimestampClockSyncHeartBeat.csv, Append=true, Overwrite=false, Suffix=None, IncludeHeader=true)

GroupWorkflow ControlPanel
    SubscribeSubject SubjectState => #0
    -> Condition Start
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Type)
        -> NotEqual(Operand=WorkflowProperty<Aeon.Environment.EnvironmentSubjectChangeType>(Value=Exit))
        -> WorkflowOutput
    -> MulticastSubject SubjectStart
    #0 -> Condition End
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Type)
        -> Equal(Operand=WorkflowProperty<Aeon.Environment.EnvironmentSubjectChangeType>(Value=Exit))
        -> WorkflowOutput
    -> MulticastSubject SubjectStop

    Bonsai.Windows.Input.KeyDown(Filter="ShiftKey Space D0 P NumPad0 F1 Shift", SuppressRepetitions=false)
    -> MulticastSubject StartCameras

    Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey Space Prior PageUp D0 D1 A P Q NumPad0 NumPad1 F1 F2 Shift", SuppressRepetitions=false)
    -> MulticastSubject StopCameras

    Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu Space Next PageDown D0 D2 B P R NumPad0 NumPad2 F1 F3 Shift", SuppressRepetitions=false)
    -> GroupWorkflow ManualPellet1
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Aeon.Foraging:TriggerPellet.bonsai, PatchEvents=Patch1, DeliverPellet=DeliverPelletPatch1)
        -> MulticastSubject ManualPellet1
        -> WorkflowOutput

    Bonsai.Windows.Input.KeyDown
      Filter: LButton RButton Cancel ShiftKey ControlKey Menu Pause Space Prior PageUp Next PageDown End D0 D1 D2 D3 A B C P Q R S NumPad0 NumPad1 NumPad2 NumPad3 F1 F2 F3 F4 Shift
      SuppressRepetitions=false
    -> GroupWorkflow ManualPellet2
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Aeon.Foraging:TriggerPellet.bonsai, PatchEvents=Patch2, DeliverPellet=DeliverPelletPatch2)
        -> MulticastSubject ManualPellet2
        -> WorkflowOutput

    SubscribeSubject PatchState1
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item2 as D1,
        Item3 as Delta)
    -> Aeon.Environment.LabelControl(FontSize=14)
    -> GroupWorkflow Patch1
        WorkflowInput Source1
        -> WorkflowOutput

    SubscribeSubject PatchState2
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item2 as D1,
        Item3 as Delta)
    -> Aeon.Environment.LabelControl(FontSize=14)
    -> GroupWorkflow Patch2
        WorkflowInput Source1
        -> WorkflowOutput

    SubscribeSubject AudioAmbient
    -> MemberSelector(Selector=Value)

    GroupWorkflow PatchActivity
        SubscribeSubject CameraPatch1
        -> SampleInterval(Interval=PT0.02S)
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping => #3
        SubscribeSubject CameraPatch2
        -> SampleInterval(Interval=PT0.02S)
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping => #7
        SubscribeSubject PatchState
        -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=2))
        -> VisualizerMapping => #10
        SubscribeSubject PatchState
        -> Bonsai.Dsp.SelectChannels(Channels(int=1, int=3))
        -> VisualizerMapping => #13
        SubscribeSubject CurrentThresholdPatch1
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=PelletCount, ValueSelector=Threshold, SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow ThresholdPatch1
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #17
        SubscribeSubject CurrentThresholdPatch2
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=PelletCount, ValueSelector=Threshold, SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow ThresholdPatch2
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #21
        SubscribeSubject PelletMonitorValue1
        -> VisualizerMapping => #23
        SubscribeSubject PelletMonitorValue2
        -> VisualizerMapping => #25
        #3, #7, #10, #13, #17, #21, #23, #25 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchActivity
          ColumnCount=2
          RowCount=4
          ColumnStyles=""
          RowStyles=""
          CellSpans
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
        -> VisualizerMapping => #27
        Aeon.Environment.ExperimentProperties(HelpVisible=true, ToolbarVisible=true)
        -> VisualizerMapping => #29
        SubscribeSubject TimeSpentOnPatches
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="Patch1,Patch2", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TimeSpentOnPatches
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #33
        SubscribeSubject TimeSinceLastVisit
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="Patch1,Patch2", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TimeSinceLastVisit
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #37
        SubscribeSubject TotalDistanceTravelled
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="Patch1,Patch2", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TotalDistanceTravelled
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #41
        #29, #33, #37, #41 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchStatistics(ColumnCount=1, RowCount=4, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #43
        #27, #43 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchActivity(ColumnCount=2, RowCount=1, ColumnStyles(ColumnStyle(SizeType=Percent, Width=60), ColumnStyle(SizeType=Percent, Width=40)), RowStyles="", CellSpans="")
        -> WorkflowOutput

    GroupWorkflow SubjectActivity
        SubscribeSubject Heatmap
        -> VisualizerMapping => #1
        SubscribeSubject Trajectory
        -> VisualizerMapping
        -> SubscribeSubject FrameTrajectory
        -> VisualizerMapping => #5
        #1, #5 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder SubjectActivity(ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput

    GroupWorkflow ExperimentMetadata
        SubscribeSubject PelletDeliveredPatch1
        -> Condition RisingEdge
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> IncludeWorkflow Patch1(Path=Aeon.Foraging:PatchDispenser.bonsai, ControllerEvents=Patch1Controller, DispenserState=Patch1Dispenser)
        -> VisualizerMapping => #3
        SubscribeSubject PelletDeliveredPatch2
        -> Condition RisingEdge
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> IncludeWorkflow Patch2(Path=Aeon.Foraging:PatchDispenser.bonsai, ControllerEvents=Patch2Controller, DispenserState=Patch2Dispenser)
        -> VisualizerMapping => #7
        SubscribeSubject VideoEvents
        -> Aeon.Environment.AnnotationSource
        -> MulticastSubject Annotations
        -> VisualizerMapping => #11
        SubscribeSubject VideoEvents
        -> Aeon.Environment.EnvironmentState
        -> MulticastSubject EnvironmentState
        -> VisualizerMapping => #15
        #3, #7, #11, #15 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder ExperimentMetadata
          ColumnCount=2
          RowCount=4
          ColumnStyles=""
          RowStyles=""
          CellSpans
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
        -> WorkflowOutput

        SubscribeSubject Patch1Controller => #18
        -> Condition Reset
            WorkflowInput Source1
            -> MemberSelector(Selector=EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Foraging.DispenserEventType>(Value=Reset))
            -> WorkflowOutput
        -> MulticastSubject ResetFeederPatch1
        #18 -> Condition Discount
            WorkflowInput Source1
            -> MemberSelector(Selector=EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Foraging.DispenserEventType>(Value=Discount))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Aeon.Foraging:TriggerPellet.bonsai, PatchEvents=Patch1, DeliverPellet=DeliverPelletPatch1)
        -> MulticastSubject ManualPellet1

        SubscribeSubject Patch2Controller => #24
        -> Condition Reset
            WorkflowInput Source1
            -> MemberSelector(Selector=EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Foraging.DispenserEventType>(Value=Reset))
            -> WorkflowOutput
        -> MulticastSubject ResetFeederPatch2
        #24 -> Condition Discount
            WorkflowInput Source1
            -> MemberSelector(Selector=EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Foraging.DispenserEventType>(Value=Discount))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Aeon.Foraging:TriggerPellet.bonsai, PatchEvents=Patch2, DeliverPellet=DeliverPelletPatch2)
        -> MulticastSubject ManualPellet2

    GroupWorkflow EnvironmentSubjectState
        SubscribeSubject VideoEvents => #0
        SubscribeSubject EnvironmentState
        -> PropertyMapping(EnvironmentState(Selector=Value.Type)) => #2
        #0, #2 -> Aeon.Environment.EnvironmentSubjectState(DatabasePath=Z:\aeon\colony\colony.csv, EnvironmentState=Maintenance)
        -> MulticastSubject SubjectState
        -> WorkflowOutput

Bonsai.Numerics.CreateRandom(Seed=nil)
-> AsyncSubject Random

ExternalizedMapping(EasyThreshold, EasyRate, HardThreshold, HardRate, StartThreshold, StartTimeout, InitThreshold, InitRate)
-> IncludeWorkflow
  Path=Extensions\TaskLogic.bonsai
  EasyThreshold=75
  EasyRate=0.01
  HardThreshold=75
  HardRate=0.0025
  StartThreshold=18
  StartTimeout=PT1H
  InitThreshold=75
  InitRate=10000
