<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:aeon-env="clr-namespace:Aeon.Environment;assembly=Aeon.Environment"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Accumulates the total number of events since subject start.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>SubjectState</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Enter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Type</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="aeon-env:EnvironmentSubjectChangeType">
                <Value>Enter</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" />
      </Expression>
      <Expression xsi:type="aeon:StateRecoverySubject">
        <Name />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name />
      </Expression>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="IntProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="3" To="10" Label="Source2" />
      <Edge From="5" To="7" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>