<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Detects that the specified stream stopped producing values.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="StreamEvents" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StreamEvents</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DueTime" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:TimeoutNotification.bonsai">
        <DueTime>PT1S</DueTime>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Name" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject(harp:Timestamped(spk:SpinnakerDataFrame)),sys:String">
              <MemberName>Name</MemberName>
              <Value>StreamEvents</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SynchronizerEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessage">
          <harp:Address>8</harp:Address>
          <harp:MessageType>Event</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Type>Timestamp</harp:Type>
        <harp:IsArray>false</harp:IsArray>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item3 as Timestamp,
Item2 as Name)</scr:Expression>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="8" Label="Source1" />
      <Edge From="4" To="8" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source3" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>