<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:aeon-env="clr-namespace:Aeon.Environment;assembly=Aeon.Environment"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EnvironmentState</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="EnvironmentState" Selector="Value.Type" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="DatabaseConfig" Description="Specifies the name of the file containing the database connection string or path." />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aeon:LoadConfigFile" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aeon:ServiceAccountName" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="StringProperty" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Catch" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="DatabasePath" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aeon-env:EnvironmentSubjectState">
          <aeon-env:DatabasePath />
          <aeon-env:EnvironmentState>Maintenance</aeon-env:EnvironmentState>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="11" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="11" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="7" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source3" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>