WorkflowBuilder(Version=2.8.0)
GroupWorkflow Metadata
    GroupWorkflow Devices
        GroupWorkflow ClockSynchronizer
            ExternalizedMapping(PortName)
            -> IncludeWorkflow(Path=Aeon.Acquisition:Synchronizer.bonsai, PortName=COM6)
            -> WorkflowOutput

        GroupWorkflow VideoController
            ExternalizedMapping(PortName, GlobalTriggerFrequency, LocalTriggerFrequency)
            -> GroupWorkflow VideoController(Description="Supplies synchronized camera triggering for both global and local views.")
                SubscribeSubject LocalTriggerFrequency
                -> PropertyMapping(Frequency)
                -> Bonsai.Harp.Expander.ConfigurePwm(Mask=PwmOutput7, Frequency=125, DutyCycle=50, Count=0) => #2
                SubscribeSubject GlobalTriggerFrequency
                -> PropertyMapping(Frequency)
                -> Bonsai.Harp.Expander.ConfigurePwm(Mask=PwmOutput9, Frequency=50, DutyCycle=50, Count=0) => #5
                BehaviorSubject<System.Object> StartCameras
                -> Bonsai.Harp.Expander.PwmOutput(Command=Start, Mask="Pwm1 Pwm2") => #7
                BehaviorSubject<System.Object> StopCameras
                -> Bonsai.Harp.Expander.PwmOutput(Command=Stop, Mask="Pwm1 Pwm2") => #9
                BehaviorSubject<Bonsai.Harp.HarpMessage> SyncPulseCommand => #10
                #2, #5, #7, #9, #10 -> Merge => #11
                ExternalizedMapping(PortName) => #12
                #11, #12 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM3)
                -> PublishSubject VideoEvents => #14
                -> WorkflowOutput
                #14 -> Bonsai.Harp.FilterMessage(MessageType=Event, Register=Bonsai.Harp.FilterMessageAddress(Address=68)) => #16
                -> Condition Pwm1
                    WorkflowInput Source1
                    -> MemberSelector(Selector=MessageBytes)
                    -> Index(Operand=IntProperty(Value=11))
                    -> BitwiseAnd(Operand=WorkflowProperty<System.Byte>(Value=2))
                    -> NotEqual(Operand=WorkflowProperty<System.Byte>(Value=0))
                    -> WorkflowOutput
                -> PublishSubject LocalTrigger
                #16 -> Condition Pwm2
                    WorkflowInput Source1
                    -> MemberSelector(Selector=MessageBytes)
                    -> Index(Operand=IntProperty(Value=11))
                    -> BitwiseAnd(Operand=WorkflowProperty<System.Byte>(Value=4))
                    -> NotEqual(Operand=WorkflowProperty<System.Byte>(Value=0))
                    -> WorkflowOutput
                -> PublishSubject GlobalTrigger

                SubscribeSubject VideoEvents
                -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(Address=37, PayloadType=Timestamp, IsArray=false))

                ExternalizedMapping(Value(DisplayName=GlobalTriggerFrequency, Description="The frequency at which to trigger global cameras."))
                -> DoubleProperty(Value=50)
                -> Take(Count=1)
                -> BehaviorSubject GlobalTriggerFrequency

                ExternalizedMapping(Value(DisplayName=LocalTriggerFrequency, Description="The frequency at which to trigger the fast local cameras."))
                -> DoubleProperty(Value=125)
                -> Take(Count=1)
                -> BehaviorSubject LocalTriggerFrequency
            -> WorkflowOutput

        GroupWorkflow CameraTop
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              SerialNumber=21053810
              Gain=4
              Binning=1
              FrameEvents=CameraTop
            -> WorkflowOutput

        GroupWorkflow CameraWest
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              SerialNumber=21196927
              Gain=4
              Binning=1
              FrameEvents=CameraWest
            -> WorkflowOutput

        GroupWorkflow CameraEast
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              SerialNumber=21199215
              Gain=4
              Binning=1
              FrameEvents=CameraEast
            -> WorkflowOutput

        GroupWorkflow CameraNorth
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              SerialNumber=21177888
              Gain=4
              Binning=1
              FrameEvents=CameraNorth
            -> WorkflowOutput

        GroupWorkflow CameraSouth
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              SerialNumber=21199217
              Gain=4
              Binning=1
              FrameEvents=CameraSouth
            -> WorkflowOutput

        GroupWorkflow CameraPatch1
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              SerialNumber=21196933
              Gain=10
              Binning=2
              FrameEvents=CameraPatch1
            -> WorkflowOutput

        GroupWorkflow CameraPatch2
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              SerialNumber=21053811
              Gain=10
              Binning=2
              FrameEvents=CameraPatch2
            -> WorkflowOutput

        GroupWorkflow CameraNest
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              SerialNumber=21199221
              Gain=10
              Binning=2
              FrameEvents=CameraNest
            -> WorkflowOutput

        GroupWorkflow AudioAmbient
            ExternalizedMapping(DeviceName, SampleRate, Name)
            -> IncludeWorkflow AudioAmbient(Path=Aeon.Acquisition:AudioSource.bonsai, DeviceName="Microphone (UltraMic 192K 16 bi", SampleRate=192000)
            -> WorkflowOutput

        GroupWorkflow Patch1
            ExternalizedMapping(PortName, WheelDisplacement, PelletDelivered, DeliverPellet, PatchEvents, Radius, SampleRate, ResetFeeder, DueTime, Count)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:UndergroundFeeder.bonsai
              PatchEvents=Patch1
              SampleRate=SampleRate500Hz
              DeliverPellet=DeliverPelletPatch1
              PelletDelivered=PelletDeliveredPatch1
              DueTime=PT1S
              Count=2
              ResetFeeder=ResetFeederPatch1
              PortName=COM7
              Radius=-4
              WheelDisplacement=WheelPatch1
            -> WorkflowOutput

        GroupWorkflow Patch2
            ExternalizedMapping(PortName, WheelDisplacement, PelletDelivered, DeliverPellet, PatchEvents, Radius, SampleRate, ResetFeeder, DueTime, Count)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:UndergroundFeeder.bonsai
              PatchEvents=Patch2
              SampleRate=SampleRate500Hz
              DeliverPellet=DeliverPelletPatch2
              PelletDelivered=PelletDeliveredPatch2
              DueTime=PT1S
              Count=2
              ResetFeeder=ResetFeederPatch2
              PortName=COM4
              Radius=-4
              WheelDisplacement=WheelPatch2
            -> WorkflowOutput

        GroupWorkflow HeadStageLinearDrive
            Timer(DueTime=PT5S, Period=PT0S) => #0
            ExternalizedMapping(Name(DisplayName=HeadStageLinearDriveCommands)) => #1
            #0, #1 -> GroupWorkflow Init
                WorkflowInput Source1
                -> Harp.SwcLinearDrive.CreateMessage(Payload=Harp.SwcLinearDrive.CreateEnableMotorDriverPayload(MessageType=Write, Value=Disabled)) => #1
                ExternalizedMapping(Name) => #2
                #1, #2 -> MulticastSubject HeadStageLinearDriveCommands => #3
                ExternalizedMapping(Value(DisplayName=MaxAndContinuosCurrent)) => #4
                #3, #4 -> Harp.SwcLinearDrive.CreateMessage(Payload=Harp.SwcLinearDrive.CreateLimitContinuousCurrentPayload(MessageType=Write, Value=2500)) => #5
                #5, #2 -> MulticastSubject HeadStageLinearDriveCommands => #6
                #6, #4 -> Harp.SwcLinearDrive.CreateMessage(Payload=Harp.SwcLinearDrive.CreateLimitPeakCurrentPayload(MessageType=Write, Value=2500)) => #7
                #7, #2 -> MulticastSubject HeadStageLinearDriveCommands
                -> Harp.SwcLinearDrive.CreateMessage(Payload=Harp.SwcLinearDrive.CreateLimitSpeedPayload(MessageType=Write, Value=20000))
                -> MulticastSubject HeadStageLinearDriveCommands
                -> WorkflowOutput
            #1 -> BehaviorSubject<Bonsai.Harp.HarpMessage> HeadStageLinearDriveCommands => #3
            ExternalizedMapping(PortName) => #4
            #3, #4 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=true, PortName=COM12) => #5
            ExternalizedMapping(Name(DisplayName=HeadStageLinearDriveEvents)) => #6
            #5, #6 -> MulticastSubject HeadStageLinearDriveEvents => #7
            -> WorkflowOutput
            #7 -> Harp.SwcLinearDrive.Parse(MessageType=Event, Register=Harp.SwcLinearDrive.TimestampedPosition) => #9
            ExternalizedMapping(Name(DisplayName=HeadStageLinearDrivePosition)) => #10
            #9, #10 -> PublishSubject HeadStageLinearDrivePosition
            -> MemberSelector(Selector=Value)
            #7 -> Harp.SwcLinearDrive.Parse(MessageType=Event, Register=Harp.SwcLinearDrive.Speed)
            Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel A B C Control", SuppressRepetitions=true) => #14
            #10 -> GroupWorkflow ToString
                ExternalizedMapping(Value(DisplayName=Name))
                -> StringProperty(Value=HeadStageLinearDrivePosition)
                -> WorkflowOutput
            -> PropertyMapping(HeadStageLinearDrivePosition) => #16
            #14, #1, #16 -> Defer Calibrate
                BehaviorSubject<Bonsai.Harp.HarpMessage> Commands => #0
                ExternalizedMapping(Name) => #1
                #0, #1 -> MulticastSubject HeadStageLinearDriveCommands

                WorkflowInput Source1
                -> Take(Count=1)
                -> SelectMany MoveToEdge
                    Harp.SwcLinearDrive.CreateMessage(Payload=Harp.SwcLinearDrive.CreateEnableLimitPositionPayload(MessageType=Write, Value=Disabled))
                    -> MulticastSubject Commands
                    -> Harp.SwcLinearDrive.CreateMessage(Payload=Harp.SwcLinearDrive.CreateEnableMotorDriverPayload(MessageType=Write, Value=Enabled))
                    -> MulticastSubject Commands
                    -> Harp.SwcLinearDrive.CreateMessage(Payload=Harp.SwcLinearDrive.CreateSetSpeedPayload(MessageType=Write, Value=-100))
                    -> MulticastSubject Commands
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Delay(DueTime=PT1S) => #6
                ExternalizedMapping(HeadStageLinearDrivePosition) => #7
                #6, #7 -> SelectMany CheckStop
                    ExternalizedMapping(Name(DisplayName=HeadStageLinearDrivePosition))
                    -> SubscribeSubject HeadStageLinearDrivePosition
                    -> MemberSelector(Selector=Value)
                    -> BufferCount(Count=10, Skip=1) => #3
                    ExternalizedMapping(Value(DisplayName=DerivativeThreshold)) => #4
                    #3, #4 -> SelectMany IsStopped
                        WorkflowInput Source1
                        -> Merge
                        -> Bonsai.Dsp.Difference(Order=1)
                        -> Bonsai.Dsp.Abs
                        -> Sum => #4
                        ExternalizedMapping(Value) => #5
                        #4, #5 -> LessThan(Operand=DoubleProperty(Value=4))
                        -> WorkflowOutput
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> SelectMany SetHome
                    WorkflowInput Source1
                    -> Harp.SwcLinearDrive.CreateMessage(Payload=Harp.SwcLinearDrive.CreateSetSpeedPayload(MessageType=Write, Value=0))
                    -> MulticastSubject Commands
                    -> Harp.SwcLinearDrive.CreateMessage(Payload=Harp.SwcLinearDrive.CreateEnableMotorDriverPayload(MessageType=Write, Value=Disabled))
                    -> MulticastSubject Commands
                    -> Harp.SwcLinearDrive.CreateMessage(Payload=Harp.SwcLinearDrive.CreateHomePositionPayload(MessageType=Write, Value=-3000))
                    -> MulticastSubject Commands
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> SelectMany GoTo0
                    Harp.SwcLinearDrive.CreateMessage(Payload=Harp.SwcLinearDrive.CreateEnableMotorDriverPayload(MessageType=Write, Value=Enabled))
                    -> MulticastSubject Commands
                    -> Harp.SwcLinearDrive.CreateMessage(Payload=Harp.SwcLinearDrive.CreateSetPositionPayload(MessageType=Write, Value=0))
                    -> MulticastSubject Commands
                    -> Delay(DueTime=PT1S)
                    -> Harp.SwcLinearDrive.CreateMessage(Payload=Harp.SwcLinearDrive.CreateEnableLimitPositionPayload(MessageType=Write, Value=Enabled))
                    -> MulticastSubject Commands
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Delay(DueTime=PT0S)
                -> SelectMany RemoveCurrentLimits
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=ContinuousMax)) => #1
                    #0, #1 -> Harp.SwcLinearDrive.CreateMessage(Payload=Harp.SwcLinearDrive.CreateLimitContinuousCurrentPayload(MessageType=Write, Value=3000))
                    -> MulticastSubject Commands => #3
                    ExternalizedMapping(Value(DisplayName=PeakMax)) => #4
                    #3, #4 -> Harp.SwcLinearDrive.CreateMessage(Payload=Harp.SwcLinearDrive.CreateLimitPeakCurrentPayload(MessageType=Write, Value=3000))
                    -> MulticastSubject Commands
                    -> Take(Count=1)
                    -> WorkflowOutput
                -> Repeat
                -> WorkflowOutput
            ExternalizedMapping(Name(DisplayName=HeadStageLinearDriveGoToPosition))
            -> BehaviorSubject<System.Double> HeadStageLinearDriveSetPosition
            -> Bonsai.Dsp.Rescale(Min=1, Max=0, RangeMin=0, RangeMax=160000, RescaleType=Linear)
            -> Harp.SwcLinearDrive.Format(MessageType=Write, Register=Harp.SwcLinearDrive.SetPosition) => #21
            #21, #1 -> MulticastSubject HeadStageLinearDriveCommands
            Bonsai.Windows.Input.KeyDown(Filter="Back Space Down Control", SuppressRepetitions=false)
            -> Harp.SwcLinearDrive.CreateMessage(Payload=Harp.SwcLinearDrive.CreateEnableMotorDriverPayload(MessageType=Write, Value=Disabled)) => #24
            Bonsai.Windows.Input.KeyDown(Filter="RButton MButton XButton2 Space Next PageDown Home Up Control", SuppressRepetitions=false)
            -> Harp.SwcLinearDrive.CreateMessage(Payload=Harp.SwcLinearDrive.CreateEnableMotorDriverPayload(MessageType=Write, Value=Enabled)) => #26
            #24, #26 -> Merge => #27
            #27, #1 -> MulticastSubject HeadStageLinearDriveCommands

    GroupWorkflow TrackingTop
        ExternalizedMapping(Name(DisplayName=FrameEvents))
        -> SubscribeSubject CameraTop => #1
        ExternalizedMapping(Mask, ThresholdValue, TrackingEvents) => #2
        #1, #2 -> IncludeWorkflow
          Path=Aeon.Acquisition:PositionTracking.bonsai
          ThresholdValue=72
          Mask=Config\ArenaMask-AEON2_2023-02-24.png
          TrackingCount=1
          TrackingEvents=TrackingTop
        -> WorkflowOutput

    GroupWorkflow ActivityCenter
        SubscribeSubject CameraTop
        -> IncludeWorkflow
          Path=Aeon.Acquisition:ActivityTracking.bonsai
          Regions(ArrayOfPoint(Point(X=76, Y=431), Point(X=404, Y=431), Point(X=404, Y=665), Point(X=76, Y=665)))
          ThresholdValue=10
          TrackingEvents=ActivityCenter
        -> WorkflowOutput

    GroupWorkflow ActivityArena
        SubscribeSubject CameraTop
        -> IncludeWorkflow(Path=Aeon.Acquisition:ActivityTracking.bonsai, Regions=nil, ThresholdValue=10, TrackingEvents=ActivityArena)
        -> WorkflowOutput

    GroupWorkflow ActiveRegion
        ExternalizedMapping(NestRegion, Patch1Region, Patch2Region, ArenaCenter, ArenaInnerRadius, ArenaOuterRadius)
        -> IncludeWorkflow
          Path=Extensions\ActiveRegion.bonsai
          NestRegion
            ArrayOfPoint
              Point(X=135, Y=472)
              Point(X=201, Y=482)
              Point(X=198, Y=518)
              Point(X=234, Y=521)
              Point(X=232, Y=543)
              Point(X=195, Y=542)
              Point(X=191, Y=571)
              Point(X=127, Y=569)
          Patch1Region(ArrayOfPoint(Point(X=536, Y=826), Point(X=553, Y=838), Point(X=543, Y=858), Point(X=524, Y=843)))
          Patch2Region(ArrayOfPoint(Point(X=567, Y=248), Point(X=586, Y=237), Point(X=595, Y=255), Point(X=576, Y=266)))
          ArenaCenter(X=683, Y=544)
          ArenaInnerRadius=474
          ArenaOuterRadius=494
        -> WorkflowOutput

GroupWorkflow Declarations
    BehaviorSubject<Aeon.Acquisition.WeightMeasurement> FilteredWeightNest
    BehaviorSubject<Aeon.Acquisition.WeightMeasurement> SubjectWeight
    PublishSubject<Bonsai.Harp.Timestamped(System.Byte)> MissedPellets1
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> PatchState1
    PublishSubject<Bonsai.Harp.Timestamped(System.Byte)> MissedPellets2
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> PatchState2
    PublishSubject<Bonsai.Harp.Timestamped(System.Double)> BaselineTrigger
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.LogMessage)> AlertLogs
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.LogMessage)> Annotations
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentStateMetadata)> EnvironmentState
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.DispenserStateMetadata)> Patch1Dispenser
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.DispenserStateMetadata)> Patch2Dispenser
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentSubjectStateMetadata)> SubjectState
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentSubjectStateMetadata)> SubjectStart
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentSubjectStateMetadata)> SubjectStop
    PublishSubject<Bonsai.Harp.Timestamped(System.UInt16)> ManualPellet1
    PublishSubject<Bonsai.Harp.Timestamped(System.UInt16)> ManualPellet2
    PublishSubject<System.String> SubjectAlertMessages
    BehaviorSubject<Bonsai.Harp.HarpMessage> HeadStageLinearDriveEvents

GroupWorkflow Logging
    IncludeWorkflow(Path=Aeon.Acquisition:LogController.bonsai, Path=D:\ProjectAeon\presocial0.1, ChunkSize=1)
    IncludeWorkflow(Path=Aeon.Acquisition:ExportMetadata.bonsai, WorkflowName=PreSocial0.1-AEON2.bonsai)

    SubscribeSubject<Bonsai.Harp.HarpMessage> SynchronizerEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=ClockSynchronizer)

    SubscribeSubject VideoEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=VideoController)

    SubscribeSubject CameraTop
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, LogName=CameraTop, FrameRate=50)

    SubscribeSubject TrackingTop
    -> Aeon.Acquisition.FormatBinaryRegions => #9
    GroupWorkflow RegionTracking
        SubscribeSubject InPatch2
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
          Expression: Value ? 5 : 0
        SubscribeSubject InPatch1
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
          Expression: Value ? 4 : 0
        SubscribeSubject InArena
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
          Expression: Value ? 3 : 0
        SubscribeSubject InCorridor
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
          Expression: Value ? 2 : 0
        SubscribeSubject InNest => #8
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #9
          Expression: Value ? 1 : 0
        #1, #3, #5, #7, #9 -> Zip
        -> Bonsai.Numerics.Max => #11
        #8 -> MemberSelector(Selector=Seconds) => #12
        #11, #12 -> Zip
        -> Aeon.Acquisition.CreateTimestamped
        -> WorkflowOutput
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #11
    #9, #11 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=CameraTop)

    SubscribeSubject CameraWest
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, LogName=CameraWest, FrameRate=50)

    SubscribeSubject CameraEast
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, LogName=CameraEast, FrameRate=50)

    SubscribeSubject CameraNorth
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, LogName=CameraNorth, FrameRate=50)

    SubscribeSubject CameraSouth
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, LogName=CameraSouth, FrameRate=50)

    SubscribeSubject CameraPatch1
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, LogName=CameraPatch1, FrameRate=125)

    SubscribeSubject CameraPatch2
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, LogName=CameraPatch2, FrameRate=125)

    SubscribeSubject CameraNest
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, LogName=CameraNest, FrameRate=125)

    SubscribeSubject HeadStageLinearDriveEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=HeadStageLinearDrive)

    SubscribeSubject Patch1 => #30
    SubscribeSubject Patch1Dispenser
    -> Aeon.Acquisition.FormatDispenserState => #32
    SubscribeSubject ManualPellet1
    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #34
    SubscribeSubject MissedPellets1
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=202, PayloadType=TimestampedU8)) => #36
    #30, #32, #34, #36 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Patch1)

    SubscribeSubject PatchState1
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #40
      Expression:
        new(
        Item1 as Threshold,
        Item2 as D1,
        Item3 as Delta)
    SubscribeSubject Patch1
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #42
    #40, #42 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, LogName=Patch1_State, Selector=nil)

    SubscribeSubject Patch2 => #45
    SubscribeSubject Patch2Dispenser
    -> Aeon.Acquisition.FormatDispenserState => #47
    SubscribeSubject ManualPellet2
    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #49
    SubscribeSubject MissedPellets2
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=202, PayloadType=TimestampedU8)) => #51
    #45, #47, #49, #51 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Patch2)

    SubscribeSubject PatchState2
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #55
      Expression:
        new(
        Item1 as Threshold,
        Item2 as D1,
        Item3 as Delta)
    SubscribeSubject Patch2
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #57
    #55, #57 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, LogName=Patch2_State, Selector=nil)

    SubscribeSubject AudioAmbient
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogAudio.bonsai, LogName=AudioAmbient, SampleRate=192000)

    SubscribeSubject SubjectState
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, LogName=ExperimentalMetadata_SubjectState, Selector="Seconds,Value.Id,Value.Weight,Value.Type")

    SubscribeSubject AlertLogs => #64
    SubscribeSubject Annotations => #65
    #64, #65 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, LogName=ExperimentalMetadata_MessageLog, Selector="Seconds,Value.Priority,Value.Type,Value.Message")

    SubscribeSubject EnvironmentState
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, LogName=ExperimentalMetadata_EnvironmentState, Selector="Seconds,Value.Type")

    SubscribeSubject SubjectState
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #71
      Expression:
        new(
        Seconds as Seconds,
        new(Value.Id as Id,
            Value.Type.ToString() as Event,
            "Environment" as Value) as Value)
    SubscribeSubject InPatch1
    -> IncludeWorkflow Patch1(Path=Extensions\FormatRegionVisits.bonsai) => #73
    SubscribeSubject InPatch2
    -> IncludeWorkflow Patch2(Path=Extensions\FormatRegionVisits.bonsai) => #75
    SubscribeSubject InArena
    -> IncludeWorkflow Arena(Path=Extensions\FormatRegionVisits.bonsai) => #77
    SubscribeSubject InCorridor
    -> IncludeWorkflow Corridor(Path=Extensions\FormatRegionVisits.bonsai) => #79
    SubscribeSubject InNest
    -> IncludeWorkflow Nest(Path=Extensions\FormatRegionVisits.bonsai) => #81
    #71, #73, #75, #77, #79, #81 -> Merge
    -> MemberSelector(Selector="Value,Seconds")
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, LogName=ExperimentalMetadata_SubjectVisits, Selector="Seconds,Value.Id,Value.Event,Value.Value")

GroupWorkflow Visualization
    SubscribeSubject TrackingTop
    -> MemberSelector(Selector=Item1[0].Centroid)
    -> PublishSubject Trajectory

    SubscribeSubject CameraTop
    -> MemberSelector(Selector=Value.Image)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject FrameTrajectory

    SubscribeSubject TrackingTop
    -> MemberSelector(Selector=Item1[0].Centroid) => #8
    Bonsai.Windows.Input.KeyDown => #9
      Filter: LButton MButton XButton1 ShiftKey ControlKey Capital CapsLock KanaMode HanguelMode HangulMode Space Prior PageUp Home Left D0 D1 D4 D5 A D E P Q T U NumPad0 NumPad1 NumPad4 NumPad5 F1 F2 F5 F6 Control
      SuppressRepetitions=false
    #8, #9 -> WindowTrigger(Count=nil)
    -> CreateObservable
        WorkflowInput Source1
        -> Bonsai.Dsp.Histogram2D(MinX=0, MaxX=1440, MinY=0, MaxY=1080, BinsX=288, BinsY=216, Normalize=false, Accumulate=true)
        -> WorkflowOutput
    -> Switch
    -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=20, Shift=0)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject Heatmap

    SubscribeSubject DistanceState1 => #17
    SubscribeSubject DistanceState2 => #18
    SubscribeSubject PatchState1
    -> MemberSelector(Selector=Item1) => #20
    SubscribeSubject PatchState2
    -> MemberSelector(Selector=Item1) => #22
    #17, #18, #20, #22 -> CombineLatest => #23
    #23, #17 -> Sample
    -> Bonsai.Dsp.Buffer(Count=15, Skip=nil)
    -> PublishSubject PatchState

    SubscribeSubject PatchState1
    -> GroupWorkflow ToArray => #28
        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> IgnoreElements
        -> ToArray => #3
        WorkflowInput Source1
        -> SelectMany
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> ToArray
            -> WorkflowOutput
        -> DelaySubscription(DueTime=PT0.1S) => #6
        #3, #6 -> Concat
        -> WorkflowOutput
    SubscribeSubject DeliveryCount1 => #29
    #28, #29 -> WithLatestFrom
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        int32(Item2) as PelletCount,
        Item1 as Threshold)
    -> PublishSubject CurrentThresholdPatch1

    SubscribeSubject PatchState2
    -> GroupWorkflow ToArray => #35
        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> IgnoreElements
        -> ToArray => #3
        WorkflowInput Source1
        -> SelectMany
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> ToArray
            -> WorkflowOutput
        -> DelaySubscription(DueTime=PT0.1S) => #6
        #3, #6 -> Concat
        -> WorkflowOutput
    SubscribeSubject DeliveryCount2 => #36
    #35, #36 -> WithLatestFrom
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        int32(Item2) as PelletCount,
        Item1 as Threshold)
    -> PublishSubject CurrentThresholdPatch2

    IncludeWorkflow(Path=Extensions\PelletMonitor.bonsai, PelletCommand=Patch1, PelletDelivered=PelletDeliveredPatch1)
    -> PublishSubject PelletMonitor1
    -> MemberSelector(Selector=Value)
    -> PublishSubject PelletMonitorValue1

    IncludeWorkflow(Path=Extensions\PelletMonitor.bonsai, PelletCommand=Patch2, PelletDelivered=PelletDeliveredPatch2)
    -> BehaviorSubject PelletMonitor2
    -> MemberSelector(Selector=Value)
    -> PublishSubject PelletMonitorValue2

    SubscribeSubject TimeOnPatch1 => #49
    SubscribeSubject TimeOnPatch2 => #50
    #49, #50 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Time Spent on Patch (s)" as Id,
        Item1 as Patch1,
        Item2 as Patch2)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TimeSpentOnPatches

    SubscribeSubject TimeSinceLastVisit1 => #55
    SubscribeSubject TimeSinceLastVisit2 => #56
    #55, #56 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Time Since Last Visit (s)" as Id,
        Item1 as Patch1,
        Item2 as Patch2)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TimeSinceLastVisit

    SubscribeSubject WheelPatch1
    -> MemberSelector(Selector=Value)
    -> Accumulate => #63
    SubscribeSubject WheelPatch2
    -> MemberSelector(Selector=Value)
    -> Accumulate => #66
    #63, #66 -> CombineLatest
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Total Distance Travelled (cm)" as Id,
        Item1 as Patch1,
        Item2 as Patch2)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TotalDistanceTravelled

    IncludeWorkflow(Path=Aeon.Acquisition:TimeSpentOnWheel.bonsai, Patch=Patch1, WheelPatch=WheelPatch1, Threshold=0.0003, LowPass=1)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> BehaviorSubject TimeOnPatch1

    SubscribeSubject TimeOnPatch1
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> DistinctUntilChanged
    -> IncludeWorkflow(Path=Aeon.Acquisition:TimeSinceLastEvent.bonsai)
    -> BehaviorSubject TimeSinceLastVisit1

    IncludeWorkflow(Path=Aeon.Acquisition:TimeSpentOnWheel.bonsai, Patch=Patch2, WheelPatch=WheelPatch2, Threshold=0.0003, LowPass=1)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> BehaviorSubject TimeOnPatch2

    SubscribeSubject TimeOnPatch2
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> DistinctUntilChanged
    -> IncludeWorkflow(Path=Aeon.Acquisition:TimeSinceLastEvent.bonsai)
    -> BehaviorSubject TimeSinceLastVisit2

    SubscribeSubject ActivityCenter
    -> Condition ActivityCondition => #89
        WorkflowInput Source1
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=BaselineActivityThreshold)) => #2
        #1, #2 -> GreaterThan(Operand=DoubleProperty(Value=1))
        -> WorkflowOutput
    ExternalizedMapping(Interval(DisplayName=BaselineRefractoryPeriod)) => #90
    #89, #90 -> GateInterval(Interval=PT5S)
    -> MulticastSubject BaselineTrigger

    SubscribeSubject SubjectWeight => #93
    SubscribeSubject SubjectStart
    -> MemberSelector(Selector=Value.ReferenceWeight) => #95
    #93, #95 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1.Timestamp as Timestamp,
        Item1.Value as CurrentWeight,
        100 * Item1.Value / Item2 as CurrentPercent)
    -> BehaviorSubject PercentWeightLoss

    IncludeWorkflow
      Path=Extensions\PelletMissed.bonsai
      PelletDelivered=PelletDeliveredPatch1
      TimeToMiss=PT2S
      DistanceToMiss=20
      TimeInChute=PT0S
      WheelDisplacement=WheelPatch1
    -> MulticastSubject MissedPellets1

    IncludeWorkflow
      Path=Extensions\PelletMissed.bonsai
      PelletDelivered=PelletDeliveredPatch2
      TimeToMiss=PT2S
      DistanceToMiss=20
      TimeInChute=PT0S
      WheelDisplacement=WheelPatch2
    -> MulticastSubject MissedPellets2

    SubscribeSubject PelletDeliveredPatch1
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalPelletsDelivered1(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject PelletDeliveredPatch2
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalPelletsDelivered2(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject MissedPellets1
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalMissedPellets1(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject MissedPellets2
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalMissedPellets2(Path=Extensions\PersistentCounter.bonsai)

    Disable GroupWorkflow SubjectAlerts
        SubscribeSubject SubjectAlertMessages
        -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\alerts.config)

        SubscribeSubject PelletMonitor1 => #3
        ExternalizedMapping(Count(DisplayName=DeliveryFailureThreshold)) => #4
        #3, #4 -> Condition DispenserBroken
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
              Expression: Value ? 1 : 0
            ExternalizedMapping(Count) => #2
            #1, #2 -> BufferCount(Count=5, Skip=1)
            -> Add => #4
            #4, #2 -> GroupWorkflow Equal
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Count)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=5)) => #2
                #0 -> Equal(Operand=IntProperty(Value=0)) => #3
                #2, #3 -> Zip
                -> LogicalOr
                -> WorkflowOutput
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #6
        -> Format
          Format:
            ## **Dispenser Broken**
            **Patch**: Patch1
          Selector=""
        -> MulticastSubject SubjectAlertMessages
        #6 -> Aeon.Acquisition.FormatLogMessage(Format=Patch1, Selector="", Priority=Alert, Type=DispenserBroken, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs
        SubscribeSubject PelletMonitor2 => #11
        #11, #4 -> Condition DispenserBroken
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
              Expression: Value ? 1 : 0
            ExternalizedMapping(Count) => #2
            #1, #2 -> BufferCount(Count=5, Skip=1)
            -> Add => #4
            #4, #2 -> GroupWorkflow Equal
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Count)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=5)) => #2
                #0 -> Equal(Operand=IntProperty(Value=0)) => #3
                #2, #3 -> Zip
                -> LogicalOr
                -> WorkflowOutput
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #13
        -> Format
          Format:
            ## **Dispenser Broken**
            **Patch**: Patch2
          Selector=""
        -> MulticastSubject SubjectAlertMessages
        #13 -> Aeon.Acquisition.FormatLogMessage(Format=Patch2, Selector="", Priority=Alert, Type=DispenserBroken, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject MissedPellets1
        -> ElementIndex
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #20
        SubscribeSubject SubjectState => #21
        #20, #21 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
          Expression:
            new(
            Item1.Value.Seconds as Timestamp,
            Item1.Index + 1 as Count,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Missed Pellet**
            **Subject**: {0}
            **Patch:**: Patch1
            **Total Missed**: {1}
          Selector="Id,Count"
        -> MulticastSubject SubjectAlertMessages
        #23 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	Patch1	{1}", Selector="Id,Count", Priority=Alert, Type=MissedPellet, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject MissedPellets2
        -> ElementIndex
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #30
        SubscribeSubject SubjectState => #31
        #30, #31 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #33
          Expression:
            new(
            Item1.Value.Seconds as Timestamp,
            Item1.Index + 1 as Count,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Missed Pellet**
            **Subject**: {0}
            **Patch:**: Patch2
            **Total Missed**: {1}
          Selector="Id,Count"
        -> MulticastSubject SubjectAlertMessages
        #33 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	Patch2	{1}", Selector="Id,Count", Priority=Alert, Type=MissedPellet, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject TrackingTop
        -> GroupWorkflow SpeedThreshold
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1[0].Centroid)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Dsp.Norm(NormType=L2) => #3
            ExternalizedMapping(Value(DisplayName=MaxSpeed)) => #4
            #3, #4 -> GreaterThan(Operand=DoubleProperty(Value=500)) => #5
            #0 -> MemberSelector(Selector=Item2) => #6
            #5, #6 -> Zip
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> WorkflowOutput
        -> Condition TrackingUnstable
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #41
        SubscribeSubject SubjectState => #42
        #41, #42 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #44
          Expression:
            new(
            Item1.Item2 as Timestamp,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Tracking Failure**
            **Subject**: {0}
          Selector=Id
        -> MulticastSubject SubjectAlertMessages
        #44 -> Aeon.Acquisition.FormatLogMessage(Format={0}, Selector=Id, Priority=Alert, Type=TrackingFailure, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs
    -> Disable IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)

    Disable GroupWorkflow EnvironmentAlerts
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.GroupByTime(ChunkSize=1)
        -> Skip(Count=1)
        -> SelectMany ExperimentSummary => #3
            SubscribeSubject PatchState1
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression:
                new(
                Item1 as Threshold,
                Item2 as D0,
                Item3 as Delta)
            SubscribeSubject PatchState2
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression:
                new(
                Item1 as Threshold,
                Item2 as D0,
                Item3 as Delta)
            SubscribeSubject Patch1Dispenser
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Value) => #8
            SubscribeSubject Patch2Dispenser
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Value) => #11
            #2, #5, #8, #11 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
              Expression:
                new(
                Item1 as PatchState1,
                Item2 as PatchState2,
                Item3 as PatchDispenser1,
                Item4 as PatchDispenser2)
            SubscribeSubject TimeOnPatch2
            -> Take(Count=1) => #15
            SubscribeSubject TimeOnPatch1
            -> Take(Count=1) => #17
            SubscribeSubject TimeSinceLastVisit2
            -> Take(Count=1) => #19
            SubscribeSubject TimeSinceLastVisit1
            -> Take(Count=1) => #21
            #15, #17, #19, #21 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
              Expression:
                new(
                Item1 as TimeOnPatch2,
                Item2 as TimeOnPatch1,
                Item3 as TimeSinceLastVisit2,
                Item4 as TimeSinceLastVisit1)
            SubscribeSubject SubjectState
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Id) => #26
            SubscribeSubject PercentWeightLoss
            -> MemberSelector(Selector="CurrentWeight,CurrentPercent") => #28
            FloatProperty(Value=0)
            -> MemberSelector(Selector="it,it") => #30
            #28, #30 -> Merge
            -> Take(Count=1)
            -> Take(Count=1) => #33
            WorkflowInput Source1
            -> Take(Count=1)
            -> MemberSelector(Selector=Key) => #36
            SubscribeSubject TotalPelletsDelivered1 => #37
            SubscribeSubject TotalPelletsDelivered2 => #38
            SubscribeSubject TotalMissedPellets1 => #39
            SubscribeSubject TotalMissedPellets2 => #40
            #37, #38, #39, #40 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #42
              Expression:
                new(
                Item1 as TotalPelletsDelivered1,
                Item2 as TotalPelletsDelivered2,
                Item3 as TotalMissedPellets1,
                Item4 as TotalMissedPellets2)
            #13, #23, #26, #33, #36, #42 -> Zip
            -> Take(Count=1) => #44
            -> Format => #45
              Format:
                # Arena Status
                **Time**: {0}
                **Subject**: {1}
                **Weight**: {2}
                **Weight Loss**: {3}
              Selector="Item5,Item3,Item4.Item1,Item4.Item2"
            #44 -> Format => #46
              Format:
                # Patch1
                **Pellets**: {0}
                **Threshold**: {1}
                **D0**: {2}
                **Delta**: {3}
                **Time On Patch**: {4}
                **Time Since Last Visit**: {5}
                **Total Pellets Delivered**: {6}
                **Total Missed Pellets**: {7}
              Selector: Item1.PatchDispenser1,Item1.PatchState1.Threshold,Item1.PatchState1.D0,Item1.PatchState1.Delta,Item2.TimeOnPatch1,Item2.TimeSinceLastVisit1,Item6.TotalPelletsDelivered1,Item6.TotalMissedPellets1
            #44 -> Format => #47
              Format:
                # Patch2
                **Pellets**: {0}
                **Threshold**: {1}
                **D0**: {2}
                **Delta**: {3}
                **Time On Patch**: {4}
                **Time Since Last Visit**: {5}
                **Total Pellets Delivered**: {6}
                **Total Missed Pellets**: {7}
              Selector: Item1.PatchDispenser2,Item1.PatchState2.Threshold,Item1.PatchState2.D0,Item1.PatchState2.Delta,Item2.TimeOnPatch2,Item2.TimeSinceLastVisit2,Item6.TotalPelletsDelivered2,Item6.TotalMissedPellets2
            #45, #46, #47 -> Zip
            -> Add
            -> WorkflowOutput
        SubscribeSubject EnvironmentState
        -> Format => #5
          Format:
            ## Arena {0} Mode Change
            Mode: {1}
          Selector="Value.Name,Value.Type"
        SubscribeSubject VideoEvents => #6
        #5, #6 -> SubscribeWhen
        -> DelaySubscription(DueTime=PT2S) => #8
        #3, #8 -> Merge
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\status.config)

        PublishSubject<System.String> EnvironmentAlertMessages
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\alerts.config)

        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.GroupByTime(ChunkSize=1)
        -> Skip(Count=1)
        -> SelectMany LocalFileCount => #16
            SubscribeSubject PathPrefix
            -> Bonsai.IO.GetDirectoryName
            -> PropertyMapping(Path)
            -> Bonsai.IO.GetFiles(Path=D:\ProjectAeon\presocial0.1, SearchPattern=*, SearchOption=AllDirectories)
            -> MemberSelector(Selector=Length) => #4
            WorkflowInput Source1
            -> Merge
            -> Take(Count=1) => #7
            #4, #7 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Count,
                Item2.GetTimestamp() as Timestamp)
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=LocalFileThreshold)) => #17
        #16, #17 -> Condition GreaterThan => #18
            WorkflowInput Source1
            -> MemberSelector(Selector=Count) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> GreaterThan(Operand=IntProperty(Value=500))
            -> WorkflowOutput
        -> Format
          Format:
            ## **File Storage**
            **Total Files in Local Storage**: {0}
          Selector=Count
        -> MulticastSubject EnvironmentAlertMessages
        #18 -> Aeon.Acquisition.FormatLogMessage(Format="", Selector=Count, Priority=Alert, Type=FileStorage, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraTop) => #23
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraWest) => #24
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraEast) => #25
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraNorth) => #26
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraSouth) => #27
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraPatch1) => #28
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraPatch2) => #29
        #23, #24, #25, #26, #27, #28, #29 -> Merge => #30
        -> Format
          Format:
            ## **Frame Dropped**
            **Camera**: {0}
            **Current Frame**: {1}
          Selector="Name,FrameID"
        -> MulticastSubject EnvironmentAlertMessages
        #30 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	{1}", Selector="Name,FrameID", Priority=Alert, Type=DroppedFrames, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject Annotations
        -> Condition Alert
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.Priority)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.PriorityLevel>(Value=Alert))
            -> WorkflowOutput
        -> Format
          Format:
            ## **Experimenter Annotation**
            **Message**: {0}
          Selector=Value.Message
        -> MulticastSubject EnvironmentAlertMessages

        IncludeWorkflow(Path=Extensions\SynchronizerMonitor.bonsai)
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #40
          Expression: DeviceCount != ExpectedDeviceCount || MaxDifference > 0 || Math.Abs((MeanTimestamp - DateTime.UtcNow).TotalMinutes) > 30
        -> Format
          Format:
            ## **Harp Synch**
            **Synchronizer Stats**: {0}
          Selector=it
        -> MulticastSubject EnvironmentAlertMessages
        #40 -> Aeon.Acquisition.FormatLogMessage
          Format="{0}	{1}	{2}	{3}	{4}"
          Selector="MeanRawTimestamp,MeanTimestamp,ExpectedDeviceCount,DeviceCount,MaxDifference"
          Priority=Alert
          Type=HarpSynch
          Timestamp=MeanRawTimestamp
        -> MulticastSubject AlertLogs

GroupWorkflow ControlPanel
    SubscribeSubject SubjectState => #0
    -> Condition Start
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Type)
        -> NotEqual(Operand=WorkflowProperty<Aeon.Acquisition.EnvironmentSubjectChangeType>(Value=Exit))
        -> WorkflowOutput
    -> MulticastSubject SubjectStart
    #0 -> Condition End
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Type)
        -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.EnvironmentSubjectChangeType>(Value=Exit))
        -> WorkflowOutput
    -> MulticastSubject SubjectStop

    Bonsai.Windows.Input.KeyDown(Filter="ShiftKey Space D0 P NumPad0 F1 Shift", SuppressRepetitions=false)
    -> MulticastSubject StartCameras

    Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey Space Prior PageUp D0 D1 A P Q NumPad0 NumPad1 F1 F2 Shift", SuppressRepetitions=false)
    -> MulticastSubject StopCameras

    Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu Space Next PageDown D0 D2 B P R NumPad0 NumPad2 F1 F3 Shift", SuppressRepetitions=false)
    -> GroupWorkflow ManualPellet1
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Aeon.Acquisition:TriggerPellet.bonsai, PatchEvents=Patch1, DeliverPellet=DeliverPelletPatch1)
        -> MulticastSubject ManualPellet1
        -> WorkflowOutput

    Bonsai.Windows.Input.KeyDown
      Filter: LButton RButton Cancel ShiftKey ControlKey Menu Pause Space Prior PageUp Next PageDown End D0 D1 D2 D3 A B C P Q R S NumPad0 NumPad1 NumPad2 NumPad3 F1 F2 F3 F4 Shift
      SuppressRepetitions=false
    -> GroupWorkflow ManualPellet2
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Aeon.Acquisition:TriggerPellet.bonsai, PatchEvents=Patch2, DeliverPellet=DeliverPelletPatch2)
        -> MulticastSubject ManualPellet2
        -> WorkflowOutput

    SubscribeSubject PatchState1
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item2 as D1,
        Item3 as Delta)
    -> Aeon.Acquisition.LabelControl(FontSize=14)
    -> GroupWorkflow Patch1
        WorkflowInput Source1
        -> WorkflowOutput

    SubscribeSubject PatchState2
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item2 as D1,
        Item3 as Delta)
    -> Aeon.Acquisition.LabelControl(FontSize=14)
    -> GroupWorkflow Patch2
        WorkflowInput Source1
        -> WorkflowOutput

    SubscribeSubject AudioAmbient
    -> MemberSelector(Selector=Value)

    GroupWorkflow PatchActivity
        SubscribeSubject CameraPatch1
        -> SampleInterval(Interval=PT0.02S)
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping => #3
        SubscribeSubject CameraPatch2
        -> SampleInterval(Interval=PT0.02S)
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping => #7
        SubscribeSubject PatchState
        -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=2))
        -> VisualizerMapping => #10
        SubscribeSubject PatchState
        -> Bonsai.Dsp.SelectChannels(Channels(int=1, int=3))
        -> VisualizerMapping => #13
        SubscribeSubject CurrentThresholdPatch1
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=PelletCount, ValueSelector=Threshold, SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow ThresholdPatch1
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #17
        SubscribeSubject CurrentThresholdPatch2
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=PelletCount, ValueSelector=Threshold, SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow ThresholdPatch2
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #21
        SubscribeSubject PelletMonitorValue1
        -> VisualizerMapping => #23
        SubscribeSubject PelletMonitorValue2
        -> VisualizerMapping => #25
        #3, #7, #10, #13, #17, #21, #23, #25 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchActivity
          ColumnCount=2
          RowCount=4
          ColumnStyles=""
          RowStyles=""
          CellSpans
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
        -> VisualizerMapping => #27
        Aeon.Acquisition.ExperimentProperties
        -> VisualizerMapping => #29
        SubscribeSubject TimeSpentOnPatches
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="Patch1,Patch2", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TimeSpentOnPatches
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #33
        SubscribeSubject TimeSinceLastVisit
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="Patch1,Patch2", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TimeSinceLastVisit
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #37
        SubscribeSubject TotalDistanceTravelled
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="Patch1,Patch2", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TotalDistanceTravelled
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #41
        #29, #33, #37, #41 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchStatistics(ColumnCount=1, RowCount=4, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #43
        #27, #43 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchActivity(ColumnCount=2, RowCount=1, ColumnStyles(ColumnStyle(SizeType=Percent, Width=70), ColumnStyle(SizeType=Percent, Width=30)), RowStyles="", CellSpans="")
        -> WorkflowOutput

    GroupWorkflow SubjectActivity
        SubscribeSubject Heatmap
        -> VisualizerMapping => #1
        SubscribeSubject Trajectory
        -> VisualizerMapping
        -> SubscribeSubject FrameTrajectory
        -> VisualizerMapping => #5
        #1, #5 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder SubjectActivity(ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput

    GroupWorkflow ExperimentMetadata
        SubscribeSubject PelletDeliveredPatch1
        -> Condition RisingEdge
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> IntProperty(Value=1) => #2
        SubscribeSubject Patch1 => #3
        #2, #3 -> Aeon.Acquisition.DispenserState(Name=Patch1)
        -> MulticastSubject Patch1Dispenser
        -> VisualizerMapping => #6
        SubscribeSubject PelletDeliveredPatch2
        -> Condition RisingEdge
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> IntProperty(Value=1) => #9
        SubscribeSubject Patch2 => #10
        #9, #10 -> Aeon.Acquisition.DispenserState(Name=Patch2)
        -> MulticastSubject Patch2Dispenser
        -> VisualizerMapping => #13
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.AnnotationSource
        -> MulticastSubject Annotations
        -> VisualizerMapping => #17
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.EnvironmentState
        -> MulticastSubject EnvironmentState
        -> VisualizerMapping => #21
        #6, #13, #17, #21 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder ExperimentMetadata
          ColumnCount=2
          RowCount=4
          ColumnStyles=""
          RowStyles=""
          CellSpans
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
        -> WorkflowOutput

        SubscribeSubject Patch1Dispenser
        -> Skip(Count=1)
        -> Condition Reset
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.DispenserEventType>(Value=Reset))
            -> WorkflowOutput
        -> MulticastSubject ResetFeederPatch1

        SubscribeSubject Patch2Dispenser
        -> Skip(Count=1)
        -> Condition Reset
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.DispenserEventType>(Value=Reset))
            -> WorkflowOutput
        -> MulticastSubject ResetFeederPatch2

    GroupWorkflow EnvironmentSubjectState
        SubscribeSubject VideoEvents => #0
        SubscribeSubject EnvironmentState
        -> PropertyMapping(EnvironmentState(Selector=Value.Type)) => #2
        #0, #2 -> Aeon.Acquisition.EnvironmentSubjectState(DatabasePath=Z:\aeon\colony\colony.csv, EnvironmentState=Maintenance)
        -> MulticastSubject SubjectState
        -> WorkflowOutput

GroupWorkflow RandomSyncPulse
    ExternalizedMapping(Lower, Upper)
    -> Defer InterPulseInterval
        ExternalizedMapping(Lower, Upper)
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=8, Upper=16)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT8.605S, Period=PT0S)
        -> WorkflowOutput
    -> Repeat
    -> MulticastSubject SynchPulse

    PublishSubject<System.Object> SynchPulse
    -> Bonsai.Harp.Expander.DigitalOutput(Command=Set, Mask=Output0)
    -> MulticastSubject SyncPulseCommand => #6
    ExternalizedMapping(DueTime) => #7
    #6, #7 -> Delay(DueTime=PT0.1S)
    -> Bonsai.Harp.Expander.DigitalOutput(Command=Clear, Mask=Output0)
    -> MulticastSubject SyncPulseCommand
    -> WorkflowOutput

Bonsai.Numerics.CreateRandom(Seed=nil)
-> AsyncSubject Random

ExternalizedMapping(EasyThreshold, EasyRate, HardThreshold, HardRate, StartThreshold, StartTimeout, InitThreshold, InitRate)
-> IncludeWorkflow
  Path=Extensions\TaskLogic.bonsai
  EasyThreshold=75
  EasyRate=0.01
  HardThreshold=75
  HardRate=0.0025
  StartThreshold=18
  StartTimeout=PT1H
  InitThreshold=75
  InitRate=10000

FloatProperty(Value=0)
-> MulticastSubject HeadStageLinearDriveSetPosition

SubscribeSubject TrackingTop => #12
-> MemberSelector(Selector=Item1[0].Centroid.X) => #13
#12 -> MemberSelector(Selector=Item1.ImageSize.Width)
-> PropertyMapping(Max) => #15
#13, #15 -> Bonsai.Dsp.Rescale(Min=0, Max=1440, RangeMin=-130, RangeMax=130, RescaleType=Linear) => #16
#12 -> MemberSelector(Selector=Item1[0].Centroid.Y) => #17
#12 -> MemberSelector(Selector=Item1.ImageSize.Height)
-> PropertyMapping(Max) => #19
#17, #19 -> Bonsai.Dsp.Rescale(Min=0, Max=1080, RangeMin=-105, RangeMax=105, RescaleType=Linear) => #20
#16, #20 -> Zip
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression: Math.Sqrt((Item1*Item1)+(Item2*Item2))
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression: Math.Sqrt((it*it)+(129.5*129.5))-129.5
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression: Math.Sqrt(((58.523-it)*(58.523-it))-(17*17))
-> Bonsai.Dsp.Rescale(Min=0, Max=56, RangeMin=1, RangeMax=0, RescaleType=Linear)
-> MulticastSubject HeadStageLinearDriveSetPosition

SubscribeSubject HeadStageLinearDrivePosition => #27
-> MemberSelector(Selector=Value)
#27 -> MemberSelector(Selector=Seconds)
-> TimeInterval
-> MemberSelector(Selector=Value) => #31
SubscribeSubject WheelPatch1 => #32
-> MemberSelector(Selector=Seconds) => #33
#31, #33 -> WithLatestFrom
-> Subtract
#32 -> MemberSelector(Selector=Value)
