<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Devices</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>ClockSynchronizer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PortName" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:TimestampGenerator.bonsai">
                    <PortName>COM5</PortName>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>VideoController</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PortName" />
                    <Property Name="GlobalTriggerFrequency" />
                    <Property Name="LocalTriggerFrequency" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:CameraController.bonsai">
                    <PortName>COM6</PortName>
                    <GlobalTriggerFrequency>50</GlobalTriggerFrequency>
                    <LocalTriggerFrequency>125</LocalTriggerFrequency>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>CameraTop</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="SerialNumber" />
                    <Property Name="Gain" />
                    <Property Name="Binning" />
                    <Property Name="TriggerSource" />
                    <Property Name="FrameEvents" />
                    <Property Name="TriggerFrequency" />
                    <Property Name="ExposureTime" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:SpinnakerVideoSource.bonsai">
                    <TriggerSource>GlobalTrigger</TriggerSource>
                    <TriggerFrequency>GlobalTriggerFrequency</TriggerFrequency>
                    <ExposureTime>7500</ExposureTime>
                    <SerialNumber>23032909</SerialNumber>
                    <Gain>0</Gain>
                    <Binning>1</Binning>
                    <FrameEvents>CameraTop</FrameEvents>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>CameraPatch1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="SerialNumber" />
                    <Property Name="Gain" />
                    <Property Name="Binning" />
                    <Property Name="TriggerSource" />
                    <Property Name="FrameEvents" />
                    <Property Name="TriggerFrequency" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:SpinnakerVideoSource.bonsai">
                    <TriggerSource>LocalTrigger</TriggerSource>
                    <TriggerFrequency>LocalTriggerFrequency</TriggerFrequency>
                    <ExposureTime>INF</ExposureTime>
                    <SerialNumber>23032815</SerialNumber>
                    <Gain>0</Gain>
                    <Binning>2</Binning>
                    <FrameEvents>CameraPatch1</FrameEvents>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>CameraPatch2</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="SerialNumber" />
                    <Property Name="Gain" />
                    <Property Name="Binning" />
                    <Property Name="TriggerSource" />
                    <Property Name="FrameEvents" />
                    <Property Name="TriggerFrequency" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:SpinnakerVideoSource.bonsai">
                    <TriggerSource>LocalTrigger</TriggerSource>
                    <TriggerFrequency>LocalTriggerFrequency</TriggerFrequency>
                    <ExposureTime>INF</ExposureTime>
                    <SerialNumber>23032817</SerialNumber>
                    <Gain>0</Gain>
                    <Binning>2</Binning>
                    <FrameEvents>CameraPatch2</FrameEvents>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>CameraPatch3</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="SerialNumber" />
                    <Property Name="Gain" />
                    <Property Name="Binning" />
                    <Property Name="TriggerSource" />
                    <Property Name="FrameEvents" />
                    <Property Name="TriggerFrequency" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:SpinnakerVideoSource.bonsai">
                    <TriggerSource>LocalTrigger</TriggerSource>
                    <TriggerFrequency>LocalTriggerFrequency</TriggerFrequency>
                    <ExposureTime>INF</ExposureTime>
                    <SerialNumber>23032829</SerialNumber>
                    <Gain>0</Gain>
                    <Binning>2</Binning>
                    <FrameEvents>CameraPatch3</FrameEvents>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraTop</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>RawImage</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TopView</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>162</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>400000</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:DrawContours">
          <cv:MaxLevel>1</cv:MaxLevel>
          <cv:Thickness>-1</cv:Thickness>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>NestMask</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Regions" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:MaskPolygon">
                <cv:Regions>
                  <cv:ArrayOfPoint>
                    <cv:Point>
                      <cv:X>1332</cv:X>
                      <cv:Y>482</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>1242</cv:X>
                      <cv:Y>481</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>1245</cv:X>
                      <cv:Y>586</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>1334</cv:X>
                      <cv:Y>579</cv:Y>
                    </cv:Point>
                  </cv:ArrayOfPoint>
                </cv:Regions>
                <cv:MaskType>Binary</cv:MaskType>
                <cv:FillValue>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>0</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:FillValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="BitwiseOr" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>ActiveMask</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>F4</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:SaveImage">
          <cv:FileName>mask.png</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Centroid" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:WriteLine" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>72</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ActiveMask</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SegmentationResult</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseAnd" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Patch1Wheel</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Regions" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:MaskPolygon">
                <cv:Regions>
                  <cv:ArrayOfPoint>
                    <cv:Point>
                      <cv:X>908</cv:X>
                      <cv:Y>528</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>931</cv:X>
                      <cv:Y>526</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>930</cv:X>
                      <cv:Y>547</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>908</cv:X>
                      <cv:Y>547</cv:Y>
                    </cv:Point>
                  </cv:ArrayOfPoint>
                </cv:Regions>
                <cv:MaskType>Binary</cv:MaskType>
                <cv:FillValue>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>0</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:FillValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Patch2Wheel</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Regions" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:MaskPolygon">
                <cv:Regions>
                  <cv:ArrayOfPoint>
                    <cv:Point>
                      <cv:X>611</cv:X>
                      <cv:Y>707</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>629</cv:X>
                      <cv:Y>716</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>618</cv:X>
                      <cv:Y>739</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>600</cv:X>
                      <cv:Y>729</cv:Y>
                    </cv:Point>
                  </cv:ArrayOfPoint>
                </cv:Regions>
                <cv:MaskType>Binary</cv:MaskType>
                <cv:FillValue>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>0</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:FillValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Patch3Wheel</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Regions" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:MaskPolygon">
                <cv:Regions>
                  <cv:ArrayOfPoint>
                    <cv:Point>
                      <cv:X>591</cv:X>
                      <cv:Y>361</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>609</cv:X>
                      <cv:Y>350</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>620</cv:X>
                      <cv:Y>370</cv:Y>
                    </cv:Point>
                    <cv:Point>
                      <cv:X>602</cv:X>
                      <cv:Y>382</cv:Y>
                    </cv:Point>
                  </cv:ArrayOfPoint>
                </cv:Regions>
                <cv:MaskType>Binary</cv:MaskType>
                <cv:FillValue>
                  <cv:Val0>0</cv:Val0>
                  <cv:Val1>0</cv:Val1>
                  <cv:Val2>0</cv:Val2>
                  <cv:Val3>0</cv:Val3>
                </cv:FillValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT1S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StartCameras</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ActiveMask</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>RawImage</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraPatch1</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraPatch2</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraPatch3</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="viz:TableLayoutPanelBuilder">
        <viz:ColumnCount>2</viz:ColumnCount>
        <viz:RowCount>2</viz:RowCount>
        <viz:ColumnStyles />
        <viz:RowStyles />
        <viz:CellSpans />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RawImage</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateCircle">
          <p1:Circle>
            <p1:Center>
              <p1:X>712</p1:X>
              <p1:Y>547</p1:Y>
            </p1:Center>
            <p1:Radius>985.318237</p1:Radius>
          </p1:Circle>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="8" Label="Source1" />
      <Edge From="3" To="20" Label="Source1" />
      <Edge From="3" To="24" Label="Source1" />
      <Edge From="3" To="25" Label="Source1" />
      <Edge From="3" To="26" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="15" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="12" To="18" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="22" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="42" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="42" Label="Source2" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="42" Label="Source3" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source4" />
      <Edge From="43" To="44" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>