<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Measures average pixel intensity across the light monitor camera.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="FrameEvents" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraLightMonitor</Name>
      </Expression>
      <Expression xsi:type="harp:ConvertTimestamped">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Average" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Val0</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="harp:Format">
        <harp:MessageType>Event</harp:MessageType>
        <harp:Register xsi:type="harp:FormatMessagePayload">
          <harp:Address>204</harp:Address>
          <harp:PayloadType>TimestampedFloat</harp:PayloadType>
        </harp:Register>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="LightMonitorEvents" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>LightMonitor</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>