<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:RepositoryLogController.bonsai">
        <RepositoryPath>..\..\</RepositoryPath>
        <DataPath>D:\ProjectAeon\model-training</DataPath>
        <FallbackPath>D:\Tests\model-training</FallbackPath>
        <ChunkSize>1</ChunkSize>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="WorkflowName" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:ExportMetadata.bonsai">
        <WorkflowName />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SynchronizerEvents</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogHarpState.bonsai">
        <LogName>ClockSynchronizer</LogName>
        <Heartbeats />
        <ClosingDuration xsi:nil="true" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>VideoEvents</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogHarpState.bonsai">
        <LogName>VideoController</LogName>
        <Heartbeats />
        <ClosingDuration xsi:nil="true" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraTop</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogVideo.bonsai">
        <Heartbeats />
        <ClosingDuration xsi:nil="true" />
        <LogName>CameraTop</LogName>
        <FrameRate>50</FrameRate>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrackingTop</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aeon:FormatBinaryRegions" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogHarpState.bonsai">
        <LogName>CameraTop</LogName>
        <Heartbeats />
        <ClosingDuration xsi:nil="true" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraWest</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogVideo.bonsai">
        <Heartbeats />
        <ClosingDuration xsi:nil="true" />
        <LogName>CameraWest</LogName>
        <FrameRate>50</FrameRate>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraEast</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogVideo.bonsai">
        <Heartbeats />
        <ClosingDuration xsi:nil="true" />
        <LogName>CameraEast</LogName>
        <FrameRate>50</FrameRate>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraNorth</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogVideo.bonsai">
        <Heartbeats />
        <ClosingDuration xsi:nil="true" />
        <LogName>CameraNorth</LogName>
        <FrameRate>50</FrameRate>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraSouth</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogVideo.bonsai">
        <Heartbeats />
        <ClosingDuration xsi:nil="true" />
        <LogName>CameraSouth</LogName>
        <FrameRate>50</FrameRate>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraNest</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogVideo.bonsai">
        <Heartbeats />
        <ClosingDuration xsi:nil="true" />
        <LogName>CameraNest</LogName>
        <FrameRate>50</FrameRate>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraPatch1</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogVideo.bonsai">
        <Heartbeats />
        <ClosingDuration xsi:nil="true" />
        <LogName>CameraPatch1</LogName>
        <FrameRate>125</FrameRate>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraPatch2</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogVideo.bonsai">
        <Heartbeats />
        <ClosingDuration xsi:nil="true" />
        <LogName>CameraPatch2</LogName>
        <FrameRate>125</FrameRate>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraPatch3</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogVideo.bonsai">
        <Heartbeats />
        <ClosingDuration xsi:nil="true" />
        <LogName>CameraPatch3</LogName>
        <FrameRate>125</FrameRate>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SubjectState</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
        <Heartbeats />
        <ClosingDuration xsi:nil="true" />
        <LogName>Environment_SubjectState</LogName>
        <Selector>Seconds,Value.Id,Value.Weight,Value.Type</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Annotations</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
        <Heartbeats />
        <ClosingDuration xsi:nil="true" />
        <LogName>Environment_MessageLog</LogName>
        <Selector>Seconds,Value.Priority,Value.Type,Value.Message</Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EnvironmentState</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:LogData.bonsai">
        <Heartbeats />
        <ClosingDuration xsi:nil="true" />
        <LogName>Environment_EnvironmentState</LogName>
        <Selector>Seconds,Value.Type</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>