<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:zmq="clr-namespace:Bonsai.ZeroMQ;assembly=Bonsai.ZeroMQ"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="aeon:RoomLightMessage">
        <rx:Name>Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aeon:RoomLightController">
          <aeon:PortName>COM10</aeon:PortName>
          <aeon:MessageDelay>PT0.1S</aeon:MessageDelay>
        </Combinator>
      </Expression>
      <Expression xsi:type="osc:Format">
        <osc:Address>/channel</osc:Address>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Buffer.Array</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="zmq:Publisher">
          <zmq:ConnectionString>@tcp://*:4303</zmq:ConnectionString>
          <zmq:Topic>LightEvents</zmq:Topic>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="zmq:Subscriber">
          <zmq:ConnectionString>@tcp://*:4304</zmq:ConnectionString>
          <zmq:Topic>LightCommands</zmq:Topic>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Last.Buffer</Selector>
      </Expression>
      <Expression xsi:type="osc:Parse">
        <osc:Address>/red_aeon4</osc:Address>
        <osc:TypeTag>i</osc:TypeTag>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Red</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Channels" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>RedLights</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Channels" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="dsp:SelectChannels,sys:Int32[]">
                    <MemberName>Channels</MemberName>
                    <Value>
                      <int>17</int>
                      <int>22</int>
                      <int>27</int>
                      <int>41</int>
                      <int>0</int>
                    </Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Channel" Selector="Item2" />
                      <Property Name="Value" Selector="Item1" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="aeon:CreateRoomLightMessage">
                      <aeon:Channel>0</aeon:Channel>
                      <aeon:Value>0</aeon:Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="osc:Parse">
        <osc:Address>/cold_aeon4</osc:Address>
        <osc:TypeTag>i</osc:TypeTag>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ColdWhite</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Channels" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>RedLights</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Channels" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="dsp:SelectChannels,sys:Int32[]">
                    <MemberName>Channels</MemberName>
                    <Value>
                      <int>6</int>
                      <int>31</int>
                      <int>15</int>
                      <int>36</int>
                      <int>37</int>
                    </Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Channel" Selector="Item2" />
                      <Property Name="Value" Selector="Item1" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="aeon:CreateRoomLightMessage">
                      <aeon:Channel>7</aeon:Channel>
                      <aeon:Value>254</aeon:Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="osc:Parse">
        <osc:Address>/warm_aeon4</osc:Address>
        <osc:TypeTag>i</osc:TypeTag>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>WarmWhite</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Channels" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>RedLights</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Channels" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="dsp:SelectChannels,sys:Int32[]">
                    <MemberName>Channels</MemberName>
                    <Value>
                      <int>46</int>
                      <int>23</int>
                      <int>29</int>
                      <int>24</int>
                      <int>44</int>
                    </Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Channel" Selector="Item2" />
                      <Property Name="Value" Selector="Item1" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="aeon:CreateRoomLightMessage">
                      <aeon:Channel>18</aeon:Channel>
                      <aeon:Value>254</aeon:Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="osc:Parse">
        <osc:Address>/red_aeon3</osc:Address>
        <osc:TypeTag>i</osc:TypeTag>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Red</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Channels" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>RedLights</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Channels" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="dsp:SelectChannels,sys:Int32[]">
                    <MemberName>Channels</MemberName>
                    <Value>
                      <int>28</int>
                      <int>39</int>
                      <int>13</int>
                      <int>4</int>
                    </Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Channel" Selector="Item2" />
                      <Property Name="Value" Selector="Item1" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="aeon:CreateRoomLightMessage">
                      <aeon:Channel>0</aeon:Channel>
                      <aeon:Value>0</aeon:Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="osc:Parse">
        <osc:Address>/cold_aeon3</osc:Address>
        <osc:TypeTag>i</osc:TypeTag>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ColdWhite</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Channels" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>RedLights</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Channels" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="dsp:SelectChannels,sys:Int32[]">
                    <MemberName>Channels</MemberName>
                    <Value>
                      <int>38</int>
                      <int>19</int>
                      <int>3</int>
                      <int>7</int>
                    </Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Channel" Selector="Item2" />
                      <Property Name="Value" Selector="Item1" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="aeon:CreateRoomLightMessage">
                      <aeon:Channel>7</aeon:Channel>
                      <aeon:Value>254</aeon:Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="osc:Parse">
        <osc:Address>/warm_aeon3</osc:Address>
        <osc:TypeTag>i</osc:TypeTag>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>WarmWhite</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Channels" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>RedLights</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Channels" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="dsp:SelectChannels,sys:Int32[]">
                    <MemberName>Channels</MemberName>
                    <Value>
                      <int>35</int>
                      <int>25</int>
                      <int>5</int>
                      <int>18</int>
                    </Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Channel" Selector="Item2" />
                      <Property Name="Value" Selector="Item1" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="aeon:CreateRoomLightMessage">
                      <aeon:Channel>18</aeon:Channel>
                      <aeon:Value>254</aeon:Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="10" Label="Source1" />
      <Edge From="6" To="13" Label="Source1" />
      <Edge From="6" To="16" Label="Source1" />
      <Edge From="6" To="19" Label="Source1" />
      <Edge From="6" To="22" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>