WorkflowBuilder(Version=2.8.1)
GroupWorkflow Metadata
    GroupWorkflow Devices
        GroupWorkflow ClockSynchronizer
            ExternalizedMapping(PortName)
            -> IncludeWorkflow(Path=Aeon.Acquisition:TimestampGenerator.bonsai, PortName=COM5)
            -> WorkflowOutput

        GroupWorkflow VideoController
            ExternalizedMapping(PortName, GlobalTriggerFrequency, LocalTriggerFrequency)
            -> IncludeWorkflow(Path=Aeon.Acquisition:CameraController.bonsai, PortName=COM6, GlobalTriggerFrequency=50, LocalTriggerFrequency=125)
            -> WorkflowOutput

        GroupWorkflow CameraTop
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23032909
              Gain=0
              Binning=1
              FrameEvents=CameraTop
            -> WorkflowOutput

        GroupWorkflow CameraWest
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23032816
              Gain=0
              Binning=1
              FrameEvents=CameraWest
            -> WorkflowOutput

        GroupWorkflow CameraEast
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23032824
              Gain=0
              Binning=1
              FrameEvents=CameraEast
            -> WorkflowOutput

        GroupWorkflow CameraNorth
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23032825
              Gain=0
              Binning=1
              FrameEvents=CameraNorth
            -> WorkflowOutput

        GroupWorkflow CameraSouth
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23031408
              Gain=0
              Binning=1
              FrameEvents=CameraSouth
            -> WorkflowOutput

        GroupWorkflow CameraNest
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23031407
              Gain=0
              Binning=1
              FrameEvents=CameraNest
            -> WorkflowOutput

        GroupWorkflow CameraPatch1
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23032817
              Gain=0
              Binning=2
              FrameEvents=CameraPatch1
            -> WorkflowOutput

        GroupWorkflow CameraPatch2
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23032815
              Gain=0
              Binning=2
              FrameEvents=CameraPatch2
            -> WorkflowOutput

        GroupWorkflow CameraPatch3
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23032829
              Gain=0
              Binning=2
              FrameEvents=CameraPatch3
            -> WorkflowOutput

        GroupWorkflow AudioAmbient
            ExternalizedMapping(DeviceName, SampleRate, Name)
            -> IncludeWorkflow AudioAmbient(Path=Aeon.Acquisition:AudioSource.bonsai, DeviceName="Microphone (UltraMic 192K 16 bi", SampleRate=192000)
            -> WorkflowOutput

        GroupWorkflow Patch1
            ExternalizedMapping(PortName, WheelDisplacement, PelletDelivered, DeliverPellet, PatchEvents, Radius, SampleRate, ResetFeeder, DueTime, Count)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:UndergroundFeeder.bonsai
              PatchEvents=Patch1
              SampleRate=SampleRate500Hz
              DeliverPellet=DeliverPelletPatch1
              PelletDelivered=PelletDeliveredPatch1
              DueTime=PT1S
              Count=2
              ResetFeeder=ResetFeederPatch1
              PortName=COM3
              Radius=-4
              WheelDisplacement=WheelPatch1
            -> WorkflowOutput

        GroupWorkflow Patch2
            ExternalizedMapping(PortName, WheelDisplacement, PelletDelivered, DeliverPellet, PatchEvents, Radius, SampleRate, ResetFeeder, DueTime, Count)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:UndergroundFeeder.bonsai
              PatchEvents=Patch2
              SampleRate=SampleRate500Hz
              DeliverPellet=DeliverPelletPatch2
              PelletDelivered=PelletDeliveredPatch2
              DueTime=PT1S
              Count=2
              ResetFeeder=ResetFeederPatch2
              PortName=COM4
              Radius=-4
              WheelDisplacement=WheelPatch2
            -> WorkflowOutput

        GroupWorkflow Patch3
            ExternalizedMapping(PortName, WheelDisplacement, PelletDelivered, DeliverPellet, PatchEvents, Radius, SampleRate, ResetFeeder, DueTime, Count)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:UndergroundFeeder.bonsai
              PatchEvents=Patch3
              SampleRate=SampleRate500Hz
              DeliverPellet=DeliverPelletPatch3
              PelletDelivered=PelletDeliveredPatch3
              DueTime=PT1S
              Count=2
              ResetFeeder=ResetFeederPatch3
              PortName=COM16
              Radius=-4
              WheelDisplacement=WheelPatch3
            -> WorkflowOutput

        GroupWorkflow RfidNestNE
            ExternalizedMapping(HardwareNotificationsState, PortName, RfidEvents, InboundRfidDetected)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:RfidReader.bonsai
              HardwareNotificationsState=None
              PortName=COM14
              RfidEvents=RfidEventsNestNE
              InboundRfidDetected=InboundRfidDetectedNestNE
            -> WorkflowOutput

        GroupWorkflow RfidNestNW
            ExternalizedMapping(HardwareNotificationsState, PortName, RfidEvents, InboundRfidDetected)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:RfidReader.bonsai
              HardwareNotificationsState=None
              PortName=COM15
              RfidEvents=RfidEventsNestNW
              InboundRfidDetected=InboundRfidDetectedNestNW
            -> WorkflowOutput

        GroupWorkflow RfidCorridor
            ExternalizedMapping(HardwareNotificationsState, PortName, RfidEvents, InboundRfidDetected)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:RfidReader.bonsai
              HardwareNotificationsState=None
              PortName=COM17
              RfidEvents=RfidEventsCorridor
              InboundRfidDetected=InboundRfidDetectedCorridor
            -> WorkflowOutput

        GroupWorkflow RfidWater
            ExternalizedMapping(HardwareNotificationsState, PortName, RfidEvents, InboundRfidDetected)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:RfidReader.bonsai
              HardwareNotificationsState=None
              PortName=COM18
              RfidEvents=RfidEventsWater
              InboundRfidDetected=InboundRfidDetectedWater
            -> WorkflowOutput

        GroupWorkflow RfidPatch1
            ExternalizedMapping(HardwareNotificationsState, PortName, RfidEvents, InboundRfidDetected)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:RfidReader.bonsai
              HardwareNotificationsState=None
              PortName=COM18
              RfidEvents=RfidEventsPatch1
              InboundRfidDetected=InboundRfidDetectedPatch1
            -> WorkflowOutput

        GroupWorkflow RfidPatch2
            ExternalizedMapping(HardwareNotificationsState, PortName, RfidEvents, InboundRfidDetected)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:RfidReader.bonsai
              HardwareNotificationsState=None
              PortName=COM13
              RfidEvents=RfidEventsPatch2
              InboundRfidDetected=InboundRfidDetectedPatch2
            -> WorkflowOutput

        GroupWorkflow RfidPatch3
            ExternalizedMapping(HardwareNotificationsState, PortName, RfidEvents, InboundRfidDetected)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:RfidReader.bonsai
              HardwareNotificationsState=None
              PortName=COM9
              RfidEvents=RfidEventsPatch3
              InboundRfidDetected=InboundRfidDetectedPatch3
            -> WorkflowOutput

    GroupWorkflow TrackingTop
        ExternalizedMapping(Name(DisplayName=FrameEvents))
        -> SubscribeSubject CameraTop => #1
        ExternalizedMapping(Mask, ThresholdValue, TrackingEvents) => #2
        #1, #2 -> IncludeWorkflow
          Path=Aeon.Acquisition:PositionTracking.bonsai
          ThresholdValue=83
          Mask=Config\ArenaMask-AEON3_2023-03-06.png
          TrackingCount=1
          TrackingEvents=TrackingTop
        -> WorkflowOutput

    GroupWorkflow ActivityCenter
        SubscribeSubject CameraTop
        -> IncludeWorkflow
          Path=Aeon.Acquisition:ActivityTracking.bonsai
          Regions(ArrayOfPoint(Point(X=76, Y=431), Point(X=404, Y=431), Point(X=404, Y=665), Point(X=76, Y=665)))
          ThresholdValue=10
          TrackingEvents=ActivityCenter
        -> WorkflowOutput

    GroupWorkflow ActivityArena
        SubscribeSubject CameraTop
        -> IncludeWorkflow(Path=Aeon.Acquisition:ActivityTracking.bonsai, Regions=nil, ThresholdValue=10, TrackingEvents=ActivityArena)
        -> WorkflowOutput

    GroupWorkflow ActiveRegion
        ExternalizedMapping(NestRegion, Patch1Region, Patch2Region, ArenaCenter, ArenaInnerRadius, ArenaOuterRadius)
        -> IncludeWorkflow
          Path=Extensions\ActiveRegion.bonsai
          NestRegion(ArrayOfPoint(Point(X=1332, Y=482), Point(X=1242, Y=481), Point(X=1245, Y=586), Point(X=1334, Y=579)))
          Patch1Region(ArrayOfPoint(Point(X=904, Y=167), Point(X=925, Y=181), Point(X=910, Y=215), Point(X=888, Y=201)))
          Patch2Region(ArrayOfPoint(Point(X=802, Y=875), Point(X=924, Y=861), Point(X=939, Y=894), Point(X=920, Y=904)))
          ArenaCenter(X=661, Y=557)
          ArenaInnerRadius=474
          ArenaOuterRadius=494
        -> WorkflowOutput

GroupWorkflow Declarations
    BehaviorSubject<Aeon.Acquisition.WeightMeasurement> FilteredWeightNest
    BehaviorSubject<Aeon.Acquisition.WeightMeasurement> SubjectWeight
    PublishSubject<Bonsai.Harp.Timestamped(System.Byte)> MissedPellets1
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> PatchState1
    PublishSubject<Bonsai.Harp.Timestamped(System.Byte)> MissedPellets2
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> PatchState2
    PublishSubject<Bonsai.Harp.Timestamped(System.Byte)> MissedPellets3
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> PatchState3
    PublishSubject<Bonsai.Harp.Timestamped(System.Double)> BaselineTrigger
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.LogMessage)> AlertLogs
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.LogMessage)> Annotations
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentStateMetadata)> EnvironmentState
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.DispenserStateMetadata)> Patch1Dispenser
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.DispenserStateMetadata)> Patch2Dispenser
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.DispenserStateMetadata)> Patch3Dispenser
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentSubjectStateMetadata)> SubjectState
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentSubjectStateMetadata)> SubjectStart
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentSubjectStateMetadata)> SubjectStop
    PublishSubject<Bonsai.Harp.Timestamped(Harp.OutputExpander.DigitalOutputs)> ManualPellet1
    PublishSubject<Bonsai.Harp.Timestamped(Harp.OutputExpander.DigitalOutputs)> ManualPellet2
    PublishSubject<Bonsai.Harp.Timestamped(Harp.OutputExpander.DigitalOutputs)> ManualPellet3
    PublishSubject<System.String> SubjectAlertMessages

GroupWorkflow Logging
    IncludeWorkflow(Path=Aeon.Acquisition:RepositoryLogController.bonsai, RepositoryPath=..\..\, DataPath=D:\ProjectAeon, FallbackPath=D:\Tests, ChunkSize=1)
    IncludeWorkflow(Path=Aeon.Acquisition:ExportMetadata.bonsai, WorkflowName=multianimal-test.bonsai)

    SubscribeSubject SynchronizerEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=ClockSynchronizer, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject VideoEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=VideoController, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject CameraTop
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraTop, FrameRate=50)

    SubscribeSubject TrackingTop
    -> Aeon.Acquisition.FormatBinaryRegions => #9
    GroupWorkflow RegionTracking
        SubscribeSubject InPatch2
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
          Expression: Value ? 5 : 0
        SubscribeSubject InPatch1
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
          Expression: Value ? 4 : 0
        SubscribeSubject InArena
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
          Expression: Value ? 3 : 0
        SubscribeSubject InCorridor
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
          Expression: Value ? 2 : 0
        SubscribeSubject InNest => #8
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #9
          Expression: Value ? 1 : 0
        #1, #3, #5, #7, #9 -> Zip
        -> Bonsai.Numerics.Max => #11
        #8 -> MemberSelector(Selector=Seconds) => #12
        #11, #12 -> Zip
        -> Aeon.Acquisition.CreateTimestamped
        -> WorkflowOutput
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #11
    #9, #11 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=CameraTop, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject CameraWest
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraWest, FrameRate=50)

    SubscribeSubject CameraEast
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraEast, FrameRate=50)

    SubscribeSubject CameraNorth
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraNorth, FrameRate=50)

    SubscribeSubject CameraSouth
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraSouth, FrameRate=50)

    SubscribeSubject CameraNest
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraNest, FrameRate=50)

    SubscribeSubject CameraPatch1
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraPatch1, FrameRate=125)

    SubscribeSubject CameraPatch2
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraPatch2, FrameRate=125)

    SubscribeSubject CameraPatch3
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraPatch3, FrameRate=125)

    SubscribeSubject Patch1 => #30
    SubscribeSubject Patch1Dispenser
    -> Aeon.Acquisition.FormatDispenserState => #32
    SubscribeSubject ManualPellet1
    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #34
    SubscribeSubject MissedPellets1
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=202, PayloadType=TimestampedU8)) => #36
    #30, #32, #34, #36 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Patch1, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject PatchState1
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #40
      Expression:
        new(
        Item1 as Threshold,
        Item2 as D1,
        Item3 as Delta)
    SubscribeSubject Patch1
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #42
    #40, #42 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=Patch1_State, Selector=nil)

    SubscribeSubject Patch2 => #45
    SubscribeSubject Patch2Dispenser
    -> Aeon.Acquisition.FormatDispenserState => #47
    SubscribeSubject ManualPellet2
    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #49
    SubscribeSubject MissedPellets2
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=202, PayloadType=TimestampedU8)) => #51
    #45, #47, #49, #51 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Patch2, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject PatchState2
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #55
      Expression:
        new(
        Item1 as Threshold,
        Item2 as D1,
        Item3 as Delta)
    SubscribeSubject Patch2
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #57
    #55, #57 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=Patch2_State, Selector=nil)

    SubscribeSubject Patch3 => #60
    SubscribeSubject Patch3Dispenser
    -> Aeon.Acquisition.FormatDispenserState => #62
    SubscribeSubject ManualPellet3
    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #64
    SubscribeSubject MissedPellets3
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=202, PayloadType=TimestampedU8)) => #66
    #60, #62, #64, #66 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Patch3, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject PatchState3
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #70
      Expression:
        new(
        Item1 as Threshold,
        Item2 as D1,
        Item3 as Delta)
    SubscribeSubject Patch3
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #72
    #70, #72 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=Patch3_State, Selector=nil)

    SubscribeSubject AudioAmbient
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogAudio.bonsai, Heartbeats="", ClosingDuration=nil, LogName=AudioAmbient, SampleRate=192000)

    SubscribeSubject SubjectState
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=""
      ClosingDuration=nil
      LogName=ExperimentalMetadata_SubjectState
      Selector="Seconds,Value.Id,Value.Weight,Value.Type"

    SubscribeSubject AlertLogs => #79
    SubscribeSubject Annotations => #80
    #79, #80 -> Merge
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=""
      ClosingDuration=nil
      LogName=ExperimentalMetadata_MessageLog
      Selector="Seconds,Value.Priority,Value.Type,Value.Message"

    SubscribeSubject EnvironmentState
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=ExperimentalMetadata_EnvironmentState, Selector="Seconds,Value.Type")

    SubscribeSubject SubjectState
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #86
      Expression:
        new(
        Seconds as Seconds,
        new(Value.Id as Id,
            Value.Type.ToString() as Event,
            "Environment" as Value) as Value)
    SubscribeSubject InPatch1
    -> IncludeWorkflow Patch1(Path=Extensions\FormatRegionVisits.bonsai) => #88
    SubscribeSubject InPatch2
    -> IncludeWorkflow Patch2(Path=Extensions\FormatRegionVisits.bonsai) => #90
    SubscribeSubject InArena
    -> IncludeWorkflow Arena(Path=Extensions\FormatRegionVisits.bonsai) => #92
    SubscribeSubject InCorridor
    -> IncludeWorkflow Corridor(Path=Extensions\FormatRegionVisits.bonsai) => #94
    SubscribeSubject InNest
    -> IncludeWorkflow Nest(Path=Extensions\FormatRegionVisits.bonsai) => #96
    #86, #88, #90, #92, #94, #96 -> Merge
    -> MemberSelector(Selector="Value,Seconds")
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=""
      ClosingDuration=nil
      LogName=ExperimentalMetadata_SubjectVisits
      Selector="Seconds,Value.Id,Value.Event,Value.Value"

    SubscribeSubject RfidEventsNestNE
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=RfidEventsNestNE, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject RfidEventsNestNW
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=RfidEventsNestNW, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject RfidEventsCorridor
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=RfidEventsCorridor, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject RfidEventsWater
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=RfidEventsWater, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject RfidEventsPatch1
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=RfidEventsPatch1, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject RfidEventsPatch2
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=RfidEventsPatch2, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject RfidEventsPatch3
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=RfidEventsPatch3, Heartbeats="", ClosingDuration=nil)

    Timer(DueTime=PT0S, Period=PT0.1S)
    -> AvailableMemory => #115
    SubscribeSubject GlobalTrigger
    -> MemberSelector(Selector=Seconds) => #117
    #115, #117 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=System_AvailableMemory, Selector=nil)

GroupWorkflow Visualization
    SubscribeSubject TrackingTop
    -> MemberSelector(Selector=Item1[0].Centroid)
    -> PublishSubject Trajectory

    SubscribeSubject CameraTop
    -> MemberSelector(Selector=Value.Image)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject FrameTrajectory

    SubscribeSubject TrackingTop
    -> MemberSelector(Selector=Item1[0].Centroid)
    -> Bonsai.Dsp.Histogram2D(MinX=0, MaxX=1440, MinY=0, MaxY=1080, BinsX=288, BinsY=216, Normalize=false, Accumulate=true)
    -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=20, Shift=0)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject Heatmap

    SubscribeSubject DistanceState1 => #14
    SubscribeSubject DistanceState2 => #15
    SubscribeSubject DistanceState3 => #16
    SubscribeSubject PatchState1
    -> MemberSelector(Selector=Item1) => #18
    SubscribeSubject PatchState2
    -> MemberSelector(Selector=Item1) => #20
    SubscribeSubject PatchState3
    -> MemberSelector(Selector=Item1) => #22
    #14, #15, #16, #18, #20, #22 -> CombineLatest => #23
    #23, #14 -> Sample
    -> Bonsai.Dsp.Buffer(Count=15, Skip=nil)
    -> PublishSubject PatchState

    SubscribeSubject PatchState1
    -> GroupWorkflow ToArray => #28
        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> IgnoreElements
        -> ToArray => #3
        WorkflowInput Source1
        -> SelectMany
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> ToArray
            -> WorkflowOutput
        -> DelaySubscription(DueTime=PT0.1S) => #6
        #3, #6 -> Concat
        -> WorkflowOutput
    SubscribeSubject DeliveryCount1 => #29
    #28, #29 -> WithLatestFrom
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        int32(Item2) as PelletCount,
        Item1 as Threshold)
    -> PublishSubject CurrentThresholdPatch1

    SubscribeSubject PatchState2
    -> GroupWorkflow ToArray => #35
        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> IgnoreElements
        -> ToArray => #3
        WorkflowInput Source1
        -> SelectMany
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> ToArray
            -> WorkflowOutput
        -> DelaySubscription(DueTime=PT0.1S) => #6
        #3, #6 -> Concat
        -> WorkflowOutput
    SubscribeSubject DeliveryCount2 => #36
    #35, #36 -> WithLatestFrom
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        int32(Item2) as PelletCount,
        Item1 as Threshold)
    -> PublishSubject CurrentThresholdPatch2

    SubscribeSubject PatchState3
    -> GroupWorkflow ToArray => #42
        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> IgnoreElements
        -> ToArray => #3
        WorkflowInput Source1
        -> SelectMany
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> ToArray
            -> WorkflowOutput
        -> DelaySubscription(DueTime=PT0.1S) => #6
        #3, #6 -> Concat
        -> WorkflowOutput
    SubscribeSubject DeliveryCount3 => #43
    #42, #43 -> WithLatestFrom
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        int32(Item2) as PelletCount,
        Item1 as Threshold)
    -> PublishSubject CurrentThresholdPatch3

    IncludeWorkflow(Path=Extensions\PelletMonitor.bonsai, PelletCommand=Patch1, PelletDelivered=PelletDeliveredPatch1)
    -> PublishSubject PelletMonitor1
    -> MemberSelector(Selector=Value)
    -> PublishSubject PelletMonitorValue1

    IncludeWorkflow(Path=Extensions\PelletMonitor.bonsai, PelletCommand=Patch2, PelletDelivered=PelletDeliveredPatch2)
    -> BehaviorSubject PelletMonitor2
    -> MemberSelector(Selector=Value)
    -> PublishSubject PelletMonitorValue2

    IncludeWorkflow(Path=Extensions\PelletMonitor.bonsai, PelletCommand=Patch3, PelletDelivered=PelletDeliveredPatch3)
    -> BehaviorSubject PelletMonitor3
    -> MemberSelector(Selector=Value)
    -> PublishSubject PelletMonitorValue3

    SubscribeSubject TimeOnPatch1 => #60
    SubscribeSubject TimeOnPatch2 => #61
    SubscribeSubject TimeOnPatch3 => #62
    #60, #61, #62 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Time Spent on Patch (s)" as Id,
        Item1 as Patch1,
        Item2 as Patch2,
        Item3 as Patch3)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TimeSpentOnPatches

    SubscribeSubject TimeSinceLastVisit1 => #67
    SubscribeSubject TimeSinceLastVisit2 => #68
    SubscribeSubject TimeSinceLastVisit3 => #69
    #67, #68, #69 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Time Since Last Visit (s)" as Id,
        Item1 as Patch1,
        Item2 as Patch2,
        Item3 as Patch3)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TimeSinceLastVisit

    SubscribeSubject WheelPatch1
    -> MemberSelector(Selector=Value)
    -> Accumulate => #76
    SubscribeSubject WheelPatch2
    -> MemberSelector(Selector=Value)
    -> Accumulate => #79
    SubscribeSubject WheelPatch3
    -> MemberSelector(Selector=Value)
    -> Accumulate => #82
    #76, #79, #82 -> CombineLatest
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Total Distance Travelled (cm)" as Id,
        Item1 as Patch1,
        Item2 as Patch2,
        Item3 as Patch3)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TotalDistanceTravelled

    IncludeWorkflow(Path=Aeon.Acquisition:TimeSpentOnWheel.bonsai, Patch=Patch1, WheelPatch=WheelPatch1, Threshold=0.0003, LowPass=1)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> BehaviorSubject TimeOnPatch1

    SubscribeSubject TimeOnPatch1
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> DistinctUntilChanged
    -> IncludeWorkflow(Path=Aeon.Acquisition:TimeSinceLastEvent.bonsai)
    -> BehaviorSubject TimeSinceLastVisit1

    IncludeWorkflow(Path=Aeon.Acquisition:TimeSpentOnWheel.bonsai, Patch=Patch2, WheelPatch=WheelPatch2, Threshold=0.0003, LowPass=1)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> BehaviorSubject TimeOnPatch2

    SubscribeSubject TimeOnPatch2
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> DistinctUntilChanged
    -> IncludeWorkflow(Path=Aeon.Acquisition:TimeSinceLastEvent.bonsai)
    -> BehaviorSubject TimeSinceLastVisit2

    IncludeWorkflow(Path=Aeon.Acquisition:TimeSpentOnWheel.bonsai, Patch=Patch3, WheelPatch=WheelPatch3, Threshold=0.0003, LowPass=1)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> BehaviorSubject TimeOnPatch3

    SubscribeSubject TimeOnPatch3
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> DistinctUntilChanged
    -> IncludeWorkflow(Path=Aeon.Acquisition:TimeSinceLastEvent.bonsai)
    -> BehaviorSubject TimeSinceLastVisit3

    SubscribeSubject ActivityCenter
    -> Condition ActivityCondition => #113
        WorkflowInput Source1
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=BaselineActivityThreshold)) => #2
        #1, #2 -> GreaterThan(Operand=DoubleProperty(Value=1))
        -> WorkflowOutput
    ExternalizedMapping(Interval(DisplayName=BaselineRefractoryPeriod)) => #114
    #113, #114 -> GateInterval(Interval=PT5S)
    -> MulticastSubject BaselineTrigger

    SubscribeSubject SubjectWeight => #117
    SubscribeSubject SubjectStart
    -> MemberSelector(Selector=Value.ReferenceWeight) => #119
    #117, #119 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1.Timestamp as Timestamp,
        Item1.Value as CurrentWeight,
        100 * Item1.Value / Item2 as CurrentPercent)
    -> BehaviorSubject PercentWeightLoss

    IncludeWorkflow
      Path=Extensions\PelletMissed.bonsai
      PelletDelivered=PelletDeliveredPatch1
      TimeToMiss=PT2S
      DistanceToMiss=20
      TimeInChute=PT0S
      WheelDisplacement=WheelPatch1
    -> MulticastSubject MissedPellets1

    IncludeWorkflow
      Path=Extensions\PelletMissed.bonsai
      PelletDelivered=PelletDeliveredPatch2
      TimeToMiss=PT2S
      DistanceToMiss=20
      TimeInChute=PT0S
      WheelDisplacement=WheelPatch2
    -> MulticastSubject MissedPellets2

    SubscribeSubject PelletDeliveredPatch1
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalPelletsDelivered1(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject PelletDeliveredPatch2
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalPelletsDelivered2(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject MissedPellets1
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalMissedPellets1(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject MissedPellets2
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalMissedPellets2(Path=Extensions\PersistentCounter.bonsai)

    GroupWorkflow SubjectAlerts
        SubscribeSubject SubjectAlertMessages
        -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\alerts.config)

        SubscribeSubject PelletMonitor1 => #3
        ExternalizedMapping(Count(DisplayName=DeliveryFailureThreshold)) => #4
        #3, #4 -> Condition DispenserBroken
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
              Expression: Value ? 1 : 0
            ExternalizedMapping(Count) => #2
            #1, #2 -> BufferCount(Count=5, Skip=1)
            -> Add => #4
            #4, #2 -> GroupWorkflow Equal
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Count)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=5)) => #2
                #0 -> Equal(Operand=IntProperty(Value=0)) => #3
                #2, #3 -> Zip
                -> LogicalOr
                -> WorkflowOutput
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #6
        -> Format
          Format:
            ## **Dispenser Broken**
            **Patch**: Patch1
          Selector=""
        -> MulticastSubject SubjectAlertMessages
        #6 -> Aeon.Acquisition.FormatLogMessage(Format=Patch1, Selector="", Priority=Alert, Type=DispenserBroken, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs
        SubscribeSubject PelletMonitor2 => #11
        #11, #4 -> Condition DispenserBroken
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
              Expression: Value ? 1 : 0
            ExternalizedMapping(Count) => #2
            #1, #2 -> BufferCount(Count=5, Skip=1)
            -> Add => #4
            #4, #2 -> GroupWorkflow Equal
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Count)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=5)) => #2
                #0 -> Equal(Operand=IntProperty(Value=0)) => #3
                #2, #3 -> Zip
                -> LogicalOr
                -> WorkflowOutput
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #13
        -> Format
          Format:
            ## **Dispenser Broken**
            **Patch**: Patch2
          Selector=""
        -> MulticastSubject SubjectAlertMessages
        #13 -> Aeon.Acquisition.FormatLogMessage(Format=Patch2, Selector="", Priority=Alert, Type=DispenserBroken, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject MissedPellets1
        -> ElementIndex
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #20
        SubscribeSubject SubjectState => #21
        #20, #21 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
          Expression:
            new(
            Item1.Value.Seconds as Timestamp,
            Item1.Index + 1 as Count,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Missed Pellet**
            **Subject**: {0}
            **Patch:**: Patch1
            **Total Missed**: {1}
          Selector="Id,Count"
        -> MulticastSubject SubjectAlertMessages
        #23 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	Patch1	{1}", Selector="Id,Count", Priority=Alert, Type=MissedPellet, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject MissedPellets2
        -> ElementIndex
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #30
        SubscribeSubject SubjectState => #31
        #30, #31 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #33
          Expression:
            new(
            Item1.Value.Seconds as Timestamp,
            Item1.Index + 1 as Count,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Missed Pellet**
            **Subject**: {0}
            **Patch:**: Patch2
            **Total Missed**: {1}
          Selector="Id,Count"
        -> MulticastSubject SubjectAlertMessages
        #33 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	Patch2	{1}", Selector="Id,Count", Priority=Alert, Type=MissedPellet, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject TrackingTop
        -> GroupWorkflow SpeedThreshold
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1[0].Centroid)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Dsp.Norm(NormType=L2) => #3
            ExternalizedMapping(Value(DisplayName=MaxSpeed)) => #4
            #3, #4 -> GreaterThan(Operand=DoubleProperty(Value=500)) => #5
            #0 -> MemberSelector(Selector=Item2) => #6
            #5, #6 -> Zip
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> WorkflowOutput
        -> Condition TrackingUnstable
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #41
        SubscribeSubject SubjectState => #42
        #41, #42 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #44
          Expression:
            new(
            Item1.Item2 as Timestamp,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Tracking Failure**
            **Subject**: {0}
          Selector=Id
        -> MulticastSubject SubjectAlertMessages
        #44 -> Aeon.Acquisition.FormatLogMessage(Format={0}, Selector=Id, Priority=Alert, Type=TrackingFailure, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)

    GroupWorkflow EnvironmentAlerts
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.GroupByTime(ChunkSize=1)
        -> Skip(Count=1)
        -> SelectMany ExperimentSummary => #3
            SubscribeSubject PatchState1
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression:
                new(
                Item1 as Threshold,
                Item2 as D0,
                Item3 as Delta)
            SubscribeSubject PatchState2
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression:
                new(
                Item1 as Threshold,
                Item2 as D0,
                Item3 as Delta)
            SubscribeSubject Patch1Dispenser
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Value) => #8
            SubscribeSubject Patch2Dispenser
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Value) => #11
            #2, #5, #8, #11 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
              Expression:
                new(
                Item1 as PatchState1,
                Item2 as PatchState2,
                Item3 as PatchDispenser1,
                Item4 as PatchDispenser2)
            SubscribeSubject TimeOnPatch2
            -> Take(Count=1) => #15
            SubscribeSubject TimeOnPatch1
            -> Take(Count=1) => #17
            SubscribeSubject TimeSinceLastVisit2
            -> Take(Count=1) => #19
            SubscribeSubject TimeSinceLastVisit1
            -> Take(Count=1) => #21
            #15, #17, #19, #21 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
              Expression:
                new(
                Item1 as TimeOnPatch2,
                Item2 as TimeOnPatch1,
                Item3 as TimeSinceLastVisit2,
                Item4 as TimeSinceLastVisit1)
            SubscribeSubject SubjectState
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Id) => #26
            SubscribeSubject PercentWeightLoss
            -> MemberSelector(Selector="CurrentWeight,CurrentPercent") => #28
            FloatProperty(Value=0)
            -> MemberSelector(Selector="it,it") => #30
            #28, #30 -> Merge
            -> Take(Count=1)
            -> Take(Count=1) => #33
            WorkflowInput Source1
            -> Take(Count=1)
            -> MemberSelector(Selector=Key) => #36
            SubscribeSubject TotalPelletsDelivered1 => #37
            SubscribeSubject TotalPelletsDelivered2 => #38
            SubscribeSubject TotalMissedPellets1 => #39
            SubscribeSubject TotalMissedPellets2 => #40
            #37, #38, #39, #40 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #42
              Expression:
                new(
                Item1 as TotalPelletsDelivered1,
                Item2 as TotalPelletsDelivered2,
                Item3 as TotalMissedPellets1,
                Item4 as TotalMissedPellets2)
            #13, #23, #26, #33, #36, #42 -> Zip
            -> Take(Count=1) => #44
            -> Format => #45
              Format:
                # Arena Status
                **Time**: {0}
                **Subject**: {1}
                **Weight**: {2}
                **Weight Loss**: {3}
              Selector="Item5,Item3,Item4.Item1,Item4.Item2"
            #44 -> Format => #46
              Format:
                # Patch1
                **Pellets**: {0}
                **Threshold**: {1}
                **D0**: {2}
                **Delta**: {3}
                **Time On Patch**: {4}
                **Time Since Last Visit**: {5}
                **Total Pellets Delivered**: {6}
                **Total Missed Pellets**: {7}
              Selector: Item1.PatchDispenser1,Item1.PatchState1.Threshold,Item1.PatchState1.D0,Item1.PatchState1.Delta,Item2.TimeOnPatch1,Item2.TimeSinceLastVisit1,Item6.TotalPelletsDelivered1,Item6.TotalMissedPellets1
            #44 -> Format => #47
              Format:
                # Patch2
                **Pellets**: {0}
                **Threshold**: {1}
                **D0**: {2}
                **Delta**: {3}
                **Time On Patch**: {4}
                **Time Since Last Visit**: {5}
                **Total Pellets Delivered**: {6}
                **Total Missed Pellets**: {7}
              Selector: Item1.PatchDispenser2,Item1.PatchState2.Threshold,Item1.PatchState2.D0,Item1.PatchState2.Delta,Item2.TimeOnPatch2,Item2.TimeSinceLastVisit2,Item6.TotalPelletsDelivered2,Item6.TotalMissedPellets2
            #45, #46, #47 -> Zip
            -> Add
            -> WorkflowOutput
        SubscribeSubject EnvironmentState
        -> Format => #5
          Format:
            ## Arena {0} Mode Change
            Mode: {1}
          Selector="Value.Name,Value.Type"
        SubscribeSubject VideoEvents => #6
        #5, #6 -> SubscribeWhen
        -> DelaySubscription(DueTime=PT2S) => #8
        #3, #8 -> Merge
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\status.config)

        PublishSubject<System.String> EnvironmentAlertMessages
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\alerts.config)

        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.GroupByTime(ChunkSize=1)
        -> Skip(Count=1)
        -> SelectMany LocalFileCount => #16
            SubscribeSubject PathPrefix
            -> Bonsai.IO.GetDirectoryName
            -> PropertyMapping(Path)
            -> Bonsai.IO.GetFiles(Path=D:\ProjectAeon\presocial0.1, SearchPattern=*, SearchOption=AllDirectories)
            -> MemberSelector(Selector=Length) => #4
            WorkflowInput Source1
            -> Merge
            -> Take(Count=1) => #7
            #4, #7 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Count,
                Item2.GetTimestamp() as Timestamp)
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=LocalFileThreshold)) => #17
        #16, #17 -> Condition GreaterThan => #18
            WorkflowInput Source1
            -> MemberSelector(Selector=Count) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> GreaterThan(Operand=IntProperty(Value=500))
            -> WorkflowOutput
        -> Format
          Format:
            ## **File Storage**
            **Total Files in Local Storage**: {0}
          Selector=Count
        -> MulticastSubject EnvironmentAlertMessages
        #18 -> Aeon.Acquisition.FormatLogMessage(Format="", Selector=Count, Priority=Alert, Type=FileStorage, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraTop) => #23
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraWest) => #24
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraEast) => #25
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraNorth) => #26
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraSouth) => #27
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraPatch1) => #28
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraPatch2) => #29
        #23, #24, #25, #26, #27, #28, #29 -> Merge => #30
        -> Format
          Format:
            ## **Frame Dropped**
            **Camera**: {0}
            **Current Frame**: {1}
          Selector="Name,FrameID"
        -> MulticastSubject EnvironmentAlertMessages
        #30 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	{1}", Selector="Name,FrameID", Priority=Alert, Type=DroppedFrames, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject Annotations
        -> Condition Alert
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.Priority)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.PriorityLevel>(Value=Alert))
            -> WorkflowOutput
        -> Format
          Format:
            ## **Experimenter Annotation**
            **Message**: {0}
          Selector=Value.Message
        -> MulticastSubject EnvironmentAlertMessages

        IncludeWorkflow(Path=Extensions\SynchronizerMonitor.bonsai) => #39
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #40
          Expression: DeviceCount != ExpectedDeviceCount || MaxDifference > 0 || Math.Abs((MeanTimestamp - DateTime.UtcNow).TotalMinutes) > 30
        -> Format
          Format:
            ## **Harp Synch**
            **Synchronizer Stats**: {0}
          Selector=it
        -> MulticastSubject EnvironmentAlertMessages
        #40 -> Aeon.Acquisition.FormatLogMessage
          Format="{0}	{1}	{2}	{3}	{4}"
          Selector="MeanRawTimestamp,MeanTimestamp,ExpectedDeviceCount,DeviceCount,MaxDifference"
          Priority=Alert
          Type=HarpSynch
          Timestamp=MeanRawTimestamp
        -> MulticastSubject AlertLogs
        #39 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName=D:\TimestampClockSyncHeartBeat\TimestampClockSyncHeartBeat.csv, Append=true, Overwrite=false, Suffix=None, IncludeHeader=true)

GroupWorkflow ControlPanel
    SubscribeSubject SubjectState => #0
    -> Condition Start
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Type)
        -> NotEqual(Operand=WorkflowProperty<Aeon.Acquisition.EnvironmentSubjectChangeType>(Value=Exit))
        -> WorkflowOutput
    -> MulticastSubject SubjectStart
    #0 -> Condition End
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Type)
        -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.EnvironmentSubjectChangeType>(Value=Exit))
        -> WorkflowOutput
    -> MulticastSubject SubjectStop

    Bonsai.Windows.Input.KeyDown(Filter="ShiftKey Space D0 P NumPad0 F1 Shift", SuppressRepetitions=false)
    -> MulticastSubject StartCameras

    Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey Space Prior PageUp D0 D1 A P Q NumPad0 NumPad1 F1 F2 Shift", SuppressRepetitions=false)
    -> MulticastSubject StopCameras

    Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu Space Next PageDown D0 D2 B P R NumPad0 NumPad2 F1 F3 Shift", SuppressRepetitions=false)
    -> GroupWorkflow ManualPellet1
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Aeon.Acquisition:TriggerPellet.bonsai, PatchEvents=Patch1, DeliverPellet=DeliverPelletPatch1)
        -> MulticastSubject ManualPellet1
        -> WorkflowOutput

    Bonsai.Windows.Input.KeyDown
      Filter: LButton RButton Cancel ShiftKey ControlKey Menu Pause Space Prior PageUp Next PageDown End D0 D1 D2 D3 A B C P Q R S NumPad0 NumPad1 NumPad2 NumPad3 F1 F2 F3 F4 Shift
      SuppressRepetitions=false
    -> GroupWorkflow ManualPellet2
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Aeon.Acquisition:TriggerPellet.bonsai, PatchEvents=Patch2, DeliverPellet=DeliverPelletPatch2)
        -> MulticastSubject ManualPellet2
        -> WorkflowOutput

    SubscribeSubject PatchState1
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item2 as D1,
        Item3 as Delta)
    -> Aeon.Acquisition.LabelControl(FontSize=14)
    -> GroupWorkflow Patch1
        WorkflowInput Source1
        -> WorkflowOutput

    SubscribeSubject PatchState2
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item2 as D1,
        Item3 as Delta)
    -> Aeon.Acquisition.LabelControl(FontSize=14)
    -> GroupWorkflow Patch2
        WorkflowInput Source1
        -> WorkflowOutput

    SubscribeSubject AudioAmbient
    -> MemberSelector(Selector=Value)

    GroupWorkflow PatchActivity
        SubscribeSubject CameraPatch1
        -> SampleInterval(Interval=PT0.02S)
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping => #3
        SubscribeSubject CameraPatch2
        -> SampleInterval(Interval=PT0.02S)
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping => #7
        SubscribeSubject CameraPatch3
        -> SampleInterval(Interval=PT0.02S)
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping => #11
        SubscribeSubject PatchState
        -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=3))
        -> VisualizerMapping => #14
        SubscribeSubject PatchState
        -> Bonsai.Dsp.SelectChannels(Channels(int=1, int=4))
        -> VisualizerMapping => #17
        SubscribeSubject PatchState
        -> Bonsai.Dsp.SelectChannels(Channels(int=2, int=5))
        -> VisualizerMapping => #20
        SubscribeSubject CurrentThresholdPatch1
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=PelletCount, ValueSelector=Threshold, SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow ThresholdPatch1
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #24
        SubscribeSubject CurrentThresholdPatch2
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=PelletCount, ValueSelector=Threshold, SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow ThresholdPatch2
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #28
        SubscribeSubject CurrentThresholdPatch3
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=PelletCount, ValueSelector=Threshold, SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow ThresholdPatch3
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #32
        SubscribeSubject PelletMonitorValue1
        -> VisualizerMapping => #34
        SubscribeSubject PelletMonitorValue2
        -> VisualizerMapping => #36
        SubscribeSubject PelletMonitorValue3
        -> VisualizerMapping => #38
        #3, #7, #11, #14, #17, #20, #24, #28, #32, #34, #36, #38 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchActivity
          ColumnCount=3
          RowCount=4
          ColumnStyles=""
          RowStyles=""
          CellSpans
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
        -> VisualizerMapping => #40
        Aeon.Acquisition.ExperimentProperties
        -> VisualizerMapping => #42
        SubscribeSubject TimeSpentOnPatches
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="Patch1,Patch2,Patch3", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TimeSpentOnPatches
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #46
        SubscribeSubject TimeSinceLastVisit
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="Patch1,Patch2,Patch3", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TimeSinceLastVisit
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #50
        SubscribeSubject TotalDistanceTravelled
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="Patch1,Patch2,Patch3", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TotalDistanceTravelled
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #54
        #42, #46, #50, #54 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchStatistics(ColumnCount=1, RowCount=4, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #56
        #40, #56 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchActivity(ColumnCount=2, RowCount=1, ColumnStyles(ColumnStyle(SizeType=Percent, Width=60), ColumnStyle(SizeType=Percent, Width=40)), RowStyles="", CellSpans="")
        -> WorkflowOutput

    GroupWorkflow SubjectActivity
        SubscribeSubject Heatmap
        -> VisualizerMapping => #1
        SubscribeSubject Trajectory
        -> VisualizerMapping
        -> SubscribeSubject FrameTrajectory
        -> VisualizerMapping => #5
        #1, #5 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder SubjectActivity(ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput

    GroupWorkflow ExperimentMetadata
        SubscribeSubject PelletDeliveredPatch1
        -> Condition RisingEdge
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> IntProperty(Value=1) => #2
        SubscribeSubject Patch1 => #3
        #2, #3 -> Aeon.Acquisition.DispenserState(Name=Patch1)
        -> MulticastSubject Patch1Dispenser
        -> VisualizerMapping => #6
        SubscribeSubject PelletDeliveredPatch2
        -> Condition RisingEdge
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> IntProperty(Value=1) => #9
        SubscribeSubject Patch2 => #10
        #9, #10 -> Aeon.Acquisition.DispenserState(Name=Patch2)
        -> MulticastSubject Patch2Dispenser
        -> VisualizerMapping => #13
        SubscribeSubject PelletDeliveredPatch3
        -> Condition RisingEdge
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> IntProperty(Value=1) => #16
        SubscribeSubject Patch3 => #17
        #16, #17 -> Aeon.Acquisition.DispenserState(Name=Patch3)
        -> MulticastSubject Patch3Dispenser
        -> VisualizerMapping => #20
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.AnnotationSource
        -> MulticastSubject Annotations
        -> VisualizerMapping => #24
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.EnvironmentState
        -> MulticastSubject EnvironmentState
        -> VisualizerMapping => #28
        #6, #13, #20, #24, #28 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder ExperimentMetadata
          ColumnCount=3
          RowCount=4
          ColumnStyles=""
          RowStyles=""
          CellSpans
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
        -> WorkflowOutput

        SubscribeSubject Patch1Dispenser
        -> Skip(Count=1)
        -> Condition Reset
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.DispenserEventType>(Value=Reset))
            -> WorkflowOutput
        -> MulticastSubject ResetFeederPatch1

        SubscribeSubject Patch2Dispenser
        -> Skip(Count=1)
        -> Condition Reset
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.DispenserEventType>(Value=Reset))
            -> WorkflowOutput
        -> MulticastSubject ResetFeederPatch2

        SubscribeSubject Patch3Dispenser
        -> Skip(Count=1)
        -> Condition Reset
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.DispenserEventType>(Value=Reset))
            -> WorkflowOutput
        -> MulticastSubject ResetFeederPatch3

    GroupWorkflow EnvironmentSubjectState
        SubscribeSubject VideoEvents => #0
        SubscribeSubject EnvironmentState
        -> PropertyMapping(EnvironmentState(Selector=Value.Type)) => #2
        #0, #2 -> Aeon.Acquisition.EnvironmentSubjectState(DatabasePath=Z:\aeon\colony\colony.csv, EnvironmentState=Maintenance)
        -> MulticastSubject SubjectState
        -> WorkflowOutput

Bonsai.Numerics.CreateRandom(Seed=nil)
-> AsyncSubject Random

ExternalizedMapping(EasyThreshold, EasyRate, HardThreshold, HardRate, StartThreshold, StartTimeout, InitThreshold, InitRate)
-> GroupWorkflow TaskLogic
    ExternalizedMapping(EasyThreshold, EasyRate, HardThreshold, HardRate, StartThreshold, StartTimeout, InitThreshold, InitRate)
    -> Defer ParameterController
        ExternalizedMapping(Value(DisplayName=InitThreshold))
        -> DoubleProperty(Value=75)
        -> BehaviorSubject InitThreshold

        ExternalizedMapping(Value(DisplayName=InitRate))
        -> DoubleProperty(Value=10000)
        -> BehaviorSubject InitRate

        ExternalizedMapping(Value(DisplayName=EasyThreshold, Description="The minimum distance required to obtain a pellet."))
        -> DoubleProperty(Value=75)
        -> BehaviorSubject EasyThreshold

        ExternalizedMapping(Value(DisplayName=EasyRate))
        -> DoubleProperty(Value=0.01)
        -> BehaviorSubject EasyRate

        ExternalizedMapping(Value(DisplayName=HardThreshold, Description="The minimum distance required to obtain a pellet."))
        -> DoubleProperty(Value=75)
        -> BehaviorSubject HardThreshold

        ExternalizedMapping(Value(DisplayName=HardRate))
        -> DoubleProperty(Value=0.0025)
        -> BehaviorSubject HardRate

        SubscribeSubject InitThreshold => #18
        SubscribeSubject InitRate => #19
        #18, #19 -> CombineLatest
        -> Take(Count=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #22
          Expression:
            new(
            Item1 as ThresholdPatch1,
            Item2 as RatePatch1,
            Item1 as ThresholdPatch2,
            Item2 as RatePatch2)
        SubscribeSubject EasyThreshold => #23
        SubscribeSubject EasyRate => #24
        SubscribeSubject HardThreshold => #25
        SubscribeSubject HardRate => #26
        #23, #24, #25, #26 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #28
          Expression:
            new(
            Item1 as EasyThreshold,
            Item2 as EasyRate,
            Item3 as HardThreshold,
            Item4 as HardRate)
        SubscribeSubject ThresholdCrossingPatch1
        -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
        -> IntProperty(Value=1)
        -> Accumulate => #32
        SubscribeSubject ThresholdCrossingPatch2
        -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
        -> IntProperty(Value=1)
        -> Accumulate => #36
        #32, #36 -> CombineLatest
        -> Add => #38
        ExternalizedMapping(Value(DisplayName=StartThreshold)) => #39
        #38, #39 -> GreaterThanOrEqual(Operand=IntProperty(Value=18))
        -> Condition => #41
            WorkflowInput Source1
            -> WorkflowOutput
        ExternalizedMapping(StartTimeout) => #42
        #41, #42 -> Sink StartTimeout => #43
            ExternalizedMapping(DueTime(DisplayName=StartTimeout))
            -> Timer(DueTime=PT1H, Period=PT0S)
            -> Format
              Format:
                ## **Start Timeout**
                More than 1 hour has passed and the pellet threshold value to start the probabilistic period has not been reached.
              Selector=""
            -> MulticastSubject SubjectAlertMessages
        #28, #43 -> SubscribeWhen => #44
        SubscribeSubject WheelPatch1
        -> MemberSelector(Selector=Value)
        -> IncludeWorkflow(Path=Aeon.Acquisition:DistanceTravelled.bonsai, Gain=1) => #47
        SubscribeSubject WheelPatch2
        -> MemberSelector(Selector=Value)
        -> IncludeWorkflow(Path=Aeon.Acquisition:DistanceTravelled.bonsai, Gain=1) => #50
        #44, #47, #50 -> CombineLatest
        -> Take(Count=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #53
          Expression:
            new(
            Item2 > Item3 ? Item1.HardThreshold : Item1.EasyThreshold as ThresholdPatch1,
            Item2 > Item3 ? Item1.HardRate : Item1.EasyRate as RatePatch1,
            Item2 > Item3 ? Item1.EasyThreshold : Item1.HardThreshold as ThresholdPatch2,
            Item2 > Item3 ? Item1.EasyRate : Item1.HardRate as RatePatch2)
        #22, #53 -> Concat
        -> Sink SetPatchState
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Double.NaN as Threshold,
                ThresholdPatch1 as D0,
                RatePatch1 as Rate)
            -> MemberSelector(Selector="Threshold,D0,Rate", TypeMapping=TypeMapping<System.ValueTuple(System.Double,System.Double,System.Double)>)
            -> MulticastSubject PatchState1
            #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Double.NaN as Threshold,
                ThresholdPatch2 as D0,
                RatePatch2 as Rate)
            -> MemberSelector(Selector="Threshold,D0,Rate", TypeMapping=TypeMapping<System.ValueTuple(System.Double,System.Double,System.Double)>)
            -> MulticastSubject PatchState2
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> PublishSubject ParameterChange

    SubscribeSubject ParameterChange
    -> PropertyMapping(ThresholdPatch1(Selector=ThresholdPatch1), RatePatch1(Selector=RatePatch1), ThresholdPatch2(Selector=ThresholdPatch2), RatePatch2(Selector=RatePatch2))
    -> GroupWorkflow TaskLogic => #6
        SubscribeSubject WheelPatch1
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(DistanceThreshold(DisplayName=ThresholdPatch1), Rate(DisplayName=RatePatch1)) => #2
        #1, #2 -> IncludeWorkflow DistanceState1(Path=Extensions\RandomDepletion.bonsai, DistanceThreshold=75, Rate=10000, DeliveryCount=DeliveryCount1, PatchState=PatchState1)
        -> MulticastSubject DeliverPelletPatch1
        -> MulticastSubject ThresholdCrossingPatch1

        SubscribeSubject WheelPatch2
        -> MemberSelector(Selector=Value) => #7
        ExternalizedMapping(DistanceThreshold(DisplayName=ThresholdPatch2), Rate(DisplayName=RatePatch2)) => #8
        #7, #8 -> IncludeWorkflow DistanceState2(Path=Extensions\RandomDepletion.bonsai, DistanceThreshold=75, Rate=10000, DeliveryCount=DeliveryCount2, PatchState=PatchState2)
        -> MulticastSubject DeliverPelletPatch2
        -> MulticastSubject ThresholdCrossingPatch2

        SubscribeSubject WheelPatch3
        -> MemberSelector(Selector=Value) => #13
        ExternalizedMapping(DistanceThreshold(DisplayName=ThresholdPatch3), Rate(DisplayName=RatePatch3)) => #14
        #13, #14 -> IncludeWorkflow DistanceState3(Path=Extensions\RandomDepletion.bonsai, DistanceThreshold=75, Rate=0.01, DeliveryCount=DeliveryCount3, PatchState=PatchState3)
        -> MulticastSubject DeliverPelletPatch3
        -> MulticastSubject ThresholdCrossingPatch3
    SubscribeSubject ParameterChange => #7
    #6, #7 -> TakeUntil
    -> Repeat
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> WorkflowOutput

    BehaviorSubject<System.Int32> ThresholdCrossingPatch1
    BehaviorSubject<System.Int32> ThresholdCrossingPatch2
    BehaviorSubject<System.Int32> ThresholdCrossingPatch3
