WorkflowBuilder(Version=2.8.1)
GroupWorkflow Metadata
    GroupWorkflow Devices
        GroupWorkflow ClockSynchronizer
            ExternalizedMapping(PortName)
            -> IncludeWorkflow(Path=Aeon.Acquisition:TimestampGenerator.bonsai, PortName=COM5)
            -> WorkflowOutput

        GroupWorkflow VideoController
            ExternalizedMapping(PortName, GlobalTriggerFrequency, LocalTriggerFrequency)
            -> IncludeWorkflow(Path=Aeon.Acquisition:CameraController.bonsai, PortName=COM6, GlobalTriggerFrequency=50, LocalTriggerFrequency=125)
            -> WorkflowOutput

        GroupWorkflow CameraTop
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23032909
              Gain=0
              Binning=1
              FrameEvents=CameraTop
            -> WorkflowOutput

        GroupWorkflow CameraWest
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23032816
              Gain=0
              Binning=1
              FrameEvents=CameraWest
            -> WorkflowOutput

        GroupWorkflow CameraEast
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23032824
              Gain=0
              Binning=1
              FrameEvents=CameraEast
            -> WorkflowOutput

        GroupWorkflow CameraNorth
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23032825
              Gain=0
              Binning=1
              FrameEvents=CameraNorth
            -> WorkflowOutput

        GroupWorkflow CameraSouth
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23031408
              Gain=0
              Binning=1
              FrameEvents=CameraSouth
            -> WorkflowOutput

        GroupWorkflow CameraNest
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23031407
              Gain=0
              Binning=1
              FrameEvents=CameraNest
            -> WorkflowOutput

        GroupWorkflow CameraPatch1
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23032815
              Gain=0
              Binning=2
              FrameEvents=CameraPatch1
            -> WorkflowOutput

        GroupWorkflow CameraPatch2
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23032817
              Gain=0
              Binning=2
              FrameEvents=CameraPatch2
            -> WorkflowOutput

        GroupWorkflow CameraPatch3
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23032829
              Gain=0
              Binning=2
              FrameEvents=CameraPatch3
            -> WorkflowOutput

        GroupWorkflow AudioAmbient
            ExternalizedMapping(DeviceName, SampleRate, Name)
            -> IncludeWorkflow AudioAmbient(Path=Aeon.Acquisition:AudioSource.bonsai, DeviceName="Microphone (UltraMic 192K 16 bi", SampleRate=192000)
            -> WorkflowOutput

        GroupWorkflow Patch1
            ExternalizedMapping(PortName, WheelDisplacement, PelletDelivered, DeliverPellet, PatchEvents, Radius, SampleRate, ResetFeeder, DueTime, Count)
            -> IncludeWorkflow
              Path=Aeon.Foraging:UndergroundFeeder.bonsai
              PatchEvents=Patch1
              SampleRate=SampleRate500Hz
              DeliverPellet=DeliverPelletPatch1
              PelletDelivered=PelletDeliveredPatch1
              DueTime=PT1S
              Count=2
              ResetFeeder=ResetFeederPatch1
              PortName=COM3
              Radius=-4
              WheelDisplacement=WheelPatch1
            -> WorkflowOutput

        GroupWorkflow Patch2
            ExternalizedMapping(PortName, WheelDisplacement, PelletDelivered, DeliverPellet, PatchEvents, Radius, SampleRate, ResetFeeder, DueTime, Count)
            -> IncludeWorkflow
              Path=Aeon.Foraging:UndergroundFeeder.bonsai
              PatchEvents=Patch2
              SampleRate=SampleRate500Hz
              DeliverPellet=DeliverPelletPatch2
              PelletDelivered=PelletDeliveredPatch2
              DueTime=PT1S
              Count=2
              ResetFeeder=ResetFeederPatch2
              PortName=COM4
              Radius=-4
              WheelDisplacement=WheelPatch2
            -> WorkflowOutput

        GroupWorkflow Patch3
            ExternalizedMapping(PortName, WheelDisplacement, PelletDelivered, DeliverPellet, PatchEvents, Radius, SampleRate, ResetFeeder, DueTime, Count)
            -> IncludeWorkflow
              Path=Aeon.Foraging:UndergroundFeeder.bonsai
              PatchEvents=Patch3
              SampleRate=SampleRate500Hz
              DeliverPellet=DeliverPelletPatch3
              PelletDelivered=PelletDeliveredPatch3
              DueTime=PT1S
              Count=2
              ResetFeeder=ResetFeederPatch3
              PortName=COM16
              Radius=-4
              WheelDisplacement=WheelPatch3
            -> WorkflowOutput

        GroupWorkflow Nest
            ExternalizedMapping(PortName, FilterWindow, WeightData, TareEvents)
            -> IncludeWorkflow
              Path=Aeon.Environment:WeightScale.bonsai
              PortName=COM7
              BaselineWeightTrigger=BaselineWeight
              FilterWindow=40
              WeightData=WeightNest
              TareCommands=TareWeight
              TareEvents=TareNest
            -> WorkflowOutput

        GroupWorkflow RfidNest1
            ExternalizedMapping(HardwareNotificationsState, PortName, RfidEvents, InboundRfidDetected)
            -> IncludeWorkflow
              Path=Aeon.Environment:RfidReader.bonsai
              HardwareNotificationsState=None
              PortName=COM14
              RfidEvents=RfidEventsNest1
              Location(X=0, Y=0)
              InboundRfidDetected=InboundRfidDetectedNest1
            -> WorkflowOutput

        GroupWorkflow RfidNest2
            ExternalizedMapping(HardwareNotificationsState, PortName, RfidEvents, InboundRfidDetected)
            -> IncludeWorkflow
              Path=Aeon.Environment:RfidReader.bonsai
              HardwareNotificationsState=None
              PortName=COM15
              RfidEvents=RfidEventsNest2
              Location(X=0, Y=0)
              InboundRfidDetected=InboundRfidDetectedNest2
            -> WorkflowOutput

        GroupWorkflow RfidGate
            ExternalizedMapping(HardwareNotificationsState, PortName, RfidEvents, InboundRfidDetected)
            -> IncludeWorkflow
              Path=Aeon.Environment:RfidReader.bonsai
              HardwareNotificationsState=None
              PortName=COM17
              RfidEvents=RfidEventsGate
              Location(X=0, Y=0)
              InboundRfidDetected=InboundRfidDetectedGate
            -> WorkflowOutput

        GroupWorkflow RfidPatch1
            ExternalizedMapping(HardwareNotificationsState, PortName, RfidEvents, InboundRfidDetected)
            -> IncludeWorkflow
              Path=Aeon.Environment:RfidReader.bonsai
              HardwareNotificationsState=None
              PortName=COM12
              RfidEvents=RfidEventsPatch1
              Location(X=0, Y=0)
              InboundRfidDetected=InboundRfidDetectedPatch1
            -> WorkflowOutput

        GroupWorkflow RfidPatch2
            ExternalizedMapping(HardwareNotificationsState, PortName, RfidEvents, InboundRfidDetected)
            -> IncludeWorkflow
              Path=Aeon.Environment:RfidReader.bonsai
              HardwareNotificationsState=None
              PortName=COM13
              RfidEvents=RfidEventsPatch2
              Location(X=0, Y=0)
              InboundRfidDetected=InboundRfidDetectedPatch2
            -> WorkflowOutput

        GroupWorkflow RfidPatch3
            ExternalizedMapping(HardwareNotificationsState, PortName, RfidEvents, InboundRfidDetected)
            -> IncludeWorkflow
              Path=Aeon.Environment:RfidReader.bonsai
              HardwareNotificationsState=None
              PortName=COM9
              RfidEvents=RfidEventsPatch3
              Location(X=0, Y=0)
              InboundRfidDetected=InboundRfidDetectedPatch3
            -> WorkflowOutput

    GroupWorkflow TrackingTop
        ExternalizedMapping(Name(DisplayName=FrameEvents))
        -> SubscribeSubject CameraTop => #1
        ExternalizedMapping(Mask, ThresholdValue, TrackingEvents) => #2
        #1, #2 -> IncludeWorkflow
          Path=Aeon.Acquisition:PositionTracking.bonsai
          ThresholdValue=83
          Mask=Config\ArenaMask-AEON3_2023-03-06.png
          TrackingCount=1
          TrackingEvents=TrackingTop
        -> WorkflowOutput

    GroupWorkflow PoseTrackingTop
        ExternalizedMapping(ModelPath, PathPrefix, FrameEvents, CentroidMinConfidence, IdentityMinConfidence, PartMinConfidence, PoseTrackingEvents)
        -> IncludeWorkflow
          Path=Extensions\PoseTracking.bonsai
          ModelPath=test-node1\2310190\topdown_id
          PathPrefix=ModelPathPrefix
          FrameEvents=CameraTop
          CentroidMinConfidence=nil
          IdentityMinConfidence=nil
          PartMinConfidence=nil
          PoseTrackingEvents=PoseTrackingTop
        -> WorkflowOutput

    GroupWorkflow ActivityCenter
        SubscribeSubject CameraTop
        -> IncludeWorkflow
          Path=Aeon.Acquisition:ActivityTracking.bonsai
          Regions(ArrayOfPoint(Point(X=76, Y=431), Point(X=404, Y=431), Point(X=404, Y=665), Point(X=76, Y=665)))
          ThresholdValue=10
          TrackingEvents=ActivityCenter
        -> WorkflowOutput

    GroupWorkflow ActivityArena
        SubscribeSubject CameraTop
        -> IncludeWorkflow(Path=Aeon.Acquisition:ActivityTracking.bonsai, Regions=nil, ThresholdValue=10, TrackingEvents=ActivityArena)
        -> WorkflowOutput

    GroupWorkflow ActiveRegion
        ExternalizedMapping(NestRegion, Patch1Region, Patch2Region, Patch3Region, ArenaCenter, ArenaInnerRadius, ArenaOuterRadius)
        -> IncludeWorkflow
          Path=Extensions\ActiveRegion.bonsai
          NestRegion(ArrayOfPoint(Point(X=1332, Y=482), Point(X=1242, Y=481), Point(X=1245, Y=586), Point(X=1334, Y=579)))
          Patch1Region(ArrayOfPoint(Point(X=904, Y=167), Point(X=925, Y=181), Point(X=910, Y=215), Point(X=888, Y=201)))
          Patch2Region(ArrayOfPoint(Point(X=802, Y=875), Point(X=924, Y=861), Point(X=939, Y=894), Point(X=920, Y=904)))
          Patch3Region(ArrayOfPoint(Point(X=802, Y=875), Point(X=924, Y=861), Point(X=939, Y=894), Point(X=920, Y=904)))
          ArenaCenter(X=661, Y=557)
          ArenaInnerRadius=474
          ArenaOuterRadius=494
        -> WorkflowOutput

GroupWorkflow Declarations
    BehaviorSubject<Aeon.Environment.WeightMeasurement> SubjectWeight
    PublishSubject<Bonsai.Harp.Timestamped(System.Byte)> MissedPellets1
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> PatchState1
    PublishSubject<Bonsai.Harp.Timestamped(System.Byte)> MissedPellets2
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> PatchState2
    PublishSubject<Bonsai.Harp.Timestamped(System.Byte)> MissedPellets3
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> PatchState3
    PublishSubject<Bonsai.Harp.Timestamped(System.Double)> BaselineTrigger
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.LogMessage)> AlertLogs
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.LogMessage)> Annotations
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Environment.EnvironmentStateMetadata)> EnvironmentState
    Aeon.Acquisition.StateRecoverySubject<Aeon.Foraging.DispenserState> Patch1Dispenser
    Aeon.Acquisition.StateRecoverySubject<Aeon.Foraging.DispenserState> Patch2Dispenser
    Aeon.Acquisition.StateRecoverySubject<Aeon.Foraging.DispenserState> Patch3Dispenser
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Environment.EnvironmentSubjectStateMetadata)> SubjectState
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Environment.EnvironmentSubjectStateMetadata)> SubjectStart
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Environment.EnvironmentSubjectStateMetadata)> SubjectStop
    PublishSubject<Bonsai.Harp.Timestamped(Harp.OutputExpander.DigitalOutputs)> ManualPellet1
    PublishSubject<Bonsai.Harp.Timestamped(Harp.OutputExpander.DigitalOutputs)> ManualPellet2
    PublishSubject<Bonsai.Harp.Timestamped(Harp.OutputExpander.DigitalOutputs)> ManualPellet3
    PublishSubject<System.String> SubjectAlertMessages
    IncludeWorkflow(Path=Aeon.Acquisition:PathController.bonsai, Path=Z:\aeon\data\processed, PathName=ModelPathPrefix)

GroupWorkflow Visualization
    SubscribeSubject TrackingTop
    -> MemberSelector(Selector=Value[0].Centroid)
    -> PublishSubject Trajectory

    SubscribeSubject CameraTop
    -> MemberSelector(Selector=Value.Image)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject FrameTrajectory

    SubscribeSubject TrackingTop
    -> MemberSelector(Selector=Value[0].Centroid)
    -> Bonsai.Dsp.Histogram2D(MinX=0, MaxX=1440, MinY=0, MaxY=1080, BinsX=288, BinsY=216, Normalize=false, Accumulate=true)
    -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=20, Shift=0)
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject Heatmap

    SubscribeSubject DistanceState1 => #14
    SubscribeSubject DistanceState2 => #15
    SubscribeSubject DistanceState3 => #16
    SubscribeSubject PatchState1
    -> MemberSelector(Selector=Item1) => #18
    SubscribeSubject PatchState2
    -> MemberSelector(Selector=Item1) => #20
    SubscribeSubject PatchState3
    -> MemberSelector(Selector=Item1) => #22
    #14, #15, #16, #18, #20, #22 -> CombineLatest => #23
    #23, #14 -> Sample
    -> Bonsai.Dsp.Buffer(Count=15, Skip=nil)
    -> PublishSubject PatchState

    SubscribeSubject PatchState1
    -> GroupWorkflow ToArray => #28
        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> IgnoreElements
        -> ToArray => #3
        WorkflowInput Source1
        -> SelectMany
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> ToArray
            -> WorkflowOutput
        -> DelaySubscription(DueTime=PT0.1S) => #6
        #3, #6 -> Concat
        -> WorkflowOutput
    SubscribeSubject DeliveryCount1 => #29
    #28, #29 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        int32(Item2) as PelletCount,
        Item1 as Threshold)
    -> PublishSubject CurrentThresholdPatch1

    SubscribeSubject PatchState2
    -> GroupWorkflow ToArray => #35
        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> IgnoreElements
        -> ToArray => #3
        WorkflowInput Source1
        -> SelectMany
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> ToArray
            -> WorkflowOutput
        -> DelaySubscription(DueTime=PT0.1S) => #6
        #3, #6 -> Concat
        -> WorkflowOutput
    SubscribeSubject DeliveryCount2 => #36
    #35, #36 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        int32(Item2) as PelletCount,
        Item1 as Threshold)
    -> PublishSubject CurrentThresholdPatch2

    SubscribeSubject PatchState3
    -> GroupWorkflow ToArray => #42
        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> IgnoreElements
        -> ToArray => #3
        WorkflowInput Source1
        -> SelectMany
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> ToArray
            -> WorkflowOutput
        -> DelaySubscription(DueTime=PT0.1S) => #6
        #3, #6 -> Concat
        -> WorkflowOutput
    SubscribeSubject DeliveryCount3 => #43
    #42, #43 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        int32(Item2) as PelletCount,
        Item1 as Threshold)
    -> PublishSubject CurrentThresholdPatch3

    IncludeWorkflow(Path=Aeon.Foraging:PelletMonitor.bonsai, PelletCommand=Patch1, PelletDelivered=PelletDeliveredPatch1)
    -> PublishSubject PelletMonitor1
    -> MemberSelector(Selector=Value)
    -> PublishSubject PelletMonitorValue1

    IncludeWorkflow(Path=Aeon.Foraging:PelletMonitor.bonsai, PelletCommand=Patch2, PelletDelivered=PelletDeliveredPatch2)
    -> BehaviorSubject PelletMonitor2
    -> MemberSelector(Selector=Value)
    -> PublishSubject PelletMonitorValue2

    IncludeWorkflow(Path=Aeon.Foraging:PelletMonitor.bonsai, PelletCommand=Patch3, PelletDelivered=PelletDeliveredPatch3)
    -> BehaviorSubject PelletMonitor3
    -> MemberSelector(Selector=Value)
    -> PublishSubject PelletMonitorValue3

    SubscribeSubject TimeOnPatch1 => #60
    SubscribeSubject TimeOnPatch2 => #61
    SubscribeSubject TimeOnPatch3 => #62
    #60, #61, #62 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Time Spent on Patch (s)" as Id,
        Item1 as Patch1,
        Item2 as Patch2,
        Item3 as Patch3)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TimeSpentOnPatches

    SubscribeSubject TimeSinceLastVisit1 => #67
    SubscribeSubject TimeSinceLastVisit2 => #68
    SubscribeSubject TimeSinceLastVisit3 => #69
    #67, #68, #69 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Time Since Last Visit (s)" as Id,
        Item1 as Patch1,
        Item2 as Patch2,
        Item3 as Patch3)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TimeSinceLastVisit

    SubscribeSubject WheelPatch1
    -> MemberSelector(Selector=Value)
    -> Accumulate => #76
    SubscribeSubject WheelPatch2
    -> MemberSelector(Selector=Value)
    -> Accumulate => #79
    SubscribeSubject WheelPatch3
    -> MemberSelector(Selector=Value)
    -> Accumulate => #82
    #76, #79, #82 -> CombineLatest
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Total Distance Travelled (cm)" as Id,
        Item1 as Patch1,
        Item2 as Patch2,
        Item3 as Patch3)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TotalDistanceTravelled

    IncludeWorkflow(Path=Aeon.Foraging:TimeSpentOnWheel.bonsai, Patch=Patch1, WheelPatch=WheelPatch1, Threshold=0.0003, LowPass=1)
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)
    -> BehaviorSubject TimeOnPatch1

    SubscribeSubject TimeOnPatch1
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)
    -> DistinctUntilChanged
    -> IncludeWorkflow(Path=Aeon.Acquisition:TimeSinceLastEvent.bonsai)
    -> BehaviorSubject TimeSinceLastVisit1

    IncludeWorkflow(Path=Aeon.Foraging:TimeSpentOnWheel.bonsai, Patch=Patch2, WheelPatch=WheelPatch2, Threshold=0.0003, LowPass=1)
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)
    -> BehaviorSubject TimeOnPatch2

    SubscribeSubject TimeOnPatch2
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)
    -> DistinctUntilChanged
    -> IncludeWorkflow(Path=Aeon.Acquisition:TimeSinceLastEvent.bonsai)
    -> BehaviorSubject TimeSinceLastVisit2

    IncludeWorkflow(Path=Aeon.Foraging:TimeSpentOnWheel.bonsai, Patch=Patch3, WheelPatch=WheelPatch3, Threshold=0.0003, LowPass=1)
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)
    -> BehaviorSubject TimeOnPatch3

    SubscribeSubject TimeOnPatch3
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)
    -> DistinctUntilChanged
    -> IncludeWorkflow(Path=Aeon.Acquisition:TimeSinceLastEvent.bonsai)
    -> BehaviorSubject TimeSinceLastVisit3

    IncludeWorkflow(Path=Extensions\ActiveSubjectPoses.bonsai)
    -> BehaviorSubject SubjectPoses

    SubscribeSubject SubjectPoses
    -> SelectMany InArena
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Seconds) => #1
        #0 -> MemberSelector(Selector=Value)
        -> Merge => #3
        #1, #3 -> CombineLatest
        -> MemberSelector(Selector="Item2,Item1")
        -> Bonsai.Harp.CreateTimestamped => #6
        ExternalizedMapping(Center, Radius) => #7
        #6, #7 -> Condition InArena
            WorkflowInput Source1
            -> Bonsai.Harp.ConvertTimestamped => #1
                WorkflowInput Source1
                -> MemberSelector(Selector=Centroid.Position)
                -> WorkflowOutput
            ExternalizedMapping(Value(DisplayName=Center)) => #2
            #1, #2 -> Aeon.Acquisition.DistanceFromPoint(Value(X=711, Y=539))
            -> MemberSelector(Selector=Value) => #4
            ExternalizedMapping(Value(DisplayName=Radius)) => #5
            #4, #5 -> LessThan(Operand=DoubleProperty(Value=474))
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> ToList => #10
        #0 -> MemberSelector(Selector=Seconds) => #11
        #10, #11 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> BehaviorSubject SubjectsInArena
    -> GroupWorkflow SubjectIdentities => #117
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> Merge
        -> MemberSelector(Selector=Identity)
        -> WorkflowOutput
    SubscribeSubject PoseTrackingTop
    -> Merge => #119
    #117, #119 -> WindowTrigger(Count=nil, TimeSpan=PT5S)
    -> SelectMany
        WorkflowInput Source1
        -> Distinct
        -> ToList
        -> WorkflowOutput
    -> BehaviorSubject StableSubjectsInArena

    SubscribeSubject WeightNest
    -> MemberSelector(Selector=FilteredWeight)
    -> Condition StableWeight
        WorkflowInput Source1
        -> MemberSelector(Selector=Confidence) => #1
        ExternalizedMapping(Value(DisplayName=ConfidenceThreshold)) => #2
        #1, #2 -> Equal(Operand=FloatProperty(Value=1))
        -> WorkflowOutput
    -> Condition SubjectOnScale
        WorkflowInput Source1
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=WeightThreshold)) => #2
        #1, #2 -> GreaterThan(Operand=FloatProperty(Value=10))
        -> WorkflowOutput
    -> MulticastSubject SubjectWeight

    SubscribeSubject SubjectWeight => #128
    SubscribeSubject StableSubjectsInArena => #129
    SubscribeSubject SubjectPoses => #130
    #128, #129, #130 -> CombineLatest => #131
    #131, #128 -> Sample
    -> Condition SingleSubjectInArena
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2.Count)
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> SelectMany LabeledWeight
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item3.Value)
        -> Merge => #2
        #0, #2 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: Item1.Item2[0] != Item2.Identity
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1.Item1 as Weight,
            Item2.Identity as Identity,
            Item2.IdentityIndex as IdentityIndex)
        -> InputMapping(Selector="it,Weight.Timestamp")
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> PublishSubject LabeledWeight

    SubscribeSubject LabeledWeight => #136
    SubscribeSubject SynchronizerEvents => #137
    #136, #137 -> Aeon.Acquisition.GroupByTime(ChunkSize=1, ClosingDuration=PT1S) => #138
    SubscribeSubject SubjectPoses
    -> MemberSelector(Selector=Value)
    -> SelectMany => #141
        WorkflowInput Source1
        -> Merge
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Identity as Identity,
            IdentityIndex as IdentityIndex)
        -> ToList
        -> OrderBy(KeySelector=IdentityIndex)
        -> WorkflowOutput
    #138, #141 -> WithLatestFrom
    -> SelectMany AverageWeights
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1) => #1
        #0 -> MemberSelector(Selector=Item2)
        -> Merge
        -> MemberSelector(Selector=Identity) => #4
        #1, #4 -> CombineLatest
        -> SelectMany
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2) => #1
            #0 -> MemberSelector(Selector=Item1)
            -> Merge
            -> MemberSelector(Selector=Value) => #4
            #1, #4 -> CombineLatest
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector="Item1,Item2.Identity")
                -> Equal
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: double(Item2.Weight.Value)
            -> ToList
            -> Bonsai.Numerics.DescriptiveStatistics
            -> MemberSelector(Selector=Mean) => #10
            #10, #1 -> Zip
            -> WorkflowOutput
        -> MemberSelector(Selector=Item1)
        -> ToArray
        -> WorkflowOutput
    -> PublishSubject AverageWeights

    SubscribeSubject SubjectsInArena
    -> MemberSelector(Selector=Value.Count)
    -> DistinctUntilChanged => #147
    ExternalizedMapping(DueTime(DisplayName=BaselineRefractoryPeriod)) => #148
    #147, #148 -> Throttle(DueTime=PT0S)
    -> Condition => #150
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=2))
        -> WorkflowOutput
    SubscribeSubject ActivityCenter => #151
    #150, #151 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject BaselineTrigger

    SubscribeSubject SubjectWeight => #155
    SubscribeSubject SubjectStart
    -> MemberSelector(Selector=Value.ReferenceWeight) => #157
    #155, #157 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1.Timestamp as Timestamp,
        Item1.Value as CurrentWeight,
        100 * Item1.Value / Item2 as CurrentPercent)
    -> BehaviorSubject PercentWeightLoss

    IncludeWorkflow
      Path=Aeon.Foraging:PelletMissed.bonsai
      PelletDelivered=PelletDeliveredPatch1
      TimeToMiss=PT2S
      DistanceToMiss=20
      TimeInChute=PT0S
      WheelDisplacement=WheelPatch1
    -> MulticastSubject MissedPellets1

    IncludeWorkflow
      Path=Aeon.Foraging:PelletMissed.bonsai
      PelletDelivered=PelletDeliveredPatch2
      TimeToMiss=PT2S
      DistanceToMiss=20
      TimeInChute=PT0S
      WheelDisplacement=WheelPatch2
    -> MulticastSubject MissedPellets2

    SubscribeSubject PelletDeliveredPatch1
    -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalPelletsDelivered1(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject PelletDeliveredPatch2
    -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalPelletsDelivered2(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject MissedPellets1
    -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalMissedPellets1(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject MissedPellets2
    -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalMissedPellets2(Path=Extensions\PersistentCounter.bonsai)

GroupWorkflow Alerts
    GroupWorkflow SubjectAlerts
        SubscribeSubject SubjectAlertMessages
        -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\alerts.config)

        SubscribeSubject PelletMonitor1 => #3
        ExternalizedMapping(Count(DisplayName=DeliveryFailureThreshold)) => #4
        #3, #4 -> Condition DispenserBroken
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
              Expression: Value ? 1 : 0
            ExternalizedMapping(Count) => #2
            #1, #2 -> BufferCount(Count=5, Skip=1)
            -> Add => #4
            #4, #2 -> GroupWorkflow Equal
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Count)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=5)) => #2
                #0 -> Equal(Operand=IntProperty(Value=0)) => #3
                #2, #3 -> Zip
                -> LogicalOr
                -> WorkflowOutput
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #6
        -> Format
          Format:
            ## **Dispenser Broken**
            **Patch**: Patch1
          Selector=""
        -> MulticastSubject SubjectAlertMessages
        #6 -> Aeon.Acquisition.FormatLogMessage(Format=Patch1, Selector="", Priority=Alert, Type=DispenserBroken, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs
        SubscribeSubject PelletMonitor2 => #11
        #11, #4 -> Condition DispenserBroken
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
              Expression: Value ? 1 : 0
            ExternalizedMapping(Count) => #2
            #1, #2 -> BufferCount(Count=5, Skip=1)
            -> Add => #4
            #4, #2 -> GroupWorkflow Equal
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Count)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=5)) => #2
                #0 -> Equal(Operand=IntProperty(Value=0)) => #3
                #2, #3 -> Zip
                -> LogicalOr
                -> WorkflowOutput
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #13
        -> Format
          Format:
            ## **Dispenser Broken**
            **Patch**: Patch2
          Selector=""
        -> MulticastSubject SubjectAlertMessages
        #13 -> Aeon.Acquisition.FormatLogMessage(Format=Patch2, Selector="", Priority=Alert, Type=DispenserBroken, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject MissedPellets1
        -> ElementIndex
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #20
        SubscribeSubject SubjectState => #21
        #20, #21 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
          Expression:
            new(
            Item1.Value.Seconds as Timestamp,
            Item1.Index + 1 as Count,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Missed Pellet**
            **Subject**: {0}
            **Patch:**: Patch1
            **Total Missed**: {1}
          Selector="Id,Count"
        -> MulticastSubject SubjectAlertMessages
        #23 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	Patch1	{1}", Selector="Id,Count", Priority=Alert, Type=MissedPellet, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject MissedPellets2
        -> ElementIndex
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #30
        SubscribeSubject SubjectState => #31
        #30, #31 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #33
          Expression:
            new(
            Item1.Value.Seconds as Timestamp,
            Item1.Index + 1 as Count,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Missed Pellet**
            **Subject**: {0}
            **Patch:**: Patch2
            **Total Missed**: {1}
          Selector="Id,Count"
        -> MulticastSubject SubjectAlertMessages
        #33 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	Patch2	{1}", Selector="Id,Count", Priority=Alert, Type=MissedPellet, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject TrackingTop
        -> GroupWorkflow SpeedThreshold
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value[0].Centroid)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Dsp.Norm(NormType=L2) => #3
            ExternalizedMapping(Value(DisplayName=MaxSpeed)) => #4
            #3, #4 -> GreaterThan(Operand=DoubleProperty(Value=500)) => #5
            #0 -> MemberSelector(Selector=Seconds) => #6
            #5, #6 -> Zip
            -> Bonsai.Harp.CreateTimestamped
            -> DistinctUntilChangedBy(KeySelector=Value)
            -> WorkflowOutput
        -> Condition TrackingUnstable
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #41
        SubscribeSubject SubjectState => #42
        #41, #42 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #44
          Expression:
            new(
            Item1.Seconds as Timestamp,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Tracking Failure**
            **Subject**: {0}
          Selector=Id
        -> MulticastSubject SubjectAlertMessages
        #44 -> Aeon.Acquisition.FormatLogMessage(Format={0}, Selector=Id, Priority=Alert, Type=TrackingFailure, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)

    GroupWorkflow EnvironmentAlerts
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.GroupByTime(ChunkSize=1)
        -> Skip(Count=1)
        -> SelectMany ExperimentSummary => #3
            SubscribeSubject PatchState1
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression:
                new(
                Item1 as Threshold,
                Item2 as D0,
                Item3 as Delta)
            SubscribeSubject PatchState2
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression:
                new(
                Item1 as Threshold,
                Item2 as D0,
                Item3 as Delta)
            SubscribeSubject Patch1Dispenser
            -> Take(Count=1)
            -> MemberSelector(Selector=Count) => #8
            SubscribeSubject Patch2Dispenser
            -> Take(Count=1)
            -> MemberSelector(Selector=Count) => #11
            #2, #5, #8, #11 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
              Expression:
                new(
                Item1 as PatchState1,
                Item2 as PatchState2,
                Item3 as PatchDispenser1,
                Item4 as PatchDispenser2)
            SubscribeSubject TimeOnPatch2
            -> Take(Count=1) => #15
            SubscribeSubject TimeOnPatch1
            -> Take(Count=1) => #17
            SubscribeSubject TimeSinceLastVisit2
            -> Take(Count=1) => #19
            SubscribeSubject TimeSinceLastVisit1
            -> Take(Count=1) => #21
            #15, #17, #19, #21 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
              Expression:
                new(
                Item1 as TimeOnPatch2,
                Item2 as TimeOnPatch1,
                Item3 as TimeSinceLastVisit2,
                Item4 as TimeSinceLastVisit1)
            SubscribeSubject SubjectState
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Id) => #26
            SubscribeSubject PercentWeightLoss
            -> MemberSelector(Selector="CurrentWeight,CurrentPercent") => #28
            FloatProperty(Value=0)
            -> MemberSelector(Selector="it,it") => #30
            #28, #30 -> Merge
            -> Take(Count=1)
            -> Take(Count=1) => #33
            WorkflowInput Source1
            -> Take(Count=1)
            -> MemberSelector(Selector=Key) => #36
            SubscribeSubject TotalPelletsDelivered1 => #37
            SubscribeSubject TotalPelletsDelivered2 => #38
            SubscribeSubject TotalMissedPellets1 => #39
            SubscribeSubject TotalMissedPellets2 => #40
            #37, #38, #39, #40 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #42
              Expression:
                new(
                Item1 as TotalPelletsDelivered1,
                Item2 as TotalPelletsDelivered2,
                Item3 as TotalMissedPellets1,
                Item4 as TotalMissedPellets2)
            #13, #23, #26, #33, #36, #42 -> Zip
            -> Take(Count=1) => #44
            -> Format => #45
              Format:
                # Arena Status
                **Time**: {0}
                **Subject**: {1}
                **Weight**: {2}
                **Weight Loss**: {3}
              Selector="Item5,Item3,Item4.Item1,Item4.Item2"
            #44 -> Format => #46
              Format:
                # Patch1
                **Pellets**: {0}
                **Threshold**: {1}
                **D0**: {2}
                **Delta**: {3}
                **Time On Patch**: {4}
                **Time Since Last Visit**: {5}
                **Total Pellets Delivered**: {6}
                **Total Missed Pellets**: {7}
              Selector: Item1.PatchDispenser1,Item1.PatchState1.Threshold,Item1.PatchState1.D0,Item1.PatchState1.Delta,Item2.TimeOnPatch1,Item2.TimeSinceLastVisit1,Item6.TotalPelletsDelivered1,Item6.TotalMissedPellets1
            #44 -> Format => #47
              Format:
                # Patch2
                **Pellets**: {0}
                **Threshold**: {1}
                **D0**: {2}
                **Delta**: {3}
                **Time On Patch**: {4}
                **Time Since Last Visit**: {5}
                **Total Pellets Delivered**: {6}
                **Total Missed Pellets**: {7}
              Selector: Item1.PatchDispenser2,Item1.PatchState2.Threshold,Item1.PatchState2.D0,Item1.PatchState2.Delta,Item2.TimeOnPatch2,Item2.TimeSinceLastVisit2,Item6.TotalPelletsDelivered2,Item6.TotalMissedPellets2
            #45, #46, #47 -> Zip
            -> Add
            -> WorkflowOutput
        SubscribeSubject EnvironmentState
        -> Format => #5
          Format:
            ## Arena {0} Mode Change
            Mode: {1}
          Selector="Value.Name,Value.Type"
        SubscribeSubject VideoEvents => #6
        #5, #6 -> SubscribeWhen
        -> DelaySubscription(DueTime=PT2S) => #8
        #3, #8 -> Merge
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\status.config)

        PublishSubject<System.String> EnvironmentAlertMessages
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\alerts.config)

        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.GroupByTime(ChunkSize=1)
        -> Skip(Count=1)
        -> SelectMany LocalFileCount => #16
            SubscribeSubject PathPrefix
            -> Bonsai.IO.GetDirectoryName
            -> PropertyMapping(Path)
            -> Bonsai.IO.GetFiles(Path=D:\Tests\social-dev-a214bbd, SearchPattern=*, SearchOption=AllDirectories)
            -> MemberSelector(Selector=Length) => #4
            WorkflowInput Source1
            -> Merge
            -> Take(Count=1) => #7
            #4, #7 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Count,
                Item2.GetTimestamp() as Timestamp)
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=LocalFileThreshold)) => #17
        #16, #17 -> Condition GreaterThan => #18
            WorkflowInput Source1
            -> MemberSelector(Selector=Count) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> GreaterThan(Operand=IntProperty(Value=500))
            -> WorkflowOutput
        -> Format
          Format:
            ## **File Storage**
            **Total Files in Local Storage**: {0}
          Selector=Count
        -> MulticastSubject EnvironmentAlertMessages
        #18 -> Aeon.Acquisition.FormatLogMessage(Format="", Selector=Count, Priority=Alert, Type=FileStorage, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        GroupWorkflow DroppedFramesMonitor => #23
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraTop) => #0
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraWest) => #1
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraEast) => #2
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraNorth) => #3
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraSouth) => #4
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraPatch1) => #5
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraPatch2) => #6
            #0, #1, #2, #3, #4, #5, #6 -> Merge
            -> WorkflowOutput
        -> Format
          Format:
            ## **Frame Dropped**
            **Camera**: {0}
            **Current Frame**: {1}
          Selector="Name,FrameID"
        -> MulticastSubject EnvironmentAlertMessages
        #23 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	{1}", Selector="Name,FrameID", Priority=Alert, Type=DroppedFrames, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject Annotations
        -> Condition Alert
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.Priority)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.PriorityLevel>(Value=Alert))
            -> WorkflowOutput
        -> Format
          Format:
            ## **Experimenter Annotation**
            **Message**: {0}
          Selector=Value.Message
        -> MulticastSubject EnvironmentAlertMessages

        GroupWorkflow HeartbeatSources
            IncludeWorkflow Patch1(Path=Aeon.Acquisition:HeartbeatMonitor.bonsai) => #0
            IncludeWorkflow Patch2(Path=Aeon.Acquisition:HeartbeatMonitor.bonsai) => #1
            IncludeWorkflow Patch3(Path=Aeon.Acquisition:HeartbeatMonitor.bonsai) => #2
            IncludeWorkflow VideoEvents(Path=Aeon.Acquisition:HeartbeatMonitor.bonsai) => #3
            IncludeWorkflow SynchronizerEvents(Path=Aeon.Acquisition:HeartbeatMonitor.bonsai) => #4
            #0, #1, #2, #3, #4 -> Merge
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Aeon.Acquisition:SynchronizerMonitor.bonsai) => #33
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #34
          Expression: DeviceCount != ExpectedDeviceCount || MaxDifference > 0 || Math.Abs((MeanUtcTimestamp - DateTime.UtcNow).TotalMinutes) > 30
        -> Format
          Format:
            ## **Harp Synch**
            **Synchronizer Stats**: {0}
          Selector=it
        -> MulticastSubject EnvironmentAlertMessages
        #34 -> Aeon.Acquisition.FormatLogMessage
          Format="{0}	{1}	{2}	{3}	{4}"
          Selector="MeanTimestamp,MeanUtcTimestamp,ExpectedDeviceCount,DeviceCount,MaxDifference"
          Priority=Alert
          Type=HarpSynch
          Timestamp=MeanTimestamp
        -> MulticastSubject AlertLogs
        #33 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName=D:\TimestampClockSyncHeartBeat\TimestampClockSyncHeartBeat.csv, Append=true, Overwrite=false, Suffix=None, IncludeHeader=true)

GroupWorkflow Logging
    IncludeWorkflow(Path=Aeon.Acquisition:RepositoryLogController.bonsai, RepositoryPath=..\..\, DataPath=D:\ProjectAeon, FallbackPath=D:\Tests, ChunkSize=1)
    IncludeWorkflow(Path=Aeon.Acquisition:ExportMetadata.bonsai, WorkflowName=Social-AEON3.bonsai)

    SubscribeSubject SynchronizerEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=ClockSynchronizer, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject VideoEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=VideoController, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject CameraTop
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraTop, FrameRate=50)

    SubscribeSubject TrackingTop
    -> Aeon.Acquisition.FormatBinaryRegions => #9
    GroupWorkflow RegionTracking
        SubscribeSubject InPatch2
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
          Expression: Value ? 5 : 0
        SubscribeSubject InPatch1
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
          Expression: Value ? 4 : 0
        SubscribeSubject InArena
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
          Expression: Value ? 3 : 0
        SubscribeSubject InCorridor
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
          Expression: Value ? 2 : 0
        SubscribeSubject InNest => #8
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #9
          Expression: Value ? 1 : 0
        #1, #3, #5, #7, #9 -> Zip
        -> Bonsai.Numerics.Max => #11
        #8 -> MemberSelector(Selector=Seconds) => #12
        #11, #12 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #11
    #9, #11 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=CameraTop, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject PoseTrackingTop
    -> SelectMany LogPoseTracking
        WorkflowInput Source1
        -> AsyncSubject PoseTrackingGroup
        -> MemberSelector(Selector=Key)
        -> AsyncSubject PoseTrackingMetadata

        SubscribeSubject PoseTrackingGroup
        -> Merge => #5
        ExternalizedMapping(LogName) => #6
        #5, #6 -> IncludeWorkflow PoseTrackingMetadata(Path=Aeon.Acquisition:LogPoseTracking.bonsai, Address=202, IdentityIndex=nil, LogName=CameraTop)
        -> WorkflowOutput

    SubscribeSubject CameraWest
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraWest, FrameRate=50)

    SubscribeSubject CameraEast
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraEast, FrameRate=50)

    SubscribeSubject CameraNorth
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraNorth, FrameRate=50)

    SubscribeSubject CameraSouth
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraSouth, FrameRate=50)

    SubscribeSubject CameraNest
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraNest, FrameRate=50)

    SubscribeSubject CameraPatch1
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraPatch1, FrameRate=125)

    SubscribeSubject CameraPatch2
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraPatch2, FrameRate=125)

    SubscribeSubject CameraPatch3
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraPatch3, FrameRate=125)

    SubscribeSubject Patch1 => #32
    SubscribeSubject Patch1Dispenser
    -> IncludeWorkflow Patch1(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> Aeon.Foraging.FormatDispenserState(Address=200) => #35
    SubscribeSubject ManualPellet1
    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #37
    SubscribeSubject MissedPellets1
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=202, PayloadType=TimestampedU8)) => #39
    #32, #35, #37, #39 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Patch1, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject PatchState1
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #43
      Expression:
        new(
        Item1 as Threshold,
        Item2 as D1,
        Item3 as Delta)
    SubscribeSubject Patch1
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #45
    #43, #45 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=Patch1_State, Selector=nil)

    SubscribeSubject Patch2 => #48
    SubscribeSubject Patch2Dispenser
    -> IncludeWorkflow Patch2(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> Aeon.Foraging.FormatDispenserState(Address=200) => #51
    SubscribeSubject ManualPellet2
    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #53
    SubscribeSubject MissedPellets2
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=202, PayloadType=TimestampedU8)) => #55
    #48, #51, #53, #55 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Patch2, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject PatchState2
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #59
      Expression:
        new(
        Item1 as Threshold,
        Item2 as D1,
        Item3 as Delta)
    SubscribeSubject Patch2
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #61
    #59, #61 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=Patch2_State, Selector=nil)

    SubscribeSubject Patch3 => #64
    SubscribeSubject Patch3Dispenser
    -> IncludeWorkflow Patch3(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> Aeon.Foraging.FormatDispenserState(Address=200) => #67
    SubscribeSubject ManualPellet3
    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #69
    SubscribeSubject MissedPellets3
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=202, PayloadType=TimestampedU8)) => #71
    #64, #67, #69, #71 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Patch3, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject PatchState3
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #75
      Expression:
        new(
        Item1 as Threshold,
        Item2 as D1,
        Item3 as Delta)
    SubscribeSubject Patch3
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #77
    #75, #77 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=Patch3_State, Selector=nil)

    SubscribeSubject AudioAmbient
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogAudio.bonsai, Heartbeats="", ClosingDuration=nil, LogName=AudioAmbient, SampleRate=192000)

    SubscribeSubject SubjectState
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=""
      ClosingDuration=nil
      LogName=ExperimentalMetadata_SubjectState
      Selector="Seconds,Value.Id,Value.Weight,Value.Type"

    SubscribeSubject AlertLogs => #84
    SubscribeSubject Annotations => #85
    #84, #85 -> Merge
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=""
      ClosingDuration=nil
      LogName=ExperimentalMetadata_MessageLog
      Selector="Seconds,Value.Priority,Value.Type,Value.Message"

    SubscribeSubject EnvironmentState
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=ExperimentalMetadata_EnvironmentState, Selector="Seconds,Value.Type")

    SubscribeSubject LabeledWeight
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=""
      ClosingDuration=nil
      LogName=ExperimentalMetadata_SubjectWeight
      Selector="Seconds,Value.Weight.Value,Value.Weight.Confidence,Value.Identity,Value.IdentityIndex"

    SubscribeSubject SubjectState
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #93
      Expression:
        new(
        Seconds as Seconds,
        new(Value.Id as Id,
            Value.Type.ToString() as Event,
            "Environment" as Value) as Value)
    SubscribeSubject InPatch1
    -> IncludeWorkflow Patch1(Path=Extensions\FormatRegionVisits.bonsai) => #95
    SubscribeSubject InPatch2
    -> IncludeWorkflow Patch2(Path=Extensions\FormatRegionVisits.bonsai) => #97
    SubscribeSubject InPatch3
    -> IncludeWorkflow Patch3(Path=Extensions\FormatRegionVisits.bonsai) => #99
    SubscribeSubject InArena
    -> IncludeWorkflow Arena(Path=Extensions\FormatRegionVisits.bonsai) => #101
    SubscribeSubject InCorridor
    -> IncludeWorkflow Corridor(Path=Extensions\FormatRegionVisits.bonsai) => #103
    SubscribeSubject InNest
    -> IncludeWorkflow Nest(Path=Extensions\FormatRegionVisits.bonsai) => #105
    #93, #95, #97, #99, #101, #103, #105 -> Merge
    -> MemberSelector(Selector="Value,Seconds")
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=""
      ClosingDuration=nil
      LogName=ExperimentalMetadata_SubjectVisits
      Selector="Seconds,Value.Id,Value.Event,Value.Value"

    SubscribeSubject RfidEventsNest1
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=RfidEventsNest1, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject RfidEventsNest2
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=RfidEventsNest2, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject RfidEventsGate
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=RfidEventsGate, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject RfidEventsPatch1
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=RfidEventsPatch1, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject RfidEventsPatch2
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=RfidEventsPatch2, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject RfidEventsPatch3
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=RfidEventsPatch3, Heartbeats="", ClosingDuration=nil)

    Timer(DueTime=PT0S, Period=PT0.1S)
    -> Aeon.Acquisition.AvailableMemory => #122
    SubscribeSubject GlobalTrigger
    -> MemberSelector(Selector=Seconds) => #124
    #122, #124 -> WithLatestFrom
    -> Bonsai.Harp.CreateTimestamped
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=System_AvailableMemory, Selector=nil)

    SubscribeSubject WeightNest
    -> MemberSelector(Selector=RawWeight)
    -> Aeon.Environment.FormatWeight(Address=200) => #130
    SubscribeSubject TareNest
    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #132
    SubscribeSubject WeightNest
    -> MemberSelector(Selector=FilteredWeight)
    -> Aeon.Environment.FormatWeight(Address=202) => #135
    SubscribeSubject BaselineTrigger
    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=203, PayloadType=TimestampedU8)) => #137
    #130, #132, #135, #137 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Nest, Heartbeats="", ClosingDuration=nil)

GroupWorkflow ControlPanel
    SubscribeSubject SubjectState => #0
    -> Condition Start
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Type)
        -> NotEqual(Operand=WorkflowProperty<Aeon.Environment.EnvironmentSubjectChangeType>(Value=Exit))
        -> WorkflowOutput
    -> MulticastSubject SubjectStart
    #0 -> Condition End
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Type)
        -> Equal(Operand=WorkflowProperty<Aeon.Environment.EnvironmentSubjectChangeType>(Value=Exit))
        -> WorkflowOutput
    -> MulticastSubject SubjectStop

    Bonsai.Windows.Input.KeyDown(Filter="ShiftKey Space D0 P NumPad0 F1 Shift", SuppressRepetitions=false)
    -> MulticastSubject StartCameras

    Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey Space Prior PageUp D0 D1 A P Q NumPad0 NumPad1 F1 F2 Shift", SuppressRepetitions=false)
    -> MulticastSubject StopCameras

    GroupWorkflow PatchActivity
        SubscribeSubject CameraPatch1
        -> SampleInterval(Interval=PT0.02S)
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping => #3
        SubscribeSubject CameraPatch2
        -> SampleInterval(Interval=PT0.02S)
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping => #7
        SubscribeSubject CameraPatch3
        -> SampleInterval(Interval=PT0.02S)
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping => #11
        SubscribeSubject PatchState
        -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=3))
        -> VisualizerMapping => #14
        SubscribeSubject PatchState
        -> Bonsai.Dsp.SelectChannels(Channels(int=1, int=4))
        -> VisualizerMapping => #17
        SubscribeSubject PatchState
        -> Bonsai.Dsp.SelectChannels(Channels(int=2, int=5))
        -> VisualizerMapping => #20
        SubscribeSubject CurrentThresholdPatch1
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=PelletCount, ValueSelector=Threshold, SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow ThresholdPatch1
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #24
        SubscribeSubject CurrentThresholdPatch2
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=PelletCount, ValueSelector=Threshold, SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow ThresholdPatch2
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #28
        SubscribeSubject CurrentThresholdPatch3
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=PelletCount, ValueSelector=Threshold, SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow ThresholdPatch3
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #32
        SubscribeSubject PelletMonitorValue1
        -> VisualizerMapping => #34
        SubscribeSubject PelletMonitorValue2
        -> VisualizerMapping => #36
        SubscribeSubject PelletMonitorValue3
        -> VisualizerMapping => #38
        #3, #7, #11, #14, #17, #20, #24, #28, #32, #34, #36, #38 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchActivity
          ColumnCount=3
          RowCount=4
          ColumnStyles=""
          RowStyles=""
          CellSpans
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
        -> VisualizerMapping => #40
        Aeon.Environment.ExperimentProperties
        -> VisualizerMapping => #42
        SubscribeSubject TimeSpentOnPatches
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="Patch1,Patch2,Patch3", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TimeSpentOnPatches
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #46
        SubscribeSubject TimeSinceLastVisit
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="Patch1,Patch2,Patch3", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TimeSinceLastVisit
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #50
        SubscribeSubject TotalDistanceTravelled
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="Patch1,Patch2,Patch3", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TotalDistanceTravelled
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #54
        #42, #46, #50, #54 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchStatistics(ColumnCount=1, RowCount=4, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #56
        #40, #56 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchActivity(ColumnCount=2, RowCount=1, ColumnStyles(ColumnStyle(SizeType=Percent, Width=70), ColumnStyle(SizeType=Percent, Width=30)), RowStyles="", CellSpans="")
        -> WorkflowOutput

    GroupWorkflow SubjectActivity
        SubscribeSubject Heatmap
        -> VisualizerMapping => #1
        SubscribeSubject Trajectory
        -> VisualizerMapping
        -> SubscribeSubject FrameTrajectory
        -> VisualizerMapping => #5
        SubscribeSubject PoseTrackingTop
        -> Merge
        -> MemberSelector(Selector=Value)
        -> VisualizerMapping => #9
        #1, #5, #9 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder SubjectActivity(ColumnCount=3, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput

    GroupWorkflow ExperimentMetadata
        SubscribeSubject PelletDeliveredPatch1
        -> Condition RisingEdge
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> IncludeWorkflow Patch1(Path=Aeon.Foraging:PatchDispenser.bonsai, ControllerEvents=Patch1Controller, DispenserState=Patch1Dispenser)
        -> VisualizerMapping => #3
        SubscribeSubject PelletDeliveredPatch2
        -> Condition RisingEdge
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> IncludeWorkflow Patch2(Path=Aeon.Foraging:PatchDispenser.bonsai, ControllerEvents=Patch2Controller, DispenserState=Patch2Dispenser)
        -> VisualizerMapping => #7
        SubscribeSubject PelletDeliveredPatch3
        -> Condition RisingEdge
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> IncludeWorkflow Patch3(Path=Aeon.Foraging:PatchDispenser.bonsai, ControllerEvents=Patch3Controller, DispenserState=Patch3Dispenser)
        -> VisualizerMapping => #11
        SubscribeSubject VideoEvents
        -> Aeon.Environment.AnnotationSource
        -> MulticastSubject Annotations
        -> VisualizerMapping => #15
        SubscribeSubject VideoEvents
        -> Aeon.Environment.EnvironmentState
        -> MulticastSubject EnvironmentState
        -> VisualizerMapping => #19
        #3, #7, #11, #15, #19 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder ExperimentMetadata(ColumnCount=3, RowCount=2, ColumnStyles="", RowStyles(RowStyle(SizeType=Percent, Height=60), RowStyle(SizeType=Percent, Height=40)), CellSpans="")
        -> WorkflowOutput

        SubscribeSubject Patch1Controller
        -> Skip(Count=1) => #23
        -> Condition Reset
            WorkflowInput Source1
            -> MemberSelector(Selector=EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Foraging.DispenserEventType>(Value=Reset))
            -> WorkflowOutput
        -> MulticastSubject ResetFeederPatch1
        #23 -> Condition Discount
            WorkflowInput Source1
            -> MemberSelector(Selector=EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Foraging.DispenserEventType>(Value=Discount))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Aeon.Foraging:TriggerPellet.bonsai, PatchEvents=Patch1, DeliverPellet=DeliverPelletPatch1)
        -> MulticastSubject ManualPellet1

        SubscribeSubject Patch2Controller
        -> Skip(Count=1) => #30
        -> Condition Reset
            WorkflowInput Source1
            -> MemberSelector(Selector=EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Foraging.DispenserEventType>(Value=Reset))
            -> WorkflowOutput
        -> MulticastSubject ResetFeederPatch2
        #30 -> Condition Discount
            WorkflowInput Source1
            -> MemberSelector(Selector=EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Foraging.DispenserEventType>(Value=Discount))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Aeon.Foraging:TriggerPellet.bonsai, PatchEvents=Patch2, DeliverPellet=DeliverPelletPatch2)
        -> MulticastSubject ManualPellet2

        SubscribeSubject Patch3Controller
        -> Skip(Count=1) => #37
        -> Condition Reset
            WorkflowInput Source1
            -> MemberSelector(Selector=EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Foraging.DispenserEventType>(Value=Reset))
            -> WorkflowOutput
        -> MulticastSubject ResetFeederPatch3
        #37 -> Condition Discount
            WorkflowInput Source1
            -> MemberSelector(Selector=EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Foraging.DispenserEventType>(Value=Discount))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Aeon.Foraging:TriggerPellet.bonsai, PatchEvents=Patch3, DeliverPellet=DeliverPelletPatch3)
        -> MulticastSubject ManualPellet3

    GroupWorkflow EnvironmentSubjectState
        SubscribeSubject VideoEvents => #0
        SubscribeSubject EnvironmentState
        -> PropertyMapping(EnvironmentState(Selector=Value.Type)) => #2
        #0, #2 -> Aeon.Environment.EnvironmentSubjectState(DatabasePath=Z:\aeon\colony\colony.csv, EnvironmentState=Maintenance)
        -> MulticastSubject SubjectState
        -> VisualizerMapping => #5
        SubscribeSubject AverageWeights
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)
        -> VisualizerMapping => #8
        SubscribeSubject WeightNest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            RawWeight.Value as Raw,
            FilteredWeight.Confidence == 1
              ? FilteredWeight.Value
              : single.NaN as Stable,
            FilteredWeight.Value - BaselinedWeight.Value as Baseline)
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(ValueSelector="Raw,Stable,Baseline", SymbolType=None, LineWidth=1, Capacity=640, Min=nil, Max=nil)
        -> VisualizerMapping => #12
        #5, #8, #12 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder
          ColumnCount=2
          RowCount=2
          ColumnStyles=""
          RowStyles=""
          CellSpans(CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=2), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
        -> WorkflowOutput

Bonsai.Numerics.CreateRandom(Seed=nil)
-> AsyncSubject Random

ExternalizedMapping(EasyThreshold, EasyRate, HardThreshold, HardRate, StartThreshold, StartTimeout, InitThreshold, InitRate)
-> GroupWorkflow TaskLogic
    ExternalizedMapping(EasyThreshold, EasyRate, HardThreshold, HardRate, StartThreshold, StartTimeout, InitThreshold, InitRate, MediumThreshold, MediumRate)
    -> Defer ParameterController
        ExternalizedMapping(Value(DisplayName=InitThreshold, Category=InitParameters))
        -> DoubleProperty(Value=75)
        -> BehaviorSubject InitThreshold

        ExternalizedMapping(Value(DisplayName=InitRate, Category=InitParameters))
        -> DoubleProperty(Value=10000)
        -> BehaviorSubject InitRate

        ExternalizedMapping(Value(DisplayName=EasyThreshold, Description="The minimum distance required to obtain a pellet.", Category=EasyParameters))
        -> DoubleProperty(Value=75)
        -> BehaviorSubject EasyThreshold

        ExternalizedMapping(Value(DisplayName=EasyRate, Category=EasyParameters))
        -> DoubleProperty(Value=0.01)
        -> BehaviorSubject EasyRate

        ExternalizedMapping(Value(DisplayName=MediumThreshold, Category=MediumParameters))
        -> DoubleProperty(Value=75)
        -> BehaviorSubject MediumThreshold

        ExternalizedMapping(Value(DisplayName=MediumRate, Category=MediumParameters))
        -> DoubleProperty(Value=0.005)
        -> BehaviorSubject MediumRate

        ExternalizedMapping(Value(DisplayName=HardThreshold, Description="The minimum distance required to obtain a pellet.", Category=HardParameters))
        -> DoubleProperty(Value=75)
        -> BehaviorSubject HardThreshold

        ExternalizedMapping(Value(DisplayName=HardRate, Category=HardParameters))
        -> DoubleProperty(Value=0.0025)
        -> BehaviorSubject HardRate

        SubscribeSubject InitThreshold => #24
        SubscribeSubject InitRate => #25
        #24, #25 -> CombineLatest
        -> Take(Count=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #28
          Expression:
            new(
            Item1 as ThresholdPatch1,
            Item2 as RatePatch1,
            Item1 as ThresholdPatch2,
            Item2 as RatePatch2,
            Item1 as ThresholdPatch3,
            Item2 as RatePatch3)
        SubscribeSubject EasyThreshold => #29
        SubscribeSubject EasyRate => #30
        #29, #30 -> Zip => #31
        SubscribeSubject MediumThreshold => #32
        SubscribeSubject MediumRate => #33
        #32, #33 -> Zip => #34
        SubscribeSubject HardThreshold => #35
        SubscribeSubject HardRate => #36
        #35, #36 -> Zip => #37
        #31, #34, #37 -> Merge
        -> Take(Count=3)
        -> Bonsai.Numerics.Permutation
        -> Take(Count=3)
        -> ToArray => #42
        SubscribeSubject ThresholdCrossingPatch1
        -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
        -> IntProperty(Value=1)
        -> Accumulate => #46
        SubscribeSubject ThresholdCrossingPatch2
        -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
        -> IntProperty(Value=1)
        -> Accumulate => #50
        SubscribeSubject ThresholdCrossingPatch3
        -> IncludeWorkflow(Path=Aeon.Environment:EnvironmentCondition.bonsai, Value=Experiment)
        -> IntProperty(Value=1)
        -> Accumulate => #54
        #46, #50, #54 -> CombineLatest
        -> Add => #56
        ExternalizedMapping(Value(DisplayName=StartThreshold, Category=StartParameters)) => #57
        #56, #57 -> GreaterThanOrEqual(Operand=IntProperty(Value=18))
        -> Condition => #59
            WorkflowInput Source1
            -> WorkflowOutput
        ExternalizedMapping(StartTimeout(Category=StartParameters)) => #60
        #59, #60 -> Sink StartTimeout => #61
            ExternalizedMapping(DueTime(DisplayName=StartTimeout))
            -> Timer(DueTime=PT1H, Period=PT0S)
            -> Format
              Format:
                ## **Start Timeout**
                More than 1 hour has passed and the pellet threshold value to start the probabilistic period has not been reached.
              Selector=""
            -> MulticastSubject SubjectAlertMessages
        #42, #61 -> SubscribeWhen
        -> Take(Count=1)
        -> Repeat
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #65
          Expression:
            new(
              it[0].Item1 as ThresholdPatch1,
              it[0].Item2 as RatePatch1,
              it[1].Item1 as ThresholdPatch2,
              it[1].Item2 as RatePatch2,
              it[2].Item1 as ThresholdPatch3,
              it[2].Item2 as RatePatch3
            )
        #28, #65 -> Concat
        -> Sink SetPatchState
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Double.NaN as Threshold,
                ThresholdPatch1 as D0,
                RatePatch1 as Rate)
            -> MemberSelector(Selector="Threshold,D0,Rate", TypeMapping=TypeMapping<System.ValueTuple(System.Double,System.Double,System.Double)>)
            -> MulticastSubject PatchState1
            #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Double.NaN as Threshold,
                ThresholdPatch2 as D0,
                RatePatch2 as Rate)
            -> MemberSelector(Selector="Threshold,D0,Rate", TypeMapping=TypeMapping<System.ValueTuple(System.Double,System.Double,System.Double)>)
            -> MulticastSubject PatchState2
            #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Double.NaN as Threshold,
                ThresholdPatch3 as D0,
                RatePatch3 as Rate)
            -> MemberSelector(Selector="Threshold,D0,Rate", TypeMapping=TypeMapping<System.ValueTuple(System.Double,System.Double,System.Double)>)
            -> MulticastSubject PatchState3
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)
    -> PublishSubject ParameterChange

    SubscribeSubject ParameterChange
    -> PropertyMapping(ThresholdPatch1(Selector=ThresholdPatch1), RatePatch1(Selector=RatePatch1), ThresholdPatch2(Selector=ThresholdPatch2), RatePatch2(Selector=RatePatch2))
    -> GroupWorkflow TaskLogic => #6
        SubscribeSubject WheelPatch1
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(DistanceThreshold(DisplayName=ThresholdPatch1), Rate(DisplayName=RatePatch1)) => #2
        #1, #2 -> IncludeWorkflow DistanceState1(Path=Aeon.Foraging:RandomDepletion.bonsai, DistanceThreshold=75, Rate=10000, DeliveryCount=DeliveryCount1, PatchState=PatchState1)
        -> MulticastSubject DeliverPelletPatch1
        -> MulticastSubject ThresholdCrossingPatch1

        SubscribeSubject WheelPatch2
        -> MemberSelector(Selector=Value) => #7
        ExternalizedMapping(DistanceThreshold(DisplayName=ThresholdPatch2), Rate(DisplayName=RatePatch2)) => #8
        #7, #8 -> IncludeWorkflow DistanceState2(Path=Aeon.Foraging:RandomDepletion.bonsai, DistanceThreshold=75, Rate=10000, DeliveryCount=DeliveryCount2, PatchState=PatchState2)
        -> MulticastSubject DeliverPelletPatch2
        -> MulticastSubject ThresholdCrossingPatch2

        SubscribeSubject WheelPatch3
        -> MemberSelector(Selector=Value) => #13
        ExternalizedMapping(DistanceThreshold(DisplayName=ThresholdPatch3), Rate(DisplayName=RatePatch3)) => #14
        #13, #14 -> IncludeWorkflow DistanceState3(Path=Aeon.Foraging:RandomDepletion.bonsai, DistanceThreshold=75, Rate=0.01, DeliveryCount=DeliveryCount3, PatchState=PatchState3)
        -> MulticastSubject DeliverPelletPatch3
        -> MulticastSubject ThresholdCrossingPatch3
    SubscribeSubject ParameterChange => #7
    #6, #7 -> TakeUntil
    -> Repeat
    -> IncludeWorkflow(Path=Aeon.Foraging:RepeatEverySubject.bonsai)
    -> WorkflowOutput

    BehaviorSubject<System.Int32> ThresholdCrossingPatch1
    BehaviorSubject<System.Int32> ThresholdCrossingPatch2
    BehaviorSubject<System.Int32> ThresholdCrossingPatch3
