<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0-alpha018"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Measures pixel motion in the specified region of interest.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Regions" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CropPolygon">
          <cv:MaskType>ToZero</cv:MaskType>
          <cv:FillValue>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ThresholdValue" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BackgroundSubtraction">
          <cv:BackgroundFrames>1</cv:BackgroundFrames>
          <cv:AdaptationRate>1</cv:AdaptationRate>
          <cv:ThresholdValue>10</cv:ThresholdValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
          <cv:SubtractionMethod>Absolute</cv:SubtractionMethod>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="aeon:CreateTimestamped" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="TrackingEvents" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>ActivityArena</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="8" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>