<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0-alpha018"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Detects consecutive dropped frame events.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>Cameras</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>DroppedFrames</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\SourceStreamID.bonsai" />
            <Expression xsi:type="SubscribeSubject">
              <Name>source</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.ChunkData.FrameID</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Difference">
                      <dsp:Order>1</dsp:Order>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\AlertGate.bonsai">
              <AlertRefractoryPeriod>PT5M</AlertRefractoryPeriod>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StreamId</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Name" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Name" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="SubscribeSubject(harp:Timestamped(spk:SpinnakerDataFrame)),sys:String">
                    <MemberName>Name</MemberName>
                    <Value>CameraTop</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item1.Seconds as Timestamp,
Item2 as Name,
Item1.Value.ChunkData.FrameID as FrameID)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>