<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Harp.Expander;assembly=Bonsai.Harp.Expander"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:Defer">
        <Name>Patch1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
              <Property Name="WheelDisplacement" />
              <Property Name="PelletDelivered" />
              <Property Name="DeliverPellet" />
              <Property Name="PatchEvents" />
              <Property Name="Radius" />
              <Property Name="SampleRate" />
              <Property Name="ResetFeeder" />
              <Property Name="DueTime" />
              <Property Name="Count" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>UndergroundFeeder</Name>
              <Description>Contains control and acquisition functionality for an underground feeder module.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="PatchId" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Nest1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>StreamId</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PortName" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="WheelDisplacement" Description="The name of the output sequence carrying total distance travelled on the wheel." />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="PelletDelivered" Description="The name of the output sequence carrying pellet delivery notifications." />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PelletDelivered</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\SelectStreamId.bonsai" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="DeliverPellet" Description="The name of the input sequence used to trigger pellet delivery." />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DeliverPellet</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\SelectStreamId.bonsai" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="PatchEvents" Description="The name of the output sequence containing all patch events." />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Patch</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Radius" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="SampleRate" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:ConfigureMagneticEncoder">
                      <p1:SampleRate>SampleRate500Hz</p1:SampleRate>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="ResetFeeder" Description="The name of the input sequence used to reset the underground feeder." />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ResetFeeder</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ResetFeeder</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="p1:DigitalOutput">
                          <p1:Command>Set</p1:Command>
                          <p1:Mask>Output0</p1:Mask>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT0.5S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="p1:DigitalOutput">
                          <p1:Command>Clear</p1:Command>
                          <p1:Mask>Output0</p1:Mask>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="1" To="4" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source2" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="DueTime" />
                    <Property Name="Count" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:TimedRetryCount.bonsai">
                    <DueTime>PT1S</DueTime>
                    <Count>2</Count>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>DeliverPellet</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="p1:DigitalOutput">
                          <p1:Command>Set</p1:Command>
                          <p1:Mask>Output0</p1:Mask>
                        </Expression>
                        <Expression xsi:type="p1:DigitalOutput">
                          <p1:Command>Clear</p1:Command>
                          <p1:Mask>Output0</p1:Mask>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:Device">
                      <harp:DeviceState>Active</harp:DeviceState>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:LedState>On</harp:LedState>
                      <harp:VisualIndicators>On</harp:VisualIndicators>
                      <harp:Heartbeat>Enable</harp:Heartbeat>
                      <harp:IgnoreErrors>false</harp:IgnoreErrors>
                      <harp:PortName>COM3</harp:PortName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsRepetition</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Repetition</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>PairRepetitions</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Patch</Name>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\SelectStreamId.bonsai" />
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:FilterMessage">
                            <harp:Address>36</harp:Address>
                            <harp:MessageType>Write</harp:MessageType>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="harp:Parse">
                                <harp:Type>U16</harp:Type>
                                <harp:IsArray>false</harp:IsArray>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" />
                              </Expression>
                              <Expression xsi:type="Equal">
                                <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                                  <Value>1</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>new(
1 as Value,
Item2.GetTimestamp() as Seconds)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="InputMapping">
                          <PropertyMappings />
                        </Expression>
                        <Expression xsi:type="harp:Format">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Address>203</harp:Address>
                          <harp:PayloadType>TimestampedU8</harp:PayloadType>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="7" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Name>Patch</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\GroupByStreamId.bonsai" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" />
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>Patch</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="p1:MagneticEncoder">
                    <p1:IncludeTimestamp>true</p1:IncludeTimestamp>
                  </Expression>
                  <Expression xsi:type="aeon:TransformTimestamped">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Angle</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Radius" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="aeon:WheelDisplacement">
                            <aeon:Radius>-4</aeon:Radius>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="3" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                    <aeon:IncludeTimestamp>false</aeon:IncludeTimestamp>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\GroupByStreamId.bonsai" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>WheelDisplacement</Name>
                  </Expression>
                  <Expression xsi:type="p1:AuxInputs">
                    <p1:Type>Input1</p1:Type>
                    <p1:IncludeTimestamp>true</p1:IncludeTimestamp>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>PelletDelivered</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\GroupByStreamId.bonsai" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>PelletDelivered</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="26" Label="Source2" />
                  <Edge From="5" To="34" Label="Source2" />
                  <Edge From="6" To="38" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="22" Label="Source3" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="22" Label="Source2" />
                  <Edge From="12" To="30" Label="Source2" />
                  <Edge From="12" To="28" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="15" To="32" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="25" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="25" Label="Source3" />
                  <Edge From="21" To="22" Label="Source3" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="22" To="27" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source2" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="29" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source2" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="30" To="35" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="37" Label="Source1" />
                  <Edge From="37" To="38" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>