WorkflowBuilder(Version=2.7.1)
GroupWorkflow Metadata
    GroupWorkflow Devices
        GroupWorkflow ClockSynchronizer
            ExternalizedMapping(PortName)
            -> IncludeWorkflow(Path=Aeon.Acquisition:Synchronizer.bonsai, PortName=COM5)
            -> WorkflowOutput

        GroupWorkflow VideoController
            ExternalizedMapping(PortName, GlobalTriggerFrequency, LocalTriggerFrequency)
            -> IncludeWorkflow(Path=Aeon.Acquisition:CameraController.bonsai, PortName=COM6, GlobalTriggerFrequency=50, LocalTriggerFrequency=125)
            -> WorkflowOutput

        GroupWorkflow CameraTop
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              SerialNumber=23101736
              Gain=0
              Binning=1
              TriggerSource=GlobalTrigger
              FrameEvents=CameraTop
              TriggerFrequency=GlobalTriggerFrequency
            -> WorkflowOutput

        GroupWorkflow CameraWest
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              SerialNumber=23100956
              Gain=0
              Binning=1
              TriggerSource=GlobalTrigger
              FrameEvents=CameraWest
              TriggerFrequency=GlobalTriggerFrequency
            -> WorkflowOutput

        GroupWorkflow CameraEast
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              SerialNumber=23106241
              Gain=0
              Binning=1
              TriggerSource=GlobalTrigger
              FrameEvents=CameraEast
              TriggerFrequency=GlobalTriggerFrequency
            -> WorkflowOutput

        GroupWorkflow CameraNorth
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              SerialNumber=23106245
              Gain=0
              Binning=1
              TriggerSource=GlobalTrigger
              FrameEvents=CameraNorth
              TriggerFrequency=GlobalTriggerFrequency
            -> WorkflowOutput

        GroupWorkflow CameraSouth
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              SerialNumber=23106227
              Gain=0
              Binning=1
              TriggerSource=GlobalTrigger
              FrameEvents=CameraSouth
              TriggerFrequency=GlobalTriggerFrequency
            -> WorkflowOutput

        GroupWorkflow CameraNest
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              SerialNumber=23106287
              Gain=0
              Binning=1
              TriggerSource=GlobalTrigger
              FrameEvents=CameraNest
              TriggerFrequency=GlobalTriggerFrequency
            -> WorkflowOutput

        GroupWorkflow CameraPatch1
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              SerialNumber=23106236
              Gain=0
              Binning=2
              TriggerSource=LocalTrigger
              FrameEvents=CameraPatch1
              TriggerFrequency=LocalTriggerFrequency
            -> WorkflowOutput

        GroupWorkflow CameraPatch2
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:VideoSource.bonsai
              SerialNumber=23101737
              Gain=0
              Binning=2
              TriggerSource=LocalTrigger
              FrameEvents=CameraPatch2
              TriggerFrequency=LocalTriggerFrequency
            -> WorkflowOutput

        GroupWorkflow AudioAmbient
            ExternalizedMapping(DeviceName, SampleRate, Name)
            -> IncludeWorkflow AudioAmbient(Path=Aeon.Acquisition:AudioSource.bonsai, DeviceName="Microphone (UltraMic 192K 16 bi", SampleRate=192000)
            -> WorkflowOutput

        GroupWorkflow Patch1
            ExternalizedMapping(PortName, WheelDisplacement, PelletDelivered, DeliverPellet, PatchEvents, Radius, SampleRate, ResetFeeder, DueTime, Count)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:UndergroundFeeder.bonsai
              PortName=COM3
              WheelDisplacement=WheelPatch1
              PelletDelivered=PelletDeliveredPatch1
              DeliverPellet=DeliverPelletPatch1
              PatchEvents=Patch1
              Radius=-4
              SampleRate=SampleRate500Hz
              ResetFeeder=ResetFeederPatch1
              DueTime=PT1S
              Count=2
            -> WorkflowOutput

        GroupWorkflow Patch2
            ExternalizedMapping(PortName, WheelDisplacement, PelletDelivered, DeliverPellet, PatchEvents, Radius, SampleRate, ResetFeeder, DueTime, Count)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:UndergroundFeeder.bonsai
              PortName=COM4
              WheelDisplacement=WheelPatch2
              PelletDelivered=PelletDeliveredPatch2
              DeliverPellet=DeliverPelletPatch2
              PatchEvents=Patch2
              Radius=-4
              SampleRate=SampleRate500Hz
              ResetFeeder=ResetFeederPatch2
              DueTime=PT1S
              Count=2
            -> WorkflowOutput

        GroupWorkflow Nest
            ExternalizedMapping(PortName, WeightEvents, TareWeight, TareEvents)
            -> IncludeWorkflow(Path=Aeon.Acquisition:WeightScale.bonsai, PortName=COM7, WeightEvents=WeightNest, TareWeight=TareWeightNest, TareEvents=TareNest)
            -> WorkflowOutput

        Disable GroupWorkflow Rfid
            ExternalizedMapping(PortName, RfidEvents)
            -> IncludeWorkflow(Path="Extensions\Rfid Reader.bonsai", PortName=COM8, RfidEvents=RfidEvents)
            -> WorkflowOutput

    GroupWorkflow TrackingTop
        ExternalizedMapping(Mask, ThresholdValue, TrackingEvents) => #0
        ExternalizedMapping(Name(DisplayName=FrameEvents))
        -> SubscribeSubject CameraTop => #2
        #2, #0 -> IncludeWorkflow
          Path=Aeon.Acquisition:PositionTracking.bonsai
          Mask=Config\ArenaMask-AEON3_2023-03-06.png
          ThresholdValue=83
          TrackingEvents=TrackingTop
          TrackingCount=1
        -> WorkflowOutput

    GroupWorkflow ActivityCenter
        SubscribeSubject CameraTop
        -> IncludeWorkflow
          Path=Aeon.Acquisition:ActivityTracking.bonsai
          ThresholdValue=10
          TrackingEvents=ActivityCenter
          Regions(ArrayOfPoint(Point(X=76, Y=431), Point(X=404, Y=431), Point(X=404, Y=665), Point(X=76, Y=665)))
        -> WorkflowOutput

    GroupWorkflow ActivityArena
        SubscribeSubject CameraTop
        -> IncludeWorkflow(Path=Aeon.Acquisition:ActivityTracking.bonsai, ThresholdValue=10, TrackingEvents=ActivityArena, Regions=nil)
        -> WorkflowOutput

    GroupWorkflow ActiveRegion
        ExternalizedMapping(NestRegion, Patch1Region, Patch2Region, ArenaCenter, ArenaInnerRadius, ArenaOuterRadius)
        -> IncludeWorkflow
          Path=Extensions\ActiveRegion.bonsai
          NestRegion(ArrayOfPoint(Point(X=1332, Y=482), Point(X=1242, Y=481), Point(X=1245, Y=586), Point(X=1334, Y=579)))
          Patch1Region(ArrayOfPoint(Point(X=904, Y=167), Point(X=925, Y=181), Point(X=910, Y=215), Point(X=888, Y=201)))
          Patch2Region(ArrayOfPoint(Point(X=802, Y=875), Point(X=924, Y=861), Point(X=939, Y=894), Point(X=920, Y=904)))
          ArenaCenter(X=661, Y=557)
          ArenaInnerRadius=474
          ArenaOuterRadius=494
        -> WorkflowOutput

GroupWorkflow Declarations
    Disable PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentSubjectStateMetadata)> SubjectStart
    Disable PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentSubjectStateMetadata)> SubjectStop

GroupWorkflow Logging
    IncludeWorkflow(Path=Aeon.Acquisition:LogController.bonsai, Path=D:\ProjectAeon\switch0.1, ChunkSize=1)
    Disable IncludeWorkflow(Path=Aeon.Acquisition:ExportMetadata.bonsai, WorkflowName=PreSocial0.1-AEON2.bonsai)

    SubscribeSubject SynchronizerEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=ClockSynchronizer)

    SubscribeSubject VideoEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=VideoController)

    SubscribeSubject CameraTop
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, LogName=CameraTop, FrameRate=50)

    SubscribeSubject TrackingTop
    -> Aeon.Acquisition.FormatBinaryRegions => #9
    GroupWorkflow RegionTracking
        SubscribeSubject InPatch1
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
          Expression: Value ? 4 : 0
        SubscribeSubject InPatch2
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
          Expression: Value ? 5 : 0
        SubscribeSubject InArena
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
          Expression: Value ? 3 : 0
        SubscribeSubject InCorridor
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
          Expression: Value ? 2 : 0
        SubscribeSubject InNest => #8
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #9
          Expression: Value ? 1 : 0
        #3, #1, #5, #7, #9 -> Zip
        -> Bonsai.Numerics.Max => #11
        #8 -> MemberSelector(Selector=Seconds) => #12
        #11, #12 -> Zip
        -> Aeon.Acquisition.CreateTimestamped
        -> WorkflowOutput
    -> Bonsai.Harp.Format(MessageType=Event, Address=201, PayloadType=TimestampedU8) => #11
    #9, #11 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=CameraTop)

    SubscribeSubject CameraWest
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, LogName=CameraWest, FrameRate=50)

    SubscribeSubject CameraEast
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, LogName=CameraEast, FrameRate=50)

    SubscribeSubject CameraNorth
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, LogName=CameraNorth, FrameRate=50)

    SubscribeSubject CameraSouth
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, LogName=CameraSouth, FrameRate=50)

    SubscribeSubject CameraNest
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, LogName=CameraNest, FrameRate=50)

    SubscribeSubject CameraPatch1
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, LogName=CameraPatch1, FrameRate=125)

    SubscribeSubject CameraPatch2
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, LogName=CameraPatch2, FrameRate=125)

    SubscribeSubject Patch1 => #28
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.DispenserStateMetadata)> Patch1Dispenser
    -> Aeon.Acquisition.FormatDispenserState => #30
    PublishSubject<Bonsai.Harp.Timestamped(System.UInt16)> ManualPellet1
    -> Bonsai.Harp.Format(MessageType=Write, Address=201, PayloadType=TimestampedU8) => #32
    PublishSubject<Bonsai.Harp.Timestamped(System.Byte)> MissedPellets1
    -> Bonsai.Harp.Format(MessageType=Event, Address=202, PayloadType=TimestampedU8) => #34
    #28, #30, #32, #34 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Patch1)

    SubscribeSubject Patch1
    -> Bonsai.Harp.Parse(Type=Timestamp, IsArray=false) => #38
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> PatchState1
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #40
      Expression:
        new(
        Item1 as Threshold,
        Item2 as D1,
        Item3 as Delta)
    #40, #38 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, LogName=Patch1_State, Selector=nil)

    SubscribeSubject Patch2 => #43
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.DispenserStateMetadata)> Patch2Dispenser
    -> Aeon.Acquisition.FormatDispenserState => #45
    PublishSubject<Bonsai.Harp.Timestamped(System.UInt16)> ManualPellet2
    -> Bonsai.Harp.Format(MessageType=Write, Address=201, PayloadType=TimestampedU8) => #47
    PublishSubject<Bonsai.Harp.Timestamped(System.Byte)> MissedPellets2
    -> Bonsai.Harp.Format(MessageType=Event, Address=202, PayloadType=TimestampedU8) => #49
    #43, #45, #47, #49 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Patch2)

    SubscribeSubject Patch2
    -> Bonsai.Harp.Parse(Type=Timestamp, IsArray=false) => #53
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> PatchState2
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #55
      Expression:
        new(
        Item1 as Threshold,
        Item2 as D1,
        Item3 as Delta)
    #55, #53 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, LogName=Patch2_State, Selector=nil)

    SubscribeSubject AudioAmbient
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogAudio.bonsai, LogName=AudioAmbient, SampleRate=192000)

    SubscribeSubject WeightNest
    -> InputMapping(Selector="Seconds,Value.Weight,Value.Confidence", TypeMapping=TypeMapping<Aeon.Acquisition.WeightMeasurement>)
    -> Aeon.Acquisition.FormatWeight(Address=200) => #62
    SubscribeSubject TareNest
    -> Bonsai.Harp.Format(MessageType=Write, Address=201, PayloadType=TimestampedU8) => #64
    BehaviorSubject<Aeon.Acquisition.WeightMeasurement> FilteredWeightNest
    -> Aeon.Acquisition.FormatWeight(Address=202) => #66
    PublishSubject<Bonsai.Harp.Timestamped(System.Double)> BaselineTrigger
    -> Bonsai.Harp.Format(MessageType=Write, Address=203, PayloadType=TimestampedU8) => #68
    BehaviorSubject<Aeon.Acquisition.WeightMeasurement> SubjectWeight
    -> Aeon.Acquisition.FormatWeight(Address=204) => #70
    #62, #64, #66, #68, #70 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Nest)

    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentSubjectStateMetadata)> SubjectState
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, LogName=ExperimentalMetadata_SubjectState, Selector="Seconds,Value.Id,Value.Weight,Value.Type")

    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.LogMessage)> Annotations => #75
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.LogMessage)> AlertLogs => #76
    #76, #75 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, LogName=ExperimentalMetadata_MessageLog, Selector="Seconds,Value.Priority,Value.Type,Value.Message")

    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentStateMetadata)> EnvironmentState
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, LogName=ExperimentalMetadata_EnvironmentState, Selector="Seconds,Value.Type")

    SubscribeSubject SubjectState
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #82
      Expression:
        new(
        Seconds as Seconds,
        new(Value.Id as Id,
            Value.Type.ToString() as Event,
            "Environment" as Value) as Value)
    SubscribeSubject InPatch1
    -> IncludeWorkflow Patch1(Path=Extensions\FormatRegionVisits.bonsai) => #84
    SubscribeSubject InPatch2
    -> IncludeWorkflow Patch2(Path=Extensions\FormatRegionVisits.bonsai) => #86
    SubscribeSubject InArena
    -> IncludeWorkflow Arena(Path=Extensions\FormatRegionVisits.bonsai) => #88
    SubscribeSubject InCorridor
    -> IncludeWorkflow Corridor(Path=Extensions\FormatRegionVisits.bonsai) => #90
    SubscribeSubject InNest
    -> IncludeWorkflow Nest(Path=Extensions\FormatRegionVisits.bonsai) => #92
    #82, #84, #86, #88, #90, #92 -> Merge
    -> MemberSelector(Selector="Value,Seconds")
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, LogName=ExperimentalMetadata_SubjectVisits, Selector="Seconds,Value.Id,Value.Event,Value.Value")

    Disable SubscribeSubject RfidEvents
    -> Disable IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Rfid)

GroupWorkflow Visualization
    SubscribeSubject SubjectState => #0
    -> Condition Start
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Type)
        -> NotEqual(Operand=WorkflowProperty<Aeon.Acquisition.EnvironmentSubjectChangeType>(Value=Exit))
        -> WorkflowOutput
    -> PublishSubject SubjectStart
    #0 -> Condition End
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Type)
        -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.EnvironmentSubjectChangeType>(Value=Exit))
        -> WorkflowOutput
    -> PublishSubject SubjectStop

    SubscribeSubject TrackingTop
    -> MemberSelector(Selector=Item1[0].Centroid)
    -> PublishSubject Trajectory

    SubscribeSubject CameraTop
    -> MemberSelector(Selector=Value.Image)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject FrameTrajectory

    SubscribeSubject TrackingTop
    -> MemberSelector(Selector=Item1[0].Centroid)
    -> Bonsai.Dsp.Histogram2D(MinX=0, MaxX=1440, MinY=0, MaxY=1080, BinsX=288, BinsY=216, Normalize=false, Accumulate=true)
    -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=20, Shift=0)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject Heatmap

    SubscribeSubject PatchState1
    -> MemberSelector(Selector=Item1) => #20
    SubscribeSubject PatchState2
    -> MemberSelector(Selector=Item1) => #22
    Aeon.Acquisition.StateRecoverySubject<System.Double> DistanceState1 => #23
    Aeon.Acquisition.StateRecoverySubject<System.Double> DistanceState2 => #24
    #23, #24, #20, #22 -> CombineLatest => #25
    #25, #23 -> Sample
    -> Bonsai.Dsp.Buffer(Count=15, Skip=nil)
    -> PublishSubject PatchState

    SubscribeSubject PatchState1
    -> GroupWorkflow ToArray => #30
        WorkflowInput Source1
        -> SelectMany
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> ToArray
            -> WorkflowOutput
        -> DelaySubscription(DueTime=PT0.1S) => #2
        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> IgnoreElements
        -> ToArray => #6
        #6, #2 -> Concat
        -> WorkflowOutput
    Aeon.Acquisition.StateRecoverySubject<System.Int32> DeliveryCount1 => #31
    #30, #31 -> WithLatestFrom
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        int32(Item2) as PelletCount,
        Item1 as Threshold)
    -> PublishSubject CurrentThresholdPatch1

    SubscribeSubject PatchState2
    -> GroupWorkflow ToArray => #37
        WorkflowInput Source1
        -> SelectMany
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> ToArray
            -> WorkflowOutput
        -> DelaySubscription(DueTime=PT0.1S) => #2
        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> IgnoreElements
        -> ToArray => #6
        #6, #2 -> Concat
        -> WorkflowOutput
    Aeon.Acquisition.StateRecoverySubject<System.Int32> DeliveryCount2 => #38
    #37, #38 -> WithLatestFrom
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        int32(Item2) as PelletCount,
        Item1 as Threshold)
    -> PublishSubject CurrentThresholdPatch2

    IncludeWorkflow(Path=Extensions\PelletMonitor.bonsai, PelletDelivered=PelletDeliveredPatch1, PelletCommand=Patch1)
    -> PublishSubject PelletMonitor1
    -> MemberSelector(Selector=Value)
    -> PublishSubject PelletMonitorValue1

    IncludeWorkflow(Path=Extensions\PelletMonitor.bonsai, PelletDelivered=PelletDeliveredPatch2, PelletCommand=Patch2)
    -> BehaviorSubject PelletMonitor2
    -> MemberSelector(Selector=Value)
    -> PublishSubject PelletMonitorValue2

    IncludeWorkflow(Path=Aeon.Acquisition:TimeSpentOnWheel.bonsai, Patch=Patch1, WheelPatch=WheelPatch1, Threshold=0.0003, LowPass=1)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> BehaviorSubject TimeOnPatch1

    IncludeWorkflow(Path=Aeon.Acquisition:TimeSpentOnWheel.bonsai, Patch=Patch2, WheelPatch=WheelPatch2, Threshold=0.0003, LowPass=1)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> BehaviorSubject TimeOnPatch2

    SubscribeSubject TimeOnPatch1 => #57
    SubscribeSubject TimeOnPatch2 => #58
    #57, #58 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Time Spent on Patch (s)" as Id,
        Item1 as Patch1,
        Item2 as Patch2)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TimeSpentOnPatches

    SubscribeSubject TimeOnPatch1
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> DistinctUntilChanged
    -> IncludeWorkflow(Path=Aeon.Acquisition:TimeSinceLastEvent.bonsai)
    -> BehaviorSubject TimeSinceLastVisit1

    SubscribeSubject TimeOnPatch2
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> DistinctUntilChanged
    -> IncludeWorkflow(Path=Aeon.Acquisition:TimeSinceLastEvent.bonsai)
    -> BehaviorSubject TimeSinceLastVisit2

    SubscribeSubject TimeSinceLastVisit1 => #73
    SubscribeSubject TimeSinceLastVisit2 => #74
    #73, #74 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Time Since Last Visit (s)" as Id,
        Item1 as Patch1,
        Item2 as Patch2)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TimeSinceLastVisit

    SubscribeSubject ActivityCenter
    -> Condition ActivityCondition => #80
        WorkflowInput Source1
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=BaselineActivityThreshold)) => #2
        #1, #2 -> GreaterThan(Operand=DoubleProperty(Value=1))
        -> WorkflowOutput
    ExternalizedMapping(Interval(DisplayName=BaselineRefractoryPeriod)) => #81
    #80, #81 -> GateInterval(Interval=PT5S)
    -> MulticastSubject BaselineTrigger

    SubscribeSubject SubjectStart
    -> MemberSelector(Selector=Value.ReferenceWeight) => #85
    SubscribeSubject SubjectWeight => #86
    #86, #85 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1.Timestamp as Timestamp,
        Item1.Value as CurrentWeight,
        100 * Item1.Value / Item2 as CurrentPercent)
    -> BehaviorSubject PercentWeightLoss

    SubscribeSubject WeightNest
    -> InputMapping(Selector="Seconds,Value.Weight,Value.Confidence", TypeMapping=TypeMapping<Aeon.Acquisition.WeightMeasurement>)
    -> Aeon.Acquisition.WeightFilter(Count=40)
    -> MulticastSubject FilteredWeightNest => #93
    SubscribeSubject BaselineTrigger => #94
    #93, #94 -> Aeon.Acquisition.WeightBaseline
    -> PublishSubject BaselinedWeight
    -> Condition StableWeight
        WorkflowInput Source1
        -> MemberSelector(Selector=Confidence) => #1
        ExternalizedMapping(Value(DisplayName=ConfidenceThreshold)) => #2
        #1, #2 -> Equal(Operand=FloatProperty(Value=1))
        -> WorkflowOutput
    -> Condition SubjectOnScale
        WorkflowInput Source1
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=WeightThreshold)) => #2
        #1, #2 -> GreaterThan(Operand=FloatProperty(Value=10))
        -> WorkflowOutput
    -> MulticastSubject SubjectWeight

    SubscribeSubject WheelPatch1
    -> MemberSelector(Selector=Value)
    -> Accumulate => #102
    SubscribeSubject WheelPatch2
    -> MemberSelector(Selector=Value)
    -> Accumulate => #105
    #102, #105 -> CombineLatest
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Total Distance Travelled (cm)" as Id,
        Item1 as Patch1,
        Item2 as Patch2)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TotalDistanceTravelled

    IncludeWorkflow
      Path=Extensions\PelletMissed.bonsai
      TimeToMiss=PT2S
      DistanceToMiss=20
      TimeInChute=PT0S
      WheelDisplacement=WheelPatch1
      PelletDelivered=PelletDeliveredPatch1
    -> MulticastSubject MissedPellets1

    IncludeWorkflow
      Path=Extensions\PelletMissed.bonsai
      TimeToMiss=PT2S
      DistanceToMiss=20
      TimeInChute=PT0S
      WheelDisplacement=WheelPatch2
      PelletDelivered=PelletDeliveredPatch2
    -> MulticastSubject MissedPellets2

    SubscribeSubject PelletDeliveredPatch1
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalPelletsDelivered1(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject PelletDeliveredPatch2
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalPelletsDelivered2(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject MissedPellets1
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalMissedPellets1(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject MissedPellets2
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalMissedPellets2(Path=Extensions\PersistentCounter.bonsai)

    GroupWorkflow SubjectAlerts
        PublishSubject<System.String> SubjectAlertMessages
        -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\alerts.config)

        ExternalizedMapping(Count(DisplayName=DeliveryFailureThreshold)) => #3
        SubscribeSubject PelletMonitor1 => #4
        #4, #3 -> Condition DispenserBroken
            ExternalizedMapping(Count) => #0
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression: Value ? 1 : 0
            #2, #0 -> BufferCount(Count=5, Skip=1)
            -> Add => #4
            #4, #0 -> GroupWorkflow Equal
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Count)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=5)) => #2
                #0 -> Equal(Operand=IntProperty(Value=0)) => #3
                #2, #3 -> Zip
                -> LogicalOr
                -> WorkflowOutput
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #6
        -> Format
          Format:
            ## **Dispenser Broken**
            **Patch**: Patch1
          Selector=""
        -> MulticastSubject SubjectAlertMessages
        #6 -> Aeon.Acquisition.FormatLogMessage(Format=Patch1, Selector="", Priority=Alert, Type=DispenserBroken, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs
        SubscribeSubject PelletMonitor2 => #11
        #11, #3 -> Condition DispenserBroken
            ExternalizedMapping(Count) => #0
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression: Value ? 1 : 0
            #2, #0 -> BufferCount(Count=5, Skip=1)
            -> Add => #4
            #4, #0 -> GroupWorkflow Equal
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Count)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=5)) => #2
                #0 -> Equal(Operand=IntProperty(Value=0)) => #3
                #2, #3 -> Zip
                -> LogicalOr
                -> WorkflowOutput
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #13
        -> Format
          Format:
            ## **Dispenser Broken**
            **Patch**: Patch2
          Selector=""
        -> MulticastSubject SubjectAlertMessages
        #13 -> Aeon.Acquisition.FormatLogMessage(Format=Patch2, Selector="", Priority=Alert, Type=DispenserBroken, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject MissedPellets1
        -> ElementIndex
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #20
        SubscribeSubject SubjectState => #21
        #20, #21 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
          Expression:
            new(
            Item1.Value.Seconds as Timestamp,
            Item1.Index + 1 as Count,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Missed Pellet**
            **Subject**: {0}
            **Patch:**: Patch1
            **Total Missed**: {1}
          Selector="Id,Count"
        -> MulticastSubject SubjectAlertMessages
        #23 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	Patch1	{1}", Selector="Id,Count", Priority=Alert, Type=MissedPellet, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject MissedPellets2
        -> ElementIndex
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #30
        SubscribeSubject SubjectState => #31
        #30, #31 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #33
          Expression:
            new(
            Item1.Value.Seconds as Timestamp,
            Item1.Index + 1 as Count,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Missed Pellet**
            **Subject**: {0}
            **Patch:**: Patch2
            **Total Missed**: {1}
          Selector="Id,Count"
        -> MulticastSubject SubjectAlertMessages
        #33 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	Patch2	{1}", Selector="Id,Count", Priority=Alert, Type=MissedPellet, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject TrackingTop
        -> GroupWorkflow SpeedThreshold
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1[0].Centroid)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Dsp.Norm(NormType=L2) => #3
            ExternalizedMapping(Value(DisplayName=MaxSpeed)) => #4
            #3, #4 -> GreaterThan(Operand=DoubleProperty(Value=500)) => #5
            #0 -> MemberSelector(Selector=Item2) => #6
            #5, #6 -> Zip
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> WorkflowOutput
        -> Condition TrackingUnstable
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #41
        SubscribeSubject SubjectState => #42
        #41, #42 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #44
          Expression:
            new(
            Item1.Item2 as Timestamp,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Tracking Failure**
            **Subject**: {0}
          Selector=Id
        -> MulticastSubject SubjectAlertMessages
        #44 -> Aeon.Acquisition.FormatLogMessage(Format={0}, Selector=Id, Priority=Alert, Type=TrackingFailure, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)

    GroupWorkflow EnvironmentAlerts
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.GroupByTime(ChunkSize=1)
        -> Skip(Count=1)
        -> SelectMany ExperimentSummary => #3
            SubscribeSubject PatchState1
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression:
                new(
                Item1 as Threshold,
                Item2 as D0,
                Item3 as Delta)
            SubscribeSubject PatchState2
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression:
                new(
                Item1 as Threshold,
                Item2 as D0,
                Item3 as Delta)
            SubscribeSubject SubjectState
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Id) => #8
            SubscribeSubject Patch1Dispenser
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Value) => #11
            SubscribeSubject TimeSinceLastVisit1
            -> Take(Count=1) => #13
            SubscribeSubject TimeSinceLastVisit2
            -> Take(Count=1) => #15
            SubscribeSubject TimeOnPatch1
            -> Take(Count=1) => #17
            SubscribeSubject TimeOnPatch2
            -> Take(Count=1) => #19
            #19, #17, #15, #13 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #21
              Expression:
                new(
                Item1 as TimeOnPatch2,
                Item2 as TimeOnPatch1,
                Item3 as TimeSinceLastVisit2,
                Item4 as TimeSinceLastVisit1)
            SubscribeSubject PercentWeightLoss
            -> MemberSelector(Selector="CurrentWeight,CurrentPercent") => #23
            SubscribeSubject Patch2Dispenser
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Value) => #26
            #2, #5, #11, #26 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #28
              Expression:
                new(
                Item1 as PatchState1,
                Item2 as PatchState2,
                Item3 as PatchDispenser1,
                Item4 as PatchDispenser2)
            WorkflowInput Source1
            -> Take(Count=1)
            -> MemberSelector(Selector=Key) => #31
            FloatProperty(Value=0)
            -> MemberSelector(Selector="it,it") => #33
            #23, #33 -> Merge
            -> Take(Count=1)
            -> Take(Count=1) => #36
            SubscribeSubject TotalPelletsDelivered1 => #37
            SubscribeSubject TotalPelletsDelivered2 => #38
            SubscribeSubject TotalMissedPellets1 => #39
            SubscribeSubject TotalMissedPellets2 => #40
            #37, #38, #39, #40 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #42
              Expression:
                new(
                Item1 as TotalPelletsDelivered1,
                Item2 as TotalPelletsDelivered2,
                Item3 as TotalMissedPellets1,
                Item4 as TotalMissedPellets2)
            #28, #21, #8, #36, #31, #42 -> Zip
            -> Take(Count=1) => #44
            -> Format => #45
              Format:
                # Arena Status
                **Time**: {0}
                **Subject**: {1}
                **Weight**: {2}
                **Weight Loss**: {3}
              Selector="Item5,Item3,Item4.Item1,Item4.Item2"
            #44 -> Format => #46
              Format:
                # Patch1
                **Pellets**: {0}
                **Threshold**: {1}
                **D0**: {2}
                **Delta**: {3}
                **Time On Patch**: {4}
                **Time Since Last Visit**: {5}
                **Total Pellets Delivered**: {6}
                **Total Missed Pellets**: {7}
              Selector: Item1.PatchDispenser1,Item1.PatchState1.Threshold,Item1.PatchState1.D0,Item1.PatchState1.Delta,Item2.TimeOnPatch1,Item2.TimeSinceLastVisit1,Item6.TotalPelletsDelivered1,Item6.TotalMissedPellets1
            #44 -> Format => #47
              Format:
                # Patch2
                **Pellets**: {0}
                **Threshold**: {1}
                **D0**: {2}
                **Delta**: {3}
                **Time On Patch**: {4}
                **Time Since Last Visit**: {5}
                **Total Pellets Delivered**: {6}
                **Total Missed Pellets**: {7}
              Selector: Item1.PatchDispenser2,Item1.PatchState2.Threshold,Item1.PatchState2.D0,Item1.PatchState2.Delta,Item2.TimeOnPatch2,Item2.TimeSinceLastVisit2,Item6.TotalPelletsDelivered2,Item6.TotalMissedPellets2
            #45, #46, #47 -> Zip
            -> Add
            -> WorkflowOutput
        SubscribeSubject EnvironmentState
        -> Format => #5
          Format:
            ## Arena {0} Mode Change
            Mode: {1}
          Selector="Value.Name,Value.Type"
        SubscribeSubject VideoEvents => #6
        #5, #6 -> SubscribeWhen
        -> DelaySubscription(DueTime=PT2S) => #8
        #3, #8 -> Merge
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\status.config)

        PublishSubject<System.String> EnvironmentAlertMessages
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\alerts.config)

        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.GroupByTime(ChunkSize=1)
        -> Skip(Count=1)
        -> SelectMany LocalFileCount => #16
            SubscribeSubject PathPrefix
            -> Bonsai.IO.GetDirectoryName
            -> PropertyMapping(Path)
            -> Bonsai.IO.GetFiles(Path=D:\ProjectAeon\presocial0.1, SearchPattern=*, SearchOption=AllDirectories)
            -> MemberSelector(Selector=Length) => #4
            WorkflowInput Source1
            -> Merge
            -> Take(Count=1) => #7
            #4, #7 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Count,
                Item2.GetTimestamp() as Timestamp)
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=LocalFileThreshold)) => #17
        #16, #17 -> Condition GreaterThan => #18
            WorkflowInput Source1
            -> MemberSelector(Selector=Count) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> GreaterThan(Operand=IntProperty(Value=500))
            -> WorkflowOutput
        -> Format
          Format:
            ## **File Storage**
            **Total Files in Local Storage**: {0}
          Selector=Count
        -> MulticastSubject EnvironmentAlertMessages
        #18 -> Aeon.Acquisition.FormatLogMessage(Format="", Selector=Count, Priority=Alert, Type=FileStorage, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraPatch2) => #23
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraPatch1) => #24
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraSouth) => #25
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraNorth) => #26
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraEast) => #27
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraWest) => #28
        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraTop) => #29
        #29, #28, #27, #26, #25, #24, #23 -> Merge => #30
        -> Format
          Format:
            ## **Frame Dropped**
            **Camera**: {0}
            **Current Frame**: {1}
          Selector="Name,FrameID"
        -> MulticastSubject EnvironmentAlertMessages
        #30 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	{1}", Selector="Name,FrameID", Priority=Alert, Type=DroppedFrames, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject Annotations
        -> Condition Alert
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.Priority)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.PriorityLevel>(Value=Alert))
            -> WorkflowOutput
        -> Format
          Format:
            ## **Experimenter Annotation**
            **Message**: {0}
          Selector=Value.Message
        -> MulticastSubject EnvironmentAlertMessages

        IncludeWorkflow(Path=Extensions\SynchronizerMonitor.bonsai) => #39
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #40
          Expression: DeviceCount != ExpectedDeviceCount || MaxDifference > 0 || Math.Abs((MeanTimestamp - DateTime.UtcNow).TotalMinutes) > 30
        -> Format
          Format:
            ## **Harp Synch**
            **Synchronizer Stats**: {0}
          Selector=it
        -> MulticastSubject EnvironmentAlertMessages
        #40 -> Aeon.Acquisition.FormatLogMessage
          Format="{0}	{1}	{2}	{3}	{4}"
          Selector="MeanRawTimestamp,MeanTimestamp,ExpectedDeviceCount,DeviceCount,MaxDifference"
          Priority=Alert
          Type=HarpSynch
          Timestamp=MeanRawTimestamp
        -> MulticastSubject AlertLogs
        #39 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName=D:\TimestampClockSyncHeartBeat\TimestampClockSyncHeartBeat.csv, Append=true, Overwrite=false, Suffix=None, IncludeHeader=true)

GroupWorkflow ControlPanel
    Bonsai.Windows.Input.KeyDown(Filter="ShiftKey Space D0 P NumPad0 F1 Shift", SuppressRepetitions=false)
    -> MulticastSubject StartCameras

    Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey Space Prior PageUp D0 D1 A P Q NumPad0 NumPad1 F1 F2 Shift", SuppressRepetitions=false)
    -> MulticastSubject StopCameras

    Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu Space Next PageDown D0 D2 B P R NumPad0 NumPad2 F1 F3 Shift", SuppressRepetitions=false)
    -> GroupWorkflow ManualPellet1
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Aeon.Acquisition:TriggerPellet.bonsai, PatchEvents=Patch1, DeliverPellet=DeliverPelletPatch1)
        -> MulticastSubject ManualPellet1
        -> WorkflowOutput

    Bonsai.Windows.Input.KeyDown
      Filter: LButton RButton Cancel ShiftKey ControlKey Menu Pause Space Prior PageUp Next PageDown End D0 D1 D2 D3 A B C P Q R S NumPad0 NumPad1 NumPad2 NumPad3 F1 F2 F3 F4 Shift
      SuppressRepetitions=false
    -> GroupWorkflow ManualPellet2
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Aeon.Acquisition:TriggerPellet.bonsai, PatchEvents=Patch2, DeliverPellet=DeliverPelletPatch2)
        -> MulticastSubject ManualPellet2
        -> WorkflowOutput

    SubscribeSubject PatchState1
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item2 as D1,
        Item3 as Delta)
    -> Aeon.Acquisition.LabelControl(FontSize=14)
    -> GroupWorkflow Patch1
        WorkflowInput Source1
        -> WorkflowOutput

    SubscribeSubject PatchState2
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item2 as D1,
        Item3 as Delta)
    -> Aeon.Acquisition.LabelControl(FontSize=14)
    -> GroupWorkflow Patch2
        WorkflowInput Source1
        -> WorkflowOutput

    SubscribeSubject AudioAmbient
    -> MemberSelector(Selector=Value)

    GroupWorkflow PatchActivity
        SubscribeSubject PatchState
        -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=2))
        -> VisualizerMapping => #2
        SubscribeSubject CurrentThresholdPatch1
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=PelletCount, ValueSelector=Threshold, SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow ThresholdPatch1
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #6
        SubscribeSubject CurrentThresholdPatch2
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=PelletCount, ValueSelector=Threshold, SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow ThresholdPatch2
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #10
        SubscribeSubject PelletMonitorValue1
        -> VisualizerMapping => #12
        SubscribeSubject PelletMonitorValue2
        -> VisualizerMapping => #14
        SubscribeSubject TimeSpentOnPatches
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="Patch1,Patch2", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TimeSpentOnPatches
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #18
        SubscribeSubject TimeSinceLastVisit
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="Patch1,Patch2", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TimeSinceLastVisit
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #22
        SubscribeSubject TotalDistanceTravelled
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="Patch1,Patch2", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TotalDistanceTravelled
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #26
        Aeon.Acquisition.ExperimentProperties
        -> VisualizerMapping => #28
        #28, #18, #22, #26 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchStatistics(ColumnCount=1, RowCount=4, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #30
        SubscribeSubject CameraPatch1
        -> SampleInterval(Interval=PT0.02S)
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping => #34
        SubscribeSubject CameraPatch2
        -> SampleInterval(Interval=PT0.02S)
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping => #38
        SubscribeSubject PatchState
        -> Bonsai.Dsp.SelectChannels(Channels(int=1, int=3))
        -> VisualizerMapping => #41
        #34, #38, #2, #41, #6, #10, #12, #14 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchActivity
          ColumnCount=2
          RowCount=4
          ColumnStyles=""
          RowStyles=""
          CellSpans
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
        -> VisualizerMapping => #43
        #43, #30 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchActivity(ColumnCount=2, RowCount=1, ColumnStyles(ColumnStyle(SizeType=Percent, Width=60), ColumnStyle(SizeType=Percent, Width=40)), RowStyles="", CellSpans="")
        -> WorkflowOutput

    GroupWorkflow SubjectActivity
        SubscribeSubject Trajectory
        -> VisualizerMapping
        -> SubscribeSubject FrameTrajectory
        -> VisualizerMapping => #3
        SubscribeSubject Heatmap
        -> VisualizerMapping => #5
        #5, #3 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder SubjectActivity(ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput

    GroupWorkflow ExperimentMetadata
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.AnnotationSource
        -> MulticastSubject Annotations
        -> VisualizerMapping => #3
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.EnvironmentState
        -> MulticastSubject EnvironmentState
        -> VisualizerMapping => #7
        SubscribeSubject Patch1 => #8
        SubscribeSubject Patch2 => #9
        SubscribeSubject PelletDeliveredPatch1
        -> Condition RisingEdge
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> IntProperty(Value=1) => #12
        #12, #8 -> Aeon.Acquisition.DispenserState(Name=Patch1)
        -> MulticastSubject Patch1Dispenser
        -> VisualizerMapping => #15
        SubscribeSubject PelletDeliveredPatch2
        -> Condition RisingEdge
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> IntProperty(Value=1) => #18
        #18, #9 -> Aeon.Acquisition.DispenserState(Name=Patch2)
        -> MulticastSubject Patch2Dispenser
        -> VisualizerMapping => #21
        #15, #21, #3, #7 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder ExperimentMetadata
          ColumnCount=2
          RowCount=4
          ColumnStyles=""
          RowStyles=""
          CellSpans
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
        -> WorkflowOutput

        SubscribeSubject Patch1Dispenser
        -> Skip(Count=1)
        -> Condition Reset
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.DispenserEventType>(Value=Reset))
            -> WorkflowOutput
        -> MulticastSubject ResetFeederPatch1

        SubscribeSubject Patch2Dispenser
        -> Skip(Count=1)
        -> Condition Reset
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.DispenserEventType>(Value=Reset))
            -> WorkflowOutput
        -> MulticastSubject ResetFeederPatch2

    GroupWorkflow EnvironmentSubjectState
        SubscribeSubject VideoEvents => #0
        SubscribeSubject EnvironmentState
        -> PropertyMapping(EnvironmentState(Selector=Value.Type)) => #2
        #0, #2 -> Aeon.Acquisition.EnvironmentSubjectState(DatabasePath=Z:\aeon\colony\colony.csv, EnvironmentState=Maintenance)
        -> MulticastSubject SubjectState
        -> WorkflowOutput

Bonsai.Numerics.CreateRandom(Seed=nil)
-> AsyncSubject Random

ExternalizedMapping(EasyThreshold, EasyRate, HardThreshold, HardRate, StartThreshold, StartTimeout, InitThreshold, InitRate)
-> GroupWorkflow TaskLogic
    ExternalizedMapping(EasyThreshold, EasyRate, HardThreshold, HardRate, StartThreshold, StartTimeout, InitThreshold, InitRate)
    -> Defer ParameterController
        ExternalizedMapping(Value(DisplayName=InitThreshold))
        -> DoubleProperty(Value=75)
        -> BehaviorSubject InitThreshold

        ExternalizedMapping(Value(DisplayName=InitRate))
        -> DoubleProperty(Value=10000)
        -> BehaviorSubject InitRate

        ExternalizedMapping(Value(DisplayName=EasyThreshold, Description="The minimum distance required to obtain a pellet."))
        -> DoubleProperty(Value=75)
        -> BehaviorSubject EasyThreshold

        ExternalizedMapping(Value(DisplayName=EasyRate))
        -> DoubleProperty(Value=0.01)
        -> BehaviorSubject EasyRate

        ExternalizedMapping(Value(DisplayName=HardThreshold, Description="The minimum distance required to obtain a pellet."))
        -> DoubleProperty(Value=75)
        -> BehaviorSubject HardThreshold

        ExternalizedMapping(Value(DisplayName=HardRate))
        -> DoubleProperty(Value=0.0025)
        -> BehaviorSubject HardRate

        SubscribeSubject WheelPatch1
        -> MemberSelector(Selector=Value)
        -> IncludeWorkflow(Path=Aeon.Acquisition:DistanceTravelled.bonsai, Gain=1) => #20
        SubscribeSubject WheelPatch2
        -> MemberSelector(Selector=Value)
        -> IncludeWorkflow(Path=Aeon.Acquisition:DistanceTravelled.bonsai, Gain=1) => #23
        SubscribeSubject InitThreshold => #24
        SubscribeSubject InitRate => #25
        #24, #25 -> CombineLatest
        -> Take(Count=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #28
          Expression:
            new(
            Item1 as ThresholdPatch1,
            Item2 as RatePatch1,
            Item1 as ThresholdPatch2,
            Item2 as RatePatch2)
        SubscribeSubject EasyThreshold => #29
        SubscribeSubject EasyRate => #30
        SubscribeSubject HardThreshold => #31
        SubscribeSubject HardRate => #32
        #29, #30, #31, #32 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #34
          Expression:
            new(
            Item1 as EasyThreshold,
            Item2 as EasyRate,
            Item3 as HardThreshold,
            Item4 as HardRate)
        SubscribeSubject ThresholdCrossingPatch1
        -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
        -> IntProperty(Value=1)
        -> Accumulate => #38
        SubscribeSubject ThresholdCrossingPatch2
        -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
        -> IntProperty(Value=1)
        -> Accumulate => #42
        #38, #42 -> CombineLatest
        -> Add => #44
        ExternalizedMapping(Value(DisplayName=StartThreshold)) => #45
        #44, #45 -> GreaterThanOrEqual(Operand=IntProperty(Value=18))
        -> Condition => #47
            WorkflowInput Source1
            -> WorkflowOutput
        ExternalizedMapping(StartTimeout) => #48
        #47, #48 -> Sink StartTimeout => #49
            ExternalizedMapping(DueTime(DisplayName=StartTimeout))
            -> Timer(DueTime=PT1H, Period=PT0S)
            -> Format
              Format:
                ## **Start Timeout**
                More than 1 hour has passed and the pellet threshold value to start the probabilistic period has not been reached.
              Selector=""
            -> MulticastSubject SubjectAlertMessages
        #34, #49 -> SubscribeWhen => #50
        #50, #20, #23 -> CombineLatest
        -> Take(Count=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #53
          Expression:
            new(
            Item2 > Item3 ? Item1.HardThreshold : Item1.EasyThreshold as ThresholdPatch1,
            Item2 > Item3 ? Item1.HardRate : Item1.EasyRate as RatePatch1,
            Item2 > Item3 ? Item1.EasyThreshold : Item1.HardThreshold as ThresholdPatch2,
            Item2 > Item3 ? Item1.EasyRate : Item1.HardRate as RatePatch2)
        #28, #53 -> Concat
        -> Sink SetPatchState
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Double.NaN as Threshold,
                ThresholdPatch1 as D0,
                RatePatch1 as Rate)
            -> MemberSelector(Selector="Threshold,D0,Rate", TypeMapping=TypeMapping<System.ValueTuple(System.Double,System.Double,System.Double)>)
            -> MulticastSubject PatchState1
            #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Double.NaN as Threshold,
                ThresholdPatch2 as D0,
                RatePatch2 as Rate)
            -> MemberSelector(Selector="Threshold,D0,Rate", TypeMapping=TypeMapping<System.ValueTuple(System.Double,System.Double,System.Double)>)
            -> MulticastSubject PatchState2
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> PublishSubject ParameterChange

    SubscribeSubject ParameterChange => #4
    SubscribeSubject ParameterChange
    -> PropertyMapping(ThresholdPatch1(Selector=ThresholdPatch1), RatePatch1(Selector=RatePatch1), ThresholdPatch2(Selector=ThresholdPatch2), RatePatch2(Selector=RatePatch2))
    -> GroupWorkflow TaskLogic => #7
        SubscribeSubject WheelPatch1
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(DistanceThreshold(DisplayName=ThresholdPatch1), Rate(DisplayName=RatePatch1)) => #2
        #1, #2 -> IncludeWorkflow DistanceState1(Path=Extensions\RandomDepletion.bonsai, DistanceThreshold=75, Rate=10000, DeliveryCount=DeliveryCount1, PatchState=PatchState1)
        -> MulticastSubject DeliverPelletPatch1
        -> MulticastSubject ThresholdCrossingPatch1

        SubscribeSubject WheelPatch2
        -> MemberSelector(Selector=Value) => #7
        ExternalizedMapping(DistanceThreshold(DisplayName=ThresholdPatch2), Rate(DisplayName=RatePatch2)) => #8
        #7, #8 -> IncludeWorkflow DistanceState2(Path=Extensions\RandomDepletion.bonsai, DistanceThreshold=75, Rate=10000, DeliveryCount=DeliveryCount2, PatchState=PatchState2)
        -> MulticastSubject DeliverPelletPatch2
        -> MulticastSubject ThresholdCrossingPatch2
    #7, #4 -> TakeUntil
    -> Repeat
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> WorkflowOutput

    BehaviorSubject<System.Int32> ThresholdCrossingPatch1
    BehaviorSubject<System.Int32> ThresholdCrossingPatch2
