WorkflowBuilder(Version=2.8.0-alpha018)
GroupWorkflow Declarations
    Disable ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,System.Int32)> DeliveryCount(BufferSize=nil)
    PublishSubject<Bonsai.Harp.Timestamped(System.Double)> ActivityCenter
    ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,System.Object)> TareWeight(BufferSize=nil)
    ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,Aeon.Acquisition.WeightMeasurement)> BaselinedWeight(BufferSize=nil)
    PublishSubject<Bonsai.Harp.Timestamped(System.Double)> ActivityArena
    ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,System.Int32)> DeliveryCount(BufferSize=nil)
    BehaviorSubject<System.Double> HeartBeat

GroupWorkflow Logging
    IncludeWorkflow(Path=Aeon.Acquisition:LogController.bonsai, Path=D:\ProjectAeon\switch0.1, ChunkSize=1)
    Disable IncludeWorkflow(Path=Aeon.Acquisition:ExportMetadata.bonsai, WorkflowName=PreSocial0.1-AEON2.bonsai)

    ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,Aeon.Acquisition.WeightMeasurement)> WeightNest(BufferSize=nil)
    -> IncludeWorkflow(Path=Extensions\LogHarpWeight.bonsai, Address=200)

    ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,Bonsai.Harp.Timestamped(System.Byte))> TareNest(BufferSize=nil)
    -> IncludeWorkflow(Path=Extensions\LogHarpByte.bonsai, Address=201)

    ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,Aeon.Acquisition.WeightMeasurement)> FilteredWeightNest(BufferSize=nil)
    -> IncludeWorkflow(Path=Extensions\LogHarpWeight.bonsai, Address=202)

    ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,Bonsai.Harp.Timestamped(System.Double))> BaselineTrigger(BufferSize=nil)
    -> IncludeWorkflow(Path=Extensions\LogHarpByte.bonsai, Address=203)

    Annotation ChangeInTheFilenameFormat(Text="")
    -> ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,System.Tuple(Aeon.Acquisition.WeightMeasurement,Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentSubjectStateMetadata)))> SubjectWeight(BufferSize=nil)
    -> GroupWorkflow LogHarpWeight
        WorkflowInput Source1 => #0
        ExternalizedMapping(Address) => #1
        #0, #1 -> SelectMany HarpWeight
            WorkflowInput Source1
            -> IncludeWorkflow(Path=Extensions\SourceStreamID.bonsai)

            SubscribeSubject source
            -> Merge
            -> GroupBy(KeySelector=Item2.Value.Id, ElementSelector=Item1) => #4
            ExternalizedMapping(Address) => #5
            #4, #5 -> SelectMany LogPerSubject
                WorkflowInput Source1
                -> AsyncSubject Source

                SubscribeSubject Source
                -> MemberSelector(Selector=Key)
                -> BehaviorSubject SubjectId

                SubscribeSubject Source
                -> Merge => #6
                ExternalizedMapping(Address) => #7
                #6, #7 -> Aeon.Acquisition.FormatWeight(Address=204) => #8
                SubscribeSubject StreamId => #9
                SubscribeSubject SubjectId => #10
                #9, #10 -> Zip
                -> Format(Format={0}_{1}, Selector="Item1,Item2")
                -> PropertyMapping(LogName) => #13
                #8, #13 -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=HarpData)
                -> WorkflowOutput
            -> WorkflowOutput
        -> WorkflowOutput

    PublishSubject<Bonsai.Harp.HarpMessage> SynchronizerEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=ClockSynchronizer)

    PublishSubject<Bonsai.Harp.HarpMessage> VideoEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=VideoController)

    ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.Double,System.Reactive.Linq.IGroupedObservable(System.String,Bonsai.Harp.Timestamped(Aeon.Acquisition.VideoDataFrame)))> Cameras(BufferSize=nil)
    -> GroupWorkflow SelectFrameRate
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=Framerate)) => #1
        #0, #1 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=DoubleProperty(Value=125))
            -> WorkflowOutput
        -> Merge
        -> WorkflowOutput
    -> SelectMany GroupByTime
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Extensions\SourceStreamID.bonsai)

        SubscribeSubject source
        -> Merge => #3
        SubscribeSubject ChunkSize
        -> PropertyMapping(ChunkSize) => #5
        #3, #5 -> Aeon.Acquisition.GroupByTime(ChunkSize=1) => #6
        SubscribeSubject StreamId => #7
        #6, #7 -> WithLatestFrom
        -> WorkflowOutput

        SubscribeSubject HeartBeat
    -> IncludeWorkflow(Path=Extensions\LogVideo.bonsai, FrameRate=125)

    SubscribeSubject Cameras
    -> GroupWorkflow SelectFrameRate
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=Framerate)) => #1
        #0, #1 -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Key) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> Equal(Operand=DoubleProperty(Value=50))
            -> WorkflowOutput
        -> Merge
        -> WorkflowOutput
    -> SelectMany GroupByTime
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Extensions\SourceStreamID.bonsai)

        SubscribeSubject source
        -> Merge => #3
        SubscribeSubject ChunkSize
        -> PropertyMapping(ChunkSize) => #5
        #3, #5 -> Aeon.Acquisition.GroupByTime(ChunkSize=1) => #6
        SubscribeSubject StreamId => #7
        #6, #7 -> WithLatestFrom
        -> WorkflowOutput

        SubscribeSubject HeartBeat
    -> IncludeWorkflow(Path=Extensions\LogVideo.bonsai, FrameRate=50)

    SubscribeSubject Cameras
    -> Merge
    -> SelectMany GroupByTime
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Extensions\SourceStreamID.bonsai)

        SubscribeSubject source
        -> Merge => #3
        SubscribeSubject ChunkSize
        -> PropertyMapping(ChunkSize) => #5
        #3, #5 -> Aeon.Acquisition.GroupByTime(ChunkSize=1) => #6
        SubscribeSubject StreamId => #7
        #6, #7 -> WithLatestFrom
        -> WorkflowOutput

        SubscribeSubject HeartBeat
    -> GroupWorkflow LogCsvFrameEvents
        WorkflowInput Source1
        -> SelectMany LogCsv
            WorkflowInput Source1
            -> AsyncSubject source

            SubscribeSubject source
            -> MemberSelector(Selector=Item2)
            -> AsyncSubject StreamId

            SubscribeSubject source
            -> MemberSelector(Selector=Item1)
            -> Merge => #7
            GroupWorkflow FormatVideoParameters
              Description:
                Generates a log filename based on the input timestamp.
                And a framerate
              Workflow
                SubscribeSubject PathPrefix => #0
                SubscribeSubject StreamId
                -> Take(Count=1) => #2
                SubscribeSubject source
                -> MemberSelector(Selector=Item1.Key)
                -> Aeon.Acquisition.FormatDate => #5
                #0, #2, #5 -> Zip
                -> Format(Format={0}\{1}\{1}_{2}, Selector="Item1,Item2,Item3")
                -> WorkflowOutput
            -> Add(Operand=StringProperty(Value=.csv))
            -> PropertyMapping(FileName) => #10
            #7, #10 -> Bonsai.IO.CsvWriter
              FileName=D:\ProjectAeon\switch0.1\2023-07-24T16-10-21\CameraNestNorthTop\CameraNestNorthTop_1904-01-06T02-00-00.csv
              Append=false
              Overwrite=false
              Suffix=None
              IncludeHeader=true
              Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp"
        -> WorkflowOutput

    PublishSubject<System.Tuple(Bonsai.Vision.ConnectedComponentCollection,System.Double)> TrackingTop
    -> Aeon.Acquisition.FormatBinaryRegions => #30
    GroupWorkflow RegionTracking
        ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,Bonsai.Harp.Timestamped(System.Boolean))> InArea(BufferSize=nil)
        -> SelectMany GroupByTimeStamp
            WorkflowInput Source1
            -> IncludeWorkflow(Path=Extensions\SourceStreamID.bonsai)

            SubscribeSubject source
            -> Merge => #3
            SubscribeSubject StreamId => #4
            #3, #4 -> WithLatestFrom => #5
            ExternalizedMapping(Values) => #6
            #5, #6 -> LogActivity(Values(string=Nest, string=Corridor, string=Arena, string=Patch1, string=Patch2)) => #7
            #3 -> MemberSelector(Selector=Seconds) => #8
            #7, #8 -> WithLatestFrom
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> WorkflowOutput
        -> SelectMany MaxCalculation
            WorkflowInput Source1 => #0
            -> Merge => #1
            ExternalizedMapping(Count) => #2
            #1, #2 -> Take(Count=5)
            -> Max => #4
            #0 -> MemberSelector(Selector=Key) => #5
            #4, #5 -> WithLatestFrom
            -> WorkflowOutput
        -> Aeon.Acquisition.CreateTimestamped
        -> WorkflowOutput
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #32
    #30, #32 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=CameraTop)

    ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,Bonsai.Harp.HarpMessage)> Patch(BufferSize=nil) => #35
    ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,Bonsai.Harp.Timestamped(Aeon.Acquisition.DispenserStateMetadata))> PatchDispenser(BufferSize=nil)
    -> SelectMany FormatDispenser => #37
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Extensions\SourceStreamID.bonsai)

        SubscribeSubject source
        -> Merge
        -> Aeon.Acquisition.FormatDispenserState
        -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai)
        -> WorkflowOutput
    ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,Bonsai.Harp.Timestamped(System.UInt16))> ManualPellet(BufferSize=nil)
    -> IncludeWorkflow(Path=Extensions\FormatStream.bonsai, MessageType=Write, Address=201, PayloadType=TimestampedU8) => #39
    ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,Bonsai.Harp.Timestamped(System.Byte))> MissedPellets(BufferSize=nil)
    -> IncludeWorkflow(Path=Extensions\FormatStream.bonsai, MessageType=Event, Address=202, PayloadType=TimestampedU8) => #41
    #35, #37, #39, #41 -> Merge
    -> IncludeWorkflow(Path=Extensions\LogHarpStream.bonsai)

    ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,PatchState)> PatchState(BufferSize=nil)
    -> SelectMany LogPatchState(Description="Chunks and logs a timestamped harp data stream, splitting initial state and registers into separate files.")
        WorkflowInput Source1
        -> AsyncSubject source

        SubscribeSubject source
        -> MemberSelector(Selector=Key)
        -> BehaviorSubject StreamId

        SubscribeSubject source
        -> Merge => #6
        IncludeWorkflow Patch(Path=Extensions\SelectStreamId.bonsai)
        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #8
        #6, #8 -> WithLatestFrom => #9
        SubscribeSubject StreamId
        -> PropertyMapping(LogName) => #11
        #9, #11 -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, LogName=Patch1_State, Selector=nil)

    PublishSubject<Bonsai.Harp.Timestamped(OpenCV.Net.Mat)> AudioAmbient
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogAudio.bonsai, LogName=AudioAmbient, SampleRate=192000)

    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.LogMessage)> AlertLogs => #48
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.LogMessage)> Annotations => #49
    #48, #49 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, LogName=ExperimentalMetadata_MessageLog, Selector="Seconds,Value.Priority,Value.Type,Value.Message")

    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentStateMetadata)> EnvironmentState
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, LogName=ExperimentalMetadata_EnvironmentState, Selector="Seconds,Value.Type")

    ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentSubjectStateMetadata))> SubjectState(BufferSize=nil)
    -> IncludeWorkflow(Path=Extensions\LogDataStream.bonsai)

    Disable SubscribeSubject SubjectState
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #57
      Expression:
        new(
        Seconds as Seconds,
        new(Value.Id as Id,
            Value.Type.ToString() as Event,
            "Environment" as Value) as Value)
    Disable SubscribeSubject InPatch1
    -> Disable IncludeWorkflow Patch1(Path=Extensions\FormatRegionVisits.bonsai) => #59
    Disable SubscribeSubject InPatch2
    -> Disable IncludeWorkflow Patch2(Path=Extensions\FormatRegionVisits.bonsai) => #61
    Disable SubscribeSubject InArena
    -> Disable IncludeWorkflow Arena(Path=Extensions\FormatRegionVisits.bonsai) => #63
    Disable SubscribeSubject InCorridor
    -> Disable IncludeWorkflow Corridor(Path=Extensions\FormatRegionVisits.bonsai) => #65
    Disable SubscribeSubject InNest
    -> Disable IncludeWorkflow Nest(Path=Extensions\FormatRegionVisits.bonsai) => #67
    #57, #59, #61, #63, #65, #67 -> Disable Merge
    -> Disable MemberSelector(Selector="Value,Seconds")
    -> Disable IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, LogName=ExperimentalMetadata_SubjectVisits, Selector="Seconds,Value.Id,Value.Event,Value.Value")

    Disable SubscribeSubject RfidEvents
    -> Disable IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Rfid)

GroupWorkflow Metadata
    GroupWorkflow Devices
        GroupWorkflow ClockSynchronizer
            ExternalizedMapping(PortName)
            -> IncludeWorkflow(Path=Extensions\Synchronizer.bonsai, PortName=COM5)
            -> WorkflowOutput

        GroupWorkflow VideoController
            ExternalizedMapping(PortName, GlobalTriggerFrequency, LocalTriggerFrequency)
            -> GroupWorkflow CameraController(Description="Supplies synchronized camera triggering for both global and local views.")
                ExternalizedMapping(Value(DisplayName=GlobalTriggerFrequency, Description="The frequency at which to trigger global cameras."))
                -> DoubleProperty(Value=50)
                -> Take(Count=1)
                -> BehaviorSubject GlobalTriggerFrequency

                ExternalizedMapping(Value(DisplayName=LocalTriggerFrequency, Description="The frequency at which to trigger the fast local cameras."))
                -> DoubleProperty(Value=125)
                -> Take(Count=1)
                -> BehaviorSubject LocalTriggerFrequency

                SubscribeSubject GlobalTriggerFrequency
                -> PropertyMapping(Frequency)
                -> GroupWorkflow ConfigurePwm => #10
                    ExternalizedMapping(Address(DisplayName=CamEvent, Category=Registers))
                    -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=34, PayloadType=U8, Value=1)) => #1
                    ExternalizedMapping(Value(DisplayName=Frequency))
                    -> IntProperty(Value=50)
                    -> Take(Count=1) => #4
                    ExternalizedMapping(Address(DisplayName=TriggerFrequency, Category=Registers)) => #5
                    #4, #5 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=45, PayloadType=U16)) => #6
                    #1, #6 -> Merge
                    -> WorkflowOutput
                SubscribeSubject LocalTriggerFrequency
                -> PropertyMapping(Frequency)
                -> GroupWorkflow ConfigurePwm => #13
                    ExternalizedMapping(Address(DisplayName=CamEvent, Category=Registers))
                    -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=35, PayloadType=U8, Value=1)) => #1
                    ExternalizedMapping(Value(DisplayName=Frequency))
                    -> IntProperty(Value=125)
                    -> Take(Count=1) => #4
                    ExternalizedMapping(Address(DisplayName=TriggerFrequency, Category=Registers)) => #5
                    #4, #5 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=52, PayloadType=U16)) => #6
                    #1, #6 -> Merge
                    -> WorkflowOutput
                BehaviorSubject<System.Object> StartCameras
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=3)) => #15
                BehaviorSubject<System.Object> StopCameras
                -> Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=36, PayloadType=U8, Value=12)) => #17
                #10, #13, #15, #17 -> Merge => #18
                ExternalizedMapping(PortName) => #19
                #18, #19 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM6)
                -> MulticastSubject VideoEvents => #21
                -> WorkflowOutput
                #21 -> Bonsai.Harp.FilterMessage(MessageType=Event, Register=Bonsai.Harp.FilterMessageAddress(Address=32))
                -> Condition TriggerEvent
                    WorkflowInput Source1
                    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=U8, IsArray=false))
                    -> BitwiseAnd(Operand=WorkflowProperty<System.Byte>(Value=1))
                    -> NotEqual(Operand=WorkflowProperty<System.Byte>(Value=0))
                    -> WorkflowOutput
                -> PublishSubject GlobalTrigger
                #21 -> Bonsai.Harp.FilterMessage(MessageType=Event, Register=Bonsai.Harp.FilterMessageAddress(Address=33))
                -> Condition TriggerEvent
                    WorkflowInput Source1
                    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=U8, IsArray=false))
                    -> BitwiseAnd(Operand=WorkflowProperty<System.Byte>(Value=1))
                    -> NotEqual(Operand=WorkflowProperty<System.Byte>(Value=0))
                    -> WorkflowOutput
                -> PublishSubject LocalTrigger
            -> WorkflowOutput

        GroupWorkflow CameraTop
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Extensions\VideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              SerialNumber=23101736
              Gain=0
              Binning=1
              FrameEvents=CameraTop
            -> WorkflowOutput

        GroupWorkflow CameraNorth
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Extensions\VideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              SerialNumber=23106245
              Gain=0
              Binning=1
              FrameEvents=CameraNorth
            -> WorkflowOutput

        GroupWorkflow CameraSouth
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Extensions\VideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              SerialNumber=23106227
              Gain=0
              Binning=1
              FrameEvents=CameraSouth
            -> WorkflowOutput

        GroupWorkflow CameraEast
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Extensions\VideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              SerialNumber=23106241
              Gain=0
              Binning=1
              FrameEvents=CameraEast
            -> WorkflowOutput

        Disable GroupWorkflow CameraWest
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Extensions\VideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              SerialNumber=23100956
              Gain=0
              Binning=1
              FrameEvents=CameraWest
            -> WorkflowOutput

        GroupWorkflow CameraNestNorthTop
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Extensions\VideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              SerialNumber=23106287
              Gain=0
              Binning=1
              FrameEvents=CameraNestNorthTop
            -> WorkflowOutput

        GroupWorkflow CameraNestSouthTop
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Extensions\VideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              SerialNumber=23032818
              Gain=0
              Binning=1
              FrameEvents=CameraNestSouthTop
            -> WorkflowOutput

        GroupWorkflow CameraPatch1
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Extensions\VideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              SerialNumber=23106236
              Gain=0
              Binning=2
              FrameEvents=CameraPatch1
            -> WorkflowOutput

        GroupWorkflow CameraPatch2
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Extensions\VideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              SerialNumber=23101737
              Gain=0
              Binning=2
              FrameEvents=CameraPatch2
            -> WorkflowOutput

        GroupWorkflow AudioAmbient
            ExternalizedMapping(DeviceName, SampleRate, Name)
            -> GroupWorkflow AudioSource(Description="Contains control and acquisition functionality for arena audio capture devices.")
                SubscribeSubject GlobalTrigger => #0
                ExternalizedMapping(DeviceName, SampleRate) => #1
                #0, #1 -> Aeon.Acquisition.AeonAudio(DeviceName="Microphone (UltraMic 192K 16 bi", SampleRate=192000, SampleFormat=Mono16, BufferLength=10) => #2
                ExternalizedMapping(Name) => #3
                #2, #3 -> MulticastSubject AudioAmbient => #4
                SubscribeSubject GlobalTrigger => #5
                #4, #5 -> SubscribeWhen
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow Nests
            Disable ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,System.Object)> TareWeight(BufferSize=nil)
            Disable ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,Aeon.Acquisition.WeightMeasurement)> BaselinedWeight(BufferSize=nil)

            Disable ExternalizedMapping(PortName(DisplayName=Nest1PortName, Category=Nest1), NestId(DisplayName=Nest1NestID, Category=Nest1)) => #2
            Disable ExternalizedMapping(TareEvents, WeightEvents) => #3
            #2, #3 -> Disable Defer Nest1 => #4
                ExternalizedMapping(PortName, TareEvents, WeightEvents, NestId)
                -> GroupWorkflow WeightScale(Description="Contains acquisition functionality for automated arena weighing scales.")
                    ExternalizedMapping(Value(DisplayName=NestId))
                    -> StringProperty(Value=Nest1)
                    -> Take(Count=1)
                    -> AsyncSubject StreamId

                    ExternalizedMapping(PortName(Description="The name of the serial port used to communicate with the electronic scale.")) => #4
                    -> Bonsai.IO.CreateSerialPort
                      PortName=COM7
                      BaudRate=9600
                      Parity=None
                      ParityReplace=63
                      DataBits=8
                      StopBits=One
                      Handshake=None
                      DiscardNull=false
                      DtrEnable=false
                      RtsEnable=false
                      ReadBufferSize=4096
                      WriteBufferSize=2048
                      ReceivedBytesThreshold=1
                    #4 -> Bonsai.IO.SerialStringRead(PortName=COM7, NewLine=\r\n)
                    -> Skip(Count=1)
                    -> Parse(Pattern="%s g %s")
                    -> Retry => #9
                    SubscribeSubject GlobalTrigger
                    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #11
                    #9, #11 -> WithLatestFrom
                    -> ConvertToWeight
                    -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai) => #14
                    ExternalizedMapping(Name(DisplayName=WeightEvents)) => #15
                    #14, #15 -> MulticastSubject WeightNest
                    -> WorkflowOutput
                    IncludeWorkflow TareWeight(Path=Extensions\SelectStreamId.bonsai)
                    -> StringProperty(Value=T) => #19
                    #19, #4 -> Bonsai.IO.SerialStringWrite(PortName=COM7, NewLine=\r\n)
                    -> ByteProperty(Value=1) => #21
                    SubscribeSubject GlobalTrigger
                    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #23
                    #21, #23 -> WithLatestFrom
                    -> Aeon.Acquisition.CreateTimestamped
                    -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai) => #26
                    ExternalizedMapping(Name(DisplayName=TareEvents, Description="The name of the output sequence containing all timestamped tare events.")) => #27
                    #26, #27 -> MulticastSubject TareNest

                    IncludeWorkflow WeightNest(Path=Extensions\SelectStreamId.bonsai)
                    -> Aeon.Acquisition.WeightFilter(Count=40)
                    -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai)
                    -> MulticastSubject FilteredWeightNest
                    -> Merge => #33
                    IncludeWorkflow BaselineTrigger(Path=Extensions\SelectStreamId.bonsai) => #34
                    #33, #34 -> Aeon.Acquisition.WeightBaseline
                    -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai)
                    -> MulticastSubject BaselinedWeight
                -> WorkflowOutput
            Disable ExternalizedMapping(PortName(DisplayName=Nest2PortName, Category=Nest2), NestId(DisplayName=Nest2PortId, Category=Nest2)) => #5
            #3, #5 -> Disable Defer Nest2 => #6
                ExternalizedMapping(PortName, TareEvents, WeightEvents, NestId)
                -> IncludeWorkflow(Path=Extensions\WeightScale.bonsai, NestId=Nest2, PortName=COM7, WeightEvents=WeightNest, TareEvents=TareNest)
                -> WorkflowOutput
            #4, #6 -> Disable Merge
            -> Disable WorkflowOutput

        GroupWorkflow Patches
            ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,Bonsai.Harp.Timestamped(System.Double))> WheelDisplacement(BufferSize=nil)
            ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,System.Object)> ResetFeeder(BufferSize=nil)
            ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,System.Object)> DeliverPellet(BufferSize=nil)
            ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,Bonsai.Harp.Timestamped(System.Boolean))> PelletDelivered(BufferSize=nil)

            GroupWorkflow Patch
                Defer Patch1
                    ExternalizedMapping(PortName, WheelDisplacement, PelletDelivered, DeliverPellet, PatchEvents, Radius, SampleRate, ResetFeeder, DueTime, Count)
                    -> GroupWorkflow UndergroundFeeder(Description="Contains control and acquisition functionality for an underground feeder module.")
                        ExternalizedMapping(Value(DisplayName=PatchId))
                        -> StringProperty(Value=Patch1)
                        -> Take(Count=1)
                        -> AsyncSubject StreamId

                        ExternalizedMapping(Name(DisplayName=PatchEvents, Description="The name of the output sequence containing all patch events.")) => #4
                        -> SubscribeSubject Patch
                        -> WorkflowOutput
                        ExternalizedMapping(SampleRate)
                        -> Bonsai.Harp.Expander.ConfigureMagneticEncoder(SampleRate=SampleRate500Hz) => #8
                        ExternalizedMapping(Name(DisplayName=DeliverPellet, Description="The name of the input sequence used to trigger pellet delivery."))
                        -> IncludeWorkflow DeliverPellet(Path=Extensions\SelectStreamId.bonsai) => #10
                        ExternalizedMapping(Name(DisplayName=PelletDelivered, Description="The name of the output sequence carrying pellet delivery notifications.")) => #11
                        -> IncludeWorkflow PelletDelivered(Path=Extensions\SelectStreamId.bonsai) => #12
                        ExternalizedMapping(DueTime, Count) => #13
                        Source2=#10, Source3=#12, Source3=#13 -> IncludeWorkflow(Path=Aeon.Acquisition:TimedRetryCount.bonsai, DueTime=PT1S, Count=2) => #14
                        -> MemberSelector(Selector=Value)
                        -> GroupWorkflow DeliverPellet => #16
                            WorkflowInput Source1
                            -> Bonsai.Harp.Expander.DigitalOutput(Command=Set, Mask=Output0) => #1
                            -> Bonsai.Harp.Expander.DigitalOutput(Command=Clear, Mask=Output0) => #2
                            #1, #2 -> Merge
                            -> WorkflowOutput
                        ExternalizedMapping(Name(DisplayName=ResetFeeder, Description="The name of the input sequence used to reset the underground feeder."))
                        -> SubscribeSubject ResetFeeder
                        -> GroupWorkflow ResetFeeder => #19
                            WorkflowInput Source1
                            -> Bonsai.Harp.Expander.DigitalOutput(Command=Set, Mask=Output0) => #1
                            -> Delay(DueTime=PT0.5S)
                            -> Bonsai.Harp.Expander.DigitalOutput(Command=Clear, Mask=Output0) => #3
                            #1, #3 -> Merge
                            -> WorkflowOutput
                        #8, #16, #19 -> Merge => #20
                        ExternalizedMapping(PortName) => #21
                        #20, #21 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM3) => #22
                        #14 -> Condition IsRepetition => #23
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Repetition)
                            -> WorkflowOutput
                        #23, #4 -> SelectMany PairRepetitions => #24
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Name)
                            -> IncludeWorkflow Patch(Path=Extensions\SelectStreamId.bonsai)
                            -> Bonsai.Harp.FilterMessage(MessageType=Write, Register=Bonsai.Harp.FilterMessageAddress(Address=36))
                            -> Condition
                                WorkflowInput Source1
                                -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=U16, IsArray=false)) => #1
                                ExternalizedMapping(Value) => #2
                                #1, #2 -> Equal(Operand=WorkflowProperty<System.Byte>(Value=1))
                                -> WorkflowOutput
                            -> Take(Count=1) => #5
                            #0, #5 -> Zip
                            -> Bonsai.Scripting.Expressions.ExpressionTransform
                              Expression:
                                new(
                                1 as Value,
                                Item2.GetTimestamp() as Seconds)
                            -> InputMapping
                            -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=203, PayloadType=TimestampedU8))
                            -> WorkflowOutput
                        #22, #24 -> Merge => #25
                        #25, #4 -> Sink Patch => #26
                            WorkflowInput Source1
                            -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai) => #1
                            ExternalizedMapping(Name) => #2
                            #1, #2 -> MulticastSubject Patch
                            -> WorkflowOutput
                        -> Bonsai.Harp.Expander.MagneticEncoder(IncludeTimestamp=true) => #27
                        ExternalizedMapping(Radius) => #28
                        #27, #28 -> Aeon.Acquisition.TransformTimestamped(IncludeTimestamp=false)
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Angle) => #1
                            ExternalizedMapping(Radius) => #2
                            #1, #2 -> Aeon.Acquisition.WheelDisplacement(Radius=-4)
                            -> WorkflowOutput
                        -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai) => #30
                        ExternalizedMapping(Name(DisplayName=WheelDisplacement, Description="The name of the output sequence carrying total distance travelled on the wheel.")) => #31
                        #30, #31 -> MulticastSubject WheelDisplacement
                        #26 -> Bonsai.Harp.Expander.AuxInputs(Type=Input1, IncludeTimestamp=true)
                        -> Condition PelletDelivered
                            WorkflowInput Source1
                            -> MemberSelector(Selector=Value)
                            -> WorkflowOutput
                        -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai) => #35
                        #35, #11 -> MulticastSubject PelletDelivered
                    -> WorkflowOutput
                -> WorkflowOutput

            ExternalizedMapping(Value(DisplayName=NumberOfPatches))
            -> IntProperty(Value=2)
            -> BehaviorSubject NumberOfPatches

        GroupWorkflow CameraNestNorthSide
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Extensions\VideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              SerialNumber=23032826
              Gain=0
              Binning=2
              FrameEvents=CameraNestNorthSide
            -> WorkflowOutput

        GroupWorkflow CameraNestNorthFront
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Extensions\VideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              SerialNumber=23032828
              Gain=0
              Binning=2
              FrameEvents=CameraNestNorthFront
            -> WorkflowOutput

        GroupWorkflow CameraNestSouthFront
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Extensions\VideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              SerialNumber=23032823
              Gain=0
              Binning=2
              FrameEvents=CameraNestSouthFront
            -> WorkflowOutput

        GroupWorkflow CameraNestSouthSide
            ExternalizedMapping(SerialNumber, Gain, Binning, TriggerSource, FrameEvents, TriggerFrequency)
            -> IncludeWorkflow
              Path=Extensions\VideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              SerialNumber=23032811
              Gain=0
              Binning=2
              FrameEvents=CameraNestSouthSide
            -> WorkflowOutput

    GroupWorkflow TrackingTop
        ExternalizedMapping(CamerName(DisplayName=FrameEvents))
        -> IncludeWorkflow(Path=Extensions\SelectCamera.bonsai, CamerName=CameraTop) => #1
        ExternalizedMapping(Mask, ThresholdValue, TrackingEvents) => #2
        #1, #2 -> IncludeWorkflow(Path=Extensions\PositionTracking.bonsai, ThresholdValue=83, Mask=Config\ArenaMask.png, TrackingCount=1, TrackingEvents=TrackingTop)
        -> WorkflowOutput

    GroupWorkflow ActivityCenter
        ExternalizedMapping(CamerName(DisplayName=FrameEvents))
        -> IncludeWorkflow(Path=Extensions\SelectCamera.bonsai, CamerName=CameraTop)
        -> IncludeWorkflow
          Path=Extensions\ActivityTracking.bonsai
          Regions(ArrayOfPoint(Point(X=76, Y=431), Point(X=404, Y=431), Point(X=404, Y=665), Point(X=76, Y=665)))
          ThresholdValue=10
          TrackingEvents=ActivityCenter
        -> WorkflowOutput

    GroupWorkflow ActivityArena
        ExternalizedMapping(CamerName(DisplayName=FrameEvents))
        -> IncludeWorkflow(Path=Extensions\SelectCamera.bonsai, CamerName=CameraTop)
        -> IncludeWorkflow(Path=Extensions\ActivityTracking.bonsai, Regions=nil, ThresholdValue=10, TrackingEvents=ActivityArena)
        -> WorkflowOutput

    GroupWorkflow ActiveRegion
        ExternalizedMapping(NestRegion, Patch1Region, Patch2Region, ArenaCenter, ArenaInnerRadius, ArenaOuterRadius)
        -> GroupWorkflow ActiveRegion
            SubscribeSubject TrackingTop => #0
            ExternalizedMapping(Regions(DisplayName=NestRegion)) => #1
            #0, #1 -> IncludeWorkflow => #2
              Path=Extensions\RegionTracking.bonsai
              FrameEvents=CameraTop
              Regions(ArrayOfPoint(Point(X=1332, Y=482), Point(X=1242, Y=481), Point(X=1245, Y=586), Point(X=1334, Y=579)))
              RegionEvents=Nest
            ExternalizedMapping(Regions(DisplayName=Patch1Region)) => #3
            #0, #3 -> IncludeWorkflow => #4
              Path=Extensions\RegionTracking.bonsai
              FrameEvents=CameraTop
              Regions(ArrayOfPoint(Point(X=904, Y=167), Point(X=925, Y=181), Point(X=910, Y=215), Point(X=888, Y=201)))
              RegionEvents=Patch1
            ExternalizedMapping(Regions(DisplayName=Patch2Region)) => #5
            #0, #5 -> IncludeWorkflow => #6
              Path=Extensions\RegionTracking.bonsai
              FrameEvents=CameraTop
              Regions(ArrayOfPoint(Point(X=802, Y=875), Point(X=924, Y=861), Point(X=939, Y=894), Point(X=920, Y=904)))
              RegionEvents=Patch2
            SubscribeSubject TrackingTop => #7
            ExternalizedMapping(Value(DisplayName=ArenaCenter)) => #8
            #7, #8 -> Aeon.Acquisition.DistanceFromPoint(Value(X=661, Y=557)) => #9
            ExternalizedMapping(InnerRadius(DisplayName=ArenaInnerRadius)) => #10
            #9, #10 -> GroupWorkflow InArena => #11
                WorkflowInput Source1 => #0
                ExternalizedMapping(Upper(DisplayName=InnerRadius)) => #1
                #0, #1 -> GroupWorkflow InRange(Description="Measures whether a value is within the specified range.")
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Lower, Upper) => #1
                    #0, #1 -> Aeon.Acquisition.RangeThreshold(Lower=nil, Upper=474) => #2
                    ExternalizedMapping(StreamId(DisplayName=RangeEvents)) => #3
                    #2, #3 -> GroupWorkflow GroupByString
                        WorkflowInput Source1 => #0
                        ExternalizedMapping(Value(DisplayName=StreamId))
                        -> StringProperty(Value=Arena) => #2
                        #0, #2 -> WithLatestFrom
                        -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
                        -> WorkflowOutput
                    -> WorkflowOutput
                -> WorkflowOutput
            ExternalizedMapping(OuterRadius(DisplayName=ArenaOuterRadius)) => #12
            #9, #10, #12 -> GroupWorkflow InCorridor => #13
                WorkflowInput Source1 => #0
                ExternalizedMapping(Lower(DisplayName=InnerRadius), Upper(DisplayName=OuterRadius)) => #1
                #0, #1 -> IncludeWorkflow(Path=Extensions\InRange.bonsai, Lower=474, Upper=494, RangeEvents=Corridor)
                -> WorkflowOutput
            #2, #4, #6, #11, #13 -> Merge
            -> MulticastSubject InArea
        -> WorkflowOutput

GroupWorkflow Visualization
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentSubjectStateMetadata)> SubjectStop
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentSubjectStateMetadata)> SubjectStart

    SubscribeSubject SubjectState
    -> GroupWorkflow ChangeForMultipleSubjects
        WorkflowInput Source1
        -> WorkflowOutput
    -> Merge => #4
    -> Condition Start
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Type)
        -> NotEqual(Operand=WorkflowProperty<Aeon.Acquisition.EnvironmentSubjectChangeType>(Value=Exit))
        -> WorkflowOutput
    -> MulticastSubject SubjectStart
    #4 -> Condition End
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Type)
        -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.EnvironmentSubjectChangeType>(Value=Exit))
        -> WorkflowOutput
    -> MulticastSubject SubjectStop

    SubscribeSubject TrackingTop
    -> MemberSelector(Selector=Item1[0].Centroid)
    -> PublishSubject Trajectory

    GroupWorkflow SelectCamera
        ExternalizedMapping(Value(DisplayName=Value))
        -> PropertySource<StringProperty,System.String>(MemberName=Value, Value=CameraSouth)
        -> CreateObservable
            SubscribeSubject Cameras
            -> Merge => #1
            WorkflowInput Source1
            -> PropertyMapping(Value) => #3
            #1, #3 -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Key) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=StringProperty(Value=CameraSouth))
                -> WorkflowOutput
            -> Merge
            -> WorkflowOutput
        -> Switch
        -> WorkflowOutput
    -> MemberSelector(Selector=Value.Image)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject FrameTrajectory

    SubscribeSubject TrackingTop
    -> MemberSelector(Selector=Item1[0].Centroid)
    -> Bonsai.Dsp.Histogram2D(MinX=0, MaxX=1440, MinY=0, MaxY=1080, BinsX=288, BinsY=216, Normalize=false, Accumulate=true)
    -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=20, Shift=0)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject Heatmap

    DoubleProperty(Value=0) => #23
    StringProperty => #24
    #23, #24 -> CombineLatest
    -> GroupBy(KeySelector=Item2, ElementSelector=Item1)

    Annotation Todo(Text="Improve to be done dinamically for the different patches in the setup")
    -> ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,System.Double)> DistanceState(BufferSize=nil)
    -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch1) => #29
    SubscribeSubject DistanceState
    -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch2) => #31
    SubscribeSubject PatchState
    -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch1)
    -> MemberSelector(Selector=Threshold) => #34
    SubscribeSubject PatchState
    -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch2)
    -> MemberSelector(Selector=Threshold) => #37
    #29, #31, #34, #37 -> CombineLatest => #38
    #38, #29 -> Sample
    -> Bonsai.Dsp.Buffer(Count=15, Skip=nil)
    -> PublishSubject PatchesState

    SubscribeSubject PatchState
    -> SelectMany CurrentThreshold
        WorkflowInput Source1
        -> AsyncSubject source

        SubscribeSubject source
        -> MemberSelector(Selector=Key)
        -> BehaviorSubject StreamId

        SubscribeSubject source
        -> Merge => #6
        IncludeWorkflow DeliveryCount(Path=Extensions\SelectStreamId.bonsai) => #7
        #6, #7 -> WithLatestFrom
        -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
        -> CreateCurrentThreshold
        -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai)
        -> WorkflowOutput
    -> ReplaySubject CurrentThresholdState(BufferSize=nil)

    GroupWorkflow PelletMonitor(Description="Monitors pellet delivery state of commands and beam breaks.")
        ExternalizedMapping(Name(DisplayName=PelletCommand))
        -> SubscribeSubject Patch => #1
        ExternalizedMapping(Name(DisplayName=PelletDelivered)) => #2
        #1, #2 -> SelectMany MonitorPelletsByStream
            WorkflowInput Source1
            -> AsyncSubject source

            SubscribeSubject source
            -> MemberSelector(Selector=Key)
            -> BehaviorSubject StreamId

            SubscribeSubject source
            -> Merge
            -> Bonsai.Harp.FilterMessage(MessageType=Write, Register=Bonsai.Harp.FilterMessageAddress(Address=35)) => #7
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                it.GetTimestamp() as Timestamp,
                False as Value)
            -> BooleanProperty(Value=false) => #9
            #7 -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #10
            #9, #10 -> Zip => #11
            ExternalizedMapping(Name)
            -> IncludeWorkflow PelletDelivered(Path=Extensions\SelectStreamId.bonsai) => #13
            -> BooleanProperty(Value=true) => #14
            #13 -> MemberSelector(Selector=Seconds) => #15
            #14, #15 -> Zip
            -> Disable Zip
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #18
              Expression:
                new(
                Seconds as Timestamp,
                True as Value)
            #11, #18 -> Merge
            -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
            -> Aeon.Acquisition.CreateTimestamped
            -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai)
            -> WorkflowOutput
        -> WorkflowOutput
    -> ReplaySubject PelletMonitor(BufferSize=nil)

    GroupWorkflow TimeSpentOnWheel(Description="Computes cumulative time spent operating the wheel.")
        ExternalizedMapping(Name(DisplayName=Patch))
        -> SubscribeSubject Patch
        -> SelectMany
            WorkflowInput Source1
            -> AsyncSubject source

            SubscribeSubject source
            -> MemberSelector(Selector=Key)
            -> BehaviorSubject StreamId

            SubscribeSubject source
            -> Merge
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
            -> Bonsai.Dsp.Difference(Order=1) => #8
            IncludeWorkflow WheelDisplacement(Path=Extensions\SelectStreamId.bonsai)
            -> MemberSelector(Selector=Value)
            -> Accumulate => #11
            ExternalizedMapping(Threshold, LowPass) => #12
            #11, #12 -> IncludeWorkflow(Path=Aeon.Acquisition:WheelMovement.bonsai, LowPass=1, Threshold=0.0003)
            -> DistinctUntilChanged
            -> Throttle(DueTime=PT0.05S) => #15
            #8, #15 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item2 ? Item1 : 0
            -> Accumulate
            -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai)
            -> WorkflowOutput
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> ReplaySubject TimeOnPatch(BufferSize=nil)

    SubscribeSubject TimeOnPatch
    -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Time Spent on Patch (s)" as Id,
        it[0] as Patch1,
        it[0] as Patch2)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TimeSpentOnPatches

    SubscribeSubject TimeOnPatch
    -> SelectMany TimeCounter
        WorkflowInput Source1
        -> AsyncSubject source

        SubscribeSubject source
        -> MemberSelector(Selector=Key)
        -> BehaviorSubject StreamId

        SubscribeSubject source
        -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
        -> DistinctUntilChanged
        -> IncludeWorkflow(Path=Aeon.Acquisition:TimeSinceLastEvent.bonsai)
        -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai)
        -> WorkflowOutput
    -> ReplaySubject TimeSinceLastPatchVisit(BufferSize=nil)

    SubscribeSubject TimeSinceLastPatchVisit
    -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Time Since Last Visit (s)" as Id,
        it[0] as Patch1,
        it[1] as Patch2)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TimeSinceLastVisit

    SubscribeSubject ActivityCenter
    -> Condition ActivityCondition => #64
        WorkflowInput Source1
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=BaselineActivityThreshold)) => #2
        #1, #2 -> GreaterThan(Operand=DoubleProperty(Value=1))
        -> WorkflowOutput
    ExternalizedMapping(Interval(DisplayName=BaselineRefractoryPeriod)) => #65
    #64, #65 -> GateInterval(Interval=PT5S)
    -> MulticastSubject BaselineTrigger

    SubscribeSubject BaselinedWeight => #68
    Annotation TODO:(Text="Needs to be redone for multiple subjects ") => #69
    #68, #69 -> SelectMany SubjectOnScale
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Extensions\SourceStreamID.bonsai)

        SubscribeSubject source
        -> Merge
        -> Condition StableWeight
            WorkflowInput Source1
            -> MemberSelector(Selector=Confidence) => #1
            ExternalizedMapping(Value(DisplayName=ConfidenceThreshold)) => #2
            #1, #2 -> Equal(Operand=FloatProperty(Value=1))
            -> WorkflowOutput
        -> Condition SubjectOnScale => #5
            WorkflowInput Source1
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=WeightThreshold)) => #2
            #1, #2 -> GreaterThan(Operand=FloatProperty(Value=10))
            -> WorkflowOutput
        SubscribeSubject SubjectState
        -> Merge
        -> Condition Start => #8
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.Type)
            -> NotEqual(Operand=WorkflowProperty<Aeon.Acquisition.EnvironmentSubjectChangeType>(Value=Exit))
            -> WorkflowOutput
        #5, #8 -> WithLatestFrom => #9
        SubscribeSubject StreamId => #10
        #9, #10 -> WithLatestFrom
        -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
        -> WorkflowOutput
    -> MulticastSubject SubjectWeight

    SubscribeSubject SubjectWeight
    -> SelectMany WeightCalculation
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Extensions\SourceStreamID.bonsai)

        SubscribeSubject source
        -> Merge
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item2.Value.Id as SubjectId,
            Item1.Timestamp as Timestamp,
            Item1.Value as CurrentWeight,
            100 * Item1.Value / Item2.Value.Weight as CurrentPercent)
        -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai)
        -> WorkflowOutput
    -> ReplaySubject PercentWeightLoss(BufferSize=nil)

    Disable SubscribeSubject WheelPatch1
    -> Disable MemberSelector(Selector=Value)
    -> Disable Accumulate => #77
    Disable SubscribeSubject WheelPatch2
    -> Disable MemberSelector(Selector=Value)
    -> Disable Accumulate => #80
    #77, #80 -> Disable CombineLatest
    -> Disable IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Total Distance Travelled (cm)" as Id,
        Item1 as Patch1,
        Item2 as Patch2)
    -> Disable SampleInterval(Interval=PT0.05S)
    -> Disable PublishSubject TotalDistanceTravelled

    SubscribeSubject WheelDisplacement => #86
    SubscribeSubject NumberOfPatches
    -> PropertyMapping(Count) => #88
    #86, #88 -> Take(Count=1)
    -> CreateObservable
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Extensions\SourceStreamID.bonsai)

        SubscribeSubject source
        -> Merge
        -> MemberSelector(Selector=Value)
        -> Accumulate
        -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai)
        -> WorkflowOutput
    -> Concat
    -> CombineLatest
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Total Distance Travelled (cm)" as Id,
        it[0] as Patch1,
        it[1] as Patch2)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TotalDistanceTravelled

    GroupWorkflow PelletMissed
        ExternalizedMapping(Name(DisplayName=PelletDelivered))
        -> SubscribeSubject PelletDelivered
        -> SelectMany PelletMissed
            WorkflowInput Source1
            -> AsyncSubject source

            SubscribeSubject source
            -> MemberSelector(Selector=Key)
            -> BehaviorSubject StreamId

            SubscribeSubject source
            -> Merge => #6
            ExternalizedMapping(TimeToMiss, DistanceToMiss, TimeInChute, WheelDisplacement) => #7
            #6, #7 -> CreateObservable PelletMissed
                ExternalizedMapping(Name(DisplayName=WheelDisplacement))
                -> IncludeWorkflow WheelDisplacement(Path=Extensions\SelectStreamId.bonsai)
                -> MemberSelector(Selector=Value)
                -> IncludeWorkflow(Path=Aeon.Acquisition:DistanceTravelled.bonsai, Gain=1) => #3
                ExternalizedMapping(DueTime(DisplayName=TimeToMiss))
                -> Timer(DueTime=PT2S, Period=PT0S) => #5
                #3, #5 -> TakeUntil => #6
                ExternalizedMapping(DueTime(DisplayName=TimeInChute)) => #7
                #6, #7 -> DelaySubscription(DueTime=PT0S) => #8
                ExternalizedMapping(Value(DisplayName=DistanceToMiss)) => #9
                #8, #9 -> GreaterThan(Operand=DoubleProperty(Value=20))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> ByteProperty(Value=1) => #12
                WorkflowInput Source1
                -> MemberSelector(Selector=Seconds) => #14
                #12, #14 -> CombineLatest
                -> Aeon.Acquisition.CreateTimestamped
                -> Take(Count=1)
                -> WorkflowOutput
            -> Switch
            -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai)
            -> WorkflowOutput
        -> WorkflowOutput
    -> MulticastSubject MissedPellets

    SubscribeSubject PelletDelivered => #99
    ExternalizedMapping(Name(DisplayName=TotalPelletsDeliveredName)) => #100
    #99, #100 -> IncludeWorkflow TotalPelletsDelivered(Path=Extensions\PelletPressistentCounter.bonsai) => #101
    #101, #100 -> ReplaySubject TotalPelletsDelivered(BufferSize=nil)

    SubscribeSubject MissedPellets
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment) => #104
    Annotation TODO:(Text="Needs to be redone for multiple subjects ") => #105
    #104, #105 -> SelectMany PersistentCounter(Description="Accumulates the total number of events since subject start.")
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Extensions\SourceStreamID.bonsai)

        SubscribeSubject SubjectState
        -> Merge
        -> Condition Enter
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.Type)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.EnvironmentSubjectChangeType>(Value=Enter))
            -> WorkflowOutput
        -> IntProperty(Value=0) => #5
        Annotation Check(Text="If this can be done like this for state recovery subjects") => #6
        StringProperty(Value=TotalMissedPellets) => #7
        SubscribeSubject StreamId => #8
        #7, #8 -> WithLatestFrom
        -> Add
        -> PropertyMapping(Name) => #11
        #5, #6, #11 -> Aeon.Acquisition.StateRecoverySubject TotalMissedPellets
        SubscribeSubject source
        -> Merge => #14
        #11 -> SubscribeSubject TotalMissedPellets => #15
        #14, #15 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Add(Operand=IntProperty(Value=1)) => #18
        #18, #11 -> MulticastSubject TotalMissedPellets
        -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai)
        -> WorkflowOutput
    -> ReplaySubject TotalMissedPellets(BufferSize=nil)

    GroupWorkflow SubjectAlerts
        PublishSubject<System.String> SubjectAlertMessages
        -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
        -> Disable IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\alerts.config)

        SubscribeSubject PelletMonitor => #3
        ExternalizedMapping(Count(DisplayName=DeliveryFailureThreshold)) => #4
        #3, #4 -> SelectMany DispenserBroken
            WorkflowInput Source1
            -> AsyncSubject source

            SubscribeSubject source
            -> MemberSelector(Selector=Key)
            -> BehaviorSubject IdKey

            SubscribeSubject source
            -> Merge => #6
            ExternalizedMapping(Count) => #7
            #6, #7 -> Condition DispenserBroken
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
                  Expression: Value ? 1 : 0
                ExternalizedMapping(Count) => #2
                #1, #2 -> BufferCount(Count=5, Skip=1)
                -> Add => #4
                #4, #2 -> GroupWorkflow Equal
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=Count)) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=5)) => #2
                    #0 -> Equal(Operand=IntProperty(Value=0)) => #3
                    #2, #3 -> Zip
                    -> LogicalOr
                    -> WorkflowOutput
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #9
            SubscribeSubject IdKey => #10
            #9, #10 -> CombineLatest
            -> Format
              Format:
                ## **Dispenser Broken**
                **Patch**: Patch1
              Selector=""
            -> MulticastSubject SubjectAlertMessages
            Disable SubscribeSubject IdKey
            -> Disable PropertyMapping(Format) => #15
            #9, #15 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: new (Seconds as Timestamp, Value as Value)
            -> Aeon.Acquisition.FormatLogMessage(Format="", Selector="", Priority=Alert, Type=DispenserBroken, Timestamp=Timestamp)
            -> MulticastSubject AlertLogs

        SubscribeSubject MissedPellets
        -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch1)
        -> ElementIndex
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #9
        SubscribeSubject SubjectState
        -> Merge => #11
        #9, #11 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
          Expression:
            new(
            Item1.Value.Seconds as Timestamp,
            Item1.Index + 1 as Count,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Missed Pellet**
            **Subject**: {0}
            **Patch:**: Patch1
            **Total Missed**: {1}
          Selector="Id,Count"
        -> MulticastSubject SubjectAlertMessages
        #13 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	Patch1	{1}", Selector="Id,Count", Priority=Alert, Type=MissedPellet, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject MissedPellets
        -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch2)
        -> ElementIndex
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #21
        SubscribeSubject SubjectState
        -> Merge => #23
        #21, #23 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #25
          Expression:
            new(
            Item1.Value.Seconds as Timestamp,
            Item1.Index + 1 as Count,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Missed Pellet**
            **Subject**: {0}
            **Patch:**: Patch2
            **Total Missed**: {1}
          Selector="Id,Count"
        -> MulticastSubject SubjectAlertMessages
        #25 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	Patch2	{1}", Selector="Id,Count", Priority=Alert, Type=MissedPellet, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject TrackingTop
        -> GroupWorkflow SpeedThreshold
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1[0].Centroid)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Dsp.Norm(NormType=L2) => #3
            ExternalizedMapping(Value(DisplayName=MaxSpeed)) => #4
            #3, #4 -> GreaterThan(Operand=DoubleProperty(Value=500)) => #5
            #0 -> MemberSelector(Selector=Item2) => #6
            #5, #6 -> Zip
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> WorkflowOutput
        -> Condition TrackingUnstable
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #33
        SubscribeSubject SubjectState
        -> Merge => #35
        #33, #35 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #37
          Expression:
            new(
            Item1.Item2 as Timestamp,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Tracking Failure**
            **Subject**: {0}
          Selector=Id
        -> MulticastSubject SubjectAlertMessages
        #37 -> Aeon.Acquisition.FormatLogMessage(Format={0}, Selector=Id, Priority=Alert, Type=TrackingFailure, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)

    GroupWorkflow EnvironmentAlerts
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.GroupByTime(ChunkSize=1)
        -> Skip(Count=1)
        -> SelectMany ExperimentSummary => #3
            SubscribeSubject PatchState => #0
            Annotation Todo:(Text="This can be improvred to work automatically with unckown number of streams ") => #1
            #0, #1 -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch1)
            -> Take(Count=1) => #3
            SubscribeSubject PatchState
            -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch2)
            -> Take(Count=1) => #6
            SubscribeSubject PatchDispenser
            -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch1)
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Value) => #10
            SubscribeSubject PatchDispenser
            -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch2)
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Value) => #14
            #3, #6, #10, #14 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #16
              Expression:
                new(
                Item1 as PatchState1,
                Item2 as PatchState2,
                Item3 as PatchDispenser1,
                Item4 as PatchDispenser2)
            SubscribeSubject TimeOnPatch
            -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch2)
            -> Take(Count=1) => #19
            SubscribeSubject TimeOnPatch
            -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch1)
            -> Take(Count=1) => #22
            SubscribeSubject TimeSinceLastPatchVisit
            -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch2)
            -> Take(Count=1) => #25
            SubscribeSubject TimeSinceLastPatchVisit
            -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch1)
            -> Take(Count=1) => #28
            #19, #22, #25, #28 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #30
              Expression:
                new(
                Item1 as TimeOnPatch2,
                Item2 as TimeOnPatch1,
                Item3 as TimeSinceLastVisit2,
                Item4 as TimeSinceLastVisit1)
            Annotation Todo(Text="Change for multiple subjects") => #31
            -> SubscribeSubject SubjectState
            -> Merge
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Id) => #35
            #31 -> SubscribeSubject PercentWeightLoss
            -> Merge
            -> MemberSelector(Selector="CurrentWeight,CurrentPercent") => #38
            FloatProperty(Value=0)
            -> MemberSelector(Selector="it,it") => #40
            #38, #40 -> Merge
            -> Take(Count=1)
            -> Take(Count=1) => #43
            WorkflowInput Source1
            -> Take(Count=1)
            -> MemberSelector(Selector=Key) => #46
            SubscribeSubject TotalPelletsDelivered
            -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch1) => #48
            SubscribeSubject TotalPelletsDelivered
            -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch2) => #50
            SubscribeSubject TotalMissedPellets
            -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch1) => #52
            SubscribeSubject TotalMissedPellets
            -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch2) => #54
            #48, #50, #52, #54 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #56
              Expression:
                new(
                Item1 as TotalPelletsDelivered1,
                Item2 as TotalPelletsDelivered2,
                Item3 as TotalMissedPellets1,
                Item4 as TotalMissedPellets2)
            #16, #30, #35, #43, #46, #56 -> Zip
            -> Take(Count=1) => #58
            -> Format => #59
              Format:
                # Arena Status
                **Time**: {0}
                **Subject**: {1}
                **Weight**: {2}
                **Weight Loss**: {3}
              Selector="Item5,Item3,Item4.Item1,Item4.Item2"
            #58 -> Format => #60
              Format:
                # Patch1
                **Pellets**: {0}
                **Threshold**: {1}
                **D0**: {2}
                **Delta**: {3}
                **Time On Patch**: {4}
                **Time Since Last Visit**: {5}
                **Total Pellets Delivered**: {6}
                **Total Missed Pellets**: {7}
              Selector: Item1.PatchDispenser1,Item1.PatchState1.Threshold,Item1.PatchState1.D1,Item1.PatchState1.Delta,Item2.TimeOnPatch1,Item2.TimeSinceLastVisit1,Item6.TotalPelletsDelivered1,Item6.TotalMissedPellets1
            #58 -> Format => #61
              Format:
                # Patch2
                **Pellets**: {0}
                **Threshold**: {1}
                **D0**: {2}
                **Delta**: {3}
                **Time On Patch**: {4}
                **Time Since Last Visit**: {5}
                **Total Pellets Delivered**: {6}
                **Total Missed Pellets**: {7}
              Selector: Item1.PatchDispenser2,Item1.PatchState2.Threshold,Item1.PatchState2.D1,Item1.PatchState2.Delta,Item2.TimeOnPatch2,Item2.TimeSinceLastVisit2,Item6.TotalPelletsDelivered2,Item6.TotalMissedPellets2
            #59, #60, #61 -> Zip
            -> Add
            -> WorkflowOutput
        SubscribeSubject EnvironmentState
        -> Format => #5
          Format:
            ## Arena {0} Mode Change
            Mode: {1}
          Selector="Value.Name,Value.Type"
        SubscribeSubject VideoEvents => #6
        #5, #6 -> SubscribeWhen
        -> DelaySubscription(DueTime=PT2S) => #8
        #3, #8 -> Merge
        -> Disable IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\status.config)

        PublishSubject<System.String> EnvironmentAlertMessages
        -> Disable IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\alerts.config)

        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.GroupByTime(ChunkSize=1)
        -> Skip(Count=1)
        -> SelectMany LocalFileCount => #16
            SubscribeSubject PathPrefix
            -> Bonsai.IO.GetDirectoryName
            -> PropertyMapping(Path)
            -> Bonsai.IO.GetFiles(Path=D:\ProjectAeon\switch0.1, SearchPattern=*, SearchOption=AllDirectories)
            -> MemberSelector(Selector=Length) => #4
            WorkflowInput Source1
            -> Merge
            -> Take(Count=1) => #7
            #4, #7 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Count,
                Item2.GetTimestamp() as Timestamp)
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=LocalFileThreshold)) => #17
        #16, #17 -> Condition GreaterThan => #18
            WorkflowInput Source1
            -> MemberSelector(Selector=Count) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> GreaterThan(Operand=IntProperty(Value=500))
            -> WorkflowOutput
        -> Format
          Format:
            ## **File Storage**
            **Total Files in Local Storage**: {0}
          Selector=Count
        -> MulticastSubject EnvironmentAlertMessages
        #18 -> Aeon.Acquisition.FormatLogMessage(Format="", Selector=Count, Priority=Alert, Type=FileStorage, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai) => #23
        -> Format
          Format:
            ## **Frame Dropped**
            **Camera**: {0}
            **Current Frame**: {1}
          Selector="Name,FrameID"
        -> MulticastSubject EnvironmentAlertMessages
        #23 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	{1}", Selector="Name,FrameID", Priority=Alert, Type=DroppedFrames, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject Annotations
        -> Condition Alert
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.Priority)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.PriorityLevel>(Value=Alert))
            -> WorkflowOutput
        -> Format
          Format:
            ## **Experimenter Annotation**
            **Message**: {0}
          Selector=Value.Message
        -> MulticastSubject EnvironmentAlertMessages

        GroupWorkflow SynchronizerMonitor(Description="Provides continuous statistics and reports current time and device synchronization state.") => #32
            GroupWorkflow HeartbeatSources
                CreateObservable Patches => #0
                    SubscribeSubject Patch
                    -> SelectMany
                        WorkflowInput Source1
                        -> IncludeWorkflow(Path=Extensions\SourceStreamID.bonsai)

                        SubscribeSubject source
                        -> Merge
                        -> Bonsai.Harp.FilterMessage(MessageType=Event, Register=Bonsai.Harp.FilterMessageAddress(Address=8))
                        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #5
                        SubscribeSubject StreamId => #6
                        #5, #6 -> WithLatestFrom
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression:
                            new(
                            Item2 as Name,
                            Item1 as Timestamp)
                        -> WorkflowOutput
                    -> WorkflowOutput
                CreateObservable VideoEvents => #1
                    SubscribeSubject VideoEvents
                    -> Bonsai.Harp.FilterMessage(MessageType=Event, Register=Bonsai.Harp.FilterMessageAddress(Address=8))
                    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        "VideoController" as Name,
                        it as Timestamp)
                    -> WorkflowOutput
                CreateObservable SynchronizerEvents => #2
                    SubscribeSubject HeartBeat
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        "Synchronizer" as Name,
                        it as Timestamp)
                    -> WorkflowOutput
                #0, #1, #2 -> Merge
                -> ToArray
                -> WorkflowOutput
            -> AsyncSubject HeartbeatSources
            -> Merge
            -> Merge
            -> Delay(DueTime=PT0.2S) => #4
            SubscribeSubject SynchronizerEvents
            -> Bonsai.Harp.DeviceEvent(Event=Bonsai.Harp.Heartbeat) => #6
            #4, #6 -> BufferTrigger(Count=nil, TimeSpan=PT0.4S)
            -> SelectMany UnwrapTimestamps => #8
                WorkflowInput Source1
                -> Merge => #1
                -> MemberSelector(Selector=Timestamp)
                -> ToList => #3
                #1 -> Format(Format={0}@{1}, Selector="Name,Timestamp")
                -> ToList => #5
                #3, #5 -> Zip
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1)
            -> Bonsai.Numerics.DescriptiveStatistics => #10
            #8 -> MemberSelector(Selector=Item2) => #11
            #10, #11 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
              Expression:
                new(
                Item1 as Stats,
                Item2 as Names)
            SubscribeSubject HeartbeatSources
            -> MemberSelector(Selector=Length) => #15
            #13, #15 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1.Stats.Mean as MeanRawTimestamp,
                DateTime(1904, 1, 1) + TimeSpan.FromSeconds(Item1.Stats.Mean) as MeanTimestamp,
                Item2 as ExpectedDeviceCount,
                Item1.Stats.Count as DeviceCount,
                Item1.Stats.Maximum - Item1.Stats.Minimum as MaxDifference,
                string.Join("\t", Item1.Names) as Elements)
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #33
          Expression: DeviceCount != ExpectedDeviceCount || MaxDifference > 0 || Math.Abs((MeanTimestamp - DateTime.UtcNow).TotalMinutes) > 30
        -> Format
          Format:
            ## **Harp Synch**
            **Synchronizer Stats**: {0}
          Selector=it
        -> MulticastSubject EnvironmentAlertMessages
        #33 -> Aeon.Acquisition.FormatLogMessage
          Format="{0}	{1}	{2}	{3}	{4}"
          Selector="MeanRawTimestamp,MeanTimestamp,ExpectedDeviceCount,DeviceCount,MaxDifference"
          Priority=Alert
          Type=HarpSynch
          Timestamp=MeanRawTimestamp
        -> MulticastSubject AlertLogs
        #32 -> Timestamp
        -> Bonsai.IO.CsvWriter(FileName=D:\TimestampClockSyncHeartBeat\TimestampClockSyncHeartBeat.csv, Append=true, Overwrite=false, Suffix=None, IncludeHeader=true)

GroupWorkflow ControlPanel
    Bonsai.Windows.Input.KeyDown(Filter="ShiftKey Space D0 P NumPad0 F1 Shift", SuppressRepetitions=false)
    -> MulticastSubject StartCameras

    Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey Space Prior PageUp D0 D1 A P Q NumPad0 NumPad1 F1 F2 Shift", SuppressRepetitions=false)
    -> MulticastSubject StopCameras

    Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu Space Next PageDown D0 D2 B P R NumPad0 NumPad2 F1 F3 Shift", SuppressRepetitions=false) => #4
    Annotation Patch1(Text="Manual pellet on patch 1") => #5
    #4, #5 -> IncludeWorkflow(Path=Extensions\ManualPellet.bonsai, StreamId=Patch1)

    Bonsai.Windows.Input.KeyDown => #7
      Filter: LButton RButton Cancel ShiftKey ControlKey Menu Pause Space Prior PageUp Next PageDown End D0 D1 D2 D3 A B C P Q R S NumPad0 NumPad1 NumPad2 NumPad3 F1 F2 F3 F4 Shift
      SuppressRepetitions=false
    Annotation Patch2(Text="Manual pellet on patch 2") => #8
    #7, #8 -> IncludeWorkflow(Path=Extensions\ManualPellet.bonsai, StreamId=Patch2)

    Disable SubscribeSubject PatchState
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item2 as D1,
        Item3 as Delta)
    -> Disable Aeon.Acquisition.LabelControl(FontSize=14)
    -> Disable GroupWorkflow Patch1
        WorkflowInput Source1
        -> WorkflowOutput

    Disable SubscribeSubject PatchState2
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item2 as D1,
        Item3 as Delta)
    -> Disable Aeon.Acquisition.LabelControl(FontSize=14)
    -> Disable GroupWorkflow Patch2
        WorkflowInput Source1
        -> WorkflowOutput

    SubscribeSubject AudioAmbient
    -> MemberSelector(Selector=Value)

    GroupWorkflow PatchActivity
        Annotation Todo(Text="Improve the visaulizers to work with n instances of the different objects ")

        SubscribeSubject Cameras
        -> Merge
        -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=CameraPatch1)
        -> SampleInterval(Interval=PT0.02S)
        -> MemberSelector(Selector=Value.Image) => #5
        Annotation "Check "(Text="How to make a select many com visualizers ") => #6
        #5, #6 -> Disable SelectMany => #7
            WorkflowInput Source1
            -> IncludeWorkflow(Path=Extensions\SourceStreamID.bonsai)

            SubscribeSubject source
            -> Merge
            -> SampleInterval(Interval=PT0.02S)
            -> MemberSelector(Selector=Value.Image) => #5
            SubscribeSubject StreamId => #6
            StringProperty => #7
            #6, #7 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Item1.Contains(Item2)
            -> Condition => #10
                WorkflowInput Source1
                -> WorkflowOutput
            #5, #10 -> SubscribeWhen
            -> VisualizerMapping
            -> WorkflowOutput
        SubscribeSubject Cameras
        -> Merge
        -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=CameraPatch2)
        -> SampleInterval(Interval=PT0.02S)
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping => #13
        SubscribeSubject PatchesState
        -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=2))
        -> VisualizerMapping => #16
        SubscribeSubject PatchesState
        -> Bonsai.Dsp.SelectChannels(Channels(int=1, int=3))
        -> VisualizerMapping => #19
        SubscribeSubject CurrentThresholdState
        -> IncludeWorkflow(Path=Extensions\ThresholdPatch.bonsai, StreamId=Patch1)
        -> VisualizerMapping => #22
        SubscribeSubject CurrentThresholdState
        -> IncludeWorkflow(Path=Extensions\ThresholdPatch.bonsai, StreamId=Patch2)
        -> VisualizerMapping => #25
        SubscribeSubject PelletMonitor
        -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch1)
        -> VisualizerMapping => #28
        SubscribeSubject PelletMonitor
        -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch2)
        -> VisualizerMapping => #31
        #7, #13, #16, #19, #22, #25, #28, #31 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchActivity
          ColumnCount=2
          RowCount=4
          ColumnStyles=""
          RowStyles=""
          CellSpans
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
        -> VisualizerMapping => #33
        Aeon.Acquisition.ExperimentProperties
        -> VisualizerMapping => #35
        SubscribeSubject TimeSpentOnPatches
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="Patch1,Patch2", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TimeSpentOnPatches
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #39
        SubscribeSubject TimeSinceLastVisit
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="Patch1,Patch2", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TimeSinceLastVisit
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #43
        SubscribeSubject TotalDistanceTravelled
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="Patch1,Patch2", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TotalDistanceTravelled
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #47
        #35, #39, #43, #47 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchStatistics(ColumnCount=1, RowCount=4, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #49
        #33, #49 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchActivity(ColumnCount=2, RowCount=1, ColumnStyles(ColumnStyle(SizeType=Percent, Width=60), ColumnStyle(SizeType=Percent, Width=40)), RowStyles="", CellSpans="")
        -> WorkflowOutput

    GroupWorkflow SubjectActivity
        SubscribeSubject Heatmap
        -> VisualizerMapping => #1
        SubscribeSubject Trajectory
        -> VisualizerMapping
        -> SubscribeSubject FrameTrajectory
        -> VisualizerMapping => #5
        #1, #5 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder SubjectActivity(ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput

    GroupWorkflow ExperimentMetadata
        Annotation Why(Text="Are these workflows in here ") => #0
        -> SubscribeSubject PelletDelivered
        -> SelectMany PressistentPatchDispenser
            WorkflowInput Source1
            -> IncludeWorkflow(Path=Extensions\SourceStreamID.bonsai)

            SubscribeSubject source
            -> Merge
            -> Condition RisingEdge
                WorkflowInput Source1
                -> MemberSelector(Selector=Value)
                -> WorkflowOutput
            -> IntProperty(Value=1) => #5
            SubscribeSubject Patch => #6
            SubscribeSubject StreamId
            -> PropertyMapping(StreamId) => #8
            #6, #8 -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=StreamId) => #9
            SubscribeSubject StreamId
            -> PropertyMapping(Name) => #11
            #5, #9, #11 -> Aeon.Acquisition.DispenserState(Name=Patch1)
            -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai)
            -> WorkflowOutput
        -> MulticastSubject PatchDispenser
        #0 -> SubscribeSubject PatchDispenser
        -> SelectMany "Reset Feeder"
            WorkflowInput Source1
            -> IncludeWorkflow(Path=Extensions\SourceStreamID.bonsai)

            SubscribeSubject source
            -> Merge
            -> Skip(Count=1)
            -> Condition Reset
                WorkflowInput Source1
                -> MemberSelector(Selector=Value.EventType)
                -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.DispenserEventType>(Value=Reset))
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai)
            -> MulticastSubject ResetFeeder
            -> WorkflowOutput

        SubscribeSubject PatchDispenser
        -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch1)
        -> VisualizerMapping => #8
        SubscribeSubject PatchDispenser
        -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch2)
        -> VisualizerMapping => #11
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.AnnotationSource
        -> MulticastSubject Annotations
        -> VisualizerMapping => #15
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.EnvironmentState
        -> MulticastSubject EnvironmentState
        -> VisualizerMapping => #19
        #8, #11, #15, #19 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder ExperimentMetadata
          ColumnCount=2
          RowCount=4
          ColumnStyles=""
          RowStyles=""
          CellSpans
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
        -> WorkflowOutput

    GroupWorkflow EnvironmentSubjectState
        SubscribeSubject VideoEvents => #0
        SubscribeSubject EnvironmentState
        -> PropertyMapping(EnvironmentState(Selector=Value.Type)) => #2
        #0, #2 -> Aeon.Acquisition.EnvironmentSubjectState(DatabasePath=Z:\aeon\colony\colony.csv, EnvironmentState=Maintenance)
        -> MulticastSubject SubjectState
        -> WorkflowOutput

Defer ZeroMQ
    ExternalizedMapping(StartPort)
    -> GroupWorkflow ZeroMQPortProvider
        BehaviorSubject<System.Int32> ZeroMqPortSet
        -> Add(Operand=IntProperty(Value=1))
        -> BehaviorSubject ZeroMQPortProvider

        ExternalizedMapping(Value(DisplayName=StartPort))
        -> IntProperty(Value=5000)
        -> MulticastSubject ZeroMqPortSet

    GroupWorkflow EndPointMonitor
        BehaviorSubject<ZeroMqAddress> ZeroMQStreamEndPoints => #0
        -> IntProperty(Value=1)
        -> Accumulate
        -> BehaviorSubject ZeroMQStreamsCount
        #0 -> ReplaySubject ZeroMQStreamIds(BufferSize=nil)
        #0 -> MemberSelector(Selector=Address)
        #0 -> MemberSelector(Selector=StreamId)

    GroupWorkflow CamerasStream
        SubscribeSubject Cameras
        -> Merge
        -> SelectMany ZeroMQDefineEndPoints
            WorkflowInput Source1
            -> IncludeWorkflow(Path=Extensions\SourceStreamID.bonsai)

            SubscribeSubject ZeroMQPortProvider
            -> Take(Count=1)
            -> MulticastSubject ZeroMqPortSet
            -> Format(Format=tcp://172.24.158.104:{0}, Selector=it)
            -> AsyncSubject DataEndPoint

            SubscribeSubject DataEndPoint => #7
            SubscribeSubject StreamId => #8
            #7, #8 -> Zip
            -> ZeroMqStreamIdAdress
            -> Take(Count=1)
            -> MulticastSubject ZeroMQStreamEndPoints => #12
            -> MemberSelector(Selector=Address)
            #12 -> MemberSelector(Selector=StreamId)

            Disable SubscribeSubject source
            -> Disable Merge => #16
            Disable Timer(DueTime=PT0S, Period=PT0.05S) => #17
            #16, #17 -> Disable Sample
            -> Disable MemberSelector(Selector=Value.Image) => #19
            Disable SubscribeSubject StreamId => #20
            #19, #20 -> Disable WithLatestFrom
            -> Disable ImageToByteArrayList
            -> Disable Bonsai.ZeroMQ.ToMessage => #23
            SubscribeSubject source
            -> Merge => #25
            Timer(DueTime=PT0S, Period=PT0.05S) => #26
            #25, #26 -> Sample
            -> GroupWorkflow EncodeImage
                WorkflowInput Source1
                -> MemberSelector(Selector=Value.Image)
                -> Bonsai.Vision.EncodeImage(Extension=jpg, CompressionParameters="")
                -> Bonsai.Dsp.ConvertToArray(Depth=nil)
                -> WorkflowOutput
            -> Bonsai.Osc.Format(Address=/EncodeImage)
            -> MemberSelector(Selector=Buffer.Array)
            -> Bonsai.ZeroMQ.ConvertToFrame => #31
            SubscribeSubject StreamId
            -> Bonsai.ZeroMQ.ConvertToFrame => #33
            #31, #33 -> WithLatestFrom
            -> SelectMany => #35
                WorkflowInput Source1
                -> Take(Count=1) => #1
                -> MemberSelector(Selector=Item2) => #2
                #1 -> MemberSelector(Selector=Item1) => #3
                #2, #3 -> Merge
                -> Bonsai.ZeroMQ.ToMessage
                -> WorkflowOutput
            #23, #35 -> Disable Merge => #36
            SubscribeSubject DataEndPoint
            -> PropertyMapping(ConnectionString(Selector=it)) => #38
            #36, #38 -> Bonsai.ZeroMQ.Publisher(ConnectionString=tcp://172.24.158.104:5012, Topic="")

    BehaviorSubject<NetMQ.NetMQMessage> RouterOutGoingMessages
    -> Bonsai.ZeroMQ.Router(ConnectionString=tcp://172.24.158.104:4242)
    -> SelectMany SendResponse
        SubscribeSubject ZeroMQStreamIds => #0
        SubscribeSubject ZeroMQStreamsCount
        -> PropertyMapping(Count) => #2
        #0, #2 -> Take(Count=12) => #3
        WorkflowInput Source1 => #4
        #3, #4 -> WithLatestFrom
        -> SelectMany ConstructMessage
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Source

            SubscribeSubject Source => #3
            Annotation "Client Address"(Text="") => #4
            #3, #4 -> MemberSelector(Selector=Item2.First) => #5
            SubscribeSubject Source
            -> MemberSelector(Selector=Item2) => #7
            Annotation DelimeterFrame(Text="") => #8
            #7, #8 -> Index(Operand=IntProperty(Value=1)) => #9
            SubscribeSubject Source
            -> MemberSelector(Selector=Item1)
            -> MemberSelector(Selector=Address)
            -> Bonsai.ZeroMQ.ConvertToFrame => #13
            SubscribeSubject Source
            -> MemberSelector(Selector=Item1)
            -> MemberSelector(Selector=StreamId)
            -> Bonsai.ZeroMQ.ConvertToFrame => #17
            #5, #9, #13, #17 -> Concat
            -> Bonsai.ZeroMQ.ToMessage
            -> MulticastSubject RouterOutGoingMessages
            -> WorkflowOutput
        -> WorkflowOutput

Bonsai.Numerics.CreateRandom(Seed=nil)
-> AsyncSubject Random

ExternalizedMapping(EasyThreshold, EasyRate, HardThreshold, HardRate, StartThreshold, StartTimeout, InitThreshold, InitRate)
-> GroupWorkflow TaskLogic
    ExternalizedMapping(EasyThreshold, EasyRate, HardThreshold, HardRate, StartThreshold, StartTimeout, InitThreshold, InitRate)
    -> Defer ParameterController
        ExternalizedMapping(Value(DisplayName=InitThreshold))
        -> DoubleProperty(Value=75)
        -> BehaviorSubject InitThreshold

        ExternalizedMapping(Value(DisplayName=InitRate))
        -> DoubleProperty(Value=10000)
        -> BehaviorSubject InitRate

        ExternalizedMapping(Value(DisplayName=EasyThreshold, Description="The minimum distance required to obtain a pellet."))
        -> DoubleProperty(Value=75)
        -> BehaviorSubject EasyThreshold

        ExternalizedMapping(Value(DisplayName=EasyRate))
        -> DoubleProperty(Value=0.01)
        -> BehaviorSubject EasyRate

        ExternalizedMapping(Value(DisplayName=HardThreshold, Description="The minimum distance required to obtain a pellet."))
        -> DoubleProperty(Value=75)
        -> BehaviorSubject HardThreshold

        ExternalizedMapping(Value(DisplayName=HardRate))
        -> DoubleProperty(Value=0.0025)
        -> BehaviorSubject HardRate

        SubscribeSubject InitThreshold => #18
        SubscribeSubject InitRate => #19
        #18, #19 -> CombineLatest
        -> Take(Count=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #22
          Expression:
            new(
            Item1 as ThresholdPatch1,
            Item2 as RatePatch1,
            Item1 as ThresholdPatch2,
            Item2 as RatePatch2)
        SubscribeSubject EasyThreshold => #23
        SubscribeSubject EasyRate => #24
        SubscribeSubject HardThreshold => #25
        SubscribeSubject HardRate => #26
        #23, #24, #25, #26 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #28
          Expression:
            new(
            Item1 as EasyThreshold,
            Item2 as EasyRate,
            Item3 as HardThreshold,
            Item4 as HardRate)
        SubscribeSubject ThresholdCrossing
        -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch1)
        -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
        -> IntProperty(Value=1)
        -> Accumulate => #33
        SubscribeSubject ThresholdCrossing
        -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch2)
        -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
        -> IntProperty(Value=1)
        -> Accumulate => #38
        #33, #38 -> CombineLatest
        -> Add => #40
        ExternalizedMapping(Value(DisplayName=StartThreshold)) => #41
        #40, #41 -> GreaterThanOrEqual(Operand=IntProperty(Value=18))
        -> Condition => #43
            WorkflowInput Source1
            -> WorkflowOutput
        ExternalizedMapping(StartTimeout) => #44
        #43, #44 -> Sink StartTimeout => #45
            ExternalizedMapping(DueTime(DisplayName=StartTimeout))
            -> Timer(DueTime=PT1H, Period=PT0S)
            -> Format
              Format:
                ## **Start Timeout**
                More than 1 hour has passed and the pellet threshold value to start the probabilistic period has not been reached.
              Selector=""
            -> MulticastSubject SubjectAlertMessages
        #28, #45 -> SubscribeWhen => #46
        SubscribeSubject WheelDisplacement
        -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch1)
        -> MemberSelector(Selector=Value)
        -> IncludeWorkflow(Path=Aeon.Acquisition:DistanceTravelled.bonsai, Gain=1) => #50
        SubscribeSubject WheelDisplacement
        -> IncludeWorkflow(Path=Extensions\SelectStream.bonsai, StreamId=Patch2)
        -> MemberSelector(Selector=Value)
        -> IncludeWorkflow(Path=Aeon.Acquisition:DistanceTravelled.bonsai, Gain=1) => #54
        #46, #50, #54 -> CombineLatest
        -> Take(Count=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #57
          Expression:
            new(
            Item2 > Item3 ? Item1.HardThreshold : Item1.EasyThreshold as ThresholdPatch1,
            Item2 > Item3 ? Item1.HardRate : Item1.EasyRate as RatePatch1,
            Item2 > Item3 ? Item1.EasyThreshold : Item1.HardThreshold as ThresholdPatch2,
            Item2 > Item3 ? Item1.EasyRate : Item1.HardRate as RatePatch2)
        #22, #57 -> Concat
        -> Sink SetPatchState
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Double.NaN as Threshold,
                ThresholdPatch1 as D0,
                RatePatch1 as Rate)
            -> MemberSelector(Selector="Threshold,D0,Rate", TypeMapping=TypeMapping<System.ValueTuple(System.Double,System.Double,System.Double)>) => #2
            StringProperty(Value=Patch1) => #3
            #2, #3 -> WithLatestFrom
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> MulticastSubject PatchState
            #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Double.NaN as Threshold,
                ThresholdPatch2 as D0,
                RatePatch2 as Rate)
            -> MemberSelector(Selector="Threshold,D0,Rate", TypeMapping=TypeMapping<System.ValueTuple(System.Double,System.Double,System.Double)>)
            -> StringProperty(Value=Patch1) => #9
            StringProperty(Value=Patch2) => #10
            #9, #10 -> WithLatestFrom
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> MulticastSubject PatchState
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> PublishSubject ParameterChange

    Disable SubscribeSubject ParameterChange
    -> Disable PropertyMapping(ThresholdPatch1(Selector=ThresholdPatch1), RatePatch1(Selector=RatePatch1), ThresholdPatch2(Selector=ThresholdPatch2), RatePatch2(Selector=RatePatch2))
    -> GroupWorkflow TaskLogic => #6
        SubscribeSubject WheelDisplacement => #0
        ExternalizedMapping(ThresholdPatch1, RatePatch1) => #1
        #0, #1 -> SelectMany
            WorkflowInput Source1
            -> IncludeWorkflow(Path=Extensions\SourceStreamID.bonsai)

            SubscribeSubject source
            -> Merge
            -> MemberSelector(Selector=Value) => #4
            ExternalizedMapping(DistanceThreshold(DisplayName=ThresholdPatch1), Rate(DisplayName=RatePatch1)) => #5
            #4, #5 -> GroupWorkflow RandomDepletion(Description="The patch is replenished using a probabilistic sampling function.")
                WorkflowInput Source1 => #0
                IncludeWorkflow DistanceState(Path=Extensions\SelectStreamId.bonsai)
                -> Take(Count=1) => #2
                #0, #2 -> Aeon.Acquisition.PrependOnce => #3
                GroupWorkflow MaintenanceGain
                    SubscribeSubject EnvironmentState
                    -> MemberSelector(Selector=Value.Type)
                    -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.EnvironmentStateType>(Value=Experiment))
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression: it ? 1.0 : 0.0
                    -> WorkflowOutput
                -> PropertyMapping(Gain) => #5
                #3, #5 -> IncludeWorkflow(Path=Aeon.Acquisition:DistanceTravelled.bonsai, Gain=1)
                -> Sink DistanceState => #7
                    WorkflowInput Source1
                    -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai)
                    -> MulticastSubject DistanceState
                    -> WorkflowOutput
                ExternalizedMapping(DistanceThreshold, Rate) => #8
                ExternalizedMapping(PatchState) => #9
                #7, #8, #9 -> GroupWorkflow SamplingFunction
                    SubscribeSubject SubjectState
                    -> Merge
                    -> Condition Enter
                        WorkflowInput Source1
                        -> MemberSelector(Selector=Value.Type)
                        -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.EnvironmentSubjectChangeType>(Value=Enter))
                        -> WorkflowOutput
                    -> IntProperty(Value=0)
                    -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai) => #4
                    ExternalizedMapping(Name(DisplayName=DeliveryCount)) => #5
                    #4, #5 -> MulticastSubject DeliveryCount
                    WorkflowInput Source1 => #7
                    ExternalizedMapping(Name(DisplayName=PatchState)) => #8
                    -> IncludeWorkflow PatchState(Path=Extensions\SelectStreamId.bonsai)
                    -> GroupWorkflow Threshold => #10
                        WorkflowInput Source1
                        -> WorkflowOutput
                    #5 -> IncludeWorkflow DeliveryCount(Path=Extensions\SelectStreamId.bonsai) => #11
                    SubscribeSubject Random => #12
                    #10, #11, #12 -> CombineLatest
                    -> Take(Count=1) => #14
                    -> InputMapping(Selector=Item3, Rate(Selector=Item1.Delta))
                    -> Bonsai.Numerics.Distributions.CreateExponential(Rate=100) => #16
                    #14, #16 -> Zip => #17
                    #17, #8 -> IncludeWorkflow PatchState(Path=Extensions\AssignToStreamId.bonsai)
                    -> MemberSelector(Selector=Item1.Item1.Threshold)
                    -> PropertyMapping(Value) => #20
                    #7, #20 -> GreaterThan(Operand=DoubleProperty(Value=50.004432094988864))
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> IntProperty(Value=1) => #24
                    #5 -> IncludeWorkflow DeliveryCount(Path=Extensions\SelectStreamId.bonsai) => #25
                    #24, #25 -> WithLatestFrom
                    -> Add
                    -> Repeat
                    -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai) => #29
                    #29, #5 -> MulticastSubject DeliveryCount
                    -> WorkflowOutput
                    ExternalizedMapping(Value(DisplayName=DistanceThreshold, Description="The minimum distance required to obtain a pellet.")) => #32
                    #8 -> IncludeWorkflow PatchState(Path=Extensions\SelectStreamId.bonsai)
                    -> Take(Count=1)
                    -> Condition
                        WorkflowInput Source1
                        -> MemberSelector(Selector=D1)
                        -> GreaterThan(Operand=DoubleProperty(Value=0))
                        -> WorkflowOutput
                    -> PropertyMapping(Value(Selector=D1)) => #36
                    #32, #36 -> DoubleProperty(Value=75) => #37
                    ExternalizedMapping(Value(DisplayName=Rate)) => #38
                    #8 -> IncludeWorkflow PatchState(Path=Extensions\SelectStreamId.bonsai)
                    -> Take(Count=1) => #40
                    Annotation "Need to double check the logic"(Text="") => #41
                    #40, #41 -> Condition
                        WorkflowInput Source1
                        -> MemberSelector(Selector=D1)
                        -> GreaterThan(Operand=DoubleProperty(Value=0))
                        -> WorkflowOutput

                        CreatePatchState
                    -> PropertyMapping(Value(Selector=Delta)) => #43
                    #38, #43 -> DoubleProperty(Value=10000) => #44
                    #37, #44 -> CombineLatest => #45
                    #8 -> IncludeWorkflow PatchState(Path=Extensions\SelectStreamId.bonsai) => #46
                    ExternalizedMapping => #47
                    ExternalizedMapping => #48
                    #45, #46, #47, #48 -> WithLatestFrom
                    -> MemberSelector(Selector="Item2.Threshold,Item1.Item1,Item1.Item2")
                    -> ConvertToPatchState
                    -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai) => #52
                    #52, #8 -> MulticastSubject PatchState
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai)
            -> MulticastSubject DeliverPellet
            -> MulticastSubject ThresholdCrossing
            -> WorkflowOutput

        Disable SubscribeSubject WheelPatch2
        -> Disable MemberSelector(Selector=Value) => #4
        Disable ExternalizedMapping(DistanceThreshold(DisplayName=ThresholdPatch2), Rate(DisplayName=RatePatch2)) => #5
        #4, #5 -> Disable IncludeWorkflow DistanceState2(Path=Extensions\RandomDepletion.bonsai, DistanceThreshold=75, Rate=10000, DeliveryCount=DeliveryCount2, PatchState=PatchState2)
        -> Disable MulticastSubject DeliverPelletPatch2
        -> Disable MulticastSubject ThresholdCrossingPatch2

        DoubleProperty(Value=0)
    SubscribeSubject ParameterChange => #7
    #6, #7 -> TakeUntil
    -> Repeat
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> WorkflowOutput

    ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,System.Int32)> ThresholdCrossing(BufferSize=nil)

Disable IncludeWorkflow(Path=Extensions\SelectCamera.bonsai, CamerName=CameraNestSouthFront)
Disable IncludeWorkflow(Path=Extensions\SelectCamera.bonsai, CamerName=CameraNestSouthFront)
