WorkflowBuilder(Version=2.8.0-alpha018)
GroupWorkflow Metadata
    GroupWorkflow Devices
        GroupWorkflow ClockSynchronizer
            ExternalizedMapping(PortName)
            -> IncludeWorkflow(Path=Aeon.Acquisition:Synchronizer.bonsai, PortName=COM5)
            -> WorkflowOutput

        GroupWorkflow CameraController
            ExternalizedMapping(PortName, GlobalTriggerFrequency, LocalTriggerFrequency)
            -> IncludeWorkflow(Path=Aeon.Acquisition:CameraController.bonsai, PortName=COM6, GlobalTriggerFrequency=50, LocalTriggerFrequency=125)
            -> WorkflowOutput

        GroupWorkflow CameraTop
            ExternalizedMapping(TriggerSource, TriggerFrequency, ExposureTime, SerialNumber, Gain, Binning, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23101736
              Gain=0
              Binning=1
              FrameEvents=CameraTop
            -> WorkflowOutput

        GroupWorkflow CameraNorth
            ExternalizedMapping(TriggerSource, TriggerFrequency, ExposureTime, SerialNumber, Gain, Binning, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23106245
              Gain=0
              Binning=1
              FrameEvents=CameraNorth
            -> WorkflowOutput

        GroupWorkflow CameraSouth
            ExternalizedMapping(TriggerSource, TriggerFrequency, ExposureTime, SerialNumber, Gain, Binning, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23106227
              Gain=0
              Binning=1
              FrameEvents=CameraSouth
            -> WorkflowOutput

        GroupWorkflow CameraNestNorthTop
            ExternalizedMapping(TriggerSource, TriggerFrequency, ExposureTime, SerialNumber, Gain, Binning, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=8000
              SerialNumber=23106287
              Gain=0
              Binning=1
              FrameEvents=CameraNestNorthTop
            -> WorkflowOutput

        GroupWorkflow CameraNestNorthSide
            ExternalizedMapping(TriggerSource, TriggerFrequency, ExposureTime, SerialNumber, Gain, Binning, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23032826
              Gain=0
              Binning=2
              FrameEvents=CameraNestNorthSide
            -> WorkflowOutput

        GroupWorkflow CameraNestNorthFront
            ExternalizedMapping(TriggerSource, TriggerFrequency, ExposureTime, SerialNumber, Gain, Binning, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23032828
              Gain=0
              Binning=2
              FrameEvents=CameraNestNorthFront
            -> WorkflowOutput

        GroupWorkflow CameraNestSouthTop
            ExternalizedMapping(TriggerSource, TriggerFrequency, ExposureTime, SerialNumber, Gain, Binning, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=8000
              SerialNumber=23032818
              Gain=0
              Binning=1
              FrameEvents=CameraNestSouthTop
            -> WorkflowOutput

        GroupWorkflow CameraNestSouthSide
            ExternalizedMapping(TriggerSource, TriggerFrequency, ExposureTime, SerialNumber, Gain, Binning, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23032811
              Gain=0
              Binning=2
              FrameEvents=CameraNestSouthSide
            -> WorkflowOutput

        GroupWorkflow CameraNestSouthFront
            ExternalizedMapping(TriggerSource, TriggerFrequency, ExposureTime, SerialNumber, Gain, Binning, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23032823
              Gain=0
              Binning=2
              FrameEvents=CameraNestSouthFront
            -> WorkflowOutput

        GroupWorkflow CameraPatchNorth
            ExternalizedMapping(TriggerSource, TriggerFrequency, ExposureTime, SerialNumber, Gain, Binning, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23101737
              Gain=0
              Binning=2
              FrameEvents=CameraPatchNorth
            -> WorkflowOutput

        GroupWorkflow CameraPatchSouth
            ExternalizedMapping(TriggerSource, TriggerFrequency, ExposureTime, SerialNumber, Gain, Binning, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23106236
              Gain=0
              Binning=2
              FrameEvents=CameraPatchSouth
            -> WorkflowOutput

        GroupWorkflow PatchNorth
            ExternalizedMapping(PortName, WheelDisplacement, PelletDelivered, DeliverPellet, PatchEvents, Radius, SampleRate, ResetFeeder, DueTime, Count)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:UndergroundFeeder.bonsai
              PatchEvents=PatchNorth
              SampleRate=SampleRate500Hz
              DeliverPellet=DeliverPelletPatchNorth
              PelletDelivered=PelletDeliveredPatchNorth
              DueTime=PT1S
              Count=5
              ResetFeeder=ResetFeederPatchNorth
              PortName=COM4
              Radius=-4
              WheelDisplacement=WheelPatchNorth
            -> WorkflowOutput

        GroupWorkflow PatchSouth
            ExternalizedMapping(PortName, WheelDisplacement, PelletDelivered, DeliverPellet, PatchEvents, Radius, SampleRate, ResetFeeder, DueTime, Count)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:UndergroundFeeder.bonsai
              PatchEvents=PatchSouth
              SampleRate=SampleRate500Hz
              DeliverPellet=DeliverPelletPatchSouth
              PelletDelivered=PelletDeliveredPatchSouth
              DueTime=PT1S
              Count=5
              ResetFeeder=ResetFeederPatchSouth
              PortName=COM3
              Radius=-4
              WheelDisplacement=WheelPatchSouth
            -> WorkflowOutput

        GroupWorkflow LightController
            ExternalizedMapping(LightEvents, EventSocket, CommandSocket)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:LightController.bonsai
              EventSocket=>tcp://172.24.158.103:4303
              LightEvents=LightEvents
              CommandSocket=>tcp://172.24.158.103:4304
            -> WorkflowOutput

        GroupWorkflow AudioAmbient
            ExternalizedMapping(DeviceName, SampleRate, Name)
            -> IncludeWorkflow AudioAmbient(Path=Aeon.Acquisition:AudioSource.bonsai, DeviceName="Microphone (2- UltraMic 192K 16", SampleRate=192000)
            -> WorkflowOutput

    GroupWorkflow TrackingTop
        ExternalizedMapping(Name(DisplayName=FrameEvents))
        -> SubscribeSubject CameraTop => #1
        ExternalizedMapping(ThresholdValue, Mask, TrackingCount, TrackingEvents) => #2
        #1, #2 -> IncludeWorkflow(Path=Aeon.Acquisition:PositionTracking.bonsai, ThresholdValue=80, Mask=ArenaMask_2023-06-26.png, TrackingCount=1, TrackingEvents=TrackingTop)
        -> WorkflowOutput

    GroupWorkflow ActivityCenter
        SubscribeSubject CameraTop
        -> IncludeWorkflow
          Path=Aeon.Acquisition:ActivityTracking.bonsai
          Regions(ArrayOfPoint(Point(X=76, Y=431), Point(X=404, Y=431), Point(X=404, Y=665), Point(X=76, Y=665)))
          ThresholdValue=10
          TrackingEvents=ActivityCenter
        -> WorkflowOutput

    GroupWorkflow ActivityArena
        SubscribeSubject CameraTop
        -> IncludeWorkflow(Path=Aeon.Acquisition:ActivityTracking.bonsai, Regions=nil, ThresholdValue=10, TrackingEvents=ActivityArena)
        -> WorkflowOutput

GroupWorkflow Declarations
    BehaviorSubject<Aeon.Acquisition.WeightMeasurement> FilteredWeightNest
    BehaviorSubject<Aeon.Acquisition.WeightMeasurement> SubjectWeight
    PublishSubject<Bonsai.Harp.Timestamped(System.Byte)> MissedPelletsNorth
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> PatchStateNorth
    PublishSubject<Bonsai.Harp.Timestamped(System.Byte)> MissedPelletsSouth
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> PatchStateSouth
    PublishSubject<Bonsai.Harp.Timestamped(System.Double)> BaselineTrigger
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.LogMessage)> AlertLogs
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.LogMessage)> Annotations
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentStateMetadata)> EnvironmentState
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.DispenserStateMetadata)> PatchNorthDispenser
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.DispenserStateMetadata)> PatchSouthDispenser
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentSubjectStateMetadata)> SubjectState
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentSubjectStateMetadata)> SubjectStart
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentSubjectStateMetadata)> SubjectStop
    PublishSubject<Bonsai.Harp.Timestamped(System.UInt16)> ManualPelletNorth
    PublishSubject<Bonsai.Harp.Timestamped(System.UInt16)> ManualPelletSouth

GroupWorkflow Logging
    IncludeWorkflow(Path=Aeon.Acquisition:RepositoryLogController.bonsai, RepositoryPath=..\..\, DataPath=D:\ProjectAeon, FallbackPath=D:\Tests, ChunkSize=1)
    IncludeWorkflow(Path=Aeon.Acquisition:ExportMetadata.bonsai, WorkflowName=Nesting0.1.bonsai)

    SubscribeSubject VideoEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=VideoController, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject CameraTop
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraTop, FrameRate=50)

    SubscribeSubject TrackingTop
    -> Aeon.Acquisition.FormatBinaryRegions
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=CameraTop, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject CameraNorth
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraNorth, FrameRate=50)

    SubscribeSubject CameraSouth
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraSouth, FrameRate=50)

    SubscribeSubject CameraNestNorthTop
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraNestNorthTop, FrameRate=50)

    SubscribeSubject CameraNestNorthSide
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraNestNorthSide, FrameRate=125)

    SubscribeSubject CameraNestNorthFront
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraNestNorthFront, FrameRate=125)

    SubscribeSubject CameraNestSouthTop
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraNestSouthTop, FrameRate=50)

    SubscribeSubject CameraNestSouthSide
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraNestSouthSide, FrameRate=125)

    SubscribeSubject CameraNestSouthFront
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraNestSouthFront, FrameRate=125)

    SubscribeSubject CameraPatchNorth
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraPatchNorth, FrameRate=125)

    SubscribeSubject CameraPatchSouth
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraPatchSouth, FrameRate=125)

    SubscribeSubject PatchNorth => #29
    SubscribeSubject PatchNorthDispenser
    -> Aeon.Acquisition.FormatDispenserState => #31
    SubscribeSubject ManualPelletNorth
    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #33
    SubscribeSubject MissedPelletsNorth
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=202, PayloadType=TimestampedU8)) => #35
    #29, #31, #33, #35 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=PatchNorth, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject PatchStateNorth
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #39
      Expression:
        new(
        Item1 as Threshold,
        Item2 as D1,
        Item3 as Delta)
    SubscribeSubject PatchNorth
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #41
    #39, #41 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=PatchNorth_State, Selector=nil)

    SubscribeSubject PatchSouth => #44
    SubscribeSubject PatchSouthDispenser
    -> Aeon.Acquisition.FormatDispenserState => #46
    SubscribeSubject ManualPelletSouth
    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #48
    SubscribeSubject MissedPelletsSouth
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=202, PayloadType=TimestampedU8)) => #50
    #44, #46, #48, #50 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=PatchSouth, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject PatchStateSouth
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #54
      Expression:
        new(
        Item1 as Threshold,
        Item2 as D1,
        Item3 as Delta)
    SubscribeSubject PatchSouth
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #56
    #54, #56 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=PatchSouth_State, Selector=nil)

    SubscribeSubject AudioAmbient
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogAudio.bonsai, Heartbeats="", ClosingDuration=nil, LogName=AudioAmbient, SampleRate=192000)

    SubscribeSubject SubjectState
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=""
      ClosingDuration=nil
      LogName=ExperimentalMetadata_SubjectState
      Selector="Seconds,Value.Id,Value.Weight,Value.Type"

    SubscribeSubject AlertLogs => #63
    SubscribeSubject Annotations => #64
    #63, #64 -> Merge
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=""
      ClosingDuration=nil
      LogName=ExperimentalMetadata_MessageLog
      Selector="Seconds,Value.Priority,Value.Type,Value.Message"

    SubscribeSubject EnvironmentState
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=ExperimentalMetadata_EnvironmentState, Selector="Seconds,Value.Type")

    SubscribeSubject SubjectState
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Seconds as Seconds,
        new(Value.Id as Id,
            Value.Type.ToString() as Event,
            "Environment" as Value) as Value)
    -> MemberSelector(Selector="Value,Seconds")
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=""
      ClosingDuration=nil
      LogName=ExperimentalMetadata_SubjectVisits
      Selector="Seconds,Value.Id,Value.Event,Value.Value"

    SubscribeSubject LightEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=LightController, Selector=nil)

GroupWorkflow Visualization
    SubscribeSubject TrackingTop
    -> MemberSelector(Selector=Item1[0].Centroid)
    -> PublishSubject TrajectoryNorth

    SubscribeSubject TrackingTop
    -> MemberSelector(Selector=Item1[1].Centroid)
    -> PublishSubject TrajectorySouth

    SubscribeSubject CameraTop
    -> MemberSelector(Selector=Value.Image)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject FrameTrajectory

    SubscribeSubject CameraNestNorthTop
    -> MemberSelector(Selector=Value.Image)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject FrameNestNorth

    SubscribeSubject CameraNestSouthTop
    -> MemberSelector(Selector=Value.Image)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject FrameNestSouth

    SubscribeSubject TrackingTop => #18
    -> MemberSelector(Selector=Item1[0].Centroid) => #19
    #18 -> MemberSelector(Selector=Item1[1].Centroid) => #20
    #19, #20 -> Merge
    -> Bonsai.Dsp.Histogram2D(MinX=0, MaxX=1440, MinY=0, MaxY=1080, BinsX=288, BinsY=216, Normalize=false, Accumulate=true)
    -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=20, Shift=0)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject Heatmap

    SubscribeSubject DistanceStateNorth
    -> MemberSelector(Selector=Value) => #28
    SubscribeSubject DistanceStateSouth
    -> MemberSelector(Selector=Value) => #30
    SubscribeSubject PatchStateNorth
    -> MemberSelector(Selector=Item1) => #32
    SubscribeSubject PatchStateSouth
    -> MemberSelector(Selector=Item1) => #34
    #28, #30, #32, #34 -> CombineLatest => #35
    #35, #28 -> Sample
    -> Bonsai.Dsp.Buffer(Count=15, Skip=nil)
    -> PublishSubject PatchState

    SubscribeSubject PatchStateNorth
    -> GroupWorkflow ToArray => #40
        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> IgnoreElements
        -> ToArray => #3
        WorkflowInput Source1
        -> SelectMany
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> ToArray
            -> WorkflowOutput
        -> DelaySubscription(DueTime=PT0.1S) => #6
        #3, #6 -> Concat
        -> WorkflowOutput
    SubscribeSubject DeliveryCountNorth => #41
    #40, #41 -> WithLatestFrom
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        int32(Item2) as PelletCount,
        Item1 as Threshold)
    -> PublishSubject CurrentThresholdPatchNorth

    SubscribeSubject PatchStateSouth
    -> GroupWorkflow ToArray => #47
        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> IgnoreElements
        -> ToArray => #3
        WorkflowInput Source1
        -> SelectMany
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> ToArray
            -> WorkflowOutput
        -> DelaySubscription(DueTime=PT0.1S) => #6
        #3, #6 -> Concat
        -> WorkflowOutput
    SubscribeSubject DeliveryCountSouth => #48
    #47, #48 -> WithLatestFrom
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        int32(Item2) as PelletCount,
        Item1 as Threshold)
    -> PublishSubject CurrentThresholdPatchSouth

    IncludeWorkflow(Path=Extensions\PelletMonitor.bonsai, PelletCommand=PatchNorth, PelletDelivered=PelletDeliveredPatchNorth)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> PublishSubject PelletMonitorNorth
    -> MemberSelector(Selector=Value)
    -> PublishSubject PelletMonitorValueNorth

    IncludeWorkflow(Path=Extensions\PelletMonitor.bonsai, PelletCommand=PatchSouth, PelletDelivered=PelletDeliveredPatchSouth)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> BehaviorSubject PelletMonitorSouth
    -> MemberSelector(Selector=Value)
    -> PublishSubject PelletMonitorValueSouth

    SubscribeSubject TimeOnPatchNorth => #63
    SubscribeSubject TimeOnPatchSouth => #64
    #63, #64 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Time Spent on Patch (s)" as Id,
        Item1 as PatchNorth,
        Item2 as PatchSouth)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TimeSpentOnPatches

    SubscribeSubject TimeSinceLastVisitNorth => #69
    SubscribeSubject TimeSinceLastVisitSouth => #70
    #69, #70 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Time Since Last Visit (s)" as Id,
        Item1 as PatchNorth,
        Item2 as PatchSouth)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TimeSinceLastVisit

    SubscribeSubject WheelPatchNorth
    -> MemberSelector(Selector=Value)
    -> Accumulate => #77
    SubscribeSubject WheelPatchSouth
    -> MemberSelector(Selector=Value)
    -> Accumulate => #80
    #77, #80 -> CombineLatest
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Total Distance Travelled (cm)" as Id,
        Item1 as PatchNorth,
        Item2 as PatchSouth)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TotalDistanceTravelled

    IncludeWorkflow(Path=Aeon.Acquisition:TimeSpentOnWheel.bonsai, Patch=PatchNorth, WheelPatch=WheelPatchNorth, Threshold=0.0003, LowPass=1)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> BehaviorSubject TimeOnPatchNorth

    SubscribeSubject TimeOnPatchNorth
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> DistinctUntilChanged
    -> IncludeWorkflow(Path=Aeon.Acquisition:TimeSinceLastEvent.bonsai)
    -> BehaviorSubject TimeSinceLastVisitNorth

    IncludeWorkflow(Path=Aeon.Acquisition:TimeSpentOnWheel.bonsai, Patch=PatchSouth, WheelPatch=WheelPatchSouth, Threshold=0.0003, LowPass=1)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> BehaviorSubject TimeOnPatchSouth

    SubscribeSubject TimeOnPatchSouth
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> DistinctUntilChanged
    -> IncludeWorkflow(Path=Aeon.Acquisition:TimeSinceLastEvent.bonsai)
    -> BehaviorSubject TimeSinceLastVisitSouth

    SubscribeSubject ActivityCenter
    -> Condition ActivityCondition => #103
        WorkflowInput Source1
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=BaselineActivityThreshold)) => #2
        #1, #2 -> GreaterThan(Operand=DoubleProperty(Value=1))
        -> WorkflowOutput
    ExternalizedMapping(Interval(DisplayName=BaselineRefractoryPeriod)) => #104
    #103, #104 -> GateInterval(Interval=PT5S)
    -> MulticastSubject BaselineTrigger

    SubscribeSubject SubjectWeight => #107
    SubscribeSubject SubjectStart
    -> MemberSelector(Selector=Value.ReferenceWeight) => #109
    #107, #109 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1.Timestamp as Timestamp,
        Item1.Value as CurrentWeight,
        100 * Item1.Value / Item2 as CurrentPercent)
    -> BehaviorSubject PercentWeightLoss

    IncludeWorkflow
      Path=Extensions\PelletMissed.bonsai
      PelletDelivered=PelletDeliveredPatchNorth
      TimeToMiss=PT2S
      DistanceToMiss=20
      TimeInChute=PT0S
      WheelDisplacement=WheelPatchNorth
    -> MulticastSubject MissedPelletsNorth

    IncludeWorkflow
      Path=Extensions\PelletMissed.bonsai
      PelletDelivered=PelletDeliveredPatchSouth
      TimeToMiss=PT2S
      DistanceToMiss=20
      TimeInChute=PT0S
      WheelDisplacement=WheelPatchSouth
    -> MulticastSubject MissedPelletsSouth

    SubscribeSubject PelletDeliveredPatchNorth
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalPelletsDeliveredNorth(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject PelletDeliveredPatchSouth
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalPelletsDeliveredSouth(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject MissedPelletsNorth
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalMissedPelletsNorth(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject MissedPelletsSouth
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalMissedPelletsSouth(Path=Extensions\PersistentCounter.bonsai)

    GroupWorkflow SubjectAlerts
        PublishSubject<System.String> SubjectAlertMessages
        -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\alerts.config)

        SubscribeSubject PercentWeightLoss => #3
        ExternalizedMapping(WeightLossThreshold) => #4
        #3, #4 -> Condition LowWeight
            WorkflowInput Source1
            -> MemberSelector(Selector=CurrentPercent) => #1
            ExternalizedMapping(Value(DisplayName=WeightLossThreshold, Description="Below this value the weight loss alert will be raised.")) => #2
            #1, #2 -> LessThanOrEqual(Operand=FloatProperty(Value=80))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #6
        SubscribeSubject SubjectState => #7
        #6, #7 -> WithLatestFrom => #8
        -> Format
          Format:
            ## **Low Weight**
            **Subject**: {0}
            **Current Weight**: {1}
            **Reference Weight**: {2}
            **Current percent**: {3}
          Selector="Item2.Value.Id,Item1.CurrentWeight,Item2.Value.ReferenceWeight,Item1.CurrentPercent"
        -> MulticastSubject SubjectAlertMessages
        #8 -> Aeon.Acquisition.FormatLogMessage
          Format="{0}	{1}	{2}	{3}"
          Selector="Item2.Value.Id,Item1.CurrentWeight,Item2.Value.ReferenceWeight,Item1.CurrentPercent"
          Priority=Alert
          Type=LowWeight
          Timestamp=Item1.Timestamp
        -> MulticastSubject AlertLogs

        SubscribeSubject PatchNorthDispenser => #13
        ExternalizedMapping(PelletThreshold) => #14
        #13, #14 -> Condition LowFood
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.Value) => #1
            ExternalizedMapping(Value(DisplayName=PelletThreshold, Description="Below this value the low food alert will be raised.")) => #2
            #1, #2 -> LessThan(Operand=IntProperty(Value=105))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #16
        SubscribeSubject PatchSouthDispenser => #17
        #17, #14 -> Condition LowFood
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.Value) => #1
            ExternalizedMapping(Value(DisplayName=PelletThreshold, Description="Below this value the low food alert will be raised.")) => #2
            #1, #2 -> LessThan(Operand=IntProperty(Value=105))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #19
        #16, #19 -> Merge => #20
        -> Format
          Format:
            ## **Low Food**
            **Patch**: {0}
            **Current Pellet Estimate**: {1}
          Selector="Value.Name,Value.Value"
        -> MulticastSubject SubjectAlertMessages
        #20 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	{1}", Selector="Value.Name,Value.Value", Priority=Alert, Type=LowFood)
        -> MulticastSubject AlertLogs

        SubscribeSubject PelletMonitorNorth => #25
        ExternalizedMapping(Count(DisplayName=DeliveryFailureThreshold)) => #26
        #25, #26 -> Condition DispenserBroken
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
              Expression: Value ? 1 : 0
            ExternalizedMapping(Count) => #2
            #1, #2 -> BufferCount(Count=5, Skip=1)
            -> Add => #4
            #4, #2 -> GroupWorkflow Equal
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Count)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=5)) => #2
                #0 -> Equal(Operand=IntProperty(Value=0)) => #3
                #2, #3 -> Zip
                -> LogicalOr
                -> WorkflowOutput
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #28
        -> Format
          Format:
            ## **Dispenser Broken**
            **Patch**: PatchNorth
          Selector=""
        -> MulticastSubject SubjectAlertMessages
        #28 -> Aeon.Acquisition.FormatLogMessage(Format=PatchNorth, Selector="", Priority=Alert, Type=DispenserBroken, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs
        SubscribeSubject PelletMonitorSouth => #33
        #33, #26 -> Condition DispenserBroken
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
              Expression: Value ? 1 : 0
            ExternalizedMapping(Count) => #2
            #1, #2 -> BufferCount(Count=5, Skip=1)
            -> Add => #4
            #4, #2 -> GroupWorkflow Equal
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Count)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=5)) => #2
                #0 -> Equal(Operand=IntProperty(Value=0)) => #3
                #2, #3 -> Zip
                -> LogicalOr
                -> WorkflowOutput
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #35
        -> Format
          Format:
            ## **Dispenser Broken**
            **Patch**: PatchSouth
          Selector=""
        -> MulticastSubject SubjectAlertMessages
        #35 -> Aeon.Acquisition.FormatLogMessage(Format=PatchSouth, Selector="", Priority=Alert, Type=DispenserBroken, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject MissedPelletsNorth
        -> ElementIndex
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #42
        SubscribeSubject SubjectState => #43
        #42, #43 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #45
          Expression:
            new(
            Item1.Value.Seconds as Timestamp,
            Item1.Index + 1 as Count,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Missed Pellet**
            **Subject**: {0}
            **Patch:**: PatchNorth
            **Total Missed**: {1}
          Selector="Id,Count"
        -> MulticastSubject SubjectAlertMessages
        #45 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	PatchNorth	{1}", Selector="Id,Count", Priority=Alert, Type=MissedPellet, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject MissedPelletsSouth
        -> ElementIndex
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #52
        SubscribeSubject SubjectState => #53
        #52, #53 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #55
          Expression:
            new(
            Item1.Value.Seconds as Timestamp,
            Item1.Index + 1 as Count,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Missed Pellet**
            **Subject**: {0}
            **Patch:**: PatchSouth
            **Total Missed**: {1}
          Selector="Id,Count"
        -> MulticastSubject SubjectAlertMessages
        #55 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	PatchSouth	{1}", Selector="Id,Count", Priority=Alert, Type=MissedPellet, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject TrackingTop
        -> GroupWorkflow SpeedThreshold
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1[0].Centroid)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Dsp.Norm(NormType=L2) => #3
            ExternalizedMapping(Value(DisplayName=MaxSpeed)) => #4
            #3, #4 -> GreaterThan(Operand=DoubleProperty(Value=500)) => #5
            #0 -> MemberSelector(Selector=Item2) => #6
            #5, #6 -> Zip
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> WorkflowOutput
        -> Condition TrackingUnstable
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #63
        SubscribeSubject SubjectState => #64
        #63, #64 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #66
          Expression:
            new(
            Item1.Item2 as Timestamp,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Tracking Failure**
            **Subject**: {0}
          Selector=Id
        -> MulticastSubject SubjectAlertMessages
        #66 -> Aeon.Acquisition.FormatLogMessage(Format={0}, Selector=Id, Priority=Alert, Type=TrackingFailure, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)

    GroupWorkflow EnvironmentAlerts
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.GroupByTime(ChunkSize=1)
        -> Skip(Count=1)
        -> SelectMany ExperimentSummary => #3
            SubscribeSubject PatchStateNorth
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression:
                new(
                Item1 as Threshold,
                Item2 as D0,
                Item3 as Delta)
            SubscribeSubject PatchStateSouth
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression:
                new(
                Item1 as Threshold,
                Item2 as D0,
                Item3 as Delta)
            SubscribeSubject PatchNorthDispenser
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Value) => #8
            SubscribeSubject PatchSouthDispenser
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Value) => #11
            #2, #5, #8, #11 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
              Expression:
                new(
                Item1 as PatchStateNorth,
                Item2 as PatchStateSouth,
                Item3 as PatchDispenser1,
                Item4 as PatchDispenser2)
            SubscribeSubject TimeOnPatchSouth
            -> Take(Count=1) => #15
            SubscribeSubject TimeOnPatchNorth
            -> Take(Count=1) => #17
            SubscribeSubject TimeSinceLastVisitSouth
            -> Take(Count=1) => #19
            SubscribeSubject TimeSinceLastVisitNorth
            -> Take(Count=1) => #21
            #15, #17, #19, #21 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
              Expression:
                new(
                Item1 as TimeOnPatchSouth,
                Item2 as TimeOnPatchNorth,
                Item3 as TimeSinceLastVisitSouth,
                Item4 as TimeSinceLastVisitNorth)
            SubscribeSubject SubjectState
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Id) => #26
            SubscribeSubject PercentWeightLoss
            -> MemberSelector(Selector="CurrentWeight,CurrentPercent") => #28
            FloatProperty(Value=0)
            -> MemberSelector(Selector="it,it") => #30
            #28, #30 -> Merge
            -> Take(Count=1)
            -> Take(Count=1) => #33
            WorkflowInput Source1
            -> Take(Count=1)
            -> MemberSelector(Selector=Key) => #36
            SubscribeSubject TotalPelletsDeliveredNorth => #37
            SubscribeSubject TotalPelletsDeliveredSouth => #38
            SubscribeSubject TotalMissedPelletsNorth => #39
            SubscribeSubject TotalMissedPelletsSouth => #40
            #37, #38, #39, #40 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #42
              Expression:
                new(
                Item1 as TotalPelletsDeliveredNorth,
                Item2 as TotalPelletsDeliveredSouth,
                Item3 as TotalMissedPelletsNorth,
                Item4 as TotalMissedPelletsSouth)
            #13, #23, #26, #33, #36, #42 -> Zip
            -> Take(Count=1) => #44
            -> Format => #45
              Format:
                # Arena Status
                **Time**: {0}
                **Subject**: {1}
                **Weight**: {2}
                **Weight Loss**: {3}
              Selector="Item5,Item3,Item4.Item1,Item4.Item2"
            #44 -> Format => #46
              Format:
                # PatchNorth
                **Pellets**: {0}
                **Threshold**: {1}
                **D0**: {2}
                **Delta**: {3}
                **Time On Patch**: {4}
                **Time Since Last Visit**: {5}
                **Total Pellets Delivered**: {6}
                **Total Missed Pellets**: {7}
              Selector: Item1.PatchDispenser1,Item1.PatchStateNorth.Threshold,Item1.PatchStateNorth.D0,Item1.PatchStateNorth.Delta,Item2.TimeOnPatchNorth,Item2.TimeSinceLastVisitNorth,Item6.TotalPelletsDeliveredNorth,Item6.TotalMissedPelletsNorth
            #44 -> Format => #47
              Format:
                # PatchSouth
                **Pellets**: {0}
                **Threshold**: {1}
                **D0**: {2}
                **Delta**: {3}
                **Time On Patch**: {4}
                **Time Since Last Visit**: {5}
                **Total Pellets Delivered**: {6}
                **Total Missed Pellets**: {7}
              Selector: Item1.PatchDispenser2,Item1.PatchStateSouth.Threshold,Item1.PatchStateSouth.D0,Item1.PatchStateSouth.Delta,Item2.TimeOnPatchSouth,Item2.TimeSinceLastVisitSouth,Item6.TotalPelletsDeliveredSouth,Item6.TotalMissedPelletsSouth
            #45, #46, #47 -> Zip
            -> Add
            -> WorkflowOutput
        SubscribeSubject EnvironmentState
        -> Format => #5
          Format:
            ## Arena {0} Mode Change
            Mode: {1}
          Selector="Value.Name,Value.Type"
        SubscribeSubject VideoEvents => #6
        #5, #6 -> SubscribeWhen
        -> DelaySubscription(DueTime=PT2S) => #8
        #3, #8 -> Merge
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\status.config)

        PublishSubject<System.String> EnvironmentAlertMessages
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\alerts.config)

        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.GroupByTime(ChunkSize=1)
        -> Skip(Count=1)
        -> SelectMany LocalFileCount => #16
            SubscribeSubject PathPrefix
            -> Bonsai.IO.GetDirectoryName
            -> PropertyMapping(Path)
            -> Bonsai.IO.GetFiles(Path=D:\ProjectAeon\experiment0.3, SearchPattern=*, SearchOption=AllDirectories)
            -> MemberSelector(Selector=Length) => #4
            WorkflowInput Source1
            -> Merge
            -> Take(Count=1) => #7
            #4, #7 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Count,
                Item2.GetTimestamp() as Timestamp)
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=LocalFileThreshold)) => #17
        #16, #17 -> Condition GreaterThan => #18
            WorkflowInput Source1
            -> MemberSelector(Selector=Count) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> GreaterThan(Operand=IntProperty(Value=500))
            -> WorkflowOutput
        -> Format
          Format:
            ## **File Storage**
            **Total Files in Local Storage**: {0}
          Selector=Count
        -> MulticastSubject EnvironmentAlertMessages
        #18 -> Aeon.Acquisition.FormatLogMessage(Format="", Selector=Count, Priority=Alert, Type=FileStorage, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        GroupWorkflow DroppedFrames => #23
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraTop) => #0
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraNorth) => #1
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraSouth) => #2
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraPatchNorth) => #3
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraPatchSouth) => #4
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraNestSouthFront) => #5
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraNestSouthSide) => #6
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraNestSouthTop) => #7
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraNestNorthFront) => #8
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraNestNorthSide) => #9
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraNestNorthTop) => #10
            #0, #1, #2, #3, #4, #5, #6, #7, #8, #9, #10 -> Merge
            -> WorkflowOutput
        -> Format
          Format:
            ## **Frame Dropped**
            **Camera**: {0}
            **Current Frame**: {1}
          Selector="Name,FrameID"
        -> MulticastSubject EnvironmentAlertMessages
        #23 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	{1}", Selector="Name,FrameID", Priority=Alert, Type=DroppedFrames, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject Annotations
        -> Condition Alert
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.Priority)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.PriorityLevel>(Value=Alert))
            -> WorkflowOutput
        -> Format
          Format:
            ## **Experimenter Annotation**
            **Message**: {0}
          Selector=Value.Message
        -> MulticastSubject EnvironmentAlertMessages

ExternalizedMapping(ThresholdPatchNorth, DeltaPatchNorth, ThresholdPatchSouth, DeltaPatchSouth)
-> GroupWorkflow TaskLogic
    SubscribeSubject WheelPatchNorth => #0
    ExternalizedMapping(DistanceThreshold(DisplayName=ThresholdPatchNorth), Delta(DisplayName=DeltaPatchNorth)) => #1
    #0, #1 -> IncludeWorkflow
      Path=Extensions\LinearDepletion.bonsai
      DistanceState=DistanceStateNorth
      DistanceThreshold=50
      Delta=0
      DeliveryCount=DeliveryCountNorth
      PatchState=PatchStateNorth
    -> MulticastSubject DeliverPelletPatchNorth

    SubscribeSubject WheelPatchSouth => #4
    ExternalizedMapping(DistanceThreshold(DisplayName=ThresholdPatchSouth), Delta(DisplayName=DeltaPatchSouth)) => #5
    #4, #5 -> IncludeWorkflow
      Path=Extensions\LinearDepletion.bonsai
      DistanceState=DistanceStateSouth
      DistanceThreshold=50
      Delta=0
      DeliveryCount=DeliveryCountSouth
      PatchState=PatchStateSouth
    -> MulticastSubject DeliverPelletPatchSouth

GroupWorkflow ControlPanel
    SubscribeSubject SubjectState => #0
    -> Condition Start
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Type)
        -> NotEqual(Operand=WorkflowProperty<Aeon.Acquisition.EnvironmentSubjectChangeType>(Value=Exit))
        -> WorkflowOutput
    -> MulticastSubject SubjectStart
    #0 -> Condition End
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Type)
        -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.EnvironmentSubjectChangeType>(Value=Exit))
        -> WorkflowOutput
    -> MulticastSubject SubjectStop

    Bonsai.Windows.Input.KeyDown(Filter="ShiftKey Space D0 P NumPad0 F1 Shift", SuppressRepetitions=false)
    -> MulticastSubject StartCameras

    Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey Space Prior PageUp D0 D1 A P Q NumPad0 NumPad1 F1 F2 Shift", SuppressRepetitions=false)
    -> MulticastSubject StopCameras

    Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu Space Next PageDown D0 D2 B P R NumPad0 NumPad2 F1 F3 Shift", SuppressRepetitions=false)
    -> GroupWorkflow ManualPelletNorth
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Aeon.Acquisition:TriggerPellet.bonsai, PatchEvents=PatchNorth, DeliverPellet=DeliverPelletPatchNorth)
        -> MulticastSubject ManualPelletNorth
        -> WorkflowOutput

    Bonsai.Windows.Input.KeyDown
      Filter: LButton RButton Cancel ShiftKey ControlKey Menu Pause Space Prior PageUp Next PageDown End D0 D1 D2 D3 A B C P Q R S NumPad0 NumPad1 NumPad2 NumPad3 F1 F2 F3 F4 Shift
      SuppressRepetitions=false
    -> GroupWorkflow ManualPelletSouth
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Aeon.Acquisition:TriggerPellet.bonsai, PatchEvents=PatchSouth, DeliverPellet=DeliverPelletPatchSouth)
        -> MulticastSubject ManualPelletSouth
        -> WorkflowOutput

    SubscribeSubject PatchStateNorth
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item2 as D1,
        Item3 as Delta)
    -> Aeon.Acquisition.LabelControl(FontSize=14)
    -> GroupWorkflow PatchNorth
        WorkflowInput Source1
        -> WorkflowOutput

    SubscribeSubject PatchStateSouth
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item2 as D1,
        Item3 as Delta)
    -> Aeon.Acquisition.LabelControl(FontSize=14)
    -> GroupWorkflow PatchSouth
        WorkflowInput Source1
        -> WorkflowOutput

    SubscribeSubject AudioAmbient
    -> MemberSelector(Selector=Value)

    Disable SubscribeSubject SubjectStop
    -> Disable Aeon.Acquisition.SubjectLogBitmap(Path=SessionSummary)

    GroupWorkflow PatchActivity
        SubscribeSubject CameraPatchNorth
        -> SampleInterval(Interval=PT0.02S)
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping => #3
        SubscribeSubject CameraPatchSouth
        -> SampleInterval(Interval=PT0.02S)
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping => #7
        SubscribeSubject PatchState => #8
        -> VisualizerMapping => #9
        #8 -> VisualizerMapping => #10
        SubscribeSubject CurrentThresholdPatchNorth
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=PelletCount, ValueSelector=Threshold, SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow ThresholdPatchNorth
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #14
        SubscribeSubject CurrentThresholdPatchSouth
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=PelletCount, ValueSelector=Threshold, SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow ThresholdPatchSouth
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #18
        SubscribeSubject PelletMonitorValueNorth
        -> VisualizerMapping => #20
        SubscribeSubject PelletMonitorValueSouth
        -> VisualizerMapping => #22
        #3, #7, #9, #10, #14, #18, #20, #22 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchActivity
          ColumnCount=2
          RowCount=4
          ColumnStyles=""
          RowStyles=""
          CellSpans
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
        -> VisualizerMapping => #24
        Aeon.Acquisition.ExperimentProperties
        -> VisualizerMapping => #26
        SubscribeSubject TimeSpentOnPatches
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="PatchNorth,PatchSouth", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TimeSpentOnPatches
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #30
        SubscribeSubject TimeSinceLastVisit
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="PatchNorth,PatchSouth", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TimeSinceLastVisit
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #34
        SubscribeSubject TotalDistanceTravelled
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="PatchNorth,PatchSouth", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TotalDistanceTravelled
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #38
        #26, #30, #34, #38 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchStatistics(ColumnCount=1, RowCount=4, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #40
        #24, #40 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchActivity(ColumnCount=2, RowCount=1, ColumnStyles(ColumnStyle(SizeType=Percent, Width=70), ColumnStyle(SizeType=Percent, Width=30)), RowStyles="", CellSpans="")
        -> WorkflowOutput

    GroupWorkflow SubjectActivity
        SubscribeSubject Heatmap
        -> VisualizerMapping => #1
        SubscribeSubject TrajectoryNorth
        -> VisualizerMapping => #3
        SubscribeSubject TrajectorySouth
        -> VisualizerMapping => #5
        #3, #5 -> SubscribeSubject FrameTrajectory
        -> VisualizerMapping => #7
        SubscribeSubject FrameNestNorth
        -> VisualizerMapping => #9
        SubscribeSubject FrameNestSouth
        -> VisualizerMapping => #11
        #1, #7, #9, #11 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder SubjectActivity(ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput

    GroupWorkflow ExperimentMetadata
        Aeon.Acquisition.TareWeight => #0
        -> Disable MulticastSubject TareWeightNest
        SubscribeSubject PelletDeliveredPatchNorth
        -> Condition RisingEdge
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> IntProperty(Value=1) => #4
        SubscribeSubject PatchNorth => #5
        #4, #5 -> Aeon.Acquisition.DispenserState(Name=PatchNorth)
        -> MulticastSubject PatchNorthDispenser
        -> VisualizerMapping => #8
        SubscribeSubject PelletDeliveredPatchSouth
        -> Condition RisingEdge
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> IntProperty(Value=1) => #11
        SubscribeSubject PatchSouth => #12
        #11, #12 -> Aeon.Acquisition.DispenserState(Name=PatchSouth)
        -> MulticastSubject PatchSouthDispenser
        -> VisualizerMapping => #15
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.AnnotationSource
        -> MulticastSubject Annotations
        -> VisualizerMapping => #19
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.EnvironmentState
        -> MulticastSubject EnvironmentState
        -> VisualizerMapping => #23
        #0 -> VisualizerMapping => #24
        #8, #15, #19, #23, #24 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder ExperimentMetadata
          ColumnCount=2
          RowCount=4
          ColumnStyles=""
          RowStyles=""
          CellSpans
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
        -> WorkflowOutput

        SubscribeSubject PatchNorthDispenser
        -> Skip(Count=1)
        -> Condition Reset
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.DispenserEventType>(Value=Reset))
            -> WorkflowOutput
        -> MulticastSubject ResetFeederPatchNorth

        SubscribeSubject PatchSouthDispenser
        -> Skip(Count=1)
        -> Condition Reset
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.DispenserEventType>(Value=Reset))
            -> WorkflowOutput
        -> MulticastSubject ResetFeederPatchSouth

    GroupWorkflow EnvironmentSubjectState
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.EnvironmentSubjectState(DatabasePath=Z:\aeon\colony\colony.csv)
        -> MulticastSubject SubjectState
        -> WorkflowOutput

    GroupWorkflow LightControl
        Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Shift", SuppressRepetitions=true)
        -> IntProperty(Value=254)
        -> MulticastSubject SetRedLightLevel

        Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu B P R Control", SuppressRepetitions=true)
        -> IntProperty(Value=0)
        -> MulticastSubject SetRedLightLevel

        Bonsai.Windows.Input.KeyDown
          Filter: LButton RButton Cancel MButton XButton1 XButton2 ShiftKey ControlKey Menu Pause Capital CapsLock KanaMode HanguelMode HangulMode JunjaMode A B C D E F G P Q R S T U V W Shift
          SuppressRepetitions=true
        -> IntProperty(Value=254)
        -> MulticastSubject SetColdWhiteLightLevel

        Bonsai.Windows.Input.KeyDown
          Filter: LButton RButton Cancel MButton XButton1 XButton2 ShiftKey ControlKey Menu Pause Capital CapsLock KanaMode HanguelMode HangulMode JunjaMode A B C D E F G P Q R S T U V W Control
          SuppressRepetitions=true
        -> IntProperty(Value=0)
        -> MulticastSubject SetColdWhiteLightLevel

        Bonsai.Windows.Input.KeyDown(Filter="LButton A Shift", SuppressRepetitions=true)
        -> IntProperty(Value=254)
        -> MulticastSubject SetWarmWhiteLightLevel

        Bonsai.Windows.Input.KeyDown(Filter="LButton A Control", SuppressRepetitions=true)
        -> IntProperty(Value=0)
        -> MulticastSubject SetWarmWhiteLightLevel

        Bonsai.Video.VideoCaptureDevice(Index=0, CaptureProperties="")
        -> DelaySubscription(DueTime=PT1S)
        -> WorkflowOutput
