WorkflowBuilder(Version=2.8.0-alpha018)
GroupWorkflow Metadata
    GroupWorkflow Devices
        GroupWorkflow ClockSynchronizer
            ExternalizedMapping(PortName)
            -> IncludeWorkflow(Path=Aeon.Acquisition:Synchronizer.bonsai, PortName=COM5)
            -> WorkflowOutput

        GroupWorkflow CameraController
            ExternalizedMapping(PortName, GlobalTriggerFrequency, LocalTriggerFrequency)
            -> IncludeWorkflow(Path=Aeon.Acquisition:CameraController.bonsai, PortName=COM6, GlobalTriggerFrequency=50, LocalTriggerFrequency=125)
            -> WorkflowOutput

        GroupWorkflow CameraTop
            ExternalizedMapping(TriggerSource, TriggerFrequency, ExposureTime, SerialNumber, Gain, Binning, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23101736
              Gain=0
              Binning=1
              FrameEvents=CameraTop
            -> WorkflowOutput

        GroupWorkflow CameraNorth
            ExternalizedMapping(TriggerSource, TriggerFrequency, ExposureTime, SerialNumber, Gain, Binning, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23106245
              Gain=0
              Binning=1
              FrameEvents=CameraNorth
            -> WorkflowOutput

        GroupWorkflow CameraSouth
            ExternalizedMapping(TriggerSource, TriggerFrequency, ExposureTime, SerialNumber, Gain, Binning, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23106227
              Gain=0
              Binning=1
              FrameEvents=CameraSouth
            -> WorkflowOutput

        GroupWorkflow CameraNestNorthTop
            ExternalizedMapping(TriggerSource, TriggerFrequency, ExposureTime, SerialNumber, Gain, Binning, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=8000
              SerialNumber=23106287
              Gain=0
              Binning=1
              FrameEvents=CameraNestNorthTop
            -> WorkflowOutput

        GroupWorkflow CameraNestNorthSide
            ExternalizedMapping(TriggerSource, TriggerFrequency, ExposureTime, SerialNumber, Gain, Binning, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23032826
              Gain=0
              Binning=2
              FrameEvents=CameraNestNorthSide
            -> WorkflowOutput

        GroupWorkflow CameraNestNorthFront
            ExternalizedMapping(TriggerSource, TriggerFrequency, ExposureTime, SerialNumber, Gain, Binning, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23032828
              Gain=0
              Binning=2
              FrameEvents=CameraNestNorthFront
            -> WorkflowOutput

        GroupWorkflow CameraNestSouthTop
            ExternalizedMapping(TriggerSource, TriggerFrequency, ExposureTime, SerialNumber, Gain, Binning, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=GlobalTrigger
              TriggerFrequency=GlobalTriggerFrequency
              ExposureTime=8000
              SerialNumber=23032818
              Gain=0
              Binning=1
              FrameEvents=CameraNestSouthTop
            -> WorkflowOutput

        GroupWorkflow CameraNestSouthSide
            ExternalizedMapping(TriggerSource, TriggerFrequency, ExposureTime, SerialNumber, Gain, Binning, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23106236
              Gain=0
              Binning=2
              FrameEvents=CameraNestSouthSide
            -> WorkflowOutput

        GroupWorkflow CameraNestSouthFront
            ExternalizedMapping(TriggerSource, TriggerFrequency, ExposureTime, SerialNumber, Gain, Binning, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23032823
              Gain=0
              Binning=2
              FrameEvents=CameraNestSouthFront
            -> WorkflowOutput

        GroupWorkflow CameraPatch1
            ExternalizedMapping(TriggerSource, TriggerFrequency, ExposureTime, SerialNumber, Gain, Binning, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23032811
              Gain=0
              Binning=2
              FrameEvents=CameraPatch1
            -> WorkflowOutput

        GroupWorkflow CameraPatch2
            ExternalizedMapping(TriggerSource, TriggerFrequency, ExposureTime, SerialNumber, Gain, Binning, FrameEvents)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
              TriggerSource=LocalTrigger
              TriggerFrequency=LocalTriggerFrequency
              ExposureTime=INF
              SerialNumber=23101737
              Gain=0
              Binning=2
              FrameEvents=CameraPatch2
            -> WorkflowOutput

        GroupWorkflow Patch1
            ExternalizedMapping(PortName, WheelDisplacement, PelletDelivered, DeliverPellet, PatchEvents, Radius, SampleRate, ResetFeeder, DueTime, Count)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:UndergroundFeeder.bonsai
              PatchEvents=Patch1
              SampleRate=SampleRate500Hz
              DeliverPellet=DeliverPelletPatch1
              PelletDelivered=PelletDeliveredPatch1
              DueTime=PT1S
              Count=5
              ResetFeeder=ResetFeederPatch1
              PortName=COM4
              Radius=-4
              WheelDisplacement=WheelPatch1
            -> WorkflowOutput

        GroupWorkflow Patch2
            ExternalizedMapping(PortName, WheelDisplacement, PelletDelivered, DeliverPellet, PatchEvents, Radius, SampleRate, ResetFeeder, DueTime, Count)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:UndergroundFeeder.bonsai
              PatchEvents=Patch2
              SampleRate=SampleRate500Hz
              DeliverPellet=DeliverPelletPatch2
              PelletDelivered=PelletDeliveredPatch2
              DueTime=PT1S
              Count=5
              ResetFeeder=ResetFeederPatch2
              PortName=COM3
              Radius=-4
              WheelDisplacement=WheelPatch2
            -> WorkflowOutput

        GroupWorkflow LightController
            ExternalizedMapping(LightEvents, EventSocket, CommandSocket)
            -> IncludeWorkflow
              Path=Aeon.Acquisition:LightController.bonsai
              EventSocket=>tcp://172.24.158.103:4303
              LightEvents=LightEvents
              CommandSocket=>tcp://172.24.158.103:4304
            -> WorkflowOutput

        GroupWorkflow AudioAmbient
            ExternalizedMapping(DeviceName, SampleRate, Name)
            -> IncludeWorkflow AudioAmbient(Path=Aeon.Acquisition:AudioSource.bonsai, DeviceName="Microphone (2- UltraMic 192K 16", SampleRate=192000)
            -> WorkflowOutput

    GroupWorkflow TrackingTop
        ExternalizedMapping(Name(DisplayName=FrameEvents))
        -> SubscribeSubject CameraTop => #1
        ExternalizedMapping(ThresholdValue, Mask, TrackingCount, TrackingEvents) => #2
        #1, #2 -> IncludeWorkflow(Path=Aeon.Acquisition:PositionTracking.bonsai, ThresholdValue=80, Mask=ArenaMask_2023-06-26.png, TrackingCount=1, TrackingEvents=TrackingTop)
        -> WorkflowOutput

    GroupWorkflow ActivityCenter
        SubscribeSubject CameraTop
        -> IncludeWorkflow
          Path=Aeon.Acquisition:ActivityTracking.bonsai
          Regions(ArrayOfPoint(Point(X=76, Y=431), Point(X=404, Y=431), Point(X=404, Y=665), Point(X=76, Y=665)))
          ThresholdValue=10
          TrackingEvents=ActivityCenter
        -> WorkflowOutput

    GroupWorkflow ActivityArena
        SubscribeSubject CameraTop
        -> IncludeWorkflow(Path=Aeon.Acquisition:ActivityTracking.bonsai, Regions=nil, ThresholdValue=10, TrackingEvents=ActivityArena)
        -> WorkflowOutput

GroupWorkflow Declarations
    BehaviorSubject<Aeon.Acquisition.WeightMeasurement> FilteredWeightNest
    BehaviorSubject<Aeon.Acquisition.WeightMeasurement> SubjectWeight
    PublishSubject<Bonsai.Harp.Timestamped(System.Byte)> MissedPelletsPatch1
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> PatchStatePatch1
    PublishSubject<Bonsai.Harp.Timestamped(System.Byte)> MissedPelletsPatch2
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> PatchStatePatch2
    PublishSubject<Bonsai.Harp.Timestamped(System.Double)> BaselineTrigger
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.LogMessage)> AlertLogs
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.LogMessage)> Annotations
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentStateMetadata)> EnvironmentState
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.DispenserStateMetadata)> Patch1Dispenser
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.DispenserStateMetadata)> Patch2Dispenser
    BehaviorSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentSubjectStateMetadata)> SubjectState
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentSubjectStateMetadata)> SubjectStart
    PublishSubject<Bonsai.Harp.Timestamped(Aeon.Acquisition.EnvironmentSubjectStateMetadata)> SubjectStop
    PublishSubject<Bonsai.Harp.Timestamped(System.UInt16)> ManualPelletPatch1
    PublishSubject<Bonsai.Harp.Timestamped(System.UInt16)> ManualPelletPatch2
    Aeon.Acquisition.StateRecoverySubject<System.Int32> DeliveryCountPatch1
    Aeon.Acquisition.StateRecoverySubject<System.Int32> DeliveryCountPatch2
    Aeon.Acquisition.StateRecoverySubject<Bonsai.Harp.Timestamped(System.Double)> DistanceStatePatch1
    Aeon.Acquisition.StateRecoverySubject<Bonsai.Harp.Timestamped(System.Double)> DistanceStatePatch2

GroupWorkflow Logging
    IncludeWorkflow(Path=Aeon.Acquisition:RepositoryLogController.bonsai, RepositoryPath=..\..\, DataPath=D:\ProjectAeon, FallbackPath=D:\Tests, ChunkSize=1)
    IncludeWorkflow(Path=Aeon.Acquisition:ExportMetadata.bonsai, WorkflowName=Switching_Habituation_Probabilistic.bonsai)

    SubscribeSubject VideoEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=VideoController, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject CameraTop
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraTop, FrameRate=50)

    SubscribeSubject TrackingTop
    -> Aeon.Acquisition.FormatBinaryRegions
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=CameraTop, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject CameraNorth
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraNorth, FrameRate=50)

    SubscribeSubject CameraSouth
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraSouth, FrameRate=50)

    SubscribeSubject CameraNestNorthTop
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraNestNorthTop, FrameRate=50)

    SubscribeSubject CameraNestNorthSide
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraNestNorthSide, FrameRate=125)

    SubscribeSubject CameraNestNorthFront
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraNestNorthFront, FrameRate=125)

    SubscribeSubject CameraNestSouthTop
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraNestSouthTop, FrameRate=50)

    SubscribeSubject CameraNestSouthSide
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraNestSouthSide, FrameRate=125)

    SubscribeSubject CameraNestSouthFront
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraNestSouthFront, FrameRate=125)

    SubscribeSubject CameraPatch1
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraPatch1, FrameRate=125)

    SubscribeSubject CameraPatch2
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=CameraPatch2, FrameRate=125)

    SubscribeSubject Patch1 => #29
    SubscribeSubject Patch1Dispenser
    -> Aeon.Acquisition.FormatDispenserState => #31
    SubscribeSubject ManualPelletPatch1
    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #33
    SubscribeSubject MissedPelletsPatch1
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=202, PayloadType=TimestampedU8)) => #35
    #29, #31, #33, #35 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Patch1, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject PatchStatePatch1
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #39
      Expression:
        new(
        Item1 as Threshold,
        Item2 as D1,
        Item3 as Delta)
    SubscribeSubject Patch1
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #41
    #39, #41 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=Patch1_State, Selector=nil)

    SubscribeSubject Patch2 => #44
    SubscribeSubject Patch2Dispenser
    -> Aeon.Acquisition.FormatDispenserState => #46
    SubscribeSubject ManualPelletPatch2
    -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=201, PayloadType=TimestampedU8)) => #48
    SubscribeSubject MissedPelletsPatch2
    -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=202, PayloadType=TimestampedU8)) => #50
    #44, #46, #48, #50 -> Merge
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Patch2, Heartbeats="", ClosingDuration=nil)

    SubscribeSubject PatchStatePatch2
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #54
      Expression:
        new(
        Item1 as Threshold,
        Item2 as D1,
        Item3 as Delta)
    SubscribeSubject Patch2
    -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #56
    #54, #56 -> WithLatestFrom
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=Patch2_State, Selector=nil)

    SubscribeSubject AudioAmbient
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogAudio.bonsai, Heartbeats="", ClosingDuration=nil, LogName=AudioAmbient, SampleRate=192000)

    SubscribeSubject SubjectState
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=""
      ClosingDuration=nil
      LogName=ExperimentalMetadata_SubjectState
      Selector="Seconds,Value.Id,Value.Weight,Value.Type"

    SubscribeSubject AlertLogs => #63
    SubscribeSubject Annotations => #64
    #63, #64 -> Merge
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=""
      ClosingDuration=nil
      LogName=ExperimentalMetadata_MessageLog
      Selector="Seconds,Value.Priority,Value.Type,Value.Message"

    SubscribeSubject EnvironmentState
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=ExperimentalMetadata_EnvironmentState, Selector="Seconds,Value.Type")

    SubscribeSubject SubjectState
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Seconds as Seconds,
        new(Value.Id as Id,
            Value.Type.ToString() as Event,
            "Environment" as Value) as Value)
    -> MemberSelector(Selector="Value,Seconds")
    -> IncludeWorkflow
      Path=Aeon.Acquisition:LogData.bonsai
      Heartbeats=""
      ClosingDuration=nil
      LogName=ExperimentalMetadata_SubjectVisits
      Selector="Seconds,Value.Id,Value.Event,Value.Value"

    SubscribeSubject LightEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats="", ClosingDuration=nil, LogName=LightController, Selector=nil)

GroupWorkflow Visualization
    SubscribeSubject TrackingTop
    -> MemberSelector(Selector=Item1[0].Centroid)
    -> PublishSubject Trajectory

    SubscribeSubject CameraTop
    -> MemberSelector(Selector=Value.Image)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject FrameTrajectory

    SubscribeSubject CameraNestNorthTop
    -> MemberSelector(Selector=Value.Image)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject FrameNestNorth

    SubscribeSubject CameraNestSouthTop
    -> MemberSelector(Selector=Value.Image)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject FrameNestSouth

    SubscribeSubject TrackingTop
    -> MemberSelector(Selector=Item1[0].Centroid)
    -> Bonsai.Dsp.Histogram2D(MinX=0, MaxX=1440, MinY=0, MaxY=1080, BinsX=288, BinsY=216, Normalize=false, Accumulate=true)
    -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=20, Shift=0)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> SampleInterval(Interval=PT0.03S)
    -> PublishSubject Heatmap

    SubscribeSubject DistanceStatePatch1
    -> MemberSelector(Selector=Value) => #23
    SubscribeSubject DistanceStatePatch2
    -> MemberSelector(Selector=Value) => #25
    SubscribeSubject PatchStatePatch1
    -> MemberSelector(Selector=Item1) => #27
    SubscribeSubject PatchStatePatch2
    -> MemberSelector(Selector=Item1) => #29
    #23, #25, #27, #29 -> CombineLatest => #30
    #30, #23 -> Sample
    -> Bonsai.Dsp.Buffer(Count=15, Skip=nil)
    -> PublishSubject PatchState

    SubscribeSubject PatchStatePatch1
    -> GroupWorkflow ToArray => #35
        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> IgnoreElements
        -> ToArray => #3
        WorkflowInput Source1
        -> SelectMany
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> ToArray
            -> WorkflowOutput
        -> DelaySubscription(DueTime=PT0.1S) => #6
        #3, #6 -> Concat
        -> WorkflowOutput
    SubscribeSubject DeliveryCountPatch1 => #36
    #35, #36 -> WithLatestFrom
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        int32(Item2) as PelletCount,
        Item1 as Threshold)
    -> PublishSubject CurrentThresholdPatch1

    SubscribeSubject PatchStatePatch2
    -> GroupWorkflow ToArray => #42
        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> IgnoreElements
        -> ToArray => #3
        WorkflowInput Source1
        -> SelectMany
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> ToArray
            -> WorkflowOutput
        -> DelaySubscription(DueTime=PT0.1S) => #6
        #3, #6 -> Concat
        -> WorkflowOutput
    SubscribeSubject DeliveryCountPatch2 => #43
    #42, #43 -> WithLatestFrom
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        int32(Item2) as PelletCount,
        Item1 as Threshold)
    -> PublishSubject CurrentThresholdPatch2

    IncludeWorkflow(Path=Extensions\PelletMonitor.bonsai, PelletCommand=Patch1, PelletDelivered=PelletDeliveredPatch1)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> PublishSubject PelletMonitorPatch1
    -> MemberSelector(Selector=Value)
    -> PublishSubject PelletMonitorValuePatch1

    IncludeWorkflow(Path=Extensions\PelletMonitor.bonsai, PelletCommand=Patch2, PelletDelivered=PelletDeliveredPatch2)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> BehaviorSubject PelletMonitorPatch2
    -> MemberSelector(Selector=Value)
    -> PublishSubject PelletMonitorValuePach2

    SubscribeSubject TimeOnPatchNorth => #58
    SubscribeSubject TimeOnPatchPathch2 => #59
    #58, #59 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Time Spent on Patch (s)" as Id,
        Item1 as PatchNorth,
        Item2 as PatchSouth)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TimeSpentOnPatches

    SubscribeSubject TimeSinceLastVisitPatch1 => #64
    SubscribeSubject TimeSinceLastVisitPatch2 => #65
    #64, #65 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Time Since Last Visit (s)" as Id,
        Item1 as PatchNorth,
        Item2 as PatchSouth)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TimeSinceLastVisit

    SubscribeSubject WheelPatch1
    -> MemberSelector(Selector=Value)
    -> Accumulate => #72
    SubscribeSubject WheelPatch2
    -> MemberSelector(Selector=Value)
    -> Accumulate => #75
    #72, #75 -> CombineLatest
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        "Total Distance Travelled (cm)" as Id,
        Item1 as PatchNorth,
        Item2 as PatchSouth)
    -> SampleInterval(Interval=PT0.05S)
    -> PublishSubject TotalDistanceTravelled

    IncludeWorkflow(Path=Aeon.Acquisition:TimeSpentOnWheel.bonsai, Patch=Patch1, WheelPatch=WheelPatch1, Threshold=0.0003, LowPass=1)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> BehaviorSubject TimeOnPatchNorth

    SubscribeSubject TimeOnPatchNorth
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> DistinctUntilChanged
    -> IncludeWorkflow(Path=Aeon.Acquisition:TimeSinceLastEvent.bonsai)
    -> BehaviorSubject TimeSinceLastVisitPatch1

    IncludeWorkflow(Path=Aeon.Acquisition:TimeSpentOnWheel.bonsai, Patch=Patch2, WheelPatch=WheelPatch2, Threshold=0.0003, LowPass=1)
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> BehaviorSubject TimeOnPatchPathch2

    SubscribeSubject TimeOnPatchPathch2
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> DistinctUntilChanged
    -> IncludeWorkflow(Path=Aeon.Acquisition:TimeSinceLastEvent.bonsai)
    -> BehaviorSubject TimeSinceLastVisitPatch2

    SubscribeSubject ActivityCenter
    -> Condition ActivityCondition => #98
        WorkflowInput Source1
        -> MemberSelector(Selector=Value) => #1
        ExternalizedMapping(Value(DisplayName=BaselineActivityThreshold)) => #2
        #1, #2 -> GreaterThan(Operand=DoubleProperty(Value=1))
        -> WorkflowOutput
    ExternalizedMapping(Interval(DisplayName=BaselineRefractoryPeriod)) => #99
    #98, #99 -> GateInterval(Interval=PT5S)
    -> MulticastSubject BaselineTrigger

    SubscribeSubject SubjectWeight => #102
    SubscribeSubject SubjectStart
    -> MemberSelector(Selector=Value.ReferenceWeight) => #104
    #102, #104 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1.Timestamp as Timestamp,
        Item1.Value as CurrentWeight,
        100 * Item1.Value / Item2 as CurrentPercent)
    -> BehaviorSubject PercentWeightLoss

    IncludeWorkflow
      Path=Extensions\PelletMissed.bonsai
      PelletDelivered=PelletDeliveredPatch1
      TimeToMiss=PT2S
      DistanceToMiss=20
      TimeInChute=PT0S
      WheelDisplacement=WheelPatch1
    -> MulticastSubject MissedPelletsPatch1

    IncludeWorkflow
      Path=Extensions\PelletMissed.bonsai
      PelletDelivered=PelletDeliveredPatch2
      TimeToMiss=PT2S
      DistanceToMiss=20
      TimeInChute=PT0S
      WheelDisplacement=WheelPatch2
    -> MulticastSubject MissedPelletsPatch2

    SubscribeSubject PelletDeliveredPatch1
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalPelletsDeliveredNorth(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject PelletDeliveredPatch2
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalPelletsDeliveredSouth(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject MissedPelletsPatch1
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalMissedPelletsNorth(Path=Extensions\PersistentCounter.bonsai)

    SubscribeSubject MissedPelletsPatch2
    -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
    -> IncludeWorkflow TotalMissedPelletsSouth(Path=Extensions\PersistentCounter.bonsai)

    GroupWorkflow SubjectAlerts
        PublishSubject<System.String> SubjectAlertMessages
        -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\alerts.config)

        SubscribeSubject PercentWeightLoss => #3
        ExternalizedMapping(WeightLossThreshold) => #4
        #3, #4 -> Condition LowWeight
            WorkflowInput Source1
            -> MemberSelector(Selector=CurrentPercent) => #1
            ExternalizedMapping(Value(DisplayName=WeightLossThreshold, Description="Below this value the weight loss alert will be raised.")) => #2
            #1, #2 -> LessThanOrEqual(Operand=FloatProperty(Value=80))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #6
        SubscribeSubject SubjectState => #7
        #6, #7 -> WithLatestFrom => #8
        -> Format
          Format:
            ## **Low Weight**
            **Subject**: {0}
            **Current Weight**: {1}
            **Reference Weight**: {2}
            **Current percent**: {3}
          Selector="Item2.Value.Id,Item1.CurrentWeight,Item2.Value.ReferenceWeight,Item1.CurrentPercent"
        -> MulticastSubject SubjectAlertMessages
        #8 -> Aeon.Acquisition.FormatLogMessage
          Format="{0}	{1}	{2}	{3}"
          Selector="Item2.Value.Id,Item1.CurrentWeight,Item2.Value.ReferenceWeight,Item1.CurrentPercent"
          Priority=Alert
          Type=LowWeight
          Timestamp=Item1.Timestamp
        -> MulticastSubject AlertLogs

        SubscribeSubject Patch1Dispenser => #13
        ExternalizedMapping(PelletThreshold) => #14
        #13, #14 -> Condition LowFood
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.Value) => #1
            ExternalizedMapping(Value(DisplayName=PelletThreshold, Description="Below this value the low food alert will be raised.")) => #2
            #1, #2 -> LessThan(Operand=IntProperty(Value=105))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #16
        SubscribeSubject Patch2Dispenser => #17
        #17, #14 -> Condition LowFood
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.Value) => #1
            ExternalizedMapping(Value(DisplayName=PelletThreshold, Description="Below this value the low food alert will be raised.")) => #2
            #1, #2 -> LessThan(Operand=IntProperty(Value=105))
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #19
        #16, #19 -> Merge => #20
        -> Format
          Format:
            ## **Low Food**
            **Patch**: {0}
            **Current Pellet Estimate**: {1}
          Selector="Value.Name,Value.Value"
        -> MulticastSubject SubjectAlertMessages
        #20 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	{1}", Selector="Value.Name,Value.Value", Priority=Alert, Type=LowFood)
        -> MulticastSubject AlertLogs

        SubscribeSubject PelletMonitorPatch1 => #25
        ExternalizedMapping(Count(DisplayName=DeliveryFailureThreshold)) => #26
        #25, #26 -> Condition DispenserBroken
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
              Expression: Value ? 1 : 0
            ExternalizedMapping(Count) => #2
            #1, #2 -> BufferCount(Count=5, Skip=1)
            -> Add => #4
            #4, #2 -> GroupWorkflow Equal
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Count)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=5)) => #2
                #0 -> Equal(Operand=IntProperty(Value=0)) => #3
                #2, #3 -> Zip
                -> LogicalOr
                -> WorkflowOutput
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #28
        -> Format
          Format:
            ## **Dispenser Broken**
            **Patch**: PatchNorth
          Selector=""
        -> MulticastSubject SubjectAlertMessages
        #28 -> Aeon.Acquisition.FormatLogMessage(Format=PatchNorth, Selector="", Priority=Alert, Type=DispenserBroken, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs
        SubscribeSubject PelletMonitorPatch2 => #33
        #33, #26 -> Condition DispenserBroken
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
              Expression: Value ? 1 : 0
            ExternalizedMapping(Count) => #2
            #1, #2 -> BufferCount(Count=5, Skip=1)
            -> Add => #4
            #4, #2 -> GroupWorkflow Equal
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=Count)) => #1
                #0, #1 -> Equal(Operand=IntProperty(Value=5)) => #2
                #0 -> Equal(Operand=IntProperty(Value=0)) => #3
                #2, #3 -> Zip
                -> LogicalOr
                -> WorkflowOutput
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #35
        -> Format
          Format:
            ## **Dispenser Broken**
            **Patch**: PatchSouth
          Selector=""
        -> MulticastSubject SubjectAlertMessages
        #35 -> Aeon.Acquisition.FormatLogMessage(Format=PatchSouth, Selector="", Priority=Alert, Type=DispenserBroken, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject MissedPelletsPatch1
        -> ElementIndex
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #42
        SubscribeSubject SubjectState => #43
        #42, #43 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #45
          Expression:
            new(
            Item1.Value.Seconds as Timestamp,
            Item1.Index + 1 as Count,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Missed Pellet**
            **Subject**: {0}
            **Patch:**: PatchNorth
            **Total Missed**: {1}
          Selector="Id,Count"
        -> MulticastSubject SubjectAlertMessages
        #45 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	PatchNorth	{1}", Selector="Id,Count", Priority=Alert, Type=MissedPellet, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject MissedPelletsPatch2
        -> ElementIndex
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #52
        SubscribeSubject SubjectState => #53
        #52, #53 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #55
          Expression:
            new(
            Item1.Value.Seconds as Timestamp,
            Item1.Index + 1 as Count,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Missed Pellet**
            **Subject**: {0}
            **Patch:**: PatchSouth
            **Total Missed**: {1}
          Selector="Id,Count"
        -> MulticastSubject SubjectAlertMessages
        #55 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	PatchSouth	{1}", Selector="Id,Count", Priority=Alert, Type=MissedPellet, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject TrackingTop
        -> GroupWorkflow SpeedThreshold
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1[0].Centroid)
            -> Bonsai.Dsp.Difference(Order=1)
            -> Bonsai.Dsp.Norm(NormType=L2) => #3
            ExternalizedMapping(Value(DisplayName=MaxSpeed)) => #4
            #3, #4 -> GreaterThan(Operand=DoubleProperty(Value=500)) => #5
            #0 -> MemberSelector(Selector=Item2) => #6
            #5, #6 -> Zip
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> WorkflowOutput
        -> Condition TrackingUnstable
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\AlertGate.bonsai, AlertRefractoryPeriod=PT5M) => #63
        SubscribeSubject SubjectState => #64
        #63, #64 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #66
          Expression:
            new(
            Item1.Item2 as Timestamp,
            Item2.Value.Id as Id)
        -> Format
          Format:
            ## **Tracking Failure**
            **Subject**: {0}
          Selector=Id
        -> MulticastSubject SubjectAlertMessages
        #66 -> Aeon.Acquisition.FormatLogMessage(Format={0}, Selector=Id, Priority=Alert, Type=TrackingFailure, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)

    GroupWorkflow EnvironmentAlerts
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.GroupByTime(ChunkSize=1)
        -> Skip(Count=1)
        -> SelectMany ExperimentSummary => #3
            SubscribeSubject PatchStatePatch1
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
              Expression:
                new(
                Item1 as Threshold,
                Item2 as D0,
                Item3 as Delta)
            SubscribeSubject PatchStatePatch2
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression:
                new(
                Item1 as Threshold,
                Item2 as D0,
                Item3 as Delta)
            SubscribeSubject Patch1Dispenser
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Value) => #8
            SubscribeSubject Patch2Dispenser
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Value) => #11
            #2, #5, #8, #11 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
              Expression:
                new(
                Item1 as PatchStateNorth,
                Item2 as PatchStateSouth,
                Item3 as PatchDispenser1,
                Item4 as PatchDispenser2)
            SubscribeSubject TimeOnPatchPathch2
            -> Take(Count=1) => #15
            SubscribeSubject TimeOnPatchNorth
            -> Take(Count=1) => #17
            SubscribeSubject TimeSinceLastVisitPatch2
            -> Take(Count=1) => #19
            SubscribeSubject TimeSinceLastVisitPatch1
            -> Take(Count=1) => #21
            #15, #17, #19, #21 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #23
              Expression:
                new(
                Item1 as TimeOnPatchSouth,
                Item2 as TimeOnPatchNorth,
                Item3 as TimeSinceLastVisitSouth,
                Item4 as TimeSinceLastVisitNorth)
            SubscribeSubject SubjectState
            -> Take(Count=1)
            -> MemberSelector(Selector=Value.Id) => #26
            SubscribeSubject PercentWeightLoss
            -> MemberSelector(Selector="CurrentWeight,CurrentPercent") => #28
            FloatProperty(Value=0)
            -> MemberSelector(Selector="it,it") => #30
            #28, #30 -> Merge
            -> Take(Count=1)
            -> Take(Count=1) => #33
            WorkflowInput Source1
            -> Take(Count=1)
            -> MemberSelector(Selector=Key) => #36
            SubscribeSubject TotalPelletsDeliveredNorth => #37
            SubscribeSubject TotalPelletsDeliveredSouth => #38
            SubscribeSubject TotalMissedPelletsNorth => #39
            SubscribeSubject TotalMissedPelletsSouth => #40
            #37, #38, #39, #40 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #42
              Expression:
                new(
                Item1 as TotalPelletsDeliveredNorth,
                Item2 as TotalPelletsDeliveredSouth,
                Item3 as TotalMissedPelletsNorth,
                Item4 as TotalMissedPelletsSouth)
            #13, #23, #26, #33, #36, #42 -> Zip
            -> Take(Count=1) => #44
            -> Format => #45
              Format:
                # Arena Status
                **Time**: {0}
                **Subject**: {1}
                **Weight**: {2}
                **Weight Loss**: {3}
              Selector="Item5,Item3,Item4.Item1,Item4.Item2"
            #44 -> Format => #46
              Format:
                # PatchNorth
                **Pellets**: {0}
                **Threshold**: {1}
                **D0**: {2}
                **Delta**: {3}
                **Time On Patch**: {4}
                **Time Since Last Visit**: {5}
                **Total Pellets Delivered**: {6}
                **Total Missed Pellets**: {7}
              Selector: Item1.PatchDispenser1,Item1.PatchStateNorth.Threshold,Item1.PatchStateNorth.D0,Item1.PatchStateNorth.Delta,Item2.TimeOnPatchNorth,Item2.TimeSinceLastVisitNorth,Item6.TotalPelletsDeliveredNorth,Item6.TotalMissedPelletsNorth
            #44 -> Format => #47
              Format:
                # PatchSouth
                **Pellets**: {0}
                **Threshold**: {1}
                **D0**: {2}
                **Delta**: {3}
                **Time On Patch**: {4}
                **Time Since Last Visit**: {5}
                **Total Pellets Delivered**: {6}
                **Total Missed Pellets**: {7}
              Selector: Item1.PatchDispenser2,Item1.PatchStateSouth.Threshold,Item1.PatchStateSouth.D0,Item1.PatchStateSouth.Delta,Item2.TimeOnPatchSouth,Item2.TimeSinceLastVisitSouth,Item6.TotalPelletsDeliveredSouth,Item6.TotalMissedPelletsSouth
            #45, #46, #47 -> Zip
            -> Add
            -> WorkflowOutput
        SubscribeSubject EnvironmentState
        -> Format => #5
          Format:
            ## Arena {0} Mode Change
            Mode: {1}
          Selector="Value.Name,Value.Type"
        SubscribeSubject VideoEvents => #6
        #5, #6 -> SubscribeWhen
        -> DelaySubscription(DueTime=PT2S) => #8
        #3, #8 -> Merge
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\status.config)

        PublishSubject<System.String> EnvironmentAlertMessages
        -> IncludeWorkflow(Path=Aeon.Acquisition:SendAlert.bonsai, ConfigFile=Z:\aeon\config\alerts.config)

        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.GroupByTime(ChunkSize=1)
        -> Skip(Count=1)
        -> SelectMany LocalFileCount => #16
            SubscribeSubject PathPrefix
            -> Bonsai.IO.GetDirectoryName
            -> PropertyMapping(Path)
            -> Bonsai.IO.GetFiles(Path=D:\Tests\Switching, SearchPattern=*, SearchOption=AllDirectories)
            -> MemberSelector(Selector=Length) => #4
            WorkflowInput Source1
            -> Merge
            -> Take(Count=1) => #7
            #4, #7 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as Count,
                Item2.GetTimestamp() as Timestamp)
            -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=LocalFileThreshold)) => #17
        #16, #17 -> Condition GreaterThan => #18
            WorkflowInput Source1
            -> MemberSelector(Selector=Count) => #1
            ExternalizedMapping(Value) => #2
            #1, #2 -> GreaterThan(Operand=IntProperty(Value=500))
            -> WorkflowOutput
        -> Format
          Format:
            ## **File Storage**
            **Total Files in Local Storage**: {0}
          Selector=Count
        -> MulticastSubject EnvironmentAlertMessages
        #18 -> Aeon.Acquisition.FormatLogMessage(Format="", Selector=Count, Priority=Alert, Type=FileStorage, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        GroupWorkflow DroppedFrames => #23
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraTop) => #0
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraNorth) => #1
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraSouth) => #2
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraPatch1) => #3
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraPatch2) => #4
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraNestSouthFront) => #5
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraNestSouthSide) => #6
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraNestSouthTop) => #7
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraNestNorthFront) => #8
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraNestNorthSide) => #9
            IncludeWorkflow(Path=Extensions\DroppedFrames.bonsai, FrameEvents=CameraNestNorthTop) => #10
            #0, #1, #2, #3, #4, #5, #6, #7, #8, #9, #10 -> Merge
            -> WorkflowOutput
        -> Format
          Format:
            ## **Frame Dropped**
            **Camera**: {0}
            **Current Frame**: {1}
          Selector="Name,FrameID"
        -> MulticastSubject EnvironmentAlertMessages
        #23 -> Aeon.Acquisition.FormatLogMessage(Format="{0}	{1}", Selector="Name,FrameID", Priority=Alert, Type=DroppedFrames, Timestamp=Timestamp)
        -> MulticastSubject AlertLogs

        SubscribeSubject Annotations
        -> Condition Alert
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.Priority)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.PriorityLevel>(Value=Alert))
            -> WorkflowOutput
        -> Format
          Format:
            ## **Experimenter Annotation**
            **Message**: {0}
          Selector=Value.Message
        -> MulticastSubject EnvironmentAlertMessages

Bonsai.Numerics.CreateRandom(Seed=nil)
-> AsyncSubject Random

ExternalizedMapping(EasyThreshold, EasyRate, HardThreshold, HardRate, StartThreshold, StartTimeout, InitThreshold, InitRate, EasyLoomRate, HardLoomRate)
-> GroupWorkflow TaskControl
    BehaviorSubject<System.Double> LoomPatch1Rate
    BehaviorSubject<System.Double> "LoomPatch2Rate "

    ExternalizedMapping(EasyThreshold, EasyRate, HardThreshold, HardRate, StartThreshold, StartTimeout, InitThreshold, InitRate, EasyLoomRate, HardLoomRate)
    -> Defer ParameterController
        ExternalizedMapping(Value(DisplayName=InitThreshold))
        -> DoubleProperty(Value=75)
        -> BehaviorSubject InitThreshold

        ExternalizedMapping(Value(DisplayName=InitRate))
        -> DoubleProperty(Value=10000)
        -> BehaviorSubject InitRate

        ExternalizedMapping(Value(DisplayName=EasyThreshold, Description="The minimum distance required to obtain a pellet."))
        -> DoubleProperty(Value=75)
        -> BehaviorSubject EasyThreshold

        ExternalizedMapping(Value(DisplayName=EasyRate))
        -> DoubleProperty(Value=0.01)
        -> BehaviorSubject EasyRate

        ExternalizedMapping(Value(DisplayName=HardThreshold, Description="The minimum distance required to obtain a pellet."))
        -> DoubleProperty(Value=75)
        -> BehaviorSubject HardThreshold

        ExternalizedMapping(Value(DisplayName=HardRate))
        -> DoubleProperty(Value=0.0025)
        -> BehaviorSubject HardRate

        ExternalizedMapping(Value(DisplayName=HardLoomRate))
        -> DoubleProperty(Value=0.0025)
        -> BehaviorSubject HardLoomRate

        ExternalizedMapping(Value(DisplayName=EasyLoomRate))
        -> DoubleProperty(Value=0.0025)
        -> BehaviorSubject EasyLoomRate

        SubscribeSubject InitThreshold => #24
        SubscribeSubject InitRate => #25
        #24, #25 -> CombineLatest
        -> Take(Count=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #28
          Expression:
            new(
            Item1 as ThresholdPatch1,
            Item2 as RatePatch1,
            Item1 as ThresholdPatch2,
            Item2 as RatePatch2)
        SubscribeSubject EasyThreshold => #29
        SubscribeSubject EasyRate => #30
        SubscribeSubject HardThreshold => #31
        SubscribeSubject HardRate => #32
        SubscribeSubject HardLoomRate => #33
        SubscribeSubject EasyLoomRate => #34
        #29, #30, #31, #32, #33, #34 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #36
          Expression:
            new(
            Item1 as EasyThreshold,
            Item2 as EasyRate,
            Item3 as HardThreshold,
            Item4 as HardRate,
            Item5 as EasyLoomRate,
            Item5 as HardLoomRate
            )
        SubscribeSubject ThresholdCrossingPatch1
        -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
        -> IntProperty(Value=1)
        -> Accumulate => #40
        SubscribeSubject ThresholdCrossingPatch2
        -> IncludeWorkflow(Path=Extensions\EnvironmentCondition.bonsai, Value=Experiment)
        -> IntProperty(Value=1)
        -> Accumulate => #44
        #40, #44 -> CombineLatest
        -> Add => #46
        ExternalizedMapping(Value(DisplayName=StartThreshold)) => #47
        #46, #47 -> GreaterThanOrEqual(Operand=IntProperty(Value=18))
        -> Condition => #49
            WorkflowInput Source1
            -> WorkflowOutput
        ExternalizedMapping(StartTimeout) => #50
        #49, #50 -> Sink StartTimeout => #51
            ExternalizedMapping(DueTime(DisplayName=StartTimeout))
            -> Timer(DueTime=PT1H, Period=PT0S)
            -> Format
              Format:
                ## **Start Timeout**
                More than 1 hour has passed and the pellet threshold value to start the probabilistic period has not been reached.
              Selector=""
            -> MulticastSubject SubjectAlertMessages
        #36, #51 -> SubscribeWhen => #52
        SubscribeSubject WheelPatch1
        -> MemberSelector(Selector=Value)
        -> IncludeWorkflow(Path=Aeon.Acquisition:DistanceTravelled.bonsai, Gain=1) => #55
        SubscribeSubject WheelPatch2
        -> MemberSelector(Selector=Value)
        -> IncludeWorkflow(Path=Aeon.Acquisition:DistanceTravelled.bonsai, Gain=1) => #58
        #52, #55, #58 -> CombineLatest
        -> Take(Count=1)
        -> Sink Loom
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
              Expression:
                new(
                Item2 > Item3 ? Item1.HardLoomRate : Item1.EasyLoomRate as LoomRatePatch1,
                Item2 > Item3 ? Item1.EasyLoomRate : Item1.HardLoomRate as LoomRatePatch2)
            -> MemberSelector(Selector=LoomRatePatch1)
            -> MulticastSubject LoomPatch1Rate => #3
            #1 -> MemberSelector(Selector=LoomRatePatch2)
            -> MulticastSubject "LoomPatch2Rate " => #5
            #3, #5 -> Zip
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #62
          Expression:
            new(
            Item2 > Item3 ? Item1.HardThreshold : Item1.EasyThreshold as ThresholdPatch1,
            Item2 > Item3 ? Item1.HardRate : Item1.EasyRate as RatePatch1,
            Item2 > Item3 ? Item1.EasyThreshold : Item1.HardThreshold as ThresholdPatch2,
            Item2 > Item3 ? Item1.EasyRate : Item1.HardRate as RatePatch2)
        #28, #62 -> Concat
        -> Sink SetPatchState
            WorkflowInput Source1 => #0
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Double.NaN as Threshold,
                ThresholdPatch1 as D0,
                RatePatch1 as Rate)
            -> MemberSelector(Selector="Threshold,D0,Rate", TypeMapping=TypeMapping<System.ValueTuple(System.Double,System.Double,System.Double)>)
            -> MulticastSubject PatchStatePatch1
            #0 -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Double.NaN as Threshold,
                ThresholdPatch2 as D0,
                RatePatch2 as Rate)
            -> MemberSelector(Selector="Threshold,D0,Rate", TypeMapping=TypeMapping<System.ValueTuple(System.Double,System.Double,System.Double)>)
            -> MulticastSubject PatchStatePatch2
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> PublishSubject ParameterChange

    SubscribeSubject ParameterChange
    -> PropertyMapping(ThresholdPatch1(Selector=ThresholdPatch1), RatePatch1(Selector=RatePatch1), ThresholdPatch2(Selector=ThresholdPatch2), RatePatch2(Selector=RatePatch2))
    -> GroupWorkflow TaskLogic => #8
        SubscribeSubject WheelPatch1 => #0
        ExternalizedMapping(DistanceThreshold(DisplayName=ThresholdPatch1), Rate(DisplayName=RatePatch1)) => #1
        #0, #1 -> IncludeWorkflow DistanceStatePatch1(Path=Extensions\RandomDepletion.bonsai, DistanceThreshold=75, Rate=10000, DeliveryCount=DeliveryCountPatch1, PatchState=PatchStatePatch1)
        -> MulticastSubject DeliverPelletPatch1
        -> MulticastSubject ThresholdCrossingPatch1

        SubscribeSubject WheelPatch2 => #5
        ExternalizedMapping(DistanceThreshold(DisplayName=ThresholdPatch2), Rate(DisplayName=RatePatch2)) => #6
        #5, #6 -> IncludeWorkflow DistanceStatePatch2(Path=Extensions\RandomDepletion.bonsai, DistanceThreshold=75, Rate=10000, DeliveryCount=DeliveryCountPatch2, PatchState=PatchStatePatch2)
        -> MulticastSubject DeliverPelletPatch2
        -> MulticastSubject ThresholdCrossingPatch2

        IncludeWorkflow(Path=Extensions\LoomTrigger.bonsai, LoomPatchRate=LoomPatch1Rate, WhelDisplacement=WheelPatch1, LessThanRandom=0.5)
        -> BehaviorSubject LoomTrigger

        IncludeWorkflow(Path=Extensions\LoomTrigger.bonsai, LoomPatchRate="LoomPatch2Rate ", WhelDisplacement=WheelPatch2, LessThanRandom=0.5)
        -> MulticastSubject LoomTrigger

        SubscribeSubject LoomTrigger
    SubscribeSubject ParameterChange => #9
    #8, #9 -> TakeUntil
    -> Repeat
    -> IncludeWorkflow(Path=Extensions\RepeatEverySubject.bonsai)
    -> WorkflowOutput

    Disable GroupWorkflow UndergroundFeeder(Description="Contains control and acquisition functionality for an underground feeder module.")
        ExternalizedMapping(Value(DisplayName=PatchId))
        -> StringProperty(Value=Patch1)
        -> Take(Count=1)
        -> AsyncSubject StreamId

        ExternalizedMapping(Name(DisplayName=PatchEvents, Description="The name of the output sequence containing all patch events.")) => #4
        -> SubscribeSubject Patch
        -> WorkflowOutput
        ExternalizedMapping(SampleRate)
        -> Bonsai.Harp.Expander.ConfigureMagneticEncoder(SampleRate=SampleRate500Hz) => #8
        ExternalizedMapping(Name(DisplayName=DeliverPellet, Description="The name of the input sequence used to trigger pellet delivery."))
        -> IncludeWorkflow DeliverPellet(Path=Extensions\SelectStreamId.bonsai) => #10
        ExternalizedMapping(Name(DisplayName=PelletDelivered, Description="The name of the output sequence carrying pellet delivery notifications.")) => #11
        -> IncludeWorkflow PelletDelivered(Path=Extensions\SelectStreamId.bonsai) => #12
        ExternalizedMapping(DueTime, Count) => #13
        Source2=#10, Source3=#12, Source3=#13 -> IncludeWorkflow(Path=Aeon.Acquisition:TimedRetryCount.bonsai, DueTime=PT1S, Count=2) => #14
        -> MemberSelector(Selector=Value)
        -> GroupWorkflow DeliverPellet => #16
            WorkflowInput Source1
            -> Bonsai.Harp.Expander.DigitalOutput(Command=Set, Mask=Output0) => #1
            -> Bonsai.Harp.Expander.DigitalOutput(Command=Clear, Mask=Output0) => #2
            #1, #2 -> Merge
            -> WorkflowOutput
        ExternalizedMapping(Name(DisplayName=ResetFeeder, Description="The name of the input sequence used to reset the underground feeder."))
        -> SubscribeSubject ResetFeeder
        -> GroupWorkflow ResetFeeder => #19
            WorkflowInput Source1
            -> Bonsai.Harp.Expander.DigitalOutput(Command=Set, Mask=Output0) => #1
            -> Delay(DueTime=PT0.5S)
            -> Bonsai.Harp.Expander.DigitalOutput(Command=Clear, Mask=Output0) => #3
            #1, #3 -> Merge
            -> WorkflowOutput
        #8, #16, #19 -> Merge => #20
        ExternalizedMapping(PortName) => #21
        #20, #21 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM8) => #22
        #14 -> Condition IsRepetition => #23
            WorkflowInput Source1
            -> MemberSelector(Selector=Repetition)
            -> WorkflowOutput
        #23, #4 -> SelectMany PairRepetitions => #24
            WorkflowInput Source1 => #0
            ExternalizedMapping(Name)
            -> IncludeWorkflow Patch(Path=Extensions\SelectStreamId.bonsai)
            -> Bonsai.Harp.FilterMessage(MessageType=Write, Register=Bonsai.Harp.FilterMessageAddress(Address=36))
            -> Condition
                WorkflowInput Source1
                -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=U16, IsArray=false)) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=WorkflowProperty<System.Byte>(Value=1))
                -> WorkflowOutput
            -> Take(Count=1) => #5
            #0, #5 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                1 as Value,
                Item2.GetTimestamp() as Seconds)
            -> InputMapping
            -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=203, PayloadType=TimestampedU8))
            -> WorkflowOutput
        #22, #24 -> Merge => #25
        #25, #4 -> Sink Patch => #26
            WorkflowInput Source1
            -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai) => #1
            ExternalizedMapping(Name) => #2
            #1, #2 -> MulticastSubject Patch
            -> WorkflowOutput
        -> Bonsai.Harp.Expander.MagneticEncoder(IncludeTimestamp=true) => #27
        ExternalizedMapping(Radius) => #28
        #27, #28 -> Aeon.Acquisition.TransformTimestamped(IncludeTimestamp=false) => #29
            WorkflowInput Source1
            -> MemberSelector(Selector=Angle) => #1
            ExternalizedMapping(Radius) => #2
            #1, #2 -> Aeon.Acquisition.WheelDisplacement(Radius=-4)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai) => #30
        ExternalizedMapping(Name(DisplayName=WheelDisplacement, Description="The name of the output sequence carrying total distance travelled on the wheel.")) => #31
        #30, #31 -> MulticastSubject WheelDisplacement
        #29 -> MemberSelector(Selector=Value)
        #26 -> Bonsai.Harp.Expander.AuxInputs(Type=Input1, IncludeTimestamp=true)
        -> Condition PelletDelivered
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\GroupByStreamId.bonsai) => #36
        #36, #11 -> MulticastSubject PelletDelivered

    Disable ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,System.Object)> DeliverPellet(BufferSize=nil)
    Disable ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,System.Object)> ResetFeeder(BufferSize=nil)
    Disable ReplaySubject<System.Reactive.Linq.IGroupedObservable(System.String,Bonsai.Harp.HarpMessage)> Patch(BufferSize=nil)
    BehaviorSubject<System.Int32> ThresholdCrossingPatch1
    BehaviorSubject<System.Int32> ThresholdCrossingPatch2

GroupWorkflow ControlPanel
    SubscribeSubject SubjectState => #0
    -> Condition Start
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Type)
        -> NotEqual(Operand=WorkflowProperty<Aeon.Acquisition.EnvironmentSubjectChangeType>(Value=Exit))
        -> WorkflowOutput
    -> MulticastSubject SubjectStart
    #0 -> Condition End
        WorkflowInput Source1
        -> MemberSelector(Selector=Value.Type)
        -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.EnvironmentSubjectChangeType>(Value=Exit))
        -> WorkflowOutput
    -> MulticastSubject SubjectStop

    Bonsai.Windows.Input.KeyDown(Filter="ShiftKey Space D0 P NumPad0 F1 Shift", SuppressRepetitions=false)
    -> MulticastSubject StartCameras

    Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey Space Prior PageUp D0 D1 A P Q NumPad0 NumPad1 F1 F2 Shift", SuppressRepetitions=false)
    -> MulticastSubject StopCameras

    Bonsai.Windows.Input.KeyDown(Filter="RButton ShiftKey Menu Space Next PageDown D0 D2 B P R NumPad0 NumPad2 F1 F3 Shift", SuppressRepetitions=false)
    -> GroupWorkflow ManualPelletPatch1
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Aeon.Acquisition:TriggerPellet.bonsai, PatchEvents=Patch1, DeliverPellet=DeliverPelletPatch1)
        -> MulticastSubject ManualPelletPatch1
        -> WorkflowOutput

    Bonsai.Windows.Input.KeyDown
      Filter: LButton RButton Cancel ShiftKey ControlKey Menu Pause Space Prior PageUp Next PageDown End D0 D1 D2 D3 A B C P Q R S NumPad0 NumPad1 NumPad2 NumPad3 F1 F2 F3 F4 Shift
      SuppressRepetitions=false
    -> GroupWorkflow ManualPelletPatch2
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Aeon.Acquisition:TriggerPellet.bonsai, PatchEvents=Patch2, DeliverPellet=DeliverPelletPatch2)
        -> MulticastSubject ManualPelletPatch2
        -> WorkflowOutput

    SubscribeSubject PatchStatePatch1
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item2 as D1,
        Item3 as Delta)
    -> Aeon.Acquisition.LabelControl(FontSize=14)
    -> GroupWorkflow PatchNorth
        WorkflowInput Source1
        -> WorkflowOutput

    SubscribeSubject PatchStatePatch2
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item2 as D1,
        Item3 as Delta)
    -> Aeon.Acquisition.LabelControl(FontSize=14)
    -> GroupWorkflow PatchSouth
        WorkflowInput Source1
        -> WorkflowOutput

    SubscribeSubject AudioAmbient
    -> MemberSelector(Selector=Value)

    Disable SubscribeSubject SubjectStop
    -> Disable Aeon.Acquisition.SubjectLogBitmap(Path=SessionSummary)

    GroupWorkflow PatchActivity
        SubscribeSubject CameraPatch1
        -> SampleInterval(Interval=PT0.02S)
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping => #3
        SubscribeSubject CameraPatch2
        -> SampleInterval(Interval=PT0.02S)
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping => #7
        SubscribeSubject PatchState => #8
        -> VisualizerMapping => #9
        #8 -> VisualizerMapping => #10
        SubscribeSubject CurrentThresholdPatch1
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=PelletCount, ValueSelector=Threshold, SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow ThresholdPatch1
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #14
        SubscribeSubject CurrentThresholdPatch2
        -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=PelletCount, ValueSelector=Threshold, SymbolType=None, LineWidth=1, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow ThresholdPatch2
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #18
        SubscribeSubject PelletMonitorValuePatch1
        -> VisualizerMapping => #20
        SubscribeSubject PelletMonitorValuePach2
        -> VisualizerMapping => #22
        #3, #7, #9, #10, #14, #18, #20, #22 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchActivity
          ColumnCount=2
          RowCount=4
          ColumnStyles=""
          RowStyles=""
          CellSpans
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
        -> VisualizerMapping => #24
        Aeon.Acquisition.ExperimentProperties
        -> VisualizerMapping => #26
        SubscribeSubject TimeSpentOnPatches
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="PatchNorth,PatchSouth", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TimeSpentOnPatches
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #30
        SubscribeSubject TimeSinceLastVisit
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="PatchNorth,PatchSouth", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TimeSinceLastVisit
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #34
        SubscribeSubject TotalDistanceTravelled
        -> Bonsai.Design.Visualizers.BarGraphBuilder(IndexSelector=Id, ValueSelector="PatchNorth,PatchSouth", BaseAxis=X, BarType=Cluster, Capacity=nil, Min=nil, Max=nil)
        -> GroupWorkflow TotalDistanceTravelled
            WorkflowInput Source1
            -> WorkflowOutput
        -> VisualizerMapping => #38
        #26, #30, #34, #38 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchStatistics(ColumnCount=1, RowCount=4, ColumnStyles="", RowStyles="", CellSpans="")
        -> VisualizerMapping => #40
        #24, #40 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchActivity(ColumnCount=2, RowCount=1, ColumnStyles(ColumnStyle(SizeType=Percent, Width=70), ColumnStyle(SizeType=Percent, Width=30)), RowStyles="", CellSpans="")
        -> WorkflowOutput

    GroupWorkflow SubjectActivity
        SubscribeSubject Heatmap
        -> VisualizerMapping => #1
        SubscribeSubject Trajectory
        -> VisualizerMapping
        -> SubscribeSubject FrameTrajectory
        -> VisualizerMapping => #5
        SubscribeSubject FrameNestNorth
        -> VisualizerMapping => #7
        SubscribeSubject FrameNestSouth
        -> VisualizerMapping => #9
        #1, #5, #7, #9 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder SubjectActivity(ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput

    GroupWorkflow ExperimentMetadata
        Aeon.Acquisition.TareWeight => #0
        -> Disable MulticastSubject TareWeightNest
        SubscribeSubject PelletDeliveredPatch1
        -> Condition RisingEdge
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> IntProperty(Value=1) => #4
        SubscribeSubject Patch1 => #5
        #4, #5 -> Aeon.Acquisition.DispenserState(Name=Patch1)
        -> MulticastSubject Patch1Dispenser
        -> VisualizerMapping => #8
        SubscribeSubject PelletDeliveredPatch2
        -> Condition RisingEdge
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> IntProperty(Value=1) => #11
        SubscribeSubject Patch2 => #12
        #11, #12 -> Aeon.Acquisition.DispenserState(Name=Patch2)
        -> MulticastSubject Patch2Dispenser
        -> VisualizerMapping => #15
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.AnnotationSource
        -> MulticastSubject Annotations
        -> VisualizerMapping => #19
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.EnvironmentState
        -> MulticastSubject EnvironmentState
        -> VisualizerMapping => #23
        #0 -> VisualizerMapping => #24
        #8, #15, #19, #23, #24 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder ExperimentMetadata
          ColumnCount=2
          RowCount=4
          ColumnStyles=""
          RowStyles=""
          CellSpans
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=2)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
        -> WorkflowOutput

        SubscribeSubject Patch1Dispenser
        -> Skip(Count=1)
        -> Condition Reset
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.DispenserEventType>(Value=Reset))
            -> WorkflowOutput
        -> MulticastSubject ResetFeederPatch1

        SubscribeSubject Patch2Dispenser
        -> Skip(Count=1)
        -> Condition Reset
            WorkflowInput Source1
            -> MemberSelector(Selector=Value.EventType)
            -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.DispenserEventType>(Value=Reset))
            -> WorkflowOutput
        -> MulticastSubject ResetFeederPatch2

    GroupWorkflow EnvironmentSubjectState
        SubscribeSubject VideoEvents
        -> Aeon.Acquisition.EnvironmentSubjectState(DatabasePath=Z:\aeon\colony\colony.csv)
        -> MulticastSubject SubjectState
        -> WorkflowOutput
