WorkflowBuilder(Version=2.8.1)
GroupWorkflow Devices
    GroupWorkflow UndergroundFeeder(Description="Contains control and acquisition functionality for an underground feeder module.")
        ExternalizedMapping(Name(DisplayName=PatchEvents, Description="The name of the output sequence containing all patch events.")) => #0
        -> PublishSubject<Bonsai.Harp.HarpMessage> PatchEvents
        -> WorkflowOutput
        ExternalizedMapping(Name(DisplayName=DeliverPellet, Description="The name of the input sequence used to trigger pellet delivery."))
        -> BehaviorSubject<System.Object> DeliverPellet
        -> Harp.AeonFeederV2.CreateMessage(MessageType=Write, Payload=Harp.AeonFeederV2.CreatePEL_SNDPayload(PEL_SND=1)) => #5
        ExternalizedMapping(PortName) => #6
        #5, #6 -> Harp.AeonFeederV2.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3) => #7
        #0, #7 -> MulticastSubject PatchEvents => #8
        -> Harp.AeonFeederV2.Parse(Register=Harp.AeonFeederV2.TimestampedWHEEL_ENCO) => #9
        ExternalizedMapping(Radius) => #10
        #9, #10 -> Aeon.Acquisition.TransformTimestamped(IncludeTimestamp=false) => #11
            WorkflowInput Source1
            -> MemberSelector(Selector=Angle) => #1
            ExternalizedMapping(Radius) => #2
            #1, #2 -> Aeon.Acquisition.WheelDisplacement(Radius=4)
            -> WorkflowOutput
        ExternalizedMapping(Name(DisplayName=WheelDisplacement, Description="The name of the output sequence carrying total distance travelled on the wheel.")) => #12
        #11, #12 -> PublishSubject WheelDisplacement
        #8 -> Harp.AeonFeederV2.Parse(Register=Harp.AeonFeederV2.TimestampedBBK_DET)
        -> Aeon.Acquisition.TransformTimestamped(IncludeTimestamp=false)
            WorkflowInput Source1
            -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> WorkflowOutput
        -> PublishSubject PelletDelivered
        #8 -> Harp.AeonFeederV2.Parse(Register=Harp.AeonFeederV2.TimestampedTIME_OUT_THLD)
        -> MemberSelector(Selector=Value)
        #8 -> Harp.AeonFeederV2.Parse(Register=Harp.AeonFeederV2.TimestampedERROR_ALM)
        -> MemberSelector(Selector=Value)

    GroupWorkflow ClockSynchronizer
        BehaviorSubject<System.Object> SynchronizeTimestamp
        -> Bonsai.Harp.SynchronizeTimestamp => #1
        ExternalizedMapping(PortName) => #2
        #1, #2 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM5)
        -> PublishSubject SynchronizerEvents
        -> WorkflowOutput

    IncludeWorkflow
      Path=Aeon.Acquisition:SpinnakerVideoSource.bonsai
      TriggerSource=LocalTrigger
      TriggerFrequency=LocalTriggerFrequency
      ExposureTime=15000
      SerialNumber=23106249
      Gain=0
      Binning=1
      FrameEvents=CameraPatch

    IncludeWorkflow(Path=Aeon.Acquisition:VideoController.bonsai, PortName=COM4, GlobalTriggerFrequency=50, LocalTriggerFrequency=125)

GroupWorkflow Declarations
    Aeon.Acquisition.StateRecoverySubject<System.ValueTuple(System.Double,System.Double,System.Double)> PatchState

    Aeon.Acquisition.DispenserState => #1
    -> Disable Condition Reset
        WorkflowInput Source1
        -> MemberSelector(Selector=EventType)
        -> Equal(Operand=WorkflowProperty<Aeon.Acquisition.DispenserEventType>(Value=Reset))
        -> WorkflowOutput
    -> Disable MulticastSubject ResetFeeder
    #1 -> Disable MemberSelector(Selector=EventType)

GroupWorkflow ControlPanel
    GroupWorkflow WheelVelocity
        SubscribeSubject WheelDisplacement
        -> Aeon.Acquisition.TransformTimestamped(IncludeTimestamp=false) => #1
            WorkflowInput Source1 => #0
            ExternalizedMapping(Gain) => #1
            #0, #1 -> IncludeWorkflow(Path=Aeon.Acquisition:DistanceTravelled.bonsai, Gain=1)
            -> Skip(Count=1)
            -> WorkflowOutput
        -> Skip(Count=1) => #2
        #1, #2 -> Zip => #3
        -> MemberSelector(Selector=Item2.Value) => #4
        #3 -> MemberSelector(Selector=Item1.Value) => #5
        #4, #5 -> Zip
        -> Subtract => #7
        #3 -> MemberSelector(Selector=Item2.Seconds) => #8
        #3 -> MemberSelector(Selector=Item1.Seconds) => #9
        #8, #9 -> Zip
        -> Subtract => #11
        #7, #11 -> Zip
        -> Divide => #13
        #13, #8 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Harp.Format(MessageType=Event, Register=Bonsai.Harp.FormatMessagePayload(Address=203, PayloadType=TimestampedS64))
        -> MulticastSubject TimestampedLogging
        -> WorkflowOutput

    GroupWorkflow PatchMonitor
        SubscribeSubject CameraPatch
        -> SampleInterval(Interval=PT0.02S)
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping => #3
        SubscribeSubject PatchMonitor
        -> Bonsai.Dsp.SelectChannels(Channels(int=0, int=1))
        -> VisualizerMapping => #6
        SubscribeSubject PelletMonitor
        -> MemberSelector(Selector=Value)
        -> VisualizerMapping => #9
        #3, #6, #9 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder PatchActivity
          ColumnCount=1
          RowCount=3
          ColumnStyles=""
          RowStyles=""
          CellSpans
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
            CellSpan(ColumnSpan=1, RowSpan=1)
        -> WorkflowOutput

    Bonsai.Gui.ButtonBuilder StartCamera(Enabled=true, Visible=true, Text=StartCamera) => #2
    -> VisualizerMapping => #3
    Bonsai.Gui.ButtonBuilder StopCamera(Enabled=true, Visible=true, Text=StopCamera) => #4
    -> VisualizerMapping => #5
    #3, #5 -> Bonsai.Gui.TableLayoutPanelBuilder CameraButtons(Enabled=true, Visible=true, ColumnCount=2, RowCount=1, ColumnStyles="", RowStyles="", CellSpans="")
    #4 -> Sink
        WorkflowInput Source1
        -> Unit
        -> MulticastSubject StopCameras
        -> WorkflowOutput
    #2 -> Sink
        WorkflowInput Source1
        -> Unit
        -> MulticastSubject StartCameras
        -> WorkflowOutput

GroupWorkflow Visualization
    SubscribeSubject DistanceState
    -> MemberSelector(Selector=Value) => #1
    SubscribeSubject PatchState
    -> MemberSelector(Selector=Item1) => #3
    #1, #3 -> CombineLatest => #4
    #4, #1 -> Sample
    -> Bonsai.Dsp.Buffer(Count=15, Skip=nil)
    -> PublishSubject PatchMonitor

    Disable SubscribeSubject PatchState
    -> Disable GroupWorkflow ToArray => #9
        DoubleProperty(Value=0)
        -> Take(Count=1)
        -> IgnoreElements
        -> ToArray => #3
        WorkflowInput Source1
        -> SelectMany
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> ToArray
            -> WorkflowOutput
        -> DelaySubscription(DueTime=PT0.1S) => #6
        #3, #6 -> Concat
        -> WorkflowOutput
    Disable SubscribeSubject DeliveryCount => #10
    #9, #10 -> Disable WithLatestFrom
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        int32(Item2) as PelletCount,
        Item1 as Threshold)
    -> Disable PublishSubject CurrentThreshold

    GroupWorkflow PelletMonitor(Description="Monitors pellet delivery state of commands and beam breaks.")
        ExternalizedMapping(Name(DisplayName=PelletCommand))
        -> SubscribeSubject PatchEvents
        -> Bonsai.Harp.FilterMessage(MessageType=Write, Address=35)
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
          Expression:
            new(
            it.GetTimestamp() as Timestamp,
            False as Value)
        ExternalizedMapping(Name(DisplayName=PelletDelivered))
        -> SubscribeSubject PelletDelivered
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
          Expression:
            new(
            Seconds as Timestamp,
            True as Value)
        #3, #6 -> Merge
        -> WorkflowOutput
    -> PublishSubject PelletMonitor

GroupWorkflow Logging
    ExternalizedMapping(Value(DisplayName=Path))
    -> PropertySource<Bonsai.IO.GetDirectories,System.String>(MemberName=Path, Value=D:\ProjectAeon\PatchTestNewBlackMaterial)
    -> Timestamp
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Value +  "\Collection" + it.TimeStamp.ToString("yyyy_MM_dd_HH_mm_ss")
    -> Add(Operand=StringProperty(Value=\))
    -> Take(Count=1)
    -> AsyncSubject LoggingPath

    IncludeWorkflow
      Path=Aeon.Acquisition:RepositoryLogController.bonsai
      RepositoryPath=C:\ProjectAeon\aeon_experiments
      DataPath=D:\ProjectAeon\PatchTestBoard
      FallbackPath=devdata\tests
      ChunkSize=1

    PublishSubject<Bonsai.Harp.HarpMessage> TimestampedLogging
    -> GroupWorkflow TimestampedLogging
        WorkflowInput Source1
        -> Condition => #1
            WorkflowInput Source1
            -> MemberSelector(Selector=MessageType)
            -> Equal(Operand=WorkflowProperty<Bonsai.Harp.MessageType>(Value=Event))
            -> WorkflowOutput
        SubscribeSubject PatchEvents => #2
        #1, #2 -> Merge
        -> GroupBy(KeySelector=Address)
        -> SelectMany LogHarpStreams
            WorkflowInput Source1
            -> AsyncSubject Register

            ExternalizedMapping(Value(DisplayName=LogName))
            -> StringProperty(Value=Streams)
            -> Take(Count=1) => #4
            SubscribeSubject Register
            -> MemberSelector(Selector=Key) => #6
            SubscribeSubject LoggingPath => #7
            #4, #6, #7 -> Zip
            -> Format(Format={2}/{0}_{1}.bin, Selector="Item1,Item2,Item3")
            -> Take(Count=1)
            -> AsyncSubject LogName

            SubscribeSubject Register
            -> Merge
            -> MemberSelector(Selector=MessageBytes) => #14
            SubscribeSubject LogName
            -> PropertyMapping(Path) => #16
            #14, #16 -> Bonsai.Dsp.MatrixWriter(Path=D:\ProjectAeon\PatchTestNewBlackMaterial\Collection2025_09_17_15_24_16\\Streams_203, Suffix=None, Overwrite=false, Layout=ColumnMajor)
            -> WorkflowOutput
        -> WorkflowOutput

    GroupWorkflow CameraLogging
        SubscribeSubject CameraPatch => #0
        SubscribeSubject GlobalTriggerFrequency
        -> PropertyMapping(FrameRate) => #2
        #0, #2 -> IncludeWorkflow(Path=Aeon.Acquisition:LogVideo.bonsai, Heartbeats="", ClosingDuration=nil, LogName=VideoData, FrameRate=50)

    SubscribeSubject PelletMonitor => #11
    -> MemberSelector(Selector=Timestamp) => #12
    #11 -> MemberSelector(Selector=Value) => #13
    #12, #13 -> Zip => #14
    SubscribeSubject LoggingPath => #15
    StringProperty(Value=PelletMonitor.csv) => #16
    #15, #16 -> Zip
    -> Format(Format={0}\{1}, Selector="Item1,Item2")
    -> PropertyMapping(FileName) => #19
    #14, #19 -> Bonsai.IO.CsvWriter
      FileName=D:\ProjectAeon\PatchTestNewBlackMaterial\Collection2025_10_22_17_01_38\\PelletMonitor.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true

    SubscribeSubject PatchMonitor => #21
    SubscribeSubject LoggingPath => #22
    StringProperty(Value=PatchMonitor.bin) => #23
    #22, #23 -> Zip
    -> Format(Format={0}\{1}, Selector="Item1,Item2")
    -> PropertyMapping(Path) => #26
    #21, #26 -> Bonsai.Dsp.MatrixWriter(Path=D:\ProjectAeon\PatchTestNewBlackMaterial\Collection2025_10_22_17_01_38\\PatchMonitor.bin, Suffix=None, Overwrite=false, Layout=ColumnMajor)

    Disable PublishSubject<System.Int64> PicoEvents => #28
    Disable SubscribeSubject PatchEvents
    -> Disable Harp.OutputExpander.Parse(Register=Harp.OutputExpander.TimestampedMagneticEncoder)
    -> Disable MemberSelector(Selector=Seconds) => #31
    #28, #31 -> Disable WithLatestFrom => #32
    Disable SubscribeSubject LoggingPath => #33
    Disable StringProperty(Value=pico_monitor_light_on_blocking_on_cover_off.csv) => #34
    #33, #34 -> Disable Zip
    -> Disable Format(Format={0}\{1}, Selector="Item1,Item2")
    -> Disable PropertyMapping(FileName) => #37
    #32, #37 -> Disable Bonsai.IO.CsvWriter
      FileName=D:\ProjectAeon\PatchTestNewBlackMaterial\Collection2024_11_25_14_41_08\pico_monitor_light_on_blocking_on_cover_off.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true

SubscribeSubject WheelDisplacement
-> GroupWorkflow LinearDepletion(Description="The patch is depleted using a linear depletion function.")
    WorkflowInput Source1 => #0
    ExternalizedMapping(Name(DisplayName=DistanceState)) => #1
    -> Aeon.Acquisition.StateRecoverySubject<Bonsai.Harp.Timestamped(System.Double)> DistanceState
    -> Take(Count=1) => #3
    #0, #3 -> Aeon.Acquisition.PrependOnce
    -> Aeon.Acquisition.TransformTimestamped(IncludeTimestamp=false) => #5
        WorkflowInput Source1 => #0
        ExternalizedMapping(Gain) => #1
        #0, #1 -> IncludeWorkflow(Path=Aeon.Acquisition:DistanceTravelled.bonsai, Gain=1)
        -> Skip(Count=1)
        -> WorkflowOutput
    #5, #1 -> MulticastSubject DistanceState => #6
    ExternalizedMapping(DistanceThreshold, Delta, DeliveryCount) => #7
    ExternalizedMapping(PatchState) => #8
    #6, #7, #8 -> GroupWorkflow DepletionFunction
        IntProperty(Value=0) => #0
        ExternalizedMapping(Name(DisplayName=DeliveryCount)) => #1
        #0, #1 -> Aeon.Acquisition.StateRecoverySubject DeliveryCount
        WorkflowInput Source1
        -> MemberSelector(Selector=Value) => #4
        ExternalizedMapping(Name(DisplayName=PatchState)) => #5
        -> SubscribeSubject PatchState
        -> GroupWorkflow Threshold => #7
            WorkflowInput Source1
            -> WorkflowOutput
        #1 -> SubscribeSubject DeliveryCount => #8
        #7, #8 -> CombineLatest
        -> Take(Count=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1.Item2 + Item1.Item3 * Item2 as Threshold,
            Item1.Item2 as D0,
            Item1.Item3 as Delta)
        -> MemberSelector(Selector="Threshold,D0,Delta", TypeMapping=TypeMapping<System.ValueTuple(System.Double,System.Double,System.Double)>) => #12
        #12, #5 -> MulticastSubject PatchState
        -> MemberSelector(Selector=Item1)
        -> PropertyMapping(Value) => #15
        #4, #15 -> GreaterThan(Operand=DoubleProperty(Value=100))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> IntProperty(Value=1) => #19
        #1 -> SubscribeSubject DeliveryCount => #20
        #19, #20 -> WithLatestFrom
        -> Add
        -> Repeat => #23
        #23, #1 -> MulticastSubject DeliveryCount
        -> WorkflowOutput
        ExternalizedMapping(Value(DisplayName=DistanceThreshold, Description="The distance required to obtain the first pellet.")) => #26
        #5 -> SubscribeSubject PatchState
        -> Take(Count=1)
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> GreaterThan(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> PropertyMapping(Value(Selector=Item2)) => #30
        #26, #30 -> DoubleProperty(Value=100) => #31
        #5 -> SubscribeSubject PatchState => #32
        #31, #32 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item2.Item1 as Threshold,
            Item1 as D0,
            Item2.Item3 as Delta)
        -> MemberSelector(Selector="Threshold,D0,Delta", TypeMapping=TypeMapping<System.ValueTuple(System.Double,System.Double,System.Double)>) => #35
        #35, #5 -> MulticastSubject PatchState
        ExternalizedMapping(Value(DisplayName=Delta)) => #37
        #5 -> SubscribeSubject PatchState
        -> Take(Count=1)
        -> PropertyMapping(Value(Selector=Item3)) => #40
        #37, #40 -> PropertySource<DoubleProperty,System.Double>(MemberName=Delta, Value=0) => #41
        #5 -> SubscribeSubject PatchState => #42
        #41, #42 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item2.Item1 as Threshold,
            Item2.Item2 as D0,
            Item1 as Delta)
        -> MemberSelector(Selector="Threshold,D0,Delta", TypeMapping=TypeMapping<System.ValueTuple(System.Double,System.Double,System.Double)>) => #45
        #45, #5 -> MulticastSubject PatchState
    -> WorkflowOutput
-> MulticastSubject DeliverPellet

SubscribeSubject WheelDisplacement
-> MemberSelector(Selector=Value) => #9
SubscribeSubject PelletDelivered
-> MemberSelector(Selector=Value) => #11
#9, #11 -> WithLatestFrom
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression: Item2 ? 1.0 : 0.0

SubscribeSubject PatchEvents
-> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #15
SubscribeSubject VideoEvents
-> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false)) => #17
#15, #17 -> WithLatestFrom
-> DelaySubscription(DueTime=PT2S)
-> GroupWorkflow TimestampDifference
    WorkflowInput Source1
    -> Subtract
    -> WorkflowOutput

ExternalizedMapping(ThresholdValue)
-> GroupWorkflow DetectPellets
    SubscribeSubject CameraPatch => #0
    ExternalizedMapping(ThresholdValue, RegionOfInterest) => #1
    #0, #1 -> Bonsai.Harp.ConvertTimestamped FindBinaryRegions
        WorkflowInput Source1
        -> MemberSelector(Selector=Image) => #1
        ExternalizedMapping(RegionOfInterest) => #2
        #1, #2 -> Bonsai.Vision.Crop(RegionOfInterest(X=333, Y=380, Width=306, Height=38)) => #3
        ExternalizedMapping(ThresholdValue) => #4
        #3, #4 -> Bonsai.Vision.Threshold(ThresholdValue=216, MaxValue=255, ThresholdType=Binary)
        -> BehaviorSubject ThresholdedCroppedImage
        -> Bonsai.Vision.MorphologicalOperator(Size(Width=3, Height=3), Anchor(X=-1, Y=-1), Shape=Rectangle, Iterations=1, Operation=Open)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=15, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> WorkflowOutput
    -> BehaviorSubject BinaryRegions

    SubscribeSubject BinaryRegions
    -> Bonsai.Harp.ConvertTimestamped CountPellets
        WorkflowInput Source1
        -> MemberSelector(Selector=Count)
        -> WorkflowOutput
    -> BehaviorSubject CVContoursCount => #6
    SubscribeSubject LoggingPath => #7
    StringProperty(Value=PelletsDetected) => #8
    #7, #8 -> Zip
    -> Format(Format={0}/{1}.csv, Selector="Item1,Item2")
    -> PropertyMapping(FileName) => #11
    #6, #11 -> Bonsai.IO.CsvWriter
      FileName=D:\ProjectAeon\PatchTestNewBlackMaterial\Collection2025_10_22_17_01_38\\PelletsDetected.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true

    SubscribeSubject BinaryRegions
    -> Bonsai.Harp.ConvertTimestamped FindArea => #14
        WorkflowInput Source1
        -> Bonsai.Vision.LargestBinaryRegion
        -> MemberSelector(Selector=Area)
        -> WorkflowOutput
    SubscribeSubject LoggingPath => #15
    StringProperty(Value=LargestBinaryRegionArea) => #16
    #15, #16 -> Zip
    -> Format(Format={0}/{1}.csv, Selector="Item1,Item2")
    -> PropertyMapping(FileName) => #19
    #14, #19 -> Bonsai.IO.CsvWriter
      FileName=D:\ProjectAeon\PatchTestNewBlackMaterial\Collection2025_10_22_17_01_38\\LargestBinaryRegionArea.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true

    BooleanProperty(Value=true)
    -> Delay(DueTime=PT0.1S)
    -> IncludeWorkflow PatchEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> Take(Count=1) => #24
    SubscribeSubject CVContoursCount
    -> Bonsai.Harp.ConvertTimestamped
        WorkflowInput Source1
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> GroupWorkflow DistinctUntilChanged => #27
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Value)
        -> DistinctUntilChanged => #2
        #0 -> MemberSelector(Selector=Seconds) => #3
        #2, #3 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    #24, #27 -> Concat
    -> Condition => #29
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> WorkflowOutput
    -> Skip(Count=1) => #30
    #29, #30 -> Zip => #31
    ExternalizedMapping(RefractoryPeriod) => #32
    #31, #32 -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector="Item1.Seconds,Item2.Seconds")
        -> Subtract => #2
        ExternalizedMapping(Value(DisplayName=RefractoryPeriod)) => #3
        #2, #3 -> GreaterThan(Operand=DoubleProperty(Value=1))
        -> WorkflowOutput
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Harp.ConvertTimestamped Accumulate => #35
        WorkflowInput Source1
        -> IntProperty(Value=1)
        -> Accumulate
        -> WorkflowOutput
    Source2=#35 -> PublishSubject CVPelletsCount
    -> WorkflowOutput

    Disable SubscribeSubject CVContoursCount
    -> Disable Bonsai.Harp.ConvertTimestamped
        WorkflowInput Source1
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> Disable GroupWorkflow DistinctUntilChanged => #40
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Value)
        -> DistinctUntilChanged => #2
        #0 -> MemberSelector(Selector=Seconds) => #3
        #2, #3 -> WithLatestFrom
        -> Bonsai.Harp.CreateTimestamped
        -> WorkflowOutput
    Disable BooleanProperty(Value=true)
    -> Disable Delay(DueTime=PT0.1S)
    -> Disable IncludeWorkflow PatchEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #43
    #40, #43 -> Disable Merge
    -> Disable Condition => #45
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> WorkflowOutput
    -> Disable Skip(Count=1) => #46
    #45, #46 -> Disable Zip => #47
    Disable ExternalizedMapping(RefractoryPeriod) => #48
    #47, #48 -> Disable Condition
        WorkflowInput Source1
        -> MemberSelector(Selector="Item2.Seconds,Item1.Seconds")
        -> Subtract => #2
        ExternalizedMapping(Value(DisplayName=RefractoryPeriod)) => #3
        #2, #3 -> GreaterThan(Operand=DoubleProperty(Value=1))
        -> WorkflowOutput
    -> Disable MemberSelector(Selector=Item2)
    -> Disable Bonsai.Harp.ConvertTimestamped Accumulate
        WorkflowInput Source1
        -> IntProperty(Value=1)
        -> Accumulate
        -> WorkflowOutput
    -> Disable PublishSubject CVPelletsCount
    -> Disable WorkflowOutput

    SubscribeSubject CVPelletsCount
    -> Condition => #55
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> GreaterThan(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    SubscribeSubject PelletDelivered => #56
    #55, #56 -> WithLatestFrom
    -> MemberSelector(Selector="Item1.Seconds,Item2.Seconds")
    -> Subtract

    Disable SubscribeSubject PelletDelivered
    -> Disable MemberSelector(Selector=Seconds) => #61
    -> Disable Skip(Count=1) => #62
    #62, #61 -> Disable Zip
    -> Disable Subtract
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: 1*100/it

GroupWorkflow CvDetectionLag => #23
    SubscribeSubject CVPelletsCount
    -> MemberSelector(Selector=Seconds) => #1
    SubscribeSubject PatchEvents
    -> Harp.AeonFeederV2.Parse(Register=Harp.AeonFeederV2.TimestampedPEL_SND)
    -> MemberSelector(Selector=Seconds) => #4
    #1, #4 -> WithLatestFrom
    -> Subtract
    -> WorkflowOutput
GroupWorkflow BeamBreakLag => #24
    SubscribeSubject PelletDelivered
    -> MemberSelector(Selector=Seconds) => #1
    SubscribeSubject PatchEvents
    -> Harp.AeonFeederV2.Parse(Register=Harp.AeonFeederV2.TimestampedPEL_SND)
    -> MemberSelector(Selector=Seconds) => #4
    #1, #4 -> WithLatestFrom
    -> Subtract
    -> WorkflowOutput
GroupWorkflow BeamBreakToCvLag => #25
    SubscribeSubject CVPelletsCount
    -> MemberSelector(Selector=Seconds) => #1
    SubscribeSubject PelletDelivered
    -> MemberSelector(Selector=Seconds) => #3
    #1, #3 -> WithLatestFrom
    -> Subtract
    -> WorkflowOutput
#23, #24, #25 -> CombineLatest
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new (
    Item1 as CV_Detection_lag,
    Item2 as Beam_Break_lag,
    Item3 as Beam_break_to_CV_lag)
-> Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector="CV_Detection_lag,Beam_Break_lag,Beam_break_to_CV_lag", SymbolType=None, LineWidth=1, CurveSettings="", Capacity=nil, Min=nil, Max=nil)

Disable SubscribeSubject CVPelletsCount
-> Disable MemberSelector(Selector=Seconds) => #30
Disable SubscribeSubject PatchEvents
-> Disable Harp.AeonFeederV2.Parse(Register=Harp.AeonFeederV2.TimestampedPEL_SND)
-> Disable MemberSelector(Selector=Seconds) => #33
#30, #33 -> Disable WithLatestFrom
-> Disable Subtract => #35
Disable SubscribeSubject PelletDelivered
-> Disable MemberSelector(Selector=Seconds) => #37
Disable SubscribeSubject PatchEvents
-> Disable Harp.AeonFeederV2.Parse(Register=Harp.AeonFeederV2.TimestampedPEL_SND)
-> Disable MemberSelector(Selector=Seconds) => #40
#37, #40 -> Disable WithLatestFrom
-> Disable Subtract => #42
#35, #42 -> Disable WithLatestFrom => #43
Disable SubscribeSubject CVPelletsCount
-> Disable MemberSelector(Selector=Seconds) => #45
Disable SubscribeSubject PelletDelivered
-> Disable MemberSelector(Selector=Seconds) => #47
#45, #47 -> Disable WithLatestFrom
-> Disable Subtract => #49
#43, #49 -> Disable WithLatestFrom
-> Disable Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new (
    Item1.Item1 as CV_Detection_lag,
    Item1.Item2 as Beam_Break_lag,
    Item2 as Beam_break_to_CV_lag)
-> Disable Bonsai.Gui.ZedGraph.RollingGraphBuilder(ValueSelector="CV_Detection_lag,Beam_Break_lag,Beam_break_to_CV_lag", SymbolType=None, LineWidth=1, CurveSettings="", Capacity=nil, Min=nil, Max=nil)

SubscribeSubject WheelDisplacement
SubscribeSubject DeliveryCount
